PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  expName = stroop
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Routines
  Routine instrucoes
    TextComponent instrucoes_da_tarefa
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Aperte:
        - ESQUERDA: quando a palavra estiver na cor AZUL.
        - DIREITA: quando a palavra estiver na cor VERDE.
        - BAIXO: quando a palavra estiver na cor VERMELHA.

        Pressione [BARRA DE ESPAÇO] para iniciar.
    KeyboardComponent resposta_para_iniciar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine tentativa
    TextComponent estim
      color [set every repeat] = $cor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $palavra
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    KeyboardComponent resposta
      allowedKeys = 'left','right','down'
      correctAns = $gabarito
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine agradecimentos
    TextComponent despedida
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Fim da tarefa!

        Obrigado por sua participação!
    KeyboardComponent despedida_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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Flow
  Routine instrucoes
  LoopInitiator tentativas loopType="TrialHandler"
    conditionsFile = estimulos.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('palavra', 'azul'), ('cor', 'red'), ('gabarito', 'down'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'red'), ('gabarito', 'down'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'red'), ('gabarito', 'down'), ('congruente', 1)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'green'), ('gabarito', 'right'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'green'), ('gabarito', 'right'), ('congruente', 1)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'green'), ('gabarito', 'right'), ('congruente', 0)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'blue'), ('gabarito', 'left'), ('congruente', 1)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'blue'), ('gabarito', 'left'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'blue'), ('gabarito', 'left'), ('congruente', 0)])]
    Routine tentativa
  LoopTerminator tentativas
  Routine agradecimentos
