PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = stroop
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Routines
  Routine instrucoes
    TextComponent instrucoes_da_tarefa
      color [set every repeat] = $cor_mensagem
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $mensagem
      wrapWidth = 1.8
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    KeyboardComponent resposta_para_iniciar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent barra_de_espaco
      letterHeight = 0.08
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        Aperte
        [Barra de Espaço]
        para avançar.
  Routine tentativa
    TextComponent estim
      color [set every repeat] = $cor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $palavra
      wrapWidth = 1.8
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    KeyboardComponent resposta
      allowedKeys = 'left','right','down'
      correctAns = $gabarito
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    ImageComponent image
      image = lembrete.jpg
      pos = (0, -0.3)
      size = (0.4, 0.2)
      startVal [time (s)] = 0
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  Routine agradecimentos
    TextComponent despedida
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      wrapWidth = 1.8
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      text:
        Fim da tarefa!

        Obrigado por sua participação!
    KeyboardComponent despedida_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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Flow
  LoopInitiator instrucoes_treino loopType="TrialHandler"
    conditionsFile = instrucoes_iniciais.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tela', 1), ('mensagem', 'Seja bem-vindo(a)! Neste estudo, você deverá identificar a cor em que palavras estão impressas, da maneira mais rápida e acurada possível.'), ('cor_mensagem', 'white')]),
      OrderedDict([('tela', 2), ('mensagem', 'Aperte as teclas [←], [ ↓ ] ou [→], a depender da cor em que cada palavra aparecer. Ignore as palavras.'), ('cor_mensagem', 'white')]),
      OrderedDict([('tela', 3), ('mensagem', 'Quando a palavra estiver na cor azul, aperte [←].'), ('cor_mensagem', 'blue')]),
      OrderedDict([('tela', 4), ('mensagem', 'Quando a palavra estiver na cor vermelha, aperte [ ↓ ].'), ('cor_mensagem', 'red')]),
      OrderedDict([('tela', 5), ('mensagem', 'Quando a palavra estiver na cor verde, aperte [→].'), ('cor_mensagem', 'green')])]
    Routine instrucoes
  LoopTerminator instrucoes_treino
  LoopInitiator tentativas_treino loopType="TrialHandler"
    conditionsFile = estimulos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('palavra', 'azul'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'bleu'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vert'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'rouge'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 1)])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
    Routine tentativa
  LoopTerminator tentativas_treino
  LoopInitiator instrucoes_teste loopType="TrialHandler"
    conditionsFile = instrucoes_finais.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tela', 1), ('mensagem', 'Lembre-se: aperte as teclas [←], [ ↓ ] ou [→], a depender da cor em que cada palavra aparecer. Ignore as palavras.'), ('cor_mensagem', 'white')]),
      OrderedDict([('tela', 2), ('mensagem', 'Quando a palavra estiver na cor azul, aperte [←].'), ('cor_mensagem', 'blue')]),
      OrderedDict([('tela', 3), ('mensagem', 'Quando a palavra estiver na cor vermelha, aperte [ ↓ ].'), ('cor_mensagem', 'red')]),
      OrderedDict([('tela', 4), ('mensagem', 'Quando a palavra estiver na cor verde, aperte [→].'), ('cor_mensagem', 'green')])]
    Routine instrucoes
  LoopTerminator instrucoes_teste
  LoopInitiator tentativas_teste loopType="TrialHandler"
    conditionsFile = estimulos.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('palavra', 'azul'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'bleu'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vert'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'rouge'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 1)])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
    Routine tentativa
  LoopTerminator tentativas_teste
  Routine agradecimentos
