PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = flanker
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Routines
  Routine trial
    TextComponent stim
      letterHeight = 0.1
      startVal [time (s)] = 0.75
      text [set every repeat] = $stim_task
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    KeyboardComponent resp_trial
      allowedKeys = 'z','m'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.75
      storeCorrect = True
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  Routine instructions
    TextComponent instructions1
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_message
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    KeyboardComponent spacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spacebar_msg
      letterHeight = 0.04
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Pressione
        [Barra de Espaço]
        para continuar
  Routine break_1
    TextComponent break_msg
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
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    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instr_trials loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('screen', 1), ('instr_message', 'Seja bem-vindo(a)! Neste estudo, você verá uma sequência de cinco estímulos e deverá pressionar a tecla que corresponde ao estímulo no CENTRO da tela. Ignore os demais estímulos.')]),
      OrderedDict([('screen', 2), ('instr_message', 'Pressione [ z ] se o estímulo no CENTRO estiver orientado para a esquerda. Isso acontecerá nos seguintes casos:\n<<<<<\n>><>>\n--<--')]),
      OrderedDict([('screen', 3), ('instr_message', 'Pressione [ m ] se o estímulo no CENTRO estiver orientado para a direita. Isso acontecerá nos seguintes casos:\n>>>>>\n<<><<\n-->--')]),
      OrderedDict([('screen', 4), ('instr_message', 'Lembre-se: pressione [ z ] quando o estímulo no CENTRO for "<". Pressione [ m ] quando o estímulo no CENTRO for ">". Ignore os demais estímulos.')])]
    Routine instructions
  LoopTerminator instr_trials
  LoopInitiator outer_loop loopType="TrialHandler"
    conditionsFile = break.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('screen', 1), ('message', 'Intervalo para descanso. Quando estiver preparado para retomar a tarefa, pressione [Barra de Espaço].')]),
      OrderedDict([('screen', 2), ('message', 'Fim da tarefa!\nObrigado por sua participação!')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = flanker_stim.xlsx
      loopType = random
      nReps = 60
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      conditions:
        [OrderedDict([('stim_task', '<<<<<'), ('condition', 'congruent'), ('corr', 'z')]),
        OrderedDict([('stim_task', '>>>>>'), ('condition', 'congruent'), ('corr', 'm')]),
        OrderedDict([('stim_task', '>><>>'), ('condition', 'incongruent'), ('corr', 'z')]),
        OrderedDict([('stim_task', '<<><<'), ('condition', 'incongruent'), ('corr', 'm')]),
        OrderedDict([('stim_task', '--<--'), ('condition', 'neutral'), ('corr', 'z')]),
        OrderedDict([('stim_task', '-->--'), ('condition', 'neutral'), ('corr', 'm')])]
      Routine trial
    LoopTerminator trials
    Routine break_1
  LoopTerminator outer_loop
