PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [950, 580]
  color = $[-1.000,-1.000,-1.000]
  expName = stroop
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Routines
  Routine instructions
    TextComponent task_instructions
      color [set every repeat] = $cor_mensagem
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $mensagem
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    KeyboardComponent resp_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent spacebar_msg
      letterHeight = 0.04
      pos = (0.5, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Aperte
        [Barra de Espaço]
        para avançar.
  Routine trial
    TextComponent stim
      color [set every repeat] = $cor
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $palavra
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    KeyboardComponent resp
      allowedKeys = 'left','right','down'
      correctAns = $gabarito
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    ImageComponent image
      image = lembrete.jpg
      pos = (0, -0.3)
      size = (0.4, 0.2)
      startVal [time (s)] = 0
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  Routine thanks
    TextComponent thanks_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Fim da tarefa!

        Obrigado por sua participação!
    KeyboardComponent resp_end
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
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  Routine feedback
    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp.corr:
            msg = 'Correto!\nTempo de Reação = {:.0f} ms' .format(resp.rt * 1000)
            msg_color = 'green'
        else:
            msg = 'Incorreto!'
            msg_color = 'red'
    TextComponent feedback_msg
      color [set every repeat] = $msg_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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Flow
  LoopInitiator training_instructions loopType="TrialHandler"
    conditionsFile = instrucoes_iniciais.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tela', 1), ('mensagem', 'Seja bem-vindo(a)! Neste estudo, você deverá identificar a cor em que palavras estão impressas, da maneira mais rápida e acurada possível.'), ('cor_mensagem', 'white')]),
      OrderedDict([('tela', 2), ('mensagem', 'Aperte as teclas [←], [ ↓ ] ou [→], a depender da cor em que cada palavra aparecer. Ignore as palavras.'), ('cor_mensagem', 'white')]),
      OrderedDict([('tela', 3), ('mensagem', 'Quando a palavra estiver na cor azul, aperte [←].'), ('cor_mensagem', 'blue')]),
      OrderedDict([('tela', 4), ('mensagem', 'Quando a palavra estiver na cor vermelha, aperte [ ↓ ].'), ('cor_mensagem', 'red')]),
      OrderedDict([('tela', 5), ('mensagem', 'Quando a palavra estiver na cor verde, aperte [→].'), ('cor_mensagem', 'green')])]
    Routine instructions
  LoopTerminator training_instructions
  LoopInitiator training_trials loopType="TrialHandler"
    conditionsFile = estimulos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('palavra', 'azul'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'bleu'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vert'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'rouge'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 1)])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
    Routine trial
    Routine feedback
  LoopTerminator training_trials
  LoopInitiator test_instructions loopType="TrialHandler"
    conditionsFile = instrucoes_finais.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tela', 1), ('mensagem', 'Lembre-se: aperte as teclas [←], [ ↓ ] ou [→], a depender da cor em que cada palavra aparecer. Ignore as palavras.'), ('cor_mensagem', 'white')]),
      OrderedDict([('tela', 2), ('mensagem', 'Quando a palavra estiver na cor azul, aperte [←].'), ('cor_mensagem', 'blue')]),
      OrderedDict([('tela', 3), ('mensagem', 'Quando a palavra estiver na cor vermelha, aperte [ ↓ ].'), ('cor_mensagem', 'red')]),
      OrderedDict([('tela', 4), ('mensagem', 'Quando a palavra estiver na cor verde, aperte [→].'), ('cor_mensagem', 'green')])]
    Routine instructions
  LoopTerminator test_instructions
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = estimulos.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('palavra', 'azul'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'azul'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 1)]),
      OrderedDict([('palavra', 'verde'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vermelho'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
      OrderedDict([('palavra', 'bleu'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'vert'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
      OrderedDict([('palavra', 'rouge'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 1)])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
    Routine trial
  LoopTerminator test_trials
  Routine thanks
