PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  color = $[-1, -1, -1]
  expName = odd_even
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Routines
  Routine trial
    TextComponent stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $number
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    KeyboardComponent daniel_kahneman
      allowedKeys = 'left','right'
      correctAns = $resp_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent reminder
      image = keys.jpg
      pos = (0, -0.3)
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # inicializa a variável img no experimento
        lady_gaga = 'lembrete.jpg'
      Begin Routine:
        # se a resposta está correta
        if daniel_kahneman.corr:
            lady_gaga = 'happy.jpg' # defina a mensagem como "Correto"
        # se a resposta está incorreta
        else:
            lady_gaga = 'sad.jpg' # defina a mensagem como "Incorreto"
    ImageComponent feedback_img
      image [set every repeat] = $lady_gaga
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('number', 0), ('cond', 'even'), ('resp_corr', 'left')]),
      OrderedDict([('number', 1), ('cond', 'odd'), ('resp_corr', 'right')]),
      OrderedDict([('number', 2), ('cond', 'even'), ('resp_corr', 'left')]),
      OrderedDict([('number', 3), ('cond', 'odd'), ('resp_corr', 'right')]),
      OrderedDict([('number', 4), ('cond', 'even'), ('resp_corr', 'left')]),
      OrderedDict([('number', 5), ('cond', 'odd'), ('resp_corr', 'right')]),
      OrderedDict([('number', 6), ('cond', 'even'), ('resp_corr', 'left')]),
      OrderedDict([('number', 7), ('cond', 'odd'), ('resp_corr', 'right')]),
      OrderedDict([('number', 8), ('cond', 'even'), ('resp_corr', 'left')]),
      OrderedDict([('number', 9), ('cond', 'odd'), ('resp_corr', 'right')])]
    Routine trial
    Routine feedback
  LoopTerminator trials
