PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  color = $[1.000,1.000,1.000]
  expName = fribbles
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Routines
  Routine trial
    ImageComponent first_img
      image [set every repeat] = $first_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    ImageComponent second_img
      image [set every repeat] = $second_stim
      ori [set every repeat] = $ori
      size = (0.5, 0.5)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 2
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    TextComponent text_resp
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 5.5
      text = Igual [←] ou Diferente [→]?
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $resp_corr
      forceEndRoutine = True
      startVal [time (s)] = 5.5
      storeCorrect = True
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp.corr:
            msg = 'Correto!'
            msg_color = 'green'
        else:
            msg = 'Incorreto!'
            msg_color = 'red'
    TextComponent feedback_msg
      color [set every repeat] = $msg_color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = fribbles.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('first_stim', 'Fa1_1111.jpg'), ('second_stim', 'Fa1_2222.jpg'), ('cond', 'different'), ('ori', 0), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fa1_2222.jpg'), ('second_stim', 'Fa1_1111.jpg'), ('cond', 'different'), ('ori', 0), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fa3_1111.jpg'), ('second_stim', 'Fa3_2222.jpg'), ('cond', 'different'), ('ori', 0), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fa3_2222.jpg'), ('second_stim', 'Fa3_1111.jpg'), ('cond', 'different'), ('ori', 0), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fc2_1111.jpg'), ('second_stim', 'Fc2_2222.jpg'), ('cond', 'different'), ('ori', 0), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fc2_2222.jpg'), ('second_stim', 'Fc2_1111.jpg'), ('cond', 'different'), ('ori', 0), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fa1_1111.jpg'), ('second_stim', 'Fa1_2222.jpg'), ('cond', 'different'), ('ori', 90), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fa1_2222.jpg'), ('second_stim', 'Fa1_1111.jpg'), ('cond', 'different'), ('ori', 90), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fa3_1111.jpg'), ('second_stim', 'Fa3_2222.jpg'), ('cond', 'different'), ('ori', 90), ('resp_corr', 'right')]),
      OrderedDict([('first_stim', 'Fa3_2222.jpg'), ('second_stim', 'Fa3_1111.jpg'), ('cond', 'different'), ('ori', 90), ('resp_corr', 'right')])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
    Routine trial
    Routine feedback
  LoopTerminator trials
