PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900,600]
  color = $[-1.000,-1.000,-1.000]
  expName = pseudorandom_loop
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $letra
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    KeyboardComponent next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = estimulos_pseudorandom.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('letra', 'B')]),
      OrderedDict([('letra', 'C')]),
      OrderedDict([('letra', 'E')]),
      OrderedDict([('letra', 'A')]),
      OrderedDict([('letra', 'D')])]
    Routine trial
  LoopTerminator trials
