PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1200,600]
  expName = unidades_1200_x_600
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Routines
  Routine norm
    ImageComponent image
      image = dog1.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cm
    ImageComponent image_2
      image = dog1.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine height
    ImageComponent image_3
      image = dog1.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine deg
    ImageComponent image_4
      image = dog1.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pix
    ImageComponent image_5
      image = dog1.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine norm
  Routine cm
  Routine height
  Routine deg
  Routine pix
