PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900,600]
  color = $[1.000,1.000,1.000]
  expName = cores_formas
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor [set every repeat] = $code
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cores_rgb.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [OrderedDict([('color_name', 'azul'), ('code', [0, 112, 192])]),
      OrderedDict([('color_name', 'vermelho'), ('code', [255, 0, 0])]),
      OrderedDict([('color_name', 'amarelo'), ('code', [255, 0, 0])]),
      OrderedDict([('color_name', 'verde'), ('code', [0, 176, 80])])]
    Routine trial
  LoopTerminator trials
