PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900,600]
  color = $[1.000,1.000,1.000]
  expName = cores
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor [set every repeat] = $code
      fillColorSpace = rgb255
      lineColor = $[1,1,1]
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    TextComponent word
      color [set every repeat] = $color_name
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      text [set every repeat] = $color_name
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    KeyboardComponent next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cores_nomes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('color_name', 'blue')]),
      OrderedDict([('color_name', 'green')]),
      OrderedDict([('color_name', 'red')]),
      OrderedDict([('color_name', 'yellow')]),
      OrderedDict([('color_name', 'aquamarine')]),
      OrderedDict([('color_name', 'blueviolet')]),
      OrderedDict([('color_name', 'brown')]),
      OrderedDict([('color_name', 'chocolate')]),
      OrderedDict([('color_name', 'coral')]),
      OrderedDict([('color_name', 'cornflowerblue')]),
      OrderedDict([('color_name', 'darkcyan')]),
      OrderedDict([('color_name', 'darkgray')]),
      OrderedDict([('color_name', 'darkgreen')]),
      OrderedDict([('color_name', 'darkkhaki')]),
      OrderedDict([('color_name', 'darkmagenta')]),
      OrderedDict([('color_name', 'darkslateblue')]),
      OrderedDict([('color_name', 'darkseagreen')]),
      OrderedDict([('color_name', 'darkturquoise')]),
      OrderedDict([('color_name', 'deeppink')]),
      OrderedDict([('color_name', 'deepskyblue')]),
      OrderedDict([('color_name', 'dimgray')]),
      OrderedDict([('color_name', 'dodgerblue')]),
      OrderedDict([('color_name', 'firebrick')]),
      OrderedDict([('color_name', 'gold')]),
      OrderedDict([('color_name', 'goldenrod')]),
      OrderedDict([('color_name', 'greenyellow')]),
      OrderedDict([('color_name', 'hotpink')]),
      OrderedDict([('color_name', 'indianred')]),
      OrderedDict([('color_name', 'indigo')]),
      OrderedDict([('color_name', 'lavender')]),
      OrderedDict([('color_name', 'lightsalmon')]),
      OrderedDict([('color_name', 'maroon')]),
      OrderedDict([('color_name', 'midnightblue')]),
      OrderedDict([('color_name', 'navajowhite')]),
      OrderedDict([('color_name', 'peru')]),
      OrderedDict([('color_name', 'plum')])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
    Routine trial
  LoopTerminator trials
