PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900,600]
  color = $[1.000,1.000,1.000]
  expName = paradigma_drm
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Routines
  Routine trial_word1
    TextComponent word1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $palavra1
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  Routine trial_word2
    TextComponent word2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $palavra2
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  Routine trial_word3
    TextComponent word3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $palavra3
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  Routine trial_word4
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  Routine trial_word5
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  Routine trial_word6
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  Routine trial_word7
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  Routine trial_word8
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  Routine trial_word9
    TextComponent word1_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $palavra1
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  Routine trial_word10
    TextComponent word1_7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $palavra1
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  Routine trial_word11
    TextComponent word1_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $palavra1
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  Routine trial_word12
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  Routine trial_word13
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  Routine trial_word14
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  Routine trial_word15
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lista_completa.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('palavra_critica', 'agulha'), ('palavra1', 'costura'), ('palavra2', 'linha'), ('palavra3', 'fina'), ('palavra4', 'ponta'), ('palavra5', 'furar'), ('palavra6', 'injeção'), ('palavra7', 'seringa'), ('palavra8', 'espetar'), ('palavra9', 'tricô'), ('palavra10', 'bordar'), ('palavra11', 'palheiro'), ('palavra12', 'máquinas'), ('palavra13', 'metal'), ('palavra14', 'fio'), ('palavra15', 'fincar')]),
      OrderedDict([('palavra_critica', 'alegria'), ('palavra1', 'sorriso'), ('palavra2', 'felicidade'), ('palavra3', 'festa'), ('palavra4', 'vida'), ('palavra5', 'amigos'), ('palavra6', 'família'), ('palavra7', 'paz'), ('palavra8', 'nascimento'), ('palavra9', 'filhos'), ('palavra10', 'euforia'), ('palavra11', 'pular'), ('palavra12', 'diversão'), ('palavra13', 'sucesso'), ('palavra14', 'carnaval'), ('palavra15', 'gol')]),
      OrderedDict([('palavra_critica', 'aranha'), ('palavra1', 'teia'), ('palavra2', 'veneno'), ('palavra3', 'inseto'), ('palavra4', 'peluda'), ('palavra5', 'perigo'), ('palavra6', 'nojo'), ('palavra7', 'feia'), ('palavra8', 'patas'), ('palavra9', 'pernas'), ('palavra10', 'picada'), ('palavra11', 'mosca'), ('palavra12', 'peçonha'), ('palavra13', 'bicho'), ('palavra14', 'mordida'), ('palavra15', 'asquerosa')]),
      OrderedDict([('palavra_critica', 'cadeira'), ('palavra1', 'senar'), ('palavra2', 'mesa'), ('palavra3', 'madeira'), ('palavra4', 'objeto'), ('palavra5', 'comodidade'), ('palavra6', 'sala'), ('palavra7', 'balanço'), ('palavra8', 'móvel'), ('palavra9', 'encosto'), ('palavra10', 'aula'), ('palavra11', 'estofado'), ('palavra12', 'apoio'), ('palavra13', 'poltrona'), ('palavra14', 'banco'), ('palavra15', 'decoração')])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
    Routine trial_word1
    Routine trial_word2
    Routine trial_word3
    Routine trial_word4
    Routine trial_word5
    Routine trial_word6
    Routine trial_word7
    Routine trial_word8
  LoopTerminator trials
