PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900,600]
  color = $[1.000,1.000,1.000]
  expName = paradigma_drm_simplificado
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Routines
  Routine trial
    TextComponent word
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $palavra
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Flow
  LoopInitiator list_choice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'agulha')]),
      OrderedDict([('condition', 'alegria')]),
      OrderedDict([('condition', 'aranha')]),
      OrderedDict([('condition', 'cadeira')]),
      OrderedDict([('condition', 'carro')]),
      OrderedDict([('condition', 'devagar')]),
      OrderedDict([('condition', 'doce')]),
      OrderedDict([('condition', 'exército')]),
      OrderedDict([('condition', 'montanha')]),
      OrderedDict([('condition', 'rei')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition + ".xlsx"
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator list_choice
