PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900,600]
  color = $[-1.000,-1.000,-1.000]
  expName = word_length_effect
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Routines
  Routine study
    TextComponent word
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $palavra
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  Routine test
    TextComponent command
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Diga em voz alta todas as palavras que você viu na lista anterior
      units = norm
      wrapWidth = 1.8
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Flow
  LoopInitiator bloco_estudo_e_teste loopType="TrialHandler"
    conditionsFile = listas.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('nome_da_lista', 'uma')]),
      OrderedDict([('nome_da_lista', 'duas')]),
      OrderedDict([('nome_da_lista', 'tres')]),
      OrderedDict([('nome_da_lista', 'quatro')]),
      OrderedDict([('nome_da_lista', 'cinco')])]
    LoopInitiator tentativas loopType="TrialHandler"
      conditionsFile = $nome_da_lista + ".xlsx"
      loopType = random
      nReps = 1
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      Routine study
    LoopTerminator tentativas
    Routine test
  LoopTerminator bloco_estudo_e_teste
