PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900,600]
  color = $[1.000,1.000,1.000]
  expName = paradigma_drm_simplificado
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Routines
  Routine study_trial
    TextComponent word
      color = black
      disabled = True
      letterHeight = 0.3
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $palavra
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  Routine initial_screen
    TextComponent initial_screen_msg
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para continuar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent initial_screen_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_trial
    TextComponent fixation_cross
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent general_instruction
      color = black
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 1.5
      units = norm
      wrapWidth = 1.8
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      text:
        Você viu a palavra abaixo na fase de estudo?
        S = Sim, eu vi
        N = Não, eu não vi
    TextComponent test_trial_word
      color = black
      letterHeight = 0.3
      startVal [time (s)] = 1.5
      text [set every repeat] = $probe_item
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    KeyboardComponent test_trial_resp
      allowedKeys = 's','n'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine distractor_trial
    TextComponent math_trial
      color = black
      disabled = True
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $math + "(S/N)"
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent math_trial_resp
      allowedKeys = 's','n'
      correctAns = $math_resp
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    CodeComponent distractor_break
      Code Type = Auto->JS
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      Begin Experiment:
        tempo_total = 0
      Each Frame:
        if (t + tempo_total) >= 60: # em segundos
            continueRoutine = False
            distractor_phase.finished = True

        # o código abaixo pode ser útil para quem
        # quiser interromper uma tentativa após um
        # intervalo de tempo pré-determinado
        # observação: encerra a TENTATIVA,
        # não o loop!!!
        """
        if t >= 2:
            continueRoutine = False
        """
      End Routine:
        tempo_total += t
Flow
  Routine initial_screen
  LoopInitiator list_choice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'agulha')]),
      OrderedDict([('condition', 'alegria')]),
      OrderedDict([('condition', 'aranha')]),
      OrderedDict([('condition', 'cadeira')]),
      OrderedDict([('condition', 'carro')]),
      OrderedDict([('condition', 'devagar')]),
      OrderedDict([('condition', 'doce')]),
      OrderedDict([('condition', 'exército')]),
      OrderedDict([('condition', 'montanha')]),
      OrderedDict([('condition', 'rei')])]
    LoopInitiator study_phase loopType="TrialHandler"
      conditionsFile = $condition + ".xlsx"
      loopType = sequential
      nReps = 1
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      Routine study_trial
    LoopTerminator study_phase
  LoopTerminator list_choice
  LoopInitiator distractor_phase loopType="TrialHandler"
    conditionsFile = math_problems.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('math', '11 × 11 = 121?'), ('math_resp', 's')]),
      OrderedDict([('math', '12 × 11 = 142?'), ('math_resp', 'n')]),
      OrderedDict([('math', '13 × 11 = 143?'), ('math_resp', 's')]),
      OrderedDict([('math', '14 × 11 = 144?'), ('math_resp', 'n')]),
      OrderedDict([('math', '15 × 11 = 165?'), ('math_resp', 's')]),
      OrderedDict([('math', '16 × 11 = 196?'), ('math_resp', 'n')]),
      OrderedDict([('math', '17 × 11 = 187?'), ('math_resp', 's')]),
      OrderedDict([('math', '18 × 11 = 208?'), ('math_resp', 'n')]),
      OrderedDict([('math', '19 × 11 = 209?'), ('math_resp', 's')]),
      OrderedDict([('math', '20 × 11 = 221?'), ('math_resp', 'n')]),
      OrderedDict([('math', '11 × 12 = 132?'), ('math_resp', 's')]),
      OrderedDict([('math', '12 × 12 = 134?'), ('math_resp', 'n')]),
      OrderedDict([('math', '13 × 12 = 156?'), ('math_resp', 's')]),
      OrderedDict([('math', '14 × 12 = 166?'), ('math_resp', 'n')]),
      OrderedDict([('math', '15 × 12 = 180?'), ('math_resp', 's')]),
      OrderedDict([('math', '16 × 12 = 192?'), ('math_resp', 's')]),
      OrderedDict([('math', '17 × 12 = 204?'), ('math_resp', 's')]),
      OrderedDict([('math', '18 × 12 = 216?'), ('math_resp', 's')]),
      OrderedDict([('math', '19 × 12 = 228?'), ('math_resp', 's')]),
      OrderedDict([('math', '20 × 12 = 240?'), ('math_resp', 's')]),
      OrderedDict([('math', '11 × 13 = 143?'), ('math_resp', 's')]),
      OrderedDict([('math', '12 × 13 = 156?'), ('math_resp', 's')]),
      OrderedDict([('math', '13 × 13 = 159?'), ('math_resp', 'n')]),
      OrderedDict([('math', '14 × 13 = 182?'), ('math_resp', 's')])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
    Routine distractor_trial
  LoopTerminator distractor_phase
  LoopInitiator test_phase loopType="TrialHandler"
    conditionsFile = test_items.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('list_name', 'agulha'), ('probe_item', 'agulha'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'alegria'), ('probe_item', 'alegria'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'aranha'), ('probe_item', 'aranha'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'cadeira'), ('probe_item', 'cadeira'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'carro'), ('probe_item', 'carro'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'devagar'), ('probe_item', 'devagar'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'doce'), ('probe_item', 'doce'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'exército'), ('probe_item', 'exército'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'montanha'), ('probe_item', 'montanha'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'rei'), ('probe_item', 'rei'), ('item_condition', 'critical'), ('corr_ans', 'n')]),
      OrderedDict([('list_name', 'agulha'), ('probe_item', 'costura'), ('item_condition', 'old'), ('corr_ans', 's')]),
      OrderedDict([('list_name', 'alegria'), ('probe_item', 'sorriso'), ('item_condition', 'old'), ('corr_ans', 's')]),
      OrderedDict([('list_name', 'aranha'), ('probe_item', 'teia'), ('item_condition', 'old'), ('corr_ans', 's')])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
    Routine test_trial
  LoopTerminator test_phase
