PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = numerical_stroop
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Routines
  Routine trial
    TextComponent left_stim
      letterHeight [set every repeat] = $left_size
      pos = (-0.2, 0)
      startVal [time (s)] = 0.5
      text [set every repeat] = $left_number
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    TextComponent right_stim
      letterHeight [set every repeat] = $right_size
      pos = (0.2, 0)
      startVal [time (s)] = 0.5
      text [set every repeat] = $right_number
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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  Routine instruction
    TextComponent text
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
      units = norm
      wrapWidth = 1.8
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    TextComponent spacebar_text
      letterHeight = 0.07
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pressione
        [BARRA DE ESPAÇO]
        para continuar
    KeyboardComponent spacebar_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image [set every repeat] = $instruction_image
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
      units = norm
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  Routine block_trials_screen
    TextComponent task_command
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $condition_text
      units = norm
      wrapWidth = 1.8
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    TextComponent spacebar_text2
      letterHeight = 0.07
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pressione
        [BARRA DE ESPAÇO]
        para começar a tarefa.
    KeyboardComponent spacebar_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent end_screen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Fim das tarefas.

        Obrigado por sua participação!
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Olá, sejá bem-vindo(a) ao nosso laboratório!

        A seguir, daremos as instruções sobre as tarefas que você realizará hoje.

        Pressione [BARRA DE ESPAÇO] para continuar.
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator block_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition_trials_file', 'numerical.xlsx'), ('instruction_trials_file', 'numerical_instruction.xlsx')]),
      OrderedDict([('condition_trials_file', 'physical.xlsx'), ('instruction_trials_file', 'physical_instruction.xlsx')])]
    LoopInitiator instructions loopType="TrialHandler"
      conditionsFile = $instruction_trials_file
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine instruction
    LoopTerminator instructions
    Routine block_trials_screen
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_trials_file
      loopType = fullRandom
      nReps = 2
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      Routine trial
    LoopTerminator trials
  LoopTerminator block_trials
  Routine thanks
