PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': '', 'ordem': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900,600]
  color = $[-1.000,-1.000,-1.000]
  expName = quadrado_latino
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Routines
  Routine stroop_task
    TextComponent stroop_word
      color [set every repeat] = $stroop_color
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $stroop_stim
      wrapWidth = 1.8
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    KeyboardComponent stroop_resp
      allowedKeys = 'left','right','down'
      correctAns = $resp_corr_stroop
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    ImageComponent reminder_buttons
      image = reminder.jpg
      pos = (0, -0.3)
      size = (0.4, 0.2)
      startVal [time (s)] = 0
      units = norm
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  Routine eriksen_task
    TextComponent flanker_arrows
      letterHeight = 0.2
      startVal [time (s)] = 0.75
      text [set every repeat] = $flanker_stim
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    KeyboardComponent flanker_resp
      allowedKeys = 'left', 'right'
      correctAns = $corr_resp_flanker
      forceEndRoutine = True
      startVal [time (s)] = 0.75
      store = first key
      storeCorrect = True
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  Routine navon_task
    TextComponent navon_trial_type
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = 'Característica: ' + $trial_type
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp
      allowedKeys = 'h', 's'
      correctAns = $corr_resp_navon
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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    ImageComponent navon_img
      image [set every repeat] = $navon_stim
      size = (1, 1)
      startVal [time (s)] = 1
      units = norm
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  Routine odd_quadrant_task
    ImageComponent arrow_1
      image = arrow.jpg
      ori [set every repeat] = $upper_left
      pos = (-0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = norm
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    ImageComponent arrow_2
      image = arrow.jpg
      ori [set every repeat] = $upper_right
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = norm
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    ImageComponent arrow_3
      image = arrow.jpg
      ori [set every repeat] = $lower_left
      pos = (-0.5, -0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = norm
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    ImageComponent arrow_4
      image [set every repeat] = arrow.jpg
      ori [set every repeat] = $lower_right
      pos = (0.5, -0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = norm
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    MouseComponent odd_quadrant_resp
      clickable = arrow_1, arrow_2, arrow_3, arrow_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.5
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  Routine begin
    TextComponent begin_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para começar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent spacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanks_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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      text:
        Fim da tarefa!

        Obrigado por sua participação.
Flow
  Routine begin
  LoopInitiator latin_square loopType="TrialHandler"
    conditionsFile = $expInfo["ordem"] + ".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator stroop_trials loopType="TrialHandler"
      conditionsFile = stroop_file.xlsx
      loopType = random
      nReps = $stroop_reps
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      conditions:
        [OrderedDict([('palavra', 'azul'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
        OrderedDict([('palavra', 'verde'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 0)]),
        OrderedDict([('palavra', 'vermelho'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'portugues'), ('congruente', 1)]),
        OrderedDict([('palavra', 'azul'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
        OrderedDict([('palavra', 'verde'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 1)]),
        OrderedDict([('palavra', 'vermelho'), ('cor', 'green'), ('gabarito', 'right'), ('idioma', 'portugues'), ('congruente', 0)]),
        OrderedDict([('palavra', 'azul'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 1)]),
        OrderedDict([('palavra', 'verde'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
        OrderedDict([('palavra', 'vermelho'), ('cor', 'blue'), ('gabarito', 'left'), ('idioma', 'portugues'), ('congruente', 0)]),
        OrderedDict([('palavra', 'bleu'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
        OrderedDict([('palavra', 'vert'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 0)]),
        OrderedDict([('palavra', 'rouge'), ('cor', 'red'), ('gabarito', 'down'), ('idioma', 'frances'), ('congruente', 1)])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
      Routine stroop_task
    LoopTerminator stroop_trials
    LoopInitiator flanker_trials loopType="TrialHandler"
      conditionsFile = flanker_file.xlsx
      loopType = random
      nReps = $eriksen_reps
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      conditions:
        [OrderedDict([('stim_task', '<<<<<'), ('condition', 'congruent'), ('corr', 'z')]),
        OrderedDict([('stim_task', '>>>>>'), ('condition', 'congruent'), ('corr', 'm')]),
        OrderedDict([('stim_task', '>><>>'), ('condition', 'incongruent'), ('corr', 'z')]),
        OrderedDict([('stim_task', '<<><<'), ('condition', 'incongruent'), ('corr', 'm')]),
        OrderedDict([('stim_task', '--<--'), ('condition', 'neutral'), ('corr', 'z')]),
        OrderedDict([('stim_task', '-->--'), ('condition', 'neutral'), ('corr', 'm')])]
      Routine eriksen_task
    LoopTerminator flanker_trials
    LoopInitiator navon_trials loopType="TrialHandler"
      conditionsFile = navon_file.xlsx
      loopType = random
      nReps = $navon_reps
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      conditions:
        [OrderedDict([('navon_stim', 'H         H\nH         H\nH         H\nHHHHH\nH         H\nH         H\nH         H'), ('local_letter', 'H'), ('global_letter', 'H'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'H')]),
        OrderedDict([('navon_stim', 'S          S\nS          S\nS          S\nS S S S S\nS          S\nS          S\nS          S'), ('local_letter', 'S'), ('global_letter', 'H'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'S')]),
        OrderedDict([('navon_stim', '   HHH\nH         H\n H\n    H\n       H\nH         H\n   HHH '), ('local_letter', 'H'), ('global_letter', 'S'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'H')]),
        OrderedDict([('navon_stim', '   SSS\nS         S\n S\n    S\n       S\nS         S\n   SSS '), ('local_letter', 'S'), ('global_letter', 'S'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'S')]),
        OrderedDict([('navon_stim', 'H         H\nH         H\nH         H\nHHHHH\nH         H\nH         H\nH         H'), ('local_letter', 'H'), ('global_letter', 'H'), ('navon_condition', 'congruent'), ('trial_type', 'GLOBAL'), ('corr_resp_navon', 'H')]),
        OrderedDict([('navon_stim', 'S          S\nS          S\nS          S\nS S S S S\nS          S\nS          S\nS          S'), ('local_letter', 'S'), ('global_letter', 'H'), ('navon_condition', 'incongruent'), ('trial_type', 'GLOBAL'), ('corr_resp_navon', 'H')])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
      Routine navon_task
    LoopTerminator navon_trials
    LoopInitiator odd_quadrant_trials loopType="TrialHandler"
      conditionsFile = odd_quadrant_file.xlsx
      loopType = random
      nReps = $odd_reps
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      conditions:
        [OrderedDict([('upper_left', 45), ('upper_right', 45), ('lower_left', 45), ('lower_right', 225), ('resp_corr_odd', 'arrow_4')]),
        OrderedDict([('upper_left', 225), ('upper_right', 225), ('lower_left', 225), ('lower_right', 45), ('resp_corr_odd', 'arrow_4')]),
        OrderedDict([('upper_left', 45), ('upper_right', 45), ('lower_left', 225), ('lower_right', 45), ('resp_corr_odd', 'arrow_3')]),
        OrderedDict([('upper_left', 225), ('upper_right', 225), ('lower_left', 45), ('lower_right', 225), ('resp_corr_odd', 'arrow_3')]),
        OrderedDict([('upper_left', 45), ('upper_right', 225), ('lower_left', 45), ('lower_right', 45), ('resp_corr_odd', 'arrow_2')]),
        OrderedDict([('upper_left', 225), ('upper_right', 45), ('lower_left', 225), ('lower_right', 225), ('resp_corr_odd', 'arrow_2')]),
        OrderedDict([('upper_left', 225), ('upper_right', 45), ('lower_left', 45), ('lower_right', 45), ('resp_corr_odd', 'arrow_1')]),
        OrderedDict([('upper_left', 45), ('upper_right', 225), ('lower_left', 225), ('lower_right', 225), ('resp_corr_odd', 'arrow_1')])]
      Routine odd_quadrant_task
    LoopTerminator odd_quadrant_trials
  LoopTerminator latin_square
  Routine thanks
