<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2020.2.2">
  <Settings>
    <Param name="Audio latency priority" updates="None" val="use prefs" valType="str"/>
    <Param name="Audio lib" updates="None" val="use prefs" valType="str"/>
    <Param name="Completed URL" updates="None" val="" valType="str"/>
    <Param name="Data file delimiter" updates="None" val="auto" valType="str"/>
    <Param name="Data filename" updates="None" val="u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])" valType="code"/>
    <Param name="Enable Escape" updates="None" val="True" valType="bool"/>
    <Param name="Experiment info" updates="None" val="{'participante': ''}" valType="code"/>
    <Param name="Force stereo" updates="None" val="True" valType="bool"/>
    <Param name="Full-screen window" updates="None" val="False" valType="bool"/>
    <Param name="HTML path" updates="None" val="" valType="str"/>
    <Param name="Incomplete URL" updates="None" val="" valType="str"/>
    <Param name="Monitor" updates="None" val="testMonitor" valType="str"/>
    <Param name="Resources" updates="None" val="[]" valType="fileList"/>
    <Param name="Save csv file" updates="None" val="False" valType="bool"/>
    <Param name="Save excel file" updates="None" val="False" valType="bool"/>
    <Param name="Save log file" updates="None" val="True" valType="bool"/>
    <Param name="Save psydat file" updates="None" val="True" valType="bool"/>
    <Param name="Save wide csv file" updates="None" val="True" valType="bool"/>
    <Param name="Screen" updates="None" val="1" valType="num"/>
    <Param name="Show info dlg" updates="None" val="True" valType="bool"/>
    <Param name="Show mouse" updates="None" val="False" valType="bool"/>
    <Param name="Units" updates="None" val="norm" valType="str"/>
    <Param name="Use version" updates="None" val="" valType="str"/>
    <Param name="Window size (pixels)" updates="None" val="[900, 600]" valType="code"/>
    <Param name="blendMode" updates="None" val="avg" valType="str"/>
    <Param name="color" updates="None" val="$[-1.000,-1.000,-1.000]" valType="str"/>
    <Param name="colorSpace" updates="None" val="rgb" valType="str"/>
    <Param name="expName" updates="None" val="beta_movement" valType="str"/>
    <Param name="exportHTML" updates="None" val="on Sync" valType="str"/>
    <Param name="logging level" updates="None" val="exp" valType="code"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <PolygonComponent name="circle_1">
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[1.000,-1.000,-1.000]" valType="str"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1.000,-1.000,-1.000]" valType="str"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="lineWidth" updates="constant" val="1" valType="code"/>
        <Param name="nVertices" updates="constant" val="100" valType="int"/>
        <Param name="name" updates="None" val="circle_1" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="set every frame" val="(position[0], 0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="shape" updates="constant" val="regular polygon..." valType="str"/>
        <Param name="size" updates="constant" val="(0.03, 0.03)" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="5" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="units" updates="None" val="norm" valType="str"/>
      </PolygonComponent>
      <PolygonComponent name="circle_2">
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[1.000,-1.000,-1.000]" valType="str"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1.000,-1.000,-1.000]" valType="str"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="lineWidth" updates="constant" val="1" valType="code"/>
        <Param name="nVertices" updates="constant" val="100" valType="int"/>
        <Param name="name" updates="None" val="circle_2" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="set every frame" val="(position[1], 0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="shape" updates="constant" val="regular polygon..." valType="str"/>
        <Param name="size" updates="constant" val="(0.03, 0.03)" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="5" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="units" updates="None" val="norm" valType="str"/>
      </PolygonComponent>
      <PolygonComponent name="circle_3">
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="fillColor" updates="constant" val="$[1.000,-1.000,-1.000]" valType="str"/>
        <Param name="fillColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="interpolate" updates="constant" val="linear" valType="str"/>
        <Param name="lineColor" updates="constant" val="$[1.000,-1.000,-1.000]" valType="str"/>
        <Param name="lineColorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="lineWidth" updates="constant" val="1" valType="code"/>
        <Param name="nVertices" updates="constant" val="100" valType="int"/>
        <Param name="name" updates="None" val="circle_3" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="set every frame" val="(position[2], 0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="shape" updates="constant" val="regular polygon..." valType="str"/>
        <Param name="size" updates="constant" val="(0.03, 0.03)" valType="code"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="5" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="units" updates="None" val="norm" valType="str"/>
      </PolygonComponent>
      <CodeComponent name="code">
        <Param name="Before Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Before JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Routine" updates="constant" val="position = [(- 0.8), (- 0.75), (- 0.7)];&amp;#10;" valType="extendedCode"/>
        <Param name="Begin Routine" updates="constant" val="position = [-0.80, -0.75, -0.70]&amp;#10;&amp;#10;# position[0] = -0.80 # circle_1&amp;#10;# position[1] = -0.75 # circle_2&amp;#10;# position[2] = -0.70 # circle_3" valType="extendedCode"/>
        <Param name="Code Type" updates="None" val="Auto-&gt;JS" valType="str"/>
        <Param name="Each Frame" updates="constant" val="for i in range(0, 3):&amp;#10;    position[i] += 0.05&amp;#10;    # posição do circle i muda de posição em 0.05&amp;#10;&amp;#10;'''    &amp;#10;for 0:&amp;#10;    position[0] = position[0] + 0.05&amp;#10;    &amp;#10;for 1:&amp;#10;    position[1] = position[1] + 0.05&amp;#10;&amp;#10;for 2:&amp;#10;    position[2] = position[2] + 0.05&amp;#10;'''" valType="extendedCode"/>
        <Param name="Each JS Frame" updates="constant" val="for (var i = 0, _pj_a = 3; (i &lt; _pj_a); i += 1) {&amp;#10;    position[i] += 0.05;&amp;#10;}&amp;#10;/*&amp;#10;for 0:&amp;#10;position[0] = position[0] + 0.05&amp;#10;&amp;#10;for 1:&amp;#10;position[1] = position[1] + 0.05&amp;#10;&amp;#10;for 2:&amp;#10;position[2] = position[2] + 0.05*/&amp;#10;" valType="extendedCode"/>
        <Param name="End Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="name" updates="None" val="code" valType="code"/>
      </CodeComponent>
    </Routine>
    <Routine name="initial_screen">
      <TextComponent name="text">
        <Param name="color" updates="constant" val="white" valType="str"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="flip" updates="constant" val="" valType="str"/>
        <Param name="font" updates="constant" val="Arial" valType="str"/>
        <Param name="languageStyle" updates="None" val="LTR" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="code"/>
        <Param name="name" updates="None" val="text" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="text" updates="constant" val="Pressione [BARRA DE ESPAÇO] para continuar" valType="extendedStr"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="wrapWidth" updates="constant" val="" valType="code"/>
      </TextComponent>
      <KeyboardComponent name="key_resp">
        <Param name="allowedKeys" updates="constant" val="'space'" valType="code"/>
        <Param name="correctAns" updates="constant" val="" valType="str"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="discard previous" updates="constant" val="True" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="forceEndRoutine" updates="constant" val="True" valType="bool"/>
        <Param name="name" updates="None" val="key_resp" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="store" updates="constant" val="nothing" valType="str"/>
        <Param name="storeCorrect" updates="constant" val="False" valType="bool"/>
        <Param name="syncScreenRefresh" updates="constant" val="True" valType="bool"/>
      </KeyboardComponent>
    </Routine>
    <Routine name="end">
      <TextComponent name="thanks">
        <Param name="color" updates="constant" val="white" valType="str"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="flip" updates="constant" val="" valType="str"/>
        <Param name="font" updates="constant" val="Arial" valType="str"/>
        <Param name="languageStyle" updates="None" val="LTR" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="code"/>
        <Param name="name" updates="None" val="thanks" valType="code"/>
        <Param name="opacity" updates="constant" val="1" valType="code"/>
        <Param name="ori" updates="constant" val="0" valType="code"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="3" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="text" updates="constant" val="Fim da tarefa!&amp;#10;&amp;#10;Obrigado por sua participação!" valType="extendedStr"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="wrapWidth" updates="constant" val="" valType="code"/>
      </TextComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="initial_screen"/>
    <Routine name="trial"/>
    <Routine name="end"/>
  </Flow>
</PsychoPy2experiment>
