PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = beta_movement
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Routines
  Routine trial
    PolygonComponent circle_1
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      nVertices = 100
      pos [set every frame] = (position[0], 0)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    PolygonComponent circle_2
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      nVertices = 100
      pos [set every frame] = (position[1], 0)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    PolygonComponent circle_3
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      nVertices = 100
      pos [set every frame] = (position[2], 0)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        position = [-0.8, -0.75, -0.70]

        # position[0] = -0.80
        # position[1] = -0.75
        # position[2] = -0.70
      Each Frame:
        for i in range(0, 3):
            position[i] += distance_time
            # posição do circle i se desloca em uma velocidade
            # distance_time, controlada pelo Excel
        '''
        for 0:
            position[0] = position[0] + 0.05

        for 1:
            position[1] = position[1] + 0.05

        for 2:
            position[2] = position[2] + 0.05
        '''
  Routine initial_screen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = Pressione [BARRA DE ESPAÇO] para continuar
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Fim da tarefa!

        Obrigado por sua participação!
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = distances.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('distance_time', 0.2)]),
      OrderedDict([('distance_time', 0.1)]),
      OrderedDict([('distance_time', 0.05)]),
      OrderedDict([('distance_time', 0.025)]),
      OrderedDict([('distance_time', 0.01)])]
    Routine initial_screen
    Routine trial
  LoopTerminator trials
  Routine end
