PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = beta_movement
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Routines
  Routine trial
    PolygonComponent circle_1
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      nVertices = 100
      pos [set every frame] = (-0.8 + t * 0.25, 0.8 - t * 0.25)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      units = norm
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    PolygonComponent circle_2
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      nVertices = 100
      pos [set every frame] = (-0.75 + t * 0.25, 0.75 - t * 0.25)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      units = norm
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    PolygonComponent circle_3
      fillColor = $[1.000,-1.000,-1.000]
      lineColor = $[1.000,-1.000,-1.000]
      nVertices = 100
      pos [set every frame] = (-0.70 + t * 0.25, 0.70 - t * 0.25)
      shape = regular polygon...
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      units = norm
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  Routine initial_screen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = Pressione [BARRA DE ESPAÇO] para continuar
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Fim da tarefa!

        Obrigado por sua participação!
Flow
  Routine initial_screen
  Routine trial
  Routine end
