PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900,600]
  expName = inputText
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Routines
  Routine trial
    TextComponent instr
      letterHeight = 0.05
      pos = (-.2, 0.2)
      startVal [time (s)] = 0.0
      text = Type the target word below, and press return
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text.text = '';
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
                # marco[s] [:-1]
                # marco
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    # marcos
                    text.text = text.text + keys[0].upper()
                    # marcos L
                    modify = False
                else:
                    text.text = text.text + keys[0]
                    # marcos Li
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
  Routine textPrompt
    TextComponent targetInstr
      letterHeight = 0.05
      pos = (-0.2, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Target word:
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    TextComponent targetText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $prompt
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  Routine instructions
    TextComponent instText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this demo, we show how you can use text components to write a users keyboard input on screen.

        You will be presented with a target word. Then, in the next routine, you will be asked to type that word.
        When you have finished typing the word, press "return" to end the trial.


        Press any key to continue...
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('prompt', 'type')]),
      OrderedDict([('prompt', 'this')]),
      OrderedDict([('prompt', 'word')]),
      OrderedDict([('prompt', 'in')]),
      OrderedDict([('prompt', 'Titlecase')])]
    Routine textPrompt
    Routine trial
  LoopTerminator trials
