PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = input_text
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Routines
  Routine trial
    TextComponent word
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim
      units = norm
      wrapWidth = 1.8
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    TextComponent text
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        buttons = {'tab':'','capslock':'', 'comma': ',', 'semicolon': ';', 'period': '.', 'slash': '/', 'bracketleft': '[', 'bracketright': ']', 'apostrophe': '´', 'equal': '=', 'minus': '–', 'up':'', 'left':'', 'right':'', 'down':'', 'delete':'', 'end':'', 'pagedown':'', 'scrolllock':'', 'pause':'','insert':'','home':'','pageup':'','ctrl':'','windows':'','lctrl':'','numlock':'','num_add':'+','num_subtract':'–','num_multiply':'×','num_divide':'/','f1':'','f2':'','f3':'','f4':'','f5':'','f6':'','f7':'','f8':'','f9':'','f10':'','f11':'','f12':'', 'escape': '', 'num_0': '0', 'num_1':'1', 'num_2':'2', 'num_3':'3', 'num_4':'4', 'num_5':'5', 'num_6':'6', 'num_7':'7', 'num_8':'8', 'num_9':'9'}
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if keys[0] in buttons:
                # se a tecla pressionada, keys[0], estiver no dicionário buttons
                # concatene text.text com o valor associado à chave de mesmo nome ao da tecla pressionada
                text.text = text.text + buttons[keys[0]]
            elif 'space' in keys:
                # se a tecla pressiona é [BARRA DE ESPAÇO]
                # concatene um espaço ao final de text.text
                text.text = text.text + ' '
            elif 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                # exclua o último caractere de text.text
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                # se a tecla pressiona for [SHIFT], quer da esquerda ou da direita do teclado
                # modify se torna Verdadeiro
                modify = True
            elif len(text.text) < 3 and 'return' in keys:
                # se text.text tem menos que 3 caracteres e a tecla [ENTER] é pressionada
                # não faça nada...
                text.text = text.text
            elif len(text.text) >= 3 and 'return' in keys:
                # se text.text tem pelo menos 3 caracteres e a tecla [ENTER] é pressionada
                # encerre a rotina na iteração atual do loop
                continueRoutine = False
            else:
                if modify:
                    # se modify é Verdadeiro
                    # concatene text.text com a próxima tecla pressionada, em sua versão maiúscula
                    text.text = text.text + keys[0].upper()
                    # e volte modify para Falso
                    modify = False
                else:
                    # caso modify seja Falso
                    # concatene text.text com a próxima tecla pressionada, em sua versão minúscula
                    text.text = text.text + keys[0]
      End Routine:
        thisExp.addData("typedWord", text.text)
    PolygonComponent line
      fillColor = $[1,1,1]
      pos = (0, -0.25)
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'banana')]),
      OrderedDict([('stim', 'cachorro')]),
      OrderedDict([('stim', 'sorvete')]),
      OrderedDict([('stim', 'brasil')]),
      OrderedDict([('stim', 'danone')])]
    Routine trial
  LoopTerminator trials
