PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = input_text
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Routines
  Routine trial
    TextComponent command
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = Please type the red text below:
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    TextComponent word
      color = red
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim
      units = norm
      wrapWidth = 1.8
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    TextComponent text
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        buttons = {'tab':'','capslock':'', 'comma': ',', 'semicolon': ';', 'period': '.', 'slash': '/', 'bracketleft': '[', 'bracketright': ']', 'apostrophe': '´', 'equal': '=', 'minus': '–', 'up':'', 'left':'', 'right':'', 'down':'', 'delete':'', 'end':'', 'pagedown':'', 'scrolllock':'', 'pause':'','insert':'','home':'','pageup':'','ctrl':'','windows':'','lctrl':'','numlock':'','num_add':'+','num_subtract':'–','num_multiply':'×','num_divide':'/','f1':'','f2':'','f3':'','f4':'','f5':'','f6':'','f7':'','f8':'','f9':'','f10':'','f11':'','f12':'', 'escape': '', 'num_0': '0', 'num_1':'1', 'num_2':'2', 'num_3':'3', 'num_4':'4', 'num_5':'5', 'num_6':'6', 'num_7':'7', 'num_8':'8', 'num_9':'9'}
      Begin JS Routine:
        modify = false;
        text.text = "";
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if keys[0] in buttons:
                # se a tecla pressionada, keys[0], estiver no dicionário buttons
                # concatene text.text com o valor associado à chave de mesmo nome ao da tecla pressionada
                text.text = text.text + buttons[keys[0]]
            elif 'space' in keys:
                # se a tecla pressiona é [BARRA DE ESPAÇO]
                # concatene um espaço ao final de text.text
                text.text = text.text + ' '
            elif 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                # exclua o último caractere de text.text
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                # se a tecla pressiona for [SHIFT], quer da esquerda ou da direita do teclado
                # modify se torna Verdadeiro
                modify = True
            elif len(text.text) < 3 and 'return' in keys:
                # se text.text tem menos que 3 caracteres e a tecla [ENTER] é pressionada
                # não faça nada...
                text.text = text.text
            elif len(text.text) >= 3 and 'return' in keys:
                # se text.text tem pelo menos 3 caracteres e a tecla [ENTER] é pressionada
                # encerre a rotina na iteração atual do loop
                continueRoutine = False
            else:
                if modify:
                    # se modify é Verdadeiro
                    # concatene text.text com a próxima tecla pressionada, em sua versão maiúscula
                    text.text = text.text + keys[0].upper()
                    # e volte modify para Falso
                    modify = False
                else:
                    # caso modify seja Falso
                    # concatene text.text com a próxima tecla pressionada, em sua versão minúscula
                    text.text = text.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'tab') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'capslock') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'comma') {
            textAdd = ','; // Add a comma
        } else if (textAdd === 'semicolon') {
            textAdd = ';'; // Add a semicolon
        } else if (textAdd === 'period') {
            textAdd = '.'; // Add a period
        } else if (textAdd === 'slash') {
            textAdd = '/'; // Add a slash
        } else if (textAdd === 'bracketleft') {
            textAdd = '['; // Add a bracketleft
        } else if (textAdd === 'bracketright') {
            textAdd = ']'; // Add a bracketright
        } else if (textAdd === 'apostrophe') {
            textAdd = '´'; // Add an apostrophe
        } else if (textAdd === 'equal') {
            textAdd = '='; // Add an equal
        } else if (textAdd === 'minus') {
            textAdd = '–'; // Add a minus
        } else if (textAdd === 'up') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'left') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'right') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'down') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'delete') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'end') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'pagedown') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'scrolllock') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'pause') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'insert') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'home') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'pageup') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'ctrl') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'windows') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'lctrl') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'numlock') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'num_add') {
            textAdd = '+'; // Add a plus
        } else if (textAdd === 'num_subtract') {
            textAdd = '–'; // Add a minus
        } else if (textAdd === 'num_multiply') {
            textAdd = '×'; // Add a × symbol
        } else if (textAdd === 'num_divide') {
            textAdd = '/'; // Add a slash
        } else if (textAdd === 'f1') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f2') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f3') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f4') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f5') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f6') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f7') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f8') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f9') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f10') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f11') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'f12') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'escape') {
            textAdd = ''; // Add nothing
        } else if (textAdd === 'num_0') {
            textAdd = '0'; // Add 0
        } else if (textAdd === 'num_1') {
            textAdd = '1'; // Add 1
        } else if (textAdd === 'num_2') {
            textAdd = '2'; // Add 2
        } else if (textAdd === 'num_3') {
            textAdd = '3'; // Add 3
        } else if (textAdd === 'num_4') {
            textAdd = '4'; // Add 4
        } else if (textAdd === 'num_5') {
            textAdd = '5'; // Add 5
        } else if (textAdd === 'num_6') {
            textAdd = '6'; // Add 6
        } else if (textAdd === 'num_7') {
            textAdd = '7'; // Add 7
        } else if (textAdd === 'num_8') {
            textAdd = '8'; // Add 8
        } else if (textAdd === 'num_9') {
            textAdd = '9'; // Add 9
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            if (textAdd.length > 2) {
                continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typed_word", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typed_word", text.text)
        thisExp.addData("typed_keys", typed_keys)
    PolygonComponent line
      fillColor = $[1,1,1]
      pos = (0, -0.25)
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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  Routine thanks
    TextComponent thanks_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for your time!
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  Routine instruction
    TextComponent instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr[contador]
      units = norm
      wrapWidth = 1.8
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    CodeComponent button_code
      Code Type = Auto->JS
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      Before Experiment:
        instr = ['Esta demonstração ilustra como monitorar as entradas do participante no teclado e apresentá-las na tela.', 'Ela ainda tem falhas: acentos e sinais gráficos não funcionam na atual versão do programa.', 'Além disso, o programa ainda não está habilitado para funcionar no Pavlovia.', 'Caso tenha dúvidas sobre o programa, entre em contato com lima.piraju@gmail.com', 'A seguir, daremos início à demonstração. Digite a palavra que aparecer na cor vermelha, na tela.']
        contador = 0
      Begin Routine:
        previous_button = visual.ButtonStim(win, labelText = "Retornar", pos = (-0.20, -0.70))
        next_button = visual.ButtonStim(win, labelText = "Avançar", pos = (0.20, -0.70))
      Each Frame:
        next_button.draw()
        next_button.buttonEnabled = True

        if contador > 0:
            previous_button.draw()
            previous_button.buttonEnabled = True


        if next_button.buttonSelected:
            next = True
            continueRoutine = False

        elif previous_button.buttonSelected:
            previous = True
            continueRoutine = False
      End Routine:
        if next:
            next = False
            contador += 1
        elif previous:
            previous = False
            contador -= 1

        if contador == len(instr) - 1:
            instructions.finished = True
Flow
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 100
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'Brazil')]),
      OrderedDict([('stim', 'Spain')]),
      OrderedDict([('stim', 'United States')]),
      OrderedDict([('stim', 'England')]),
      OrderedDict([('stim', 'Python is fun')]),
      OrderedDict([('stim', '12 + 13 = 25')]),
      OrderedDict([('stim', 'Good morning, sir.')]),
      OrderedDict([('stim', 'comma = ,')]),
      OrderedDict([('stim', 'semicolon = ;')]),
      OrderedDict([('stim', 'period = .')])]
    Routine trial
  LoopTerminator trials
  Routine thanks
