PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = input_numbers
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # from numpy.random import random, randint, normal, shuffle

        # lista buttons armazena as teclas habilitadas na tarefa
        # apenas teclas numéricas e [ENTER] estarão habilitadas
        buttons = ['1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9', 'num_0', 'return']
        max_len = 3 # comprimento máximo de uma resposta
      Begin Routine:
        a = randint(2, 11) # a recebe um número inteiro aleatório entre 2 e 10
        b = randint(10, 31) # b recebe um número inteiro aleatório entre 10 e 30

        if random() > 0.5: # random() gera um número decimal aleatório entre 0 e 1
            # se random() for maior que 0,5, os valores de a e b serão invertidos entre si
            a, b = b, a

        corr = a * b # corr armazena o gabarito de uma dada tentativa; é o produto de a e b

        # math consiste em uma string que terá o seguinte formato: "a × b = "
        math = u"{} x {} = " .format(str(a), str(b))

        msg = "" # inicializa a variável que será atualizada na tela a partir do que o participante digitar
      Each Frame:
        keys = event.getKeys() # atribui as entradas do participante no teclado à variável keys

        if len(keys): # se keys > 0; i.e., se houver algum valor em keys
            if 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                msg = msg[:-1] # exclua o último caractere
            elif 'return' in keys:
                if len(msg) > 0:
                    # se a tecla pressionada é [ENTER] é há pelo menos um caractere em msg
                    continueRoutine = False # encerre a rotina atual
            elif keys[0] in buttons and len(msg) < max_len:
                # se a tecla pressionada estiver na lista buttons...
                # e o tamanho atual da msg for menor que o comprimento máximo que ela pode assumir
                msg += keys[0][-1] # concatene o último caractere da tecla pressionada com o valor atual de msg
      End Routine:
        thisExp.addData("math_problem", math) # salva a variável math em uma coluna do Excel de nome math_problem
        thisExp.addData("corr_answer", corr) # salva a variável corr em uma coluna do Excel de nome corr_answer
        thisExp.addData("participant_response", msg) # salva a variável msg em uma coluna do Excel de nome participant_response

        if int(msg) == corr: # se a msg (que o participante digitou) é igual a corr (o gabarito) da tentativa
            resp.corr = 1 # 1 = acerto
        else: # caso contrário
            resp.corr = 0 # 0 = erro

        thisExp.addData("resp.corr", resp.corr) # salva a variável resp.corr em uma coluna do Excel com o mesmo nome
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent prompt
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.5
      text = Digite sua resposta:
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    TextComponent math_problem
      letterHeight = 0.1
      pos = (-0.1, 0)
      startVal [time (s)] = 0.5
      text [set every repeat] = $math
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    TextComponent resp
      letterHeight = 0.1
      pos = (0.1, 0)
      startVal [time (s)] = 0.5
      text [set every frame] = $msg
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    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9', 'num_0', 'return'
      correctAns = $corr
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      store = all keys
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  Routine instr
    TextComponent instr_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para avançar.
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Fim da tarefa!

        Já pode voltar para a sua vida super divertida. :-)
  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        fb_msg = "Se isso aparecer na tela, é porque deu pau no programa."
        fb_color = "white" # inicializa uma cor para o feedback
        score = 0 # inicializa a pontuação do participante
      Begin Routine:
        if resp.corr: # se o participante acertou
            fb_msg = "Acertô mizeravi! :-)"
            fb_color = "green"
        else:
            fb_msg = "Incorreto, seu burro! :-("
            fb_color = "red"

         # escore atual é dado pela soma dos valores armazenados em resp.corr
        score += resp.corr

        if score == 0:
            score_text = "Você ainda não pontuou."
        elif score == 1:
            score_text = "Você fez 1 ponto."
        else:
            score_text = "Você fez {} pontos." .format(score)
      Each Frame:
        if int(t) % 2 == 0:
            spacebar_color = "white"
        else:
            spacebar_color = "black"
    TextComponent feedback_msg
      color [set every repeat] = $fb_color
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb_msg
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    TextComponent score_msg
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $score_text
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    KeyboardComponent feedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent feedback_spacebar
      color [set every frame] = $spacebar_color
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para avançar
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  Routine block_feedback
    CodeComponent block_fb_code
      Code Type = Py
      Begin Routine:
        # n_total = número de tentativas
        n_total = trials.thisRepN

        # percent_corr = percentual de acertos
        percent_corr = f"{(score / n_total) * 100}".replace(".", ",")

        # mensagem de feedback
        block_msg = f"Você acertou {score} ({percent_corr}%) das tentativas."
    TextComponent block_feedback_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_msg
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine block_feedback
  Routine end
