PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = navon
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent target_stim
      image [set every repeat] = $navon_stim
      pos [set every repeat] = $[xPos, yPos]
      size = (1, 1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
      units = norm
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    ImageComponent mask_stim
      image = mask.png
      pos [set every repeat] = $[xPos, yPos]
      size = (1, 1)
      startVal [time (s)] = 2.2
      units = norm
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    KeyboardComponent resp
      allowedKeys = 's', 'h'
      correctAns = $corr_resp_navon
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
      storeCorrect = True
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  Routine begin
    TextComponent begin_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para continuar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent begin_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanks_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Tarefa encerrada!

        Obrigado por sua participação!
  Routine block_feedback
    CodeComponent feedback
      Code Type = Py
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      Before Experiment:
        n_blocks = 3
        criterio = 75
      Begin Experiment:
        msg = "Se essa mensagem apareceu de feedback, é porque deu ruim."
      Begin Routine:
        # https://www.psychopy.org/recipes/builderFeedback.html

        # n_corr = número de acertos
        n_corr = trials.data['resp.corr'].sum()

        # mean_corr = média de acertos
        mean_corr = trials.data['resp.corr'].mean() * 100

        # mean_rt = tempo de reação (RT) médio, em milissegundos
        mean_rt = trials.data['resp.rt'].mean() * 1000
        mean_rt = f"{mean_rt:.2f}".replace(".", ",")

        # se o participante acertou pelo menos 75% das tentativas
        if mean_corr >= criterio:
            mean_corr = f"{mean_corr:.2f}".replace(".", ",")
            msg = f"Parabéns! Você acertou {n_corr:.0f} tentativas ({mean_corr}% de acertos).\n\nTempo de reação médio = {mean_rt} ms.\n\nPressione [BARRA DE ESPAÇO] para avançar."
            block_repetitions.finished = True

        # se o participante não atingiu o critério
        elif block_repetitions.thisRepN < (n_blocks - 1):
            mean_corr = f"{mean_corr:.2f}".replace(".", ",")
            msg = f"Você acertou {n_corr:.0f} tentativas ({mean_corr}% de acertos).\n\nTempo de reação médio = {mean_rt} ms.\n\nVocê precisa acertar mais para avançar na tarefa.\n\nPressione [BARRA DE ESPAÇO] para continuar."

        # se o participante atingiu o número limite de blocos e falhou miseravelmente nele
        else:
            mean_corr = f"{mean_corr:.2f}".replace(".", ",")
            msg = f"Você acertou {n_corr:.0f} tentativas ({mean_corr}% de acertos).\n\nTempo de reação médio = {mean_rt} ms.\n\nSeu número de tentativas terminou.\n\nPressione [BARRA DE ESPAÇO] para continuar."
    TextComponent feedback_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent feedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine begin
  LoopInitiator block_repetitions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = $n_blocks
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = navon_file.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('navon_stim', 'local_H_global_H.jpg'), ('local_letter', 'H'), ('global_letter', 'H'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'h'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
        OrderedDict([('navon_stim', 'local_S_global_H.jpg'), ('local_letter', 'S'), ('global_letter', 'H'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 's'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
        OrderedDict([('navon_stim', 'local_H_global_S.jpg'), ('local_letter', 'H'), ('global_letter', 'S'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'h'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
        OrderedDict([('navon_stim', 'local_S_global_S.jpg'), ('local_letter', 'S'), ('global_letter', 'S'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 's'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
        OrderedDict([('navon_stim', 'local_H_global_H.jpg'), ('local_letter', 'H'), ('global_letter', 'H'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'h'), ('xPos', -0.4), ('yPos', 0.4), ('position', 'up_left')]),
        OrderedDict([('navon_stim', 'local_S_global_H.jpg'), ('local_letter', 'S'), ('global_letter', 'H'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 's'), ('xPos', -0.4), ('yPos', 0.4), ('position', 'up_left')])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
      Routine trial
    LoopTerminator trials
    Routine block_feedback
  LoopTerminator block_repetitions
  Routine thanks
