PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = navon
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent target_stim
      image [set every repeat] = $navon_stim
      pos [set every repeat] = $[xPos, yPos]
      size = (1, 1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.2
      units = norm
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    ImageComponent mask_stim
      image = mask.png
      pos [set every repeat] = $[xPos, yPos]
      size = (1, 1)
      startVal [time (s)] = 2.2
      units = norm
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    KeyboardComponent resp
      allowedKeys = 's', 'h'
      correctAns = $corr_resp_navon
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
      storeCorrect = True
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  Routine begin
    TextComponent begin_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para continuar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent begin_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanks_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Tarefa encerrada!

        Obrigado por sua participação!
  Routine partial_score
    CodeComponent criterion
      Code Type = Py
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      Begin Experiment:
        # número de acertos a ser mostrado na tela
        n_corr = 0

        #  constante que considera o critério para um número de tentativas específico
        N_LAST = 10

        # critério de acertos nas N_LAST últimas tentativas (CRITERION deve ser < N_LAST)
        CRITERION = 8

        # lista monitora acertos (1) e erros (0) nas últimas N_LAST tentativas
        last_trials = []
      Begin Routine:
        # se foram realizadas menos de 10 tentativas
        if trials.thisN < 10:
            # acrescenta o valor de resp.corr ao final da lista
            last_trials.append(resp.corr)

        # se foram realizadas 10 ou mais tentativas
        elif trials.thisN >= N_LAST:
            # joga fora o valor da tentativa mais antiga
            last_trials.pop(0)
            # acrescenta o valor de resp.corr ao final da lista
            last_trials.append(resp.corr)


        for trial in last_trials:
            n_corr += trial

        msg = f"Últimas 10: {n_corr}\tÚltima: {last_trials[-1]}"
      End Routine:
        # se já foram pelo menos 10 tentativas
        # e participante acertou pelo menos 8 das 10 últimas
        if (trials.thisN >= N_LAST) and (n_corr >= CRITERION):
            trials.finished = True

        # reseta número de corretos para a próxima iteração do loop
        n_corr = 0
    TextComponent score
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = navon_file.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [OrderedDict([('navon_stim', 'local_H_global_H.jpg'), ('local_letter', 'H'), ('global_letter', 'H'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'h'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
      OrderedDict([('navon_stim', 'local_S_global_H.jpg'), ('local_letter', 'S'), ('global_letter', 'H'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 's'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
      OrderedDict([('navon_stim', 'local_H_global_S.jpg'), ('local_letter', 'H'), ('global_letter', 'S'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'h'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
      OrderedDict([('navon_stim', 'local_S_global_S.jpg'), ('local_letter', 'S'), ('global_letter', 'S'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 's'), ('xPos', 0.4), ('yPos', 0.4), ('position', 'up_right')]),
      OrderedDict([('navon_stim', 'local_H_global_H.jpg'), ('local_letter', 'H'), ('global_letter', 'H'), ('navon_condition', 'congruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 'h'), ('xPos', -0.4), ('yPos', 0.4), ('position', 'up_left')]),
      OrderedDict([('navon_stim', 'local_S_global_H.jpg'), ('local_letter', 'S'), ('global_letter', 'H'), ('navon_condition', 'incongruent'), ('trial_type', 'LOCAL'), ('corr_resp_navon', 's'), ('xPos', -0.4), ('yPos', 0.4), ('position', 'up_left')])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
    Routine trial
    Routine partial_score
  LoopTerminator trials
  Routine thanks
