PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = item_randomization
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Routines
  Routine study
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # Gera lista com vinte 0s e vinte 1s (0 = Arial, 1 = Sans Forgetica)
        font_control = [0, 1] * 20

        # Cria um dicionário que mapeia chaves (os pares) e as condições a que eles foram designados
        pairs = dict()

        # Nome da fonte
        font_name = ''
      Begin Routine:
        # Cria string que será apresentada na tela
        pair = f"{swahili}–{portuguese}"

        "mbwa–cachorro"
        # Embaralha a lista font_control e faz o pareamento de uma dada condição com um dado par
        shuffle(font_control)
        pairs[pair] = font_control.pop()

        # Testa se o valor do par é 0 (Arial) ou 1 (Sans Forgetica)
        if pairs[pair] == 0:
            font_name = 'Arial'
        elif pairs[pair] == 1:
            font_name = 'Sans Forgetica'
      End Routine:
        # Salva as variáveis importantes no arquivo de saídas
        thisExp.addData("word_pair", pair)
        thisExp.addData("font_name", font_name)
    TextComponent word_pair
      font [set every repeat] = $font_name
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $pair
      units = norm
      wrapWidth = 1.8
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  Routine instruction
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para continuar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thansk_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Tarefa encerrada!

        Obrigado por sua participação!
Flow
  Routine instruction
  LoopInitiator study_trials loopType="TrialHandler"
    conditionsFile = word_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pair_id', 1), ('swahili', 'ladha'), ('portuguese', 'sabor')]),
      OrderedDict([('pair_id', 2), ('swahili', 'hadithi'), ('portuguese', 'história')]),
      OrderedDict([('pair_id', 3), ('swahili', 'utenzi'), ('portuguese', 'poema')]),
      OrderedDict([('pair_id', 4), ('swahili', 'jeraha'), ('portuguese', 'ferida')]),
      OrderedDict([('pair_id', 5), ('swahili', 'handaki'), ('portuguese', 'trincheira')]),
      OrderedDict([('pair_id', 6), ('swahili', 'ankra'), ('portuguese', 'fatura')]),
      OrderedDict([('pair_id', 7), ('swahili', 'samadi'), ('portuguese', 'estrume')]),
      OrderedDict([('pair_id', 8), ('swahili', 'ambo'), ('portuguese', 'cola')]),
      OrderedDict([('pair_id', 9), ('swahili', 'bahasha'), ('portuguese', 'envelope')]),
      OrderedDict([('pair_id', 10), ('swahili', 'lango'), ('portuguese', 'portão')]),
      OrderedDict([('pair_id', 11), ('swahili', 'roho'), ('portuguese', 'alma')]),
      OrderedDict([('pair_id', 12), ('swahili', 'chama'), ('portuguese', 'sociedade')]),
      OrderedDict([('pair_id', 13), ('swahili', 'wasaa'), ('portuguese', 'lazer')]),
      OrderedDict([('pair_id', 14), ('swahili', 'dafina'), ('portuguese', 'tesouro')]),
      OrderedDict([('pair_id', 15), ('swahili', 'malkia'), ('portuguese', 'rainha')]),
      OrderedDict([('pair_id', 16), ('swahili', 'buu'), ('portuguese', 'larva')]),
      OrderedDict([('pair_id', 17), ('swahili', 'chura'), ('portuguese', 'sapo')]),
      OrderedDict([('pair_id', 18), ('swahili', 'nafaka'), ('portuguese', 'milho')]),
      OrderedDict([('pair_id', 19), ('swahili', 'godoro'), ('portuguese', 'colchão')])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
    Routine study
  LoopTerminator study_trials
  Routine thanks
