PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = item_randomization
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Routines
  Routine study
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # Gera lista com vinte 0s e vinte 1s (0 = Arial, 1 = Sans Forgetica)
        font_control = [0, 1] * 2

        # Cria um dicionário que mapeia chaves (os pares) e as condições a que eles foram designados
        pairs = dict()

        # Nome da font
        font_name = ''
      Begin Routine:
        # Cria string que será apresentada na tela
        pair = f"{swahili}\n\n{portuguese}"

        # Embaralha essa lista e faz o pareamento de uma dada condição com um dado par
        if study_trials.thisRepN == 0:
            shuffle(font_control)
            pairs[pair] = font_control.pop()

        # Testa se o valor do par é 0 (Arial) ou 1 (Sans Forgetica)
        if pairs[pair] == 0:
            font_name = 'Arial'
        elif pairs[pair] == 1:
            font_name = 'Sans Forgetica'
      End Routine:
        # Salva as variáveis importantes no arquivo de saídas
        thisExp.addData("word_pair", pair)
        thisExp.addData("font_name", font_name)
    TextComponent word_pair
      font [set every repeat] = $font_name
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $pair
      units = norm
      wrapWidth = 1.8
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  Routine instruction
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para avançar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Fim do experimento!

        Obrigado por sua participação!
Flow
  Routine instruction
  LoopInitiator study_trials loopType="TrialHandler"
    conditionsFile = word_pairs.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('pair_id', 37), ('swahili', 'pipa'), ('portuguese', 'barril')]),
      OrderedDict([('pair_id', 38), ('swahili', 'goti'), ('portuguese', 'joelho')]),
      OrderedDict([('pair_id', 39), ('swahili', 'mbwa'), ('portuguese', 'cachorro')]),
      OrderedDict([('pair_id', 40), ('swahili', 'pombe'), ('portuguese', 'cerveja')])]
    Routine study
  LoopTerminator study_trials
  Routine thanks
