PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = digit_span_task
  keyboardBackend = ioHub
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Routines
  Routine study
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # string armazena sequência de dígitos apresentados na tela
        digits = ""
      Begin Routine:
        # Geração de nova lista ocorre apenas na primeira iteração do loop stimuli
        if stimuli.thisN == 0:
            # Gera uma lista embaralhada com dígitos entre 0 e 9
            digit_list = list(range(0, 10))
            shuffle(digit_list)

        # remove um elemento da lista digit_list e o atribui à variável digit
        digit = digit_list.pop()

        # Insere o dígito em um lista com os dígitos apresentados
        digits += str(digit)
    TextComponent digit_text
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $digit
      units = norm
      wrapWidth = 1.8
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  Routine recall
    TextComponent resp_prompt
      font = Times New Roman
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = DIGITE
      units = norm
      wrapWidth = 1.8
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    CodeComponent resp_code
      Code Type = Py
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      Begin Experiment:
        corr_answers = 0
      Begin Routine:
        msg = ""

        allowed_keys = ['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', 'num_0',
        'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9']

        max_len = 9

        # monitorando teclas pressionadas e tempo
        clock = core.Clock() # relógio da rotina que monitora tempo
        pressed_keys = list() # lista de teclas pressionadas
        pressed_keys_time = list() # lista de tempo de pressão de cada tecla
      Each Frame:
        keys = event.getKeys() # atribui as entradas do participante no teclado à variável keys

        if len(keys): # se keys > 0; i.e., se houver algum valor em keys
            pressed_keys_time.append(clock.getTime())
            pressed_keys.append(keys[0])
            if 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                msg = msg[:-1] # exclua o último caractere
            elif 'return' in keys:
                if len(msg) > 0:
                    # se a tecla pressionada é [ENTER] é há pelo menos um caractere em msg
                    continueRoutine = False # encerre a rotina atual
            elif keys[0] in allowed_keys and len(msg) < max_len:
                # se a tecla pressionada estiver na lista buttons...
                # e o tamanho atual da msg for menor que o comprimento máximo que ela pode assumir
                msg += keys[0][-1] # concatene o último caractere da tecla pressionada com o valor atual de msg
      End Routine:
        # dígitos na ordem reversa
        backward_digits = digits[::-1]

        # salva os dígitos que apareceram na tela, a resposta do participante e o comprimento da sequência atual
        thisExp.addData("digit_span_stim", digits)
        thisExp.addData("backward_digit_span_stim", backward_digits)
        thisExp.addData("backward_digit_span_resp", msg)
        thisExp.addData("series_length", series_len)

        # salva variáveis relacionadas ao tempo
        thisExp.addData("teclas_pressionadas", pressed_keys)
        thisExp.addData("teclas_pressionadas_tempo", pressed_keys_time)

        # avalia se resposta foi um acerto (corr = 1) ou um erro (corr = 0)
        if backward_digits == msg:
            corr = 1
            corr_answers += 1
        else:
            corr = 0

        # salva acerto ou erro no arquivo de saídas
        thisExp.addData("resp_corr", corr)

        # reseta a string digits para a tentativa seguinte
        digits = ""

        # se o participante está em uma segunda tentativa de um dado comprimento de dígitos
        # é hora de avaliar se ele acertou pelo menos 1 das tentativas.
        # se ele errou as duas tentativas de um dado comprimento, então corr_answers será igual a 0
        # se isso for uma verdade, então NÃO avance para o próximo comprimento de dígitos.
        # ao invés disso, termine a tarefa! :-)
        if span_trials.thisN == 1:
            if corr_answers == 0:
                trials.finished = True
            else:
                # se ele tiver acertado ao menos uma das duas sequências, resete a variável corr_answers
                # para que ela esteja zerada no próximo comprimento de dígitos
                corr_answers = 0
    TextComponent resp
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every frame] = $msg
      units = norm
      wrapWidth = 1.8
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  Routine thanks
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Tarefa encerrada!

        Obrigado por sua participação!
  Routine prompt
    TextComponent prompt_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] quando estiver pronto para iniciar a memorização de uma sequência de dígitos.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent prompt_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para iniciar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = series_length.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('series_len', 2)]),
      OrderedDict([('series_len', 3)]),
      OrderedDict([('series_len', 4)]),
      OrderedDict([('series_len', 5)]),
      OrderedDict([('series_len', 6)]),
      OrderedDict([('series_len', 7)]),
      OrderedDict([('series_len', 8)]),
      OrderedDict([('series_len', 9)])]
    LoopInitiator span_trials loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine prompt
      LoopInitiator stimuli loopType="TrialHandler"
        loopType = random
        nReps = $series_len
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        Routine study
      LoopTerminator stimuli
      Routine recall
    LoopTerminator span_trials
  LoopTerminator trials
  Routine thanks
