PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = mouse2
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Routines
  Routine valid_click_trial
    PolygonComponent polygon1
      fillColor [set every repeat] = $color
      lineColor [set every repeat] = $color
      nVertices = 100
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      units = height
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    MouseComponent mouse1
      clickable = polygon1
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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    TextComponent text1
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Save mouse state: every frame
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Flow
  LoopInitiator valid_click_trials loopType="TrialHandler"
    conditionsFile = colors.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('color', 'red')]),
      OrderedDict([('color', 'blue')]),
      OrderedDict([('color', 'green')]),
      OrderedDict([('color', 'orange')]),
      OrderedDict([('color', 'white')]),
      OrderedDict([('color', 'yellow')]),
      OrderedDict([('color', 'pink')])]
    Routine valid_click_trial
  LoopTerminator valid_click_trials
