PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expName, expInfo['date'])
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = MTS v. 1
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Routines
  Routine trial
    CodeComponent positions
      Code Type = Py
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      Begin Experiment:
        # define uma lista de tuplas com as posições;
        # a lista será embaralhada a cada tentativa;
        # isso permitirá atribuir diferentes posições a diferentes estímulos de comparação;
        # comparison1 sempre será o gabarito!
        positions = [(-0.60, -0.50), # esquerda (x, y)
                    (0.00, -0.50), # centro (x, y)
                    (0.60, -0.50)] # direita (x, y)
      Begin Routine:
        # embaralha as posições
        shuffle(positions)

        # e embaralha a lista contendo as diferentes alternativas incorretas candidatas
        shuffle(incorrect_responses)

        comparison1_img = comparison2_img = comparison3_img = "interrogation.jpg"
      Each Frame:
        # se a imagem comparison1 contém em si o mouse
        # ou, em outras palavras
        # se o mouse está em cima da imagem comparison1
        if comparison1.contains(resp):
            comparison1_img = correct_response
        else:
            comparison1_img = "interrogation.jpg"

        # se a imagem comparison2 contém em si o mouse
        # ou, em outras palavras
        # se o mouse está em cima da imagem comparison2
        if comparison2.contains(resp):
            comparison2_img = incorrect_responses[0]
        else:
            comparison2_img = "interrogation.jpg"

        # se a imagem comparison3 contém em si o mouse
        # ou, em outras palavras
        # se o mouse está em cima da imagem comparison3
        if comparison3.contains(resp):
            comparison3_img = incorrect_responses[1]
        else:
            comparison3_img = "interrogation.jpg"
    TextComponent sample
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      text [set every repeat] = $sample_stim
      units = norm
      wrapWidth = 1.8
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    ImageComponent comparison1
      image [set every frame] = $comparison1_img
      pos [set every repeat] = $positions[0]
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      units = norm
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    ImageComponent comparison2
      image [set every frame] = $comparison2_img
      pos [set every repeat] = $positions[1]
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      units = norm
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    ImageComponent comparison3
      image [set every frame] = $comparison3_img
      pos [set every repeat] = $positions[2]
      size = (0.5, 0.5)
      startVal [time (s)] = 2.5
      units = norm
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    MouseComponent resp
      clickable = comparison1, comparison2, comparison3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 2.5
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  Routine instructions
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para continuar
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        # se o participante acertou a resposta
        if resp.isPressedIn(comparison1):
            color = "green"
            msg = "Correto!"
            corr = 1
        # se o participante errou a resposta
        else:
            color = "red"
            msg = "Incorreto!"
            corr = 0
      End Routine:
        thisExp.addData("resp.corr", corr)
    TextComponent sample_2
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $sample_stim
      units = norm
      wrapWidth = 1.8
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    ImageComponent comparison1_2
      image [set every repeat] = $correct_response
      pos [set every repeat] = $positions[0]
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = norm
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    ImageComponent comparison2_2
      image [set every repeat] = $incorrect_responses[0]
      pos [set every repeat] = $positions[1]
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = norm
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    ImageComponent comparison3_2
      image [set every repeat] = $incorrect_responses[1]
      pos [set every repeat] = $positions[2]
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      units = norm
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    PolygonComponent feedback_stim
      fillColor = None
      lineColor [set every repeat] = $color
      lineWidth = 7
      pos [set every repeat] = positions[0]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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    TextComponent feedback_msg
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
      units = norm
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  Routine thanks
    TextComponent thanks_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Tarefa encerrada!

        Obrigado por sua participação!
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sample_stim', 'arrow'), ('correct_response', '8. arrow.jpg'), ('incorrect_responses', ['30. book.jpg', '60. clock.jpg', '83. ear.jpg', '91. flower.jpg', '121. horse.jpg', '146. moon.jpg', '166. pear.jpg', '187. ring.jpg', '197. scissors.jpg', '241. tree.jpg', '255. whistle.jpg'])]),
      OrderedDict([('sample_stim', 'book'), ('correct_response', '30. book.jpg'), ('incorrect_responses', ['8. arrow.jpg', '60. clock.jpg', '83. ear.jpg', '91. flower.jpg', '121. horse.jpg', '146. moon.jpg', '166. pear.jpg', '187. ring.jpg', '197. scissors.jpg', '241. tree.jpg', '255. whistle.jpg'])]),
      OrderedDict([('sample_stim', 'clock'), ('correct_response', '60. clock.jpg'), ('incorrect_responses', ['8. arrow.jpg', '30. book.jpg', '83. ear.jpg', '91. flower.jpg', '121. horse.jpg', '146. moon.jpg', '166. pear.jpg', '187. ring.jpg', '197. scissors.jpg', '241. tree.jpg', '255. whistle.jpg'])]),
      OrderedDict([('sample_stim', 'ear'), ('correct_response', '83. ear.jpg'), ('incorrect_responses', ['8. arrow.jpg', '30. book.jpg', '60. clock.jpg', '91. flower.jpg', '121. horse.jpg', '146. moon.jpg', '166. pear.jpg', '187. ring.jpg', '197. scissors.jpg', '241. tree.jpg', '255. whistle.jpg'])]),
      OrderedDict([('sample_stim', 'flower'), ('correct_response', '91. flower.jpg'), ('incorrect_responses', ['8. arrow.jpg', '30. book.jpg', '60. clock.jpg', '83. ear.jpg', '121. horse.jpg', '146. moon.jpg', '166. pear.jpg', '187. ring.jpg', '197. scissors.jpg', '241. tree.jpg', '255. whistle.jpg'])])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
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
