PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = clock v. 1
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Routines
  Routine trial
    TextComponent trial_text
      color = green
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = "Tentativa " + str(($trials.thisN + 1))
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    TextComponent text
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = $t
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
