PsychoPy2experiment version="2020.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = clock v. 4
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import math
      Begin Routine:
        color = "green"

        relogio = core.CountdownTimer(start = 66)

        mins = math.floor(relogio.getTime() / 60)
        segs = math.floor(relogio.getTime() - mins * 60)
      Each Frame:
        mins = math.floor(relogio.getTime() / 60)
        segs = math.floor(relogio.getTime() - mins * 60)

        if int(relogio.getTime()) <= 45:
            color = "red"

        if int(relogio.getTime()) == 0:
            continueRoutine = False
    TextComponent trial_text
      color = green
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = "Tentativa " + str(($trials.thisN + 1))
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    TextComponent text
      color [set every frame] = $color
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every frame] = str(int($mins)).zfill(2) + ':' + str(int($segs)).zfill(2)
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
