PsychoPy2experiment version="2020.2.2"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  expName = pm_ga
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Routines
  Routine end
    TextComponent text_2
      letterHeight = 30
      startVal [time (s)] = 0.0
      text = Thank you very much for taking part
      wrapWidth = 800
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        import random
        import math

        random.seed()
        puttarget = 25
        wordlist = []
        answerlist = []
        targetlist = []
        word_num = 0
        nonword_num = 0
        tar_num = 0
        trialnum = 1
        NTargets = 8
        NTrials = 200
        targetgap = 25
        mins = 0
        secs = 0
        showtime = 0
        showclock = 0
        now_clock = 0
    TextComponent text
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        Please categorise items into words and non-words by pressing 'w' or 'n' on the keyboard.
        During this phase please press the 's' key if you see item that starts with an s before categorising it.

        Please also press '\' every minute. You can press the space bar to view a clock.

        Proceed as quickly and accurately as possible.

        Please indicate to the researcher if you have understood these instructions

        Press the space bar to start
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine loadtargets
    CodeComponent code_targets
      Code Type = Auto->JS
      End Routine:
        targetlist.append(Targets)
  Routine loadwords
    CodeComponent code_words
      Code Type = Auto->JS
      End Routine:
        wordlist.append(Words)
        answerlist.append(Answer)
  Routine trial
    KeyboardComponent response
      allowedKeys = 't', 'backslash', 's', 'w', 'n', 'space'
      correctAns = $thisanswer
      forceEndRoutine = False
      startVal [time (s)] = 0
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        clock_flag = 0
      Each Frame:
        mins = math.floor(pm_clock.getTime()/60)
        secs = round(pm_clock.getTime()-mins*60,0)

        if showclock == 1:
            now_clock = now_clock +1
            if now_clock > 100:
                showclock = 0
                now_clock = 0


        if "space" in response.keys:
            continueRoutine = True
            if showclock < 1:
                if clock_flag < 1:
                    thisExp.addData('Time_View', round(pm_clock.getTime(),0))
                    showclock = 1
                    clock_flag = 1
                    now_clock=0
        elif "s" in response.keys:
            continueRoutine = True
            if target_flag < 1:
                thisExp.addData('Target_RT', round(response.rt,3))
                target_flag = 1
        elif "t" in response.keys:
            continueRoutine = True
            if time_flag < 1:
                thisExp.addData('Time_Response', round(pm_clock.getTime(),0))
                if secs < 6:
                    timescore = 1
                elif secs > 54:
                    timescore = 1
                else:
                    timescore = 0
                thisExp.addData('Time_Score', timescore)
                time_flag = 1
        elif "backslash" in response.keys:
            continueRoutine = True
            if time_flag < 1:
                thisExp.addData('Time_Response', round(pm_clock.getTime(),0))
                if secs < 6:
                    timescore = 1
                elif secs > 54:
                    timescore = 1
                else:
                    timescore = 0
                thisExp.addData('Time_Score', timescore)
                time_flag = 1
        elif len(response.keys) > 0:
            continueRoutine = False
      End Routine:
        thisExp.addData('Item', thisitem)
        thisExp.addData('Answer', thisanswer)
        thisExp.addData('Target', thistarget)

        if (trials.thisN) == NTrials-1:
            trials.finished = True
    TextComponent text_item
      letterHeight = 60
      startVal [time (s)] = 0.0
      text [set every repeat] = $thisitem
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    TextComponent clock_time
      letterHeight = 60
      opacity [set every frame] = $showclock
      pos = (450, 300)
      startVal [time (s)] = 0.0
      text [set every frame] = str(int($mins)).zfill(2) + ':' + str(int($secs)).zfill(2)
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  Routine pretrial
    CodeComponent code_pretrial
      Code Type = Auto->JS
      Begin Routine:
        if tar_num > NTargets:
            thisitem = wordlist[trialnum-tarnum]
            thisanswer = wordlist[trialnum-tarnum]
            thistarget = 0
        elif trials.thisN == puttarget:
            puttarget = puttarget + targetgap
            thisitem = targetlist[tar_num]
            thisanswer = 'w'
            tar_num = tar_num + 1
            thistarget = 1
            trialnum = 0
        else:
            thisitem = wordlist[trialnum-tar_num]
            thisanswer = wordlist[trialnum-tar_num]
            thistarget = 0

        target_flag = 0
        time_flag = 0
        trialnum = trialnum + 1

        if trialnum == 104:
            pauseblock = 1
        else:
            pauseblock = 0

        if trials.thisN == 0:
            pm_clock=core.Clock()
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent fixation
      letterHeight = 120
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .5
      text = +
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  Routine Block_pause
    TextComponent text_3
      letterHeight = 30
      startVal [time (s)] = 0.0
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      text:
        Please take a break

        Press space when you are ready to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine start
  LoopInitiator word_loop loopType="TrialHandler"
    conditionsFile = WordLists.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    Routine loadwords
  LoopTerminator word_loop
  LoopInitiator targets loopType="TrialHandler"
    Selected rows = $slice(1,8)
    conditionsFile = WordLists.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    Routine loadtargets
  LoopTerminator targets
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine pretrial
    Routine trial
    LoopInitiator trials_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $pauseblock
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      Routine Block_pause
    LoopTerminator trials_2
  LoopTerminator trials
  Routine end
