PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = -1.0000, -1.0000, -1.0000
  expName = finley_et_al
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pressione
        [BARRA DE ESPAÇO]
        para iniciar a tarefa.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_presentation
    CodeComponent random_seed
      Code Type = Py
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      Before Experiment:
        import random

        my_seed = random.randint(0, 1000000)
    TextComponent cue_study
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_study
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Inupiaq
      units = norm
      wrapWidth = 1.8
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  Routine distractor
    CodeComponent distractor_code
      Code Type = Py
      Begin Routine:
        # tarefa distratora inicial = 1,5 min
        # tarefa distratora final = 10 min
        clock = core.CountdownTimer(start = 10)
      Each Frame:
        timer = int(clock.getTime())

        if int(clock.getTime()) <= 0:
            continueRoutine = False
    TextComponent distractor_msg
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $timer
      units = norm
      wrapWidth = 1.8
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  Routine practice_phase_part1
    CodeComponent practice_code
      Code Type = Py
      Before Experiment:
        # cria uma lista com números das linhas
        rows = list(range(0, 12))

        # embaralha essa lista
        random.shuffle(rows)

        # fatia a lista anterior em duas metades
        rows_part1 = rows[:6]
        rows_part2 = rows[6:]
    TextComponent cue_practice1
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_practice1
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Inupiaq
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_practice1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_phase_part2
    TextComponent cue_practice2
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_practice2
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Inupiaq
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_practice2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine final_test
    TextComponent cue_final
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_final
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = _ _ _ _ _
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_final
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Tarefa concluída.

        Obrigado por sua participação!
Flow
  Routine instructions
  LoopInitiator initial_presentation_cycles loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator initial_presentation_trials loopType="TrialHandler"
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = $my_seed
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      conditions:
        [{'English': 'boot', 'Portuguese': 'bota', 'Inupiaq': 'kamik'},
        {'English': 'cliff', 'Portuguese': 'penhasco', 'Inupiaq': 'ikpik'},
        {'English': 'duck', 'Portuguese': 'pato', 'Inupiaq': 'mitiq'},
        {'English': 'dust', 'Portuguese': 'pó', 'Inupiaq': 'apyuq'},
        {'English': 'heaven', 'Portuguese': 'paraíso', 'Inupiaq': 'qixak'},
        {'English': 'kidney', 'Portuguese': 'rim', 'Inupiaq': 'taqtu'},
        {'English': 'mark', 'Portuguese': 'marca', 'Inupiaq': 'aglak'},
        {'English': 'rainbow', 'Portuguese': 'arco-íris', 'Inupiaq': 'nigaq'},
        {'English': 'sled', 'Portuguese': 'trenó', 'Inupiaq': 'uniat'},
        {'English': 'snail', 'Portuguese': 'lesma', 'Inupiaq': 'uvixu'},
        {'English': 'tea', 'Portuguese': 'chá', 'Inupiaq': 'saiyu'},
        {'English': 'thread', 'Portuguese': 'fio', 'Inupiaq': 'ivalu'}]
      Routine initial_presentation
    LoopTerminator initial_presentation_trials
  LoopTerminator initial_presentation_cycles
  Routine distractor
  LoopInitiator practice_phase_part1_cycles loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 6
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    LoopInitiator practice_phase_part1_trials loopType="TrialHandler"
      Selected rows = $rows_part1
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = $my_seed
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      conditions:
        [{'English': 'boot', 'Portuguese': 'bota', 'Inupiaq': 'kamik'},
        {'English': 'cliff', 'Portuguese': 'penhasco', 'Inupiaq': 'ikpik'},
        {'English': 'duck', 'Portuguese': 'pato', 'Inupiaq': 'mitiq'},
        {'English': 'dust', 'Portuguese': 'pó', 'Inupiaq': 'apyuq'},
        {'English': 'heaven', 'Portuguese': 'paraíso', 'Inupiaq': 'qixak'},
        {'English': 'kidney', 'Portuguese': 'rim', 'Inupiaq': 'taqtu'},
        {'English': 'mark', 'Portuguese': 'marca', 'Inupiaq': 'aglak'},
        {'English': 'rainbow', 'Portuguese': 'arco-íris', 'Inupiaq': 'nigaq'},
        {'English': 'sled', 'Portuguese': 'trenó', 'Inupiaq': 'uniat'},
        {'English': 'snail', 'Portuguese': 'lesma', 'Inupiaq': 'uvixu'},
        {'English': 'tea', 'Portuguese': 'chá', 'Inupiaq': 'saiyu'},
        {'English': 'thread', 'Portuguese': 'fio', 'Inupiaq': 'ivalu'}]
      Routine practice_phase_part1
    LoopTerminator practice_phase_part1_trials
  LoopTerminator practice_phase_part1_cycles
  LoopInitiator practice_phase_part2_cycles loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 6
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    LoopInitiator practice_phase_part2_trials loopType="TrialHandler"
      Selected rows = $rows_part2
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = $my_seed
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      conditions:
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      Routine practice_phase_part2
    LoopTerminator practice_phase_part2_trials
  LoopTerminator practice_phase_part2_cycles
  Routine distractor
  LoopInitiator final_test_trials loopType="TrialHandler"
    conditionsFile = word_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine final_test
  LoopTerminator final_test_trials
  Routine thanks
