PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = -1.0000, -1.0000, -1.0000
  expName = finley_et_al
  keyboardBackend = ioHub
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Routines
  Routine initial_presentation
    TextComponent cue_study
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $English
      units = norm
      wrapWidth = 1.8
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    TextComponent target_study
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Inupiaq
      units = norm
      wrapWidth = 1.8
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  Routine instructions
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para continuar.
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Tarefa encerrada.

        Obrigado por sua participação!
  Routine practice_part1
    CodeComponent code1
      Code Type = Py
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      Before Experiment:
        import random

        my_seed = randint(0, 10000)

        rows = list(range(0, 12))
        random.shuffle(rows)
        rows_part1 = rows[:6]
        rows_part2 = rows[6:]
      Begin Experiment:
        conditions_part1 = list()

        for condition in ["AC", "DC", "study_only"]:
            for i in range(2):
                conditions_part1.append(condition)

        conditions_part2 = conditions_part1[:]
        random.shuffle(conditions_part1)
        random.shuffle(conditions_part2)
      Begin Routine:
        resp_display = ""
        max_digits = 10

        #key logger defaults
        last_len = 0
        key_list = []

        event.clearEvents('keyboard')



        current_condition = conditions_part1[practice_trials_part1.thisN]

        Inupiaq_cue = ""

        if current_condition == "AC":
            # letras a serem mostradas = 1
            # letras a serem representadas por underscore = 0
            letters = [0] * (5 - practice_cycles_part1.thisN) + [1] * practice_cycles_part1.thisN
            random.shuffle(letters)

            for i, letter in enumerate(letters):
                if letter == 0:
                    Inupiaq_cue += "_"
                else:
                    Inupiaq_cue += Inupiaq[i]

        elif current_condition == "DC":
            # letras a serem mostradas = 1
            # letras a serem representadas por underscore = 0
            letters = [0] * (practice_cycles_part1.thisN) + [1] * (5 - practice_cycles_part1.thisN)
            random.shuffle(letters)

            for i, letter in enumerate(letters):
                if letter == 0:
                    Inupiaq_cue += "_"
                else:
                    Inupiaq_cue += Inupiaq[i]

        else:
            Inupiaq_cue = Inupiaq

        Inupiaq_cue = " ".join(Inupiaq_cue)
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keys_practice.keys) > last_len):

            #increment the key logger length
            last_len = len(keys_practice.keys)

            #grab the last key added to the keys list
            key_list.append(keys_practice.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            # if space is pressed then...
            elif("space" in key_list):
                #remove the space key
                key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                # if participant entered with previous keys
                if (len(key_list) >= 1):
                    continueRoutine = False


            #now loop through and remove any extra characters that may exist
            while(len(key_list) > max_digits):
                key_list.pop()

            #create a variable to display
            resp_display = ''.join(key_list)
      End Routine:
        thisExp.addData('response', resp_display)
    TextComponent cue_practice1
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $English
      units = norm
      wrapWidth = 1.8
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    TextComponent target_practice1
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Inupiaq_cue
      units = norm
      wrapWidth = 1.8
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    TextComponent condition1
      color = red
      font = Times New Roman
      letterHeight = 0.4
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $conditions_part1[practice_trials_part1.thisN]
      units = norm
      wrapWidth = 1.8
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    TextComponent resp_practice1
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent keys_practice
      allowedKeys = ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z', 'space', 'backspace', 'return']
      correctAns = $Inupiaq
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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  Routine practice_part2
    CodeComponent code2
      Code Type = Py
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      Begin Routine:
        current_condition = conditions_part2[practice_trials_part2.thisN]

        Inupiaq_cue = ""

        if current_condition == "AC":
            # letras a serem mostradas = 1
            # letras a serem representadas por underscore = 0
            letters = [0] * (5 - practice_cycles_part2.thisN) + [1] * practice_cycles_part2.thisN
            random.shuffle(letters)

            for i, letter in enumerate(letters):
                if letter == 0:
                    Inupiaq_cue += "_"
                else:
                    Inupiaq_cue += Inupiaq[i]

        elif current_condition == "DC":
            # letras a serem mostradas = 1
            # letras a serem representadas por underscore = 0
            letters = [0] * (practice_cycles_part2.thisN) + [1] * (5 - practice_cycles_part2.thisN)
            random.shuffle(letters)

            for i, letter in enumerate(letters):
                if letter == 0:
                    Inupiaq_cue += "_"
                else:
                    Inupiaq_cue += Inupiaq[i]

        else:
            Inupiaq_cue = Inupiaq

        Inupiaq_cue = " ".join(Inupiaq_cue)
    TextComponent cue_practice2
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $English
      units = norm
      wrapWidth = 1.8
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    TextComponent target_practice2
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Inupiaq_cue
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent resp_practice2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent condition2
      color = red
      font = Times New Roman
      letterHeight = 0.4
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $conditions_part2[practice_trials_part2.thisN]
      units = norm
      wrapWidth = 1.8
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  Routine distractor
    CodeComponent distractor_clock
      Code Type = Py
      Begin Routine:
        clock = core.CountdownTimer(start = 10)
      Each Frame:
        timer = int(clock.getTime())

        if int(clock.getTime()) <= 0:
            continueRoutine = False
    TextComponent distractor_msg
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      text [set every frame] = $timer
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  Routine final_test
    TextComponent cue_final
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $English
      units = norm
      wrapWidth = 1.8
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    TextComponent underscores
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = _ _ _ _ _
      units = norm
      wrapWidth = 1.8
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Flow
  Routine instructions
  LoopInitiator initial_presentation_cycles loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator initial_presentation_trials loopType="TrialHandler"
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = my_seed
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      conditions:
        [{'English': 'boot', 'Inupiaq': 'kamik'},
        {'English': 'cliff', 'Inupiaq': 'ikpik'},
        {'English': 'duck', 'Inupiaq': 'mitiq'},
        {'English': 'dust', 'Inupiaq': 'apyuq'},
        {'English': 'heaven', 'Inupiaq': 'qixak'},
        {'English': 'kidney', 'Inupiaq': 'taqtu'},
        {'English': 'mark', 'Inupiaq': 'aglak'},
        {'English': 'rainbow', 'Inupiaq': 'nigaq'},
        {'English': 'sled', 'Inupiaq': 'uniat'},
        {'English': 'snail', 'Inupiaq': 'uvixu'},
        {'English': 'tea', 'Inupiaq': 'saiyu'},
        {'English': 'thread', 'Inupiaq': 'ivalu'}]
      Routine initial_presentation
    LoopTerminator initial_presentation_trials
  LoopTerminator initial_presentation_cycles
  Routine distractor
  LoopInitiator practice_cycles_part1 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 6
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    LoopInitiator practice_trials_part1 loopType="TrialHandler"
      Selected rows = $rows_part1
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = my_seed
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      conditions:
        [{'English': 'boot', 'Inupiaq': 'kamik'},
        {'English': 'cliff', 'Inupiaq': 'ikpik'},
        {'English': 'duck', 'Inupiaq': 'mitiq'},
        {'English': 'dust', 'Inupiaq': 'apyuq'},
        {'English': 'heaven', 'Inupiaq': 'qixak'},
        {'English': 'kidney', 'Inupiaq': 'taqtu'},
        {'English': 'mark', 'Inupiaq': 'aglak'},
        {'English': 'rainbow', 'Inupiaq': 'nigaq'},
        {'English': 'sled', 'Inupiaq': 'uniat'},
        {'English': 'snail', 'Inupiaq': 'uvixu'},
        {'English': 'tea', 'Inupiaq': 'saiyu'},
        {'English': 'thread', 'Inupiaq': 'ivalu'}]
      Routine practice_part1
    LoopTerminator practice_trials_part1
  LoopTerminator practice_cycles_part1
  LoopInitiator practice_cycles_part2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 6
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    LoopInitiator practice_trials_part2 loopType="TrialHandler"
      Selected rows = $rows_part2
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = my_seed
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      conditions:
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      Routine practice_part2
    LoopTerminator practice_trials_part2
  LoopTerminator practice_cycles_part2
  Routine distractor
  LoopInitiator final_test_trials loopType="TrialHandler"
    conditionsFile = word_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine final_test
  LoopTerminator final_test_trials
  Routine thanks
