PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = -1.0000, -1.0000, -1.0000
  expName = finley_et_al
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pressione
        [BARRA DE ESPAÇO]
        para iniciar a tarefa.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_presentation
    CodeComponent random_seed
      Code Type = Py
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      Before Experiment:
        import random

        my_seed = random.randint(0, 1000000)
    TextComponent cue_study
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_study
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Inupiaq
      units = norm
      wrapWidth = 1.8
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  Routine distractor
    CodeComponent distractor_code
      Code Type = Py
      Begin Routine:
        # tarefa distratora inicial = 1,5 min
        # tarefa distratora final = 10 min
        clock = core.CountdownTimer(start = 10)
      Each Frame:
        timer = int(clock.getTime())

        if int(clock.getTime()) <= 0:
            continueRoutine = False
    TextComponent distractor_msg
      disabled = True
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $timer
      units = norm
      wrapWidth = 1.8
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  Routine final_test
    TextComponent cue_final
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_final
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = _ _ _ _ _
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_final
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Tarefa concluída.

        Obrigado por sua participação!
    CodeComponent xxx
      Code Type = Py
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      End Experiment:
        '''
        resp_display = ""
        max_digits = 10

        #key logger defaults
        last_len = 0
        key_list = []

        event.clearEvents('keyboard')



        current_condition = conditions_part1[practice_trials_part1.thisN]

        Inupiaq_cue = ""

        if current_condition == "AC":
            # letras a serem mostradas = 1
            # letras a serem representadas por underscore = 0
            letters = [0] * (5 - practice_cycles_part1.thisN) + [1] * practice_cycles_part1.thisN
            random.shuffle(letters)

            for i, letter in enumerate(letters):
                if letter == 0:
                    Inupiaq_cue += "_"
                else:
                    Inupiaq_cue += Inupiaq[i]

        elif current_condition == "DC":
            # letras a serem mostradas = 1
            # letras a serem representadas por underscore = 0
            letters = [0] * (practice_cycles_part1.thisN) + [1] * (5 - practice_cycles_part1.thisN)
            random.shuffle(letters)

            for i, letter in enumerate(letters):
                if letter == 0:
                    Inupiaq_cue += "_"
                else:
                    Inupiaq_cue += Inupiaq[i]

        else:
            Inupiaq_cue = Inupiaq

        Inupiaq_cue = " ".join(Inupiaq_cue)


        '''
  Routine practice_phase
    CodeComponent practice_code
      Code Type = Py
      Before Experiment:
        # cria uma lista com números das linhas
        rows = list(range(0, 12))

        # embaralha essa lista
        random.shuffle(rows)

        # fatia a lista anterior em duas metades
        all_rows = list()
        all_rows.append(rows[:6])
        all_rows.append(rows[6:])

        # cria lista de condições
        conditions = list()

        for condition in ["somente estudo", "acumulação", "diminuição"]:
            for i in range(2):
                conditions.append(condition)

        all_conditions = list()

        for i in range(2):
            random.shuffle(conditions)
            all_conditions.append(conditions[:])

        # cria dicionário que mantém memória do experimento
        Inupiaq_dict = dict()
      Begin Routine:
        # ACRESCENTA NOVAS PALAVRAS AO DICIONÁRIO NO CICLO 1
        if practice_phase_cycles.thisN == 0:
            Inupiaq_dict[Inupiaq] = Inupiaq

        # pista a ser apresentada ao participante
        Inupiaq_cue = ""

        # monitora condição tentativa a tentativa
        current_condition = all_conditions[practice_phase_blocks.thisN][practice_phase_trials.thisN] # [0, 1, 2, 3, 4, 5]

        if current_condition == "acumulação":
            # define underscores no ciclo 1
            if practice_phase_cycles.thisN == 0:
                Inupiaq_cue = "_____"

            # acrescenta uma letra por ciclo
            else:
                while True:
                    auxiliar = random.randint(0, 4)
                    if Inupiaq_dict[Inupiaq][auxiliar] == "_":
                        break

                for position, letter in enumerate(Inupiaq):

                    if Inupiaq[position] == Inupiaq_dict[Inupiaq][position]:
                        Inupiaq_cue += Inupiaq[position]

                    elif auxiliar == position:
                        Inupiaq_cue += Inupiaq[position]

                    else:
                        Inupiaq_cue += "_"

            # atualiza valor da chave do dicionário
            Inupiaq_dict[Inupiaq] = Inupiaq_cue

        elif current_condition == "diminuição":
            # define todas as letras no ciclo 1
            if practice_phase_cycles.thisN == 0:
                Inupiaq_cue = Inupiaq

            # diminui uma letra por ciclo
            else:
                while True:
                    auxiliar = random.randint(0, 4)
                    if Inupiaq_dict[Inupiaq][auxiliar] != "_":
                        break

                for position, letter in enumerate(Inupiaq):

                    if Inupiaq_dict[Inupiaq][position] == "_":
                        Inupiaq_cue += "_"

                    elif auxiliar == position:
                        Inupiaq_cue += "_"

                    else:
                        Inupiaq_cue += Inupiaq[position]


            Inupiaq_dict[Inupiaq] = Inupiaq_cue


        else:
            Inupiaq_cue = Inupiaq

        Inupiaq_cue = " ".join(Inupiaq_cue)
    TextComponent cue_practice
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_practice
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Inupiaq_cue
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_practice
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent condition_name
      color = red
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_condition
      units = norm
      wrapWidth = 1.8
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Flow
  Routine instructions
  LoopInitiator initial_presentation_cycles loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator initial_presentation_trials loopType="TrialHandler"
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = $my_seed
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      conditions:
        [{'English': 'boot', 'Portuguese': 'bota', 'Inupiaq': 'kamik'},
        {'English': 'cliff', 'Portuguese': 'penhasco', 'Inupiaq': 'ikpik'},
        {'English': 'duck', 'Portuguese': 'pato', 'Inupiaq': 'mitiq'},
        {'English': 'dust', 'Portuguese': 'pó', 'Inupiaq': 'apyuq'},
        {'English': 'heaven', 'Portuguese': 'paraíso', 'Inupiaq': 'qixak'},
        {'English': 'kidney', 'Portuguese': 'rim', 'Inupiaq': 'taqtu'},
        {'English': 'mark', 'Portuguese': 'marca', 'Inupiaq': 'aglak'},
        {'English': 'rainbow', 'Portuguese': 'arco-íris', 'Inupiaq': 'nigaq'},
        {'English': 'sled', 'Portuguese': 'trenó', 'Inupiaq': 'uniat'},
        {'English': 'snail', 'Portuguese': 'lesma', 'Inupiaq': 'uvixu'},
        {'English': 'tea', 'Portuguese': 'chá', 'Inupiaq': 'saiyu'},
        {'English': 'thread', 'Portuguese': 'fio', 'Inupiaq': 'ivalu'}]
      Routine initial_presentation
    LoopTerminator initial_presentation_trials
  LoopTerminator initial_presentation_cycles
  Routine distractor
  LoopInitiator practice_phase_blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    LoopInitiator practice_phase_cycles loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 6
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      LoopInitiator practice_phase_trials loopType="TrialHandler"
        Selected rows = $all_rows[practice_phase_blocks.thisN]
        conditionsFile = word_pairs.xlsx
        loopType = random
        nReps = 1
        random seed = $my_seed
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        conditions:
          [{'English': 'boot', 'Portuguese': 'bota', 'Inupiaq': 'kamik'},
          {'English': 'cliff', 'Portuguese': 'penhasco', 'Inupiaq': 'ikpik'},
          {'English': 'duck', 'Portuguese': 'pato', 'Inupiaq': 'mitiq'},
          {'English': 'dust', 'Portuguese': 'pó', 'Inupiaq': 'apyuq'},
          {'English': 'heaven', 'Portuguese': 'paraíso', 'Inupiaq': 'qixak'},
          {'English': 'kidney', 'Portuguese': 'rim', 'Inupiaq': 'taqtu'},
          {'English': 'mark', 'Portuguese': 'marca', 'Inupiaq': 'aglak'},
          {'English': 'rainbow', 'Portuguese': 'arco-íris', 'Inupiaq': 'nigaq'},
          {'English': 'sled', 'Portuguese': 'trenó', 'Inupiaq': 'uniat'},
          {'English': 'snail', 'Portuguese': 'lesma', 'Inupiaq': 'uvixu'},
          {'English': 'tea', 'Portuguese': 'chá', 'Inupiaq': 'saiyu'},
          {'English': 'thread', 'Portuguese': 'fio', 'Inupiaq': 'ivalu'}]
        Routine practice_phase
      LoopTerminator practice_phase_trials
    LoopTerminator practice_phase_cycles
  LoopTerminator practice_phase_blocks
  Routine distractor
  LoopInitiator final_test_trials loopType="TrialHandler"
    conditionsFile = word_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine final_test
  LoopTerminator final_test_trials
  Routine thanks
