PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = -1.0000, -1.0000, -1.0000
  expName = finley_et_al
  keyboardBackend = PsychToolbox
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Routines
  Routine initial_presentation
    CodeComponent random_seed
      Code Type = Py
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      Before Experiment:
        import random

        my_seed = random.randint(0, 1000000)
    TextComponent cue_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Inupiaq
      units = norm
      wrapWidth = 1.8
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  Routine distractor
    CodeComponent distractor_code
      Code Type = Py
      Begin Routine:
        # tarefa distratora inicial = 1,5 min
        # tarefa distratora final = 10 min
        clock = core.CountdownTimer(start = 10)
      Each Frame:
        timer = int(clock.getTime())

        if int(clock.getTime()) <= 0:
            continueRoutine = False
    TextComponent distractor_msg
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $timer
      units = norm
      wrapWidth = 1.8
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  Routine final_test
    CodeComponent code_final
      Code Type = Py
      Begin Routine:
        # código de apoio para a entrada de textos
        resp_final.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if keys[0] in buttons:
                # se a tecla pressionada, keys[0], estiver no dicionário buttons
                # concatene resp_final.text com o valor associado à chave de mesmo nome ao da tecla pressionada
                resp_final.text = resp_final.text + buttons[keys[0]]
            elif 'space' in keys:
                # se a tecla pressiona é [BARRA DE ESPAÇO]
                # concatene um espaço ao final de resp_practice.text
                resp_final.text = resp_final.text + ' '
            elif 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                # exclua o último caractere de resp_practice.text
                resp_final.text = resp_final.text[:-1]
            elif len(resp_final.text) < 5 and 'return' in keys:
                # se resp_final.text tem menos que 3 caracteres e a tecla [ENTER] é pressionada
                # não faça nada...
                resp_final.text = resp_final.text
            elif len(resp_final.text) >= 5 and 'return' in keys:
                # se resp_final.text tem pelo menos 3 caracteres e a tecla [ENTER] é pressionada
                # encerre a rotina na iteração atual do loop
                continueRoutine = False
            else:
                # concatene resp_practice.text com a próxima tecla pressionada, em sua versão minúscula
                resp_final.text = resp_final.text + keys[0]
      End Routine:
        thisExp.addData("resp_final", resp_final.text)
    TextComponent cue_final
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent resp_final
      color = 0.7098, -0.1216, 0.6784
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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    TextComponent target_final
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = _ _ _ _ _
      units = norm
      wrapWidth = 1.8
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  Routine thanks
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Tarefa concluída.

        Obrigado por sua participação!
  Routine practice_phase
    CodeComponent code_practice
      Code Type = Py
      Before Experiment:
        # cria uma lista com números das linhas
        rows = list(range(0, 12))

        # embaralha essa lista
        random.shuffle(rows)

        # fatia a lista anterior em duas metades
        all_rows = list()
        all_rows.append(rows[:6])
        all_rows.append(rows[6:])

        # cria lista de condições
        conditions = list()

        for condition in ["somente estudo", "acumulação", "diminuição"]:
            for i in range(2):
                conditions.append(condition)

        all_conditions = list()

        for i in range(2):
            random.shuffle(conditions)
            all_conditions.append(conditions[:])

        # cria dicionário que mantém memória do experimento
        Inupiaq_dict = dict()

        # lista de teclas usadas no experimento
        buttons = {'tab':'','capslock':'', 'comma': ',', 'semicolon': ';', 'period': '.', 'slash': '/', 'bracketleft': '[', 'bracketright': ']', 'apostrophe': '´', 'equal': '=', 'minus': '–', 'up':'', 'left':'', 'right':'', 'down':'', 'delete':'', 'end':'', 'pagedown':'', 'scrolllock':'', 'pause':'','insert':'','home':'','pageup':'','ctrl':'','windows':'','lctrl':'','numlock':'','num_add':'+','num_subtract':'–','num_multiply':'×','num_divide':'/','f1':'','f2':'','f3':'','f4':'','f5':'','f6':'','f7':'','f8':'','f9':'','f10':'','f11':'','f12':'', 'escape': '', 'num_0': '0', 'num_1':'1', 'num_2':'2', 'num_3':'3', 'num_4':'4', 'num_5':'5', 'num_6':'6', 'num_7':'7', 'num_8':'8', 'num_9':'9'}
      Begin Routine:
        # ACRESCENTA NOVAS PALAVRAS AO DICIONÁRIO NO CICLO 1
        if practice_phase_cycles.thisN == 0:
            Inupiaq_dict[Inupiaq] = Inupiaq

        # pista a ser apresentada ao participante
        Inupiaq_cue = ""

        # monitora condição tentativa a tentativa
        current_condition = all_conditions[practice_phase_blocks.thisN][practice_phase_trials.thisN] # [0, 1, 2, 3, 4, 5]

        if current_condition == "acumulação":
            # define underscores no ciclo 1
            if practice_phase_cycles.thisN == 0:
                Inupiaq_cue = "_____"

            # acrescenta uma letra por ciclo
            else:
                while True:
                    auxiliar = random.randint(0, 4)
                    if Inupiaq_dict[Inupiaq][auxiliar] == "_":
                        break

                for position, letter in enumerate(Inupiaq):

                    if Inupiaq[position] == Inupiaq_dict[Inupiaq][position]:
                        Inupiaq_cue += Inupiaq[position]

                    elif auxiliar == position:
                        Inupiaq_cue += Inupiaq[position]

                    else:
                        Inupiaq_cue += "_"

            # atualiza valor da chave do dicionário
            Inupiaq_dict[Inupiaq] = Inupiaq_cue

        elif current_condition == "diminuição":
            # define todas as letras no ciclo 1
            if practice_phase_cycles.thisN == 0:
                Inupiaq_cue = Inupiaq

            # diminui uma letra por ciclo
            else:
                while True:
                    auxiliar = random.randint(0, 4)
                    if Inupiaq_dict[Inupiaq][auxiliar] != "_":
                        break

                for position, letter in enumerate(Inupiaq):

                    if Inupiaq_dict[Inupiaq][position] == "_":
                        Inupiaq_cue += "_"

                    elif auxiliar == position:
                        Inupiaq_cue += "_"

                    else:
                        Inupiaq_cue += Inupiaq[position]


            Inupiaq_dict[Inupiaq] = Inupiaq_cue


        else:
            Inupiaq_cue = Inupiaq

        Inupiaq_cue = " ".join(Inupiaq_cue)

        # código de apoio para a entrada de textos
        resp_practice.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if keys[0] in buttons:
                # se a tecla pressionada, keys[0], estiver no dicionário buttons
                # concatene resp_practice.text com o valor associado à chave de mesmo nome ao da tecla pressionada
                resp_practice.text = resp_practice.text + buttons[keys[0]]
            elif 'space' in keys:
                # se a tecla pressiona é [BARRA DE ESPAÇO]
                # concatene um espaço ao final de resp_practice.text
                resp_practice.text = resp_practice.text + ' '
            elif 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                # exclua o último caractere de resp_practice.text
                resp_practice.text = resp_practice.text[:-1]
            elif len(resp_practice.text) < 5 and 'return' in keys:
                # se text.text tem menos que 3 caracteres e a tecla [ENTER] é pressionada
                # não faça nada...
                resp_practice.text = resp_practice.text
            elif len(resp_practice.text) >= 5 and 'return' in keys:
                # se resp_practice.text tem pelo menos 3 caracteres e a tecla [ENTER] é pressionada
                # encerre a rotina na iteração atual do loop
                continueRoutine = False
            else:
                # concatene resp_practice.text com a próxima tecla pressionada, em sua versão minúscula
                resp_practice.text = resp_practice.text + keys[0]
      End Routine:
        thisExp.addData("Inupiaq_cue", Inupiaq_cue)
        thisExp.addData("current_condition", current_condition)
        thisExp.addData("resp_practice", resp_practice.text)
    TextComponent cue_practice
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Portuguese
      units = norm
      wrapWidth = 1.8
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    TextComponent target_practice
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Inupiaq_cue
      units = norm
      wrapWidth = 1.8
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    TextComponent resp_practice
      color = -0.7333, 0.0902, -0.7333
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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  Routine initial_instructions
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Olá, seja bem-vindo(a)!

        Neste estudo, você aprenderá uma série de pares de palavras português–iñupiaq. Sua tarefa será aprender como escrever as palavras do português em iñupiaq. Em um primeiro momento, você será exposto aos pares pela primeira vez.

        Pressione [BARRA DE ESPAÇO] para iniciar a tarefa.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_instructions
    TextComponent instr_msg_2
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Agora, você verá as palavras em português novamente. Sua tarefa será digitar sua tradução em iñupiaq. Em algumas tentativas, você receberá uma dica de qual é essa palavra em iñupiaq, que poderá conter entre 0 e 5 letras da palavra. Use as dicas para tentar se recordar da grafia da palavra em iñupiaq e a digite usando o seu teclado.

        Pressione [BARRA DE ESPAÇO] para iniciar a tarefa.
    KeyboardComponent instr_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine final_instructions
    TextComponent instr_msg_3
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Agora, você será testado uma última vez em relação à tradução das palavras do português para o iñupiaq. Dessa vez, você não receberá dicas. Tente se lembrar da tradução das palavras do português em iñupiaq e digite-os na tela.

        Pressione [BARRA DE ESPAÇO] para iniciar a tarefa.
    KeyboardComponent instr_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine initial_instructions
  LoopInitiator initial_presentation_cycles loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator initial_presentation_trials loopType="TrialHandler"
      conditionsFile = word_pairs.xlsx
      loopType = random
      nReps = 1
      random seed = $my_seed
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      conditions:
        [{'English': 'boot', 'Portuguese': 'bota', 'Inupiaq': 'kamik'},
        {'English': 'cliff', 'Portuguese': 'penhasco', 'Inupiaq': 'ikpik'},
        {'English': 'duck', 'Portuguese': 'pato', 'Inupiaq': 'mitiq'},
        {'English': 'dust', 'Portuguese': 'pó', 'Inupiaq': 'apyuq'},
        {'English': 'heaven', 'Portuguese': 'paraíso', 'Inupiaq': 'qixak'},
        {'English': 'kidney', 'Portuguese': 'rim', 'Inupiaq': 'taqtu'},
        {'English': 'mark', 'Portuguese': 'marca', 'Inupiaq': 'aglak'},
        {'English': 'rainbow', 'Portuguese': 'arco-íris', 'Inupiaq': 'nigaq'},
        {'English': 'sled', 'Portuguese': 'trenó', 'Inupiaq': 'uniat'},
        {'English': 'snail', 'Portuguese': 'lesma', 'Inupiaq': 'uvixu'},
        {'English': 'tea', 'Portuguese': 'chá', 'Inupiaq': 'saiyu'},
        {'English': 'thread', 'Portuguese': 'fio', 'Inupiaq': 'ivalu'}]
      Routine initial_presentation
    LoopTerminator initial_presentation_trials
  LoopTerminator initial_presentation_cycles
  Routine distractor
  Routine practice_instructions
  LoopInitiator practice_phase_blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    LoopInitiator practice_phase_cycles loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 6
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      LoopInitiator practice_phase_trials loopType="TrialHandler"
        Selected rows = $all_rows[practice_phase_blocks.thisN]
        conditionsFile = word_pairs.xlsx
        loopType = random
        nReps = 1
        random seed = $my_seed
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        conditions:
          [{'English': 'boot', 'Portuguese': 'bota', 'Inupiaq': 'kamik'},
          {'English': 'cliff', 'Portuguese': 'penhasco', 'Inupiaq': 'ikpik'},
          {'English': 'duck', 'Portuguese': 'pato', 'Inupiaq': 'mitiq'},
          {'English': 'dust', 'Portuguese': 'pó', 'Inupiaq': 'apyuq'},
          {'English': 'heaven', 'Portuguese': 'paraíso', 'Inupiaq': 'qixak'},
          {'English': 'kidney', 'Portuguese': 'rim', 'Inupiaq': 'taqtu'},
          {'English': 'mark', 'Portuguese': 'marca', 'Inupiaq': 'aglak'},
          {'English': 'rainbow', 'Portuguese': 'arco-íris', 'Inupiaq': 'nigaq'},
          {'English': 'sled', 'Portuguese': 'trenó', 'Inupiaq': 'uniat'},
          {'English': 'snail', 'Portuguese': 'lesma', 'Inupiaq': 'uvixu'},
          {'English': 'tea', 'Portuguese': 'chá', 'Inupiaq': 'saiyu'},
          {'English': 'thread', 'Portuguese': 'fio', 'Inupiaq': 'ivalu'}]
        Routine practice_phase
      LoopTerminator practice_phase_trials
    LoopTerminator practice_phase_cycles
  LoopTerminator practice_phase_blocks
  Routine distractor
  Routine final_instructions
  LoopInitiator final_test_trials loopType="TrialHandler"
    conditionsFile = word_pairs.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine final_test
  LoopTerminator final_test_trials
  Routine thanks
