PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = aula_040
  keyboardBackend = PsychToolbox
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Routines
  Routine instruction
    CodeComponent instr_code
      Code Type = Py
      Before Experiment:
        import random
        from os.path import exists

        def codigo(caracteres = 15):
            """
            Função gera um código contendo letras (exceto O) e números.
            Retorna um código de N caracteres (default = 15).
            """
            string = list("ABCDEFGHIJKLMNPQRSTUVXYZW0123456789")

            if caracteres > len(string):
                caracteres = len(string)

            random.shuffle(string)
            return "".join(string[:caracteres])

        while True:
            new_ID = codigo(5) # código com 5 caracteres
            choque = False

            if not exists("unique_IDs.txt"):
                arquivo = open("unique_IDs.txt", "w")
                arquivo.write(new_ID + "\n")
                arquivo.close()
                break
            else:
                arquivo = open("unique_IDs.txt", "r").readlines()
                arquivo.sort()
                if new_ID + "\n" in arquivo:
                    temp_new_ID = new_ID + "\n"
                    print("CHOQUE DE IDs!", end = " ")
                    print(f"""O novo ID gerado ({new_ID}) é igual ao ID na posição {arquivo.index(temp_new_ID)}!""")
                    choque = True

                if not choque:
                    novo_arquivo = open("unique_IDs.txt", "w")
                    for elemento in arquivo:
                        novo_arquivo.write(elemento)
                    novo_arquivo.write(new_ID + "\n")
                    novo_arquivo.close()
                    break
      Begin Experiment:
        import random

        # em qual tela de instrução estamos?
        current_instruction = 0

        if expInfo["participant"] == "":
            expInfo["participant"] = "participante"

        # textos de instruções (um por tela)
        instructions_list = [f"""Olá, {expInfo["participant"]}! Começaremos agora a primeira sessão desta pesquisa.""", "Segunda tela de instruções", "Terceira tela de instruções", "Quarta tela de instruções", "Quinta tela de instruções"]

        current_button = "buttons1.jpg"

        # texto de agradecimento
        thanks_msg = f"""{expInfo["participant"].title()}, as tarefas de  hoje terminaram!

        Daqui em diante, seus dados serão analisados de forma anônima, por meio do seguinte código: {new_ID}.

        Obrigado por sua participação!"""

        # lista contém as possíveis condições experimentais
        colors = ["red", "green", "blue"]

        # embaralha lista de cores
        random.shuffle(colors)

        # seleciona a primeira como a condição experimental
        color = colors[0]

        # maneira alternativa
        """
        color = random.choice(["red", "green", "blue"])
        """
      End Experiment:
        thisExp.addData("condição experimental", color)
        thisExp.addData("ID_participante", new_ID)
      End Routine:
        # se participante apertou esquerda...
        if instr_resp.keys == "left":
            # diminui em uma unidade o índice da lista de instruções
            current_instruction -= 1
        # se o participante apertou direita...
        elif instr_resp.keys == "right":
            # aumenta em uma unidade o índice da lista de instruções
            current_instruction += 1

        # se o índice da lista de instruções ficou negativo...
        if current_instruction < 0:
            current_instruction = 0
        elif current_instruction == len(instructions_list):
            current_instruction = 0
            instructions.finished = True

        # atualiza qual botão vai aparecer na tela
        if current_instruction == 0:
            current_button = "buttons1.jpg"
        else:
            current_button = "buttons2.jpg"
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent instr_button
      image [set every repeat] = $current_button
      pos = (0, -0.7)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      units = norm
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  Routine thanks
    TextComponent thansk_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $thanks_msg
      units = norm
      wrapWidth = 1.8
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  Routine trial
    TextComponent word
      color [set every repeat] = $color
      font = Times New Roman
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $portuguese
      units = norm
      wrapWidth = 1.8
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    CodeComponent trial_code
      Code Type = Py
      End Routine:
        thisExp.addData("condição experimental", color)
Flow
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'portuguese': 'palavra1'},
      {'portuguese': 'palavra2'},
      {'portuguese': 'palavra3'},
      {'portuguese': 'palavra4'},
      {'portuguese': 'palavra5'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
