PsychoPy2experiment version="2022.2.1"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participante'], expInfo['date'], expName)
  Experiment info = {'participante': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = aula043_solucao1
  keyboardBackend = PsychToolbox
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Routines
  Routine thanks
    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Fim do experimento!

        Pressione [BARRA DE ESPAÇO] para fechar a janela.
    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Seja bem-vindo(a)!

        <Inserir instruções aqui>

        Pressione [BARRA DE ESPAÇO] para iniciar a tarefa.
    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine study
    TextComponent fixation
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = +
      units = norm
      wrapWidth = 1.8
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    TextComponent study_item
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.1
      text [set every repeat] = $Palavra.lower()
      units = norm
      wrapWidth = 1.8
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  Routine pause
    TextComponent pause_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        <Inserir instruções da fase de teste aqui>

        Pressione [BARRA DE ESPAÇO] para iniciar o teste.
    KeyboardComponent pause_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine dfsdf
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # variável armazenará string que participante digitou
        # e que aparecerá na tela
        resp_display = ""


        # cria 30 strings inicialmente vazias
        # esses valores serão gradativamente substituídos pelas respostas
        # dos participantes
        responses = [" " * 15 for j in range(6) for i in range (5)]

        # define função que passa respostas dos participantes a uma lista
        # contendo numeração + respostas
        def response_box(responses):

            # criando uma lista vazia de respostas
            word_list = list()

            # cada iteração desse loop cria uma coluna de respostas
            # contendo 6 respostas cada
            for i in range(5):
                temp_string = f"""
            {(i * 6) + 1}. {responses[(i * 6) + 0]}
            {(i * 6) + 2}. {responses[(i * 6) + 1]}
            {(i * 6) + 3}. {responses[(i * 6) + 2]}
            {(i * 6) + 4}. {responses[(i * 6) + 3]}
            {(i * 6) + 5}. {responses[(i * 6) + 4]}
            {(i * 6) + 6}. {responses[(i * 6) + 5]}
            """
                word_list.append(temp_string)

            return word_list

        # cria combinação numeração + respostas (inicialmente vazias)
        word_list = response_box(responses)

        # gera prompt da tarefa de recordação livre
        test_prompt = "Digite todas as palavras que você se lembra de ter estudado anteriormente. Pressione [BARRA DE ESPAÇO] para confirmar cada resposta"

        # inicializa uma variável que será atualizada só quando estivermos na última tentativa
        # e ENTER tiver sido pressionado
        last_word = False
      Begin Routine:
        # se estamos na primeira palavra
        if test_phase.thisN == 0:
            # inicializa um relógio que controla duração da tarefa
            my_clock = core.Clock()

        # definindo alinhamento dos textos à esquerda
        column_1.alignText = 'left'
        column_2.alignText = 'left'
        column_3.alignText = 'left'
        column_4.alignText = 'left'
        column_5.alignText = 'left'

        # inicializa variáveis importantes para a rotina
        resp_display = ""
        max_digits = 11
        min_digits = 3

        # valores default das teclas pressionadas
        # e comprimento da lista
        last_len = 0
        key_list = []

        event.clearEvents('keyboard')
      Each Frame:
        # se tempo da tarefa s esgotou...
        if my_clock.getTime() >= 60:
            # finaliza loop e rotina
            test_phase.finished = True
            continueRoutine = False

        # se uma nova tecla foi pressionada...
        if(len(resp.keys) > last_len):

            # incrementa o valor de last_len
            last_len = len(resp.keys)

            # e joga o valor mais recente de resp.keys para key_list
            key_list.append(resp.keys.pop())

            # se a teclada pressionada foi "5"...
            if("5" in key_list):
                # remove o 5 da lista...
                key_list.remove("5")
                # e, caso estejamos na última tentativa...
                if test_phase.thisN == 29:
                    # finaliza a tarefa por critério de conclusão
                    continueRoutine = False

            # se a teclada pressionada foi "5"...
            if("num_5" in key_list):
                # remove o 5 da lista...
                key_list.remove("num_5")
                # e, caso estejamos na última tentativa...
                if test_phase.thisN == 29:
                    # finaliza a tarefa por critério de conclusão
                    continueRoutine = False


            # se a tecla [<-] foi pressionada...
            if("backspace" in key_list):
                # removemos ela da lista
                key_list.remove("backspace")

                # se a resposta atual tinha ao menos um caractere,
                # apagamos o último digitado
                if(len(key_list) > 0):
                    key_list.pop()

            # se a tecla [BARRA DE ESPAÇO] foi pressionada...
            elif("space" in key_list):
                # removemos ela da lista...
                key_list.pop()
                # e adicionamos um espaço vazio ao final da string
                key_list.append(" ")

            # se a tecla pressionada foi [ENTER]...
            elif("return" in key_list):
                # removemos essa tecla da lista...
                key_list.pop()
                # e atualizamos a lista de palavras que deve aparecer na tela
                responses[test_phase.thisN] = resp_display
                # se ainda não estamos na última tentativa...
                if (test_phase.thisN < 29):
                    # e se nossa resposta é maior ou igual que
                    # o valor mínimo de caracteres aceito como resposta...
                    if (len(key_list) >= min_digits):
                        # finalizamos a rotina
                        continueRoutine = False
                # se estamos na última tentativa...
                else:
                    # invocamos response_box para atualizar
                    # valor da 30a. posição das palavras
                    word_list = response_box(responses)
                    # e mudamos o prompt para o participante
                    test_prompt = "Pressione [ 5 ] para finalizar o teste"
                    # copiamos a lista de teclas pressionadas
                    new_key_list = key_list[:]
                    # e atualizamos o valor de last_word
                    last_word = True

            # o que fará com que o participante caia aqui dentro
            if last_word:
                # e que key_list não se modifique mais
                key_list = new_key_list[:]

            # se o número de teclas pressionadas é maior que o máximo permitido...
            while(len(key_list) > max_digits):
                # vamos removendo os valores mais recentes
                key_list.pop()

            # e, finalmente, criamos a variável que apresentará a resposta
            # momento a momento na tela
            resp_display = ''.join(key_list)
      End Routine:
        # salva a resposta no arquivo .csv
        thisExp.addData('response', resp_display)

        # e atualiza word_list para a próxima tentativa
        word_list = response_box(responses)

        # print(responses)
        # print(word_list)
    TextComponent prompt_resp
      color = orange
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text [set every frame] = $test_prompt
      units = norm
      wrapWidth = 1.8
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    TextComponent target_resp
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent resp
      allowedKeys [set every repeat] = ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z', 'space', 'backspace', 'return', '5', 'num_5']
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent response_rect
      fillColor = -1.0000, -1.0000, -1.0000
      pos = (0, -0.60)
      shape = rectangle
      size = (1.95, 0.7)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent practice_line
      fillColor = white
      pos = (0, -0.15)
      shape = regular polygon...
      size = (0.9, 0.01)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent column_1
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $word_list[0]
      units = norm
      wrapWidth = 2
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    TextComponent column_2
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.375, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $word_list[1]
      units = norm
      wrapWidth = 2
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    TextComponent column_3
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.75, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $word_list[2]
      units = norm
      wrapWidth = 2
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    TextComponent column_4
      font = Times New Roman
      letterHeight = 0.08
      pos = (1.125, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $word_list[3]
      units = norm
      wrapWidth = 2
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    TextComponent column_5
      font = Times New Roman
      letterHeight = 0.08
      pos = (1.5, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $word_list[4]
      units = norm
      wrapWidth = 2
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    TextComponent debug
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.9, 0.9)
      startVal [time (s)] = 0.0
      text [set every frame] = $int(my_clock.getTime())
      units = norm
      wrapWidth = 1.8
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  Routine recognition
    CodeComponent recog_code
      Code Type = Py
      End Routine:
        if recog_resp.keys == "left":
            r_k_routine = 1
        else:
            r_k_routine = 0
    TextComponent recog_prompt
      color = orange
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text = Você viu a palavra abaixo na etapa anterior?
      units = norm
      wrapWidth = 1.8
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    TextComponent recog_item
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $Palavra.lower()
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent recog_resp
      allowedKeys = 'left', 'right'
      correctAns = $Resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    ImageComponent recog_buttons
      image = buttons.jpg
      pos = (0, -0.6)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      units = norm
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  Routine remember_know
    TextComponent r_k_prompt
      color = orange
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text = Você LEMBRA de ter visto a palavra ou você SABE que a viu?
      units = norm
      wrapWidth = 1.8
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    TextComponent r_k_item
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0
      text [set every repeat] = $Palavra.lower()
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent r_k_resp
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    ImageComponent r_k_buttons
      image = r_k_buttons.jpg
      pos = (0, -0.6)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      units = norm
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Flow
  Routine welcome
  LoopInitiator study_phase loopType="TrialHandler"
    Selected rows = 0:14
    conditionsFile = palavras.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Palavra': 'Aventura', 'Concretude': 2.18, 'Conjunto': 'abstrata', 'Status': 'old'},
      {'Palavra': 'Descansar', 'Concretude': 4.02, 'Conjunto': 'abstrata', 'Status': 'old'},
      {'Palavra': 'Inteligente', 'Concretude': 2.51, 'Conjunto': 'abstrata', 'Status': 'old'},
      {'Palavra': 'Racional', 'Concretude': 2.51, 'Conjunto': 'abstrata', 'Status': 'old'},
      {'Palavra': 'Oprimido', 'Concretude': 2.52, 'Conjunto': 'abstrata', 'Status': 'old'},
      {'Palavra': 'Ruim', 'Concretude': 2.53, 'Conjunto': 'abstrata', 'Status': 'old'},
      {'Palavra': 'Ouvinte', 'Concretude': 4.03, 'Conjunto': 'abstrata', 'Status': 'old'},
      {'Palavra': 'Flor', 'Concretude': 6.69, 'Conjunto': 'concreta', 'Status': 'old'},
      {'Palavra': 'Parede', 'Concretude': 6.69, 'Conjunto': 'concreta', 'Status': 'old'},
      {'Palavra': 'Borboleta', 'Concretude': 6.71, 'Conjunto': 'concreta', 'Status': 'old'},
      {'Palavra': 'Jaqueta', 'Concretude': 6.73, 'Conjunto': 'concreta', 'Status': 'old'},
      {'Palavra': 'Banana', 'Concretude': 6.75, 'Conjunto': 'concreta', 'Status': 'old'},
      {'Palavra': 'Tartaruga', 'Concretude': 6.75, 'Conjunto': 'concreta', 'Status': 'old'},
      {'Palavra': 'Beterraba', 'Concretude': 6.76, 'Conjunto': 'concreta', 'Status': 'old'},
      {'Palavra': 'Obedecer', 'Concretude': 2.54, 'Conjunto': 'abstrata', 'Status': 'new'},
      {'Palavra': 'Feia', 'Concretude': 2.74, 'Conjunto': 'abstrata', 'Status': 'new'},
      {'Palavra': 'Medida', 'Concretude': 2.84, 'Conjunto': 'abstrata', 'Status': 'new'},
      {'Palavra': 'Moda', 'Concretude': 2.94, 'Conjunto': 'abstrata', 'Status': 'new'}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
    Routine study
  LoopTerminator study_phase
  Routine pause
  LoopInitiator test_phase loopType="TrialHandler"
    conditionsFile = palavras.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine recognition
    LoopInitiator remember_know_trial loopType="TrialHandler"
      loopType = random
      nReps = r_k_routine
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      Routine remember_know
    LoopTerminator remember_know_trial
  LoopTerminator test_phase
  Routine thanks
