PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = aula_045a
  keyboardBackend = PsychToolbox
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Routines
  Routine instruction
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        fontsize = 0.1
    TextComponent instr_msg
      font = Times New Roman
      letterHeight [set every frame] = fontsize
      startVal [time (s)] = 0.0
      text = Esta é a tela de instruções
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ButtonComponent minus_button
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 1
      callback = fontsize -= 0.01
      fillColor = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      forceEndRoutine = False
      letterHeight = 0.1
      pos = (-.1, -.8)
      size = (.2, .2)
      startVal [time (s)] = 0
      text = –
      units = norm
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    ButtonComponent plus_button
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 1
      callback = fontsize += 0.01
      fillColor = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      forceEndRoutine = False
      letterHeight = 0.1
      pos = (.1, -.8)
      size = (.2, .2)
      startVal [time (s)] = 0
      text = +
      units = norm
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  Routine thanks
    TextComponent thansk_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
      wrapWidth = 1.8
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      text:
        Fim da tarefa!

        Obrigado por sua participação!
  Routine trial
    TextComponent task_msg
      font = Times New Roman
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      text = Tarefa
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent task_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  Routine thanks
