PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  expName = aula_046b
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextboxComponent textbox
      bold = False
      borderColor = white
      editable = True
      fillColor = black
      letterHeight = 0.12
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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Flow
  Routine trial
