PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  expName = aula_047
  keyboardBackend = ioHub
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Routines
  Routine study
    CodeComponent code_study
      Code Type = Py
      Begin Experiment:
        # mede comprimento do arquivo do atual loop de ciclos
        arquivo = open("cycle_1.csv", "r").readlines()
        # conta número de pares, ignorando o cabeçalho do arquivo
        numero_de_itens = len(arquivo[1:])
      Begin Routine:
        # checa se número de itens é zero na condição Sn
        if (study_drop == True) and numero_de_itens == 0:
            continueRoutine = False
            if (test_drop == True): # SnTn
                cycle.finished = True # encerre os ciclos
            else:
                study_period.finished = True # encerre só o período de estudo
    TextComponent cue_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $English
      units = norm
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    TextComponent target_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Portuguese
      units = norm
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  Routine distractor
    CodeComponent math_code
      Code Type = Py
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      Begin Experiment:
        import random

        # contador de número de tentativas na tarefa distratora
        my_count = 0

        # contador de qual tarefa distratora estamos
        distractor_index = 0
      Begin Routine:
        # se estamos na primeira tentativa da tarefa distratora...
        if my_count == 0:
            my_clock = core.Clock()

        # variáveis do problema matemático
        factor1, factor2 = random.randint(2, 10), random.randint(2, 20)
        if random.random() > 0.5:
            factor1, factor2 = factor2, factor1
        product = factor1 * factor2
        problem = f"Quanto é {factor1} × {factor2}?"

        # variáveis para digitação da resposta
        distractor_msg = ""
        allowed_keys = ['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', 'num_0', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9']
        max_len = 3

        # monitorando teclas pressionadas e tempo
        distractor_clock = core.Clock() # relógio da rotina que monitora tempo
        pressed_keys = list() # lista de teclas pressionadas
        pressed_keys_time = list() # lista de tempo de pressão de cada tecla
      Each Frame:
        keys = event.getKeys() # atribui as entradas do participante no teclado à variável keys

        if len(keys): # se keys > 0; i.e., se houver algum valor em keys
            pressed_keys_time.append(clock.getTime())
            pressed_keys.append(keys[0])
            if 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                distractor_msg = distractor_msg[:-1] # exclua o último caractere
            elif 'return' in keys:
                if len(distractor_msg) > 0:
                    # se a tecla pressionada é [ENTER] é há pelo menos um caractere em msg
                    continueRoutine = False # encerre a rotina atual
            elif keys[0] in allowed_keys and len(distractor_msg) < max_len:
                # se a tecla pressionada estiver na lista buttons...
                # e o tamanho atual da msg for menor que o comprimento máximo que ela pode assumir
                distractor_msg += keys[0][-1] # concatene o último caractere da tecla pressionada com o valor atual de msg


        # monitora valor do relógio para que tarefa dure 60 s
        if my_clock.getTime() >= 30:
            my_count = 0
            continueRoutine = False
            distractor_period.finished = True # encerra loop
      End Routine:
        my_count += 1 # incrementa contador de tentativas

        # variáveis do problema matemático
        thisExp.addData("factor1", factor1)
        thisExp.addData("factor2", factor2)
        thisExp.addData("product", product)

        # resposta do participante
        thisExp.addData("distractor_response", distractor_msg)

        # salva variáveis relacionadas ao tempo
        thisExp.addData("teclas_pressionadas", pressed_keys)
        thisExp.addData("teclas_pressionadas_tempo", pressed_keys_time)

        # avalia se resposta foi um acerto (corr = 1) ou um erro (corr = 0)
        if (distractor_msg == str(product)):
            distractor_corr = 1
        else:
            distractor_corr = 0

        # salva acerto ou erro no arquivo de saídas
        thisExp.addData("distractor_resp_corr", distractor_corr)
    TextComponent math_problem
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      text [set every repeat] = $problem
      units = norm
      wrapWidth = 1.8
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    TextComponent math_resp
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.15)
      startVal [time (s)] = 0.5
      text [set every frame] = $distractor_msg
      units = norm
      wrapWidth = 1.8
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    PolygonComponent math_line
      fillColor = white
      pos = (0, -0.25)
      shape = regular polygon...
      size = (0.3, 0.01)
      startVal [time (s)] = 0.5
      units = norm
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    TextComponent debug1
      color = black
      disabled = True
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0
      text [set every frame] = $my_clock.getTime()
      units = norm
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    TextComponent math_prompt
      color = orange
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.70)
      startVal [time (s)] = 0.0
      text = Digite sua resposta e tecle [ENTER].
      units = norm
      wrapWidth = 1.8
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  Routine test
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        max_length = 12
      Each Frame:
        # remove espaços vazios
        target_test.text = target_test.text.strip()

        if len(target_test.text) > max_length:
            target_test.text.strip()[:max_length]
      End Routine:
        if target_test.text.strip() == Portuguese:
            response_corr = 1
        else:
            response_corr = 0

        thisExp.addData("response_corr", response_corr)

        if (study_drop == True) and (test_drop == True):
            condition = "SnTn"
        elif (study_drop == True) and (test_drop == False):
            condition = "SnT"
        elif (study_drop == False) and (test_drop == True):
            condition = "STn"
        elif (study_drop == False) and (test_drop == False):
            condition = "ST"

        thisExp.addData("condition", condition)
    CodeComponent file_manager
      Code Type = Py
      Begin Experiment:
        import random, shutil, os
        from os.path import exists

        my_directory = f"{expInfo['participant']}"
        if not exists(my_directory):
            os.mkdir(my_directory)

        study_file = test_file = "cycle_1.csv"

        # caminho de destino
        destination = f"{expInfo['participant']}/{study_file}"

        # copiando o conteúdo de uma fonte para um destino
        dest = shutil.copyfile(study_file, destination)
      Begin Routine:
        # criando arquivo
        if (test_period.thisN == 0) and (cycle.thisN < max_cycles):
            path_next_cycle = f"{expInfo['participant']}/cycle_{cycle.thisN + 2}.csv"
            if not exists(path_next_cycle):
                novo_arquivo = open(path_next_cycle, "w")
                # criar cabeçalho do novo arquivo
                novo_arquivo.write("English,Portuguese\n")

                # para debuggar
                print(f"{path_next_cycle} criado com sucesso!")

                # mede o comprimento do arquivo do atul loop de ciclos
                path_current_cycle = f"{expInfo['participant']}/cycle_{cycle.thisN + 1}.csv"
                arquivo = open(path_current_cycle, "r").readlines()
                # se a condição é Tn
                if test_drop:
                    # com dropout (Tn)
                    numero_de_itens = len(arquivo[1:]) # conta número de pares
                else:
                    # sem dropout (T)
                    numero_de_itens = total_itens

                # para debuggar
                print(f"Ciclo {cycle.thisN + 1}: {numero_de_itens}")

        # checa se número de itens é zero na condição Tn
        if (test_drop == True) and numero_de_itens == 0:
            continueRoutine = False
            if (study_drop == True): # SnTn
                cycle.finished = True # encerre os ciclos
            else:
                test_period.finished = True # encerre só o período de estudo
      End Routine:
        auxiliar = f"{English},{Portuguese}\n"

        # alimenta arquivo para o dropout
        if (response_corr == 0) and (auxiliar in arquivo):
            novo_arquivo.write(auxiliar)
            # para debuggar
            print(f"Salvei o par {English}–{Portuguese}!")

        # se estamos na última iteração do loop test_period
        if (test_period.thisN == (numero_de_itens - 1)):
            novo_arquivo.close()
            # checa se há dropout em períodos de estudo
            if study_drop == True: # Sn
                study_file = path_next_cycle
            # checa se há dropout em períodos de teste
            if test_drop == True: # Tn
                test_file = path_next_cycle
    TextComponent cue_test
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $English
      units = norm
      wrapWidth = 1.8
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    TextboxComponent target_test
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      fillColor = 0.0000, 0.0000, 0.0000
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.2)
      size = (1, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      units = norm
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  Routine instruction
    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # define condição experimental
        study_drop = randchoice([0, 1]) # 1 = drop study
        test_drop = randchoice([0, 1]) # 1 = drop test

        total_itens = 40 # mudar para número de itens
        max_cycles = 4 # número máximo de ciclos no experimento

        print(f"Estudo: {study_drop}; Teste: {test_drop}")

        # índices de instruções
        current_instruction = 0

        # lista de instruções
        instruction_text_list = ["instrucao_11.jpg","instrucao_12.jpg","instrucao_13.jpg","instrucao_14.jpg","instrucao_15.jpg"]
        instruction_img_list = ["imagem_11.jpg","imagem_12.jpg","imagem_13.jpg","imagem_14.jpg","imagem_15.jpg"]

        # opacidade
        opa = [1, 1, 1, 1, 0]
      End Experiment:
        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_text_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # e encerra loop de estudo
    ImageComponent instruction_text
      image [set every repeat] = $instruction_text_list[current_instruction]
      pos = (0, 0.4)
      size = (2, 1.4)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent instruction_image
      image [set every repeat] = $instruction_img_list[current_instruction]
      opacity [set every repeat] = opa[current_instruction]
      pos = (-.35, -.6)
      size = (.75, .65)
      startVal [time (s)] = 0.0
      units = norm
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    ButtonComponent back_button
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 1
      callback = current_instruction -= 1
      fillColor = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.085
      pos = (.3, -.8)
      size = (.4, .2)
      startVal [time (s)] = 0
      text = <<< Anterior
      units = norm
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    ButtonComponent next_button
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 1
      callback = current_instruction += 1
      fillColor = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.085
      pos = (.75, -.8)
      size = (.4, .2)
      startVal [time (s)] = 0
      text = Próximo >>>
      units = norm
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  Routine thanks
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Fim da tarefa!

        Retorne daqui a 7 dias para a segunda sessão! ☻

        Pressione [BARRA DE ESPAÇO] para fechar a janela.
    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prompt
    TextComponent prompt_msg
      font = Times New Roman
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pausa.

        Respire. Tome uma água. E pressione [BARRA DE ESPAÇO] para prosseguir.
    KeyboardComponent prompt_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator cycle loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = max_cycles
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    LoopInitiator study_period loopType="TrialHandler"
      conditionsFile = $study_file
      loopType = random
      nReps = 1
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      Routine study
    LoopTerminator study_period
    LoopInitiator distractor_period loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine distractor
    LoopTerminator distractor_period
    Routine prompt
    LoopInitiator test_period loopType="TrialHandler"
      conditionsFile = $test_file
      loopType = random
      nReps = 1
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      Routine test
    LoopTerminator test_period
  LoopTerminator cycle
  Routine thanks
