PsychoPy2experiment version="2022.2.1"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['date'], expInfo['nome'], expName)
  Experiment info = {'nome': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = math
  keyboardBackend = PsychToolbox
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Routines
  Routine thanks
    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text [set every repeat]:
        Fim da tarefa!

        Obrigado por sua participação!
    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists
        import time
        import copy

        if expInfo["nome"] == "":
            expInfo["nome"] = f"random{np.random.randint(low = 1000, high = 10000)}"

        def open_ranking(nome = "ranking.csv"):
            # abre arquivo contendo ranking
            ranking = open(nome, "r").readlines()[1:]

            # cria listas que armazenará top 5
            nicknames = list()
            scores = list()

            # guarda textos que conterão ranking
            my_score = 0
            nicknames_mytext = """
        """
            scores_mytext = """
        """

            # separando nicknames e pontuações
            for i, position in enumerate(ranking):
                if i == 0:
                    nicknames_mytext += """Nome
        """
                    scores_mytext += """Pontuação
        """

                ranking[i] = position.split(",")
                nicknames.append(ranking[i][1])
                scores.append(ranking[i][2])

                nicknames_mytext += f"""{ranking[i][1]}
        """
                scores_mytext += f"""{ranking[i][2].zfill(4)}"""

            return ranking, scores, nicknames, nicknames_mytext, scores_mytext


        def ranking_update(ranking_name = "ranking.csv", nickname = expInfo['nome'], my_score = 0, scores = [0] * 5, nicknames = ["Vazio"] * 5):

            is_my_score_saved = False

            my_nickname = expInfo['nome']

            new_ranking = list()

            ranking_auxiliar = copy.deepcopy(ranking)

            for i, position in enumerate(ranking_auxiliar):

                # se minha pontuação foi maior que a pontuação na posição i
                if (my_score > int(scores[i])) and (is_my_score_saved == False):
                    new_ranking.append(f"{i + 1},{my_nickname},{my_score}\n")
                    ranking.pop()
                    is_my_score_saved = True

                elif is_my_score_saved:
                    new_ranking.append(f"{i + 1},{nicknames[i - 1]},{scores[i - 1]}")

                else:
                    new_ranking.append(f"{i + 1},{nicknames[i]},{scores[i]}")

            updated_ranking = open("ranking.csv", "w")
            updated_ranking.write("position,nickname,score\n")

            for position in new_ranking:
                updated_ranking.write(position)

            updated_ranking.close()


        ranking, scores, nicknames, nicknames_mytext, scores_mytext = open_ranking("ranking.csv")
      Begin Routine:
        welcome_txt = f"""Olá, {expInfo['nome'].title()}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Pressione [BARRA DE ESPAÇO] para iniciar."""
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine distractor
    CodeComponent math_code
      Code Type = Py
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      Begin Experiment:
        # contador de número de tentativas na tarefa distratora
        my_count = 0

        # contador de qual tarefa distratora estamos
        distractor_index = 0

        # contador de pontos
        my_score = 0
      Begin Routine:
        # se estamos na primeira tentativa da tarefa distratora...
        if my_count == 0:
            my_clock = core.Clock()

        # variáveis do problema matemático
        factor1, factor2 = np.random.randint(2, 10), np.random.randint(2, 20)
        if np.random.random() > 0.5:
            factor1, factor2 = factor2, factor1
        product = factor1 * factor2
        problem = f"Quanto é {factor1} × {factor2}?"

        # tamanho máximo da resposta
        max_length = 3

        # monitorando teclas pressionadas e tempo
        distractor_clock = core.Clock() # relógio da rotina que monitora tempo
        pressed_keys = list() # lista de teclas pressionadas
        pressed_keys_time = list() # lista de tempo de pressão de cada tecla
      Each Frame:
        # remove espaços vazios
        math_resp.text = math_resp.text.strip()

        if len(math_resp.text) > max_length:
            math_resp.text = math_resp.text.strip()[:max_length]

        keys = event.getKeys()
        if len(keys):
            if ('return' in keys) and (len(math_resp.text) > 0):
                continueRoutine = False

        # monitora valor do relógio para que tarefa dure 60 s
        if my_clock.getTime() >= 60:
            # atualiza ranking
            ranking_update(ranking_name = ranking, nickname = expInfo['nome'], my_score = my_score, scores = scores, nicknames = nicknames)
            ranking, scores, nicknames, nicknames_mytext, scores_mytext = open_ranking("ranking.csv")
            distractor_period.finished = True # encerra loop
            continueRoutine = False # encerra tentativa
      End Routine:
        my_count += 1 # incrementa contador de tentativas

        # variáveis do problema matemático
        thisExp.addData("factor1", factor1)
        thisExp.addData("factor2", factor2)
        thisExp.addData("product", product)

        # avalia se resposta foi um acerto (corr = 1) ou um erro (corr = 0)
        if (math_resp.text.strip()[:max_length] == str(product)):
            distractor_corr = 1
            my_score += 1
        else:
            distractor_corr = 0

        # salva acerto ou erro no arquivo de saídas
        thisExp.addData("distractor_resp_corr", distractor_corr)

        if distractor_period.finished:
            thisExp.addData("my_score", my_score)
            feedback = f"Você fez {my_score} ponto(s)."
    TextComponent math_problem
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      text [set every repeat] = $problem
      units = norm
      wrapWidth = 1.8
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    TextComponent debug1
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0
      text [set every frame] = $my_clock.getTime()
      units = norm
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    TextComponent math_prompt
      color = orange
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.70)
      startVal [time (s)] = 0.0
      text = Digite sua resposta e tecle [ENTER].
      units = norm
      wrapWidth = 1.8
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    TextboxComponent math_resp
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      fillColor = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.2)
      size = (0.8, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent finish_trial
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine show_ranking
    CodeComponent code
      Code Type = Py
      Begin Routine:
        nicknames_msg.alignText = "left"
        scores_msg.alignText = "center"
    TextComponent feedback_text
      color = orange
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback
      units = norm
      wrapWidth = 1.8
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    TextComponent top_five
      color = blueviolet
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = 5 Melhores Pontuações
      units = norm
      wrapWidth = 1.8
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    TextComponent nicknames_msg
      font = Times New Roman
      letterHeight = 0.12
      pos = (-0.2, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $nicknames_mytext
      units = norm
      wrapWidth = 0.5
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    TextComponent scores_msg
      font = Times New Roman
      letterHeight = 0.12
      pos = (0.35, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scores_mytext
      units = norm
      wrapWidth = 0.5
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    TextComponent show_ranking_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para avançar.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent show_ranking_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator distractor_period loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine distractor
  LoopTerminator distractor_period
  Routine show_ranking
  Routine thanks
