PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(3), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': '', 'Nome Completo': '', 'E-mail': '', 'Telefone': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = LoP_task
  keyboardBackend = PsychToolbox
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Routines
  Routine study_trial
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    CodeComponent code_study
      Code Type = Py
      End Routine:
        thisExp.addData('Código', participant_code)
    TextComponent cue_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      text [set every repeat] = $swahili_word
      units = norm
      wrapWidth = 1.8
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    TextComponent target_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      text [set every repeat] = $portuguese_word
      units = norm
      wrapWidth = 1.8
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(3)

        # cria lista que armazena as possíveis condições
        conditions = ["structural", "rhyme", "sentence"]
        random.shuffle(conditions)
        my_condition = conditions[0]

        participant_code = expInfo["ID"] + my_condition[:3].upper()

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Routine:
        thisExp.addData('Código', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine distractor
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    CodeComponent math_code
      Code Type = Py
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      Begin Experiment:
        # contador de número de tentativas na tarefa distratora
        my_count = 0

        # contador de qual tarefa distratora estamos
        distractor_index = 0

        # em qual tarefa distratora estamos?
        distractor_cycles = ["post-study", "interim-practice"]
      Begin Routine:
        # se estamos na primeira tentativa da tarefa distratora...
        if my_count == 0:
            my_clock = core.Clock()

        # variáveis do problema matemático
        factor1, factor2 = random.randint(2, 10), random.randint(2, 20)
        if random.random() > 0.5:
            factor1, factor2 = factor2, factor1
        product = factor1 * factor2
        problem = f"Quanto é {factor1} × {factor2}?"

        # variáveis para digitação da resposta
        distractor_msg = ""
        allowed_keys = ['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', 'num_0', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9']
        max_len = 3

        # monitorando teclas pressionadas e tempo
        distractor_clock = core.Clock() # relógio da rotina que monitora tempo
        pressed_keys = list() # lista de teclas pressionadas
        pressed_keys_time = list() # lista de tempo de pressão de cada tecla
      Each Frame:
        keys = event.getKeys() # atribui as entradas do participante no teclado à variável keys

        if len(keys): # se keys > 0; i.e., se houver algum valor em keys
            pressed_keys_time.append(clock.getTime())
            pressed_keys.append(keys[0])
            if 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                distractor_msg = distractor_msg[:-1] # exclua o último caractere
            elif 'return' in keys:
                if len(distractor_msg) > 0:
                    # se a tecla pressionada é [ENTER] é há pelo menos um caractere em msg
                    continueRoutine = False # encerre a rotina atual
            elif keys[0] in allowed_keys and len(distractor_msg) < max_len:
                # se a tecla pressionada estiver na lista buttons...
                # e o tamanho atual da msg for menor que o comprimento máximo que ela pode assumir
                distractor_msg += keys[0][-1] # concatene o último caractere da tecla pressionada com o valor atual de msg


        # monitora valor do relógio para que tarefa dure 60 s
        if my_clock.getTime() >= 30:
            if distractor_cycles[distractor_index] == "post-study":
                distractor_index += 1
                my_count = -1
                study_distractor_trials.finished = True # encerra loop
            elif distractor_cycles[distractor_index] == "interim-practice":
                my_count = -1
                practice_distractor_trials.finished = True # encerra loop
            continueRoutine = False # encerra tentativa

        '''
        # monitora valor do relógio para que tarefa dure 240 s na última tarefa distratora
        # 240 s + 60 s anteriores
        if my_clock.getTime() >= 240:
            if distractor_cycle[distractor_index] == "post-practice":
                final_distractor_trials.finished = True # encerra loop
        '''
      End Routine:
        thisExp.addData('Código', participant_code)

        my_count += 1 # incrementa contador de tentativas

        # variáveis do problema matemático
        thisExp.addData("factor1", factor1)
        thisExp.addData("factor2", factor2)
        thisExp.addData("product", product)

        # resposta do participante
        thisExp.addData("distractor_response", distractor_msg)

        # salva variáveis relacionadas ao tempo
        thisExp.addData("teclas_pressionadas", pressed_keys)
        thisExp.addData("teclas_pressionadas_tempo", pressed_keys_time)

        # avalia se resposta foi um acerto (corr = 1) ou um erro (corr = 0)
        if (distractor_msg == str(product)):
            distractor_corr = 1
        else:
            distractor_corr = 0

        # salva acerto ou erro no arquivo de saídas
        thisExp.addData("distractor_resp_corr", distractor_corr)
    TextComponent math_problem
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      text [set every repeat] = $problem
      units = norm
      wrapWidth = 1.8
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    TextComponent math_resp
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.15)
      startVal [time (s)] = 0.5
      text [set every frame] = $distractor_msg
      units = norm
      wrapWidth = 1.8
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    PolygonComponent math_line
      fillColor = white
      pos = (0, -0.25)
      shape = regular polygon...
      size = (0.3, 0.01)
      startVal [time (s)] = 0.5
      units = norm
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    TextComponent debug1
      color = black
      disabled = True
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0
      text [set every frame] = $my_clock.getTime()
      units = norm
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    TextComponent math_prompt
      color = orange
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.70)
      startVal [time (s)] = 0.0
      text = Digite sua resposta e tecle [ENTER].
      units = norm
      wrapWidth = 1.8
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        # lista de instruções
        instruction_list = ["instruction1.jpg", "instruction2.jpg", "instruction3.jpg", f"instruction4_{my_condition}.jpg", "instruction5.jpg"]
        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Pressione [BARRA DE ESPAÇO] para iniciar."""

        thanks_txt = f"""Fim da sessão, {first_name}.

        Até a próxima sessão! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('Código', participant_code)

        if instr_resp.keys == "left":
            current_instruction -= 1
        elif instr_resp.keys == "right":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            study_instructions.finished = True # e encerra loop de estudo
    KeyboardComponent instr_resp
      allowedKeys = ['left', 'right']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent instruction_images
      image [set every repeat] = $instruction_list[current_instruction]
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine main_task
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    CodeComponent main_task_code
      Code Type = Py
      Begin Experiment:
        words = [
                 ["bola", "cola", "roupa", "Ele pegou a ____ para jogar futebol", "Ele pegou o ferro para passar a ____"],
                 ["dedo", "medo", "queijo", "É falta de educação mostrar o ____ do meio", "Comi pão com margarina e ____"],
                 ["massa", "praça", "orelha", "Macarrão e pizza são tipos de comida de ____", "Ela chegou com um novo brinco na ____"],
                 ["brinquedo", "enredo", "banana", "No Natal, criança gosta de ganhar ____", "Macaco gosta de comer ____"],
                 ["boné", "chulé", "sapato", "Para me proteger do sol, comprei um ____", "Esse problema era uma pedra no meu ____"],
                 ["natação", "eleição", "maratona", "A ____ é um esporte praticado em uma piscina", "A ____ é uma corrida de 42 km"],
                 ["baleia", "sereia", "girafa", "Na história, Pinóquio foi engolido por uma ____", "A ____ tem um pescoço longo"],
                 ["chupeta", "camiseta", "bicicleta", "O bebê chorava porque derrubou sua ____", "Ao invés de ir à pé, ele foi de ____"]
                 ]

        random.shuffle(words)

        trials = [1, 2] * int(len(words) / 2) # [1, 2, 1, 2, 1, 2, 1, 2]
        random.shuffle(trials)
      Begin Routine:
        if my_condition == "structural":
            prompt = "A palavra está em maiúsculas?"
            if trials[main_task_trials.thisN] == 1:
                word = words[main_task_trials.thisN][0].upper()
                corr = 1
            elif trials[main_task_trials.thisN] == 2:
                word = words[main_task_trials.thisN][0].lower()
                corr = 2

        elif my_condition == "rhyme":
            word = words[main_task_trials.thisN][0]
            if trials[main_task_trials.thisN] == 1:
                aux = words[main_task_trials.thisN][1] # rima
                corr = 1
            elif trials[main_task_trials.thisN] == 2:
                aux = words[main_task_trials.thisN][2] # não rima
                corr = 2
            prompt = f"A palavra rima com {aux.upper()}?"

        elif my_condition == "sentence":
            word = words[main_task_trials.thisN][0]
            if trials[main_task_trials.thisN] == 1:
                aux = words[main_task_trials.thisN][3]
                corr = 1
            elif trials[main_task_trials.thisN] == 2:
                aux = words[main_task_trials.thisN][4]
                corr = 2
            prompt = f'A palavra se ajusta à frase \"{aux}\"?'
      End Routine:
        thisExp.addData('Código', participant_code)
        thisExp.addData('word', word)
        thisExp.addData('corr', corr)
        thisExp.addData('condition', my_condition)
    TextComponent prompt_msg
      color = orange
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.65)
      startVal [time (s)] = 0
      text [set every repeat] = $prompt
      units = norm
      wrapWidth = 1.8
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    TextComponent word_msg
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent main_task_resp
      allowedKeys = '1', '2', 'num_1', 'num_2'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
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    ImageComponent button_img
      image = buttons.jpg
      pos = (0, -0.6)
      size = (.5, .5)
      startVal [time (s)] = 0.0
      units = norm
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Flow
  Routine welcome
  LoopInitiator study_instructions loopType="TrialHandler"
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator study_instructions
  LoopInitiator main_task_trials loopType="TrialHandler"
    loopType = random
    nReps = len(words)
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    Routine main_task
  LoopTerminator main_task_trials
  Routine thanks
