PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['ID'], expInfo['date'], expName)
  Experiment info = {'ID': '', 'Nome Completo': '', 'E-mail': '', 'Telefone': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = distancia_de_levenshtein
  keyboardBackend = PsychToolbox
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Routines
  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(3)

        # cria lista que armazena as possíveis condições
        #conditions = ["structural", "rhyme", "sentence"]
        conditions = ["sentence", "sentence"]
        random.shuffle(conditions)
        my_condition = conditions[0]
        participant_code = expInfo["ID"] + my_condition[:3].upper()

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()

        if expInfo["Nome Completo"] == "":
            first_name = "participante"
            complete_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()
            complete_name = expInfo["Nome Completo"]

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Pressione [BARRA DE ESPAÇO] para iniciar."""

        thanks_txt = f"""Fim da sessão, {first_name}.

        Até a próxima sessão! ☺"""
      End Routine:
        thisExp.addData('Nome Completo', complete_name)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        resp_display = ""

        # https://blog.paperspace.com/implementing-levenshtein-distance-word-autocomplete-autocorrect/
        # https://www.youtube.com/watch?v=2ox5u4W04-w
        def levenshtein_distance(token1, token2):

            # Inicialização

            # Passos 1 e 2. Inicializa matriz D (m + 1) x (n + 1), contendo zeros
            distances = np.zeros((len(token1) + 1, len(token2) + 1))

            # Passo 3. Modifica conteúdo. agora a primeira linha conterá 0, 1, ..., m
            for t1 in range(len(token1) + 1):
                distances[t1][0] = t1
            # Passo 4. Modifica conteudo. agora a primeira coluna conterá 0, 1, ..., n
            for t2 in range(len(token2) + 1):
                distances[0][t2] = t2

            # 2. Processamento

            # inicializa valores
            a = 0
            b = 0
            c = 0

            # Passo 1. percorre letras da palavra alvo
            for t1 in range(1, len(token1) + 1):
                # Passo 2. percorre letras da palavra fonte
                for t2 in range(1, len(token2) + 1):
                    # Passo 3. Se duas letras são iguais
                    if (token1[t1 - 1] == token2[t2 - 1]):
                        # a distância entre elas sera igual à distância do valor na diagonal imediatamente acima (que começa em zero)
                        distances[t1][t2] = distances[t1 - 1][t2 - 1]
                    else:
                        # Se não, checa valores de outras células
                        a = distances[t1][t2 - 1] # célula acima
                        b = distances[t1 - 1][t2] # célula à esquerda
                        c = distances[t1 - 1][t2 - 1] # diagonal acima

                        # e atualiza valor da célula (distância) como sendo o menor dos três valores (a, b, c) + custo (1)
                        if (a <= b and a <= c):
                            distances[t1][t2] = a + 1
                        elif (b <= a and b <= c):
                            distances[t1][t2] = b + 1
                        else:
                            distances[t1][t2] = c + 1

            # retorna o valor da distância ná célula D[n][m] dividido pelo comprimento da maior string
            return distances[len(token1)][len(token2)] / max(len(token1), len(token2))
      Begin Routine:
        resp_display = ""
        max_digits = 12
        min_digits = 3

        #key logger defaults
        last_len = 0
        key_list = []

        event.clearEvents('keyboard')
      Each Frame:
        if t >= 15:
            continueRoutine = False

        #if a new key has been pressed since last time
        if(len(resp.keys) > last_len):

            #increment the key logger length
            last_len = len(resp.keys)

            #grab the last key added to the keys list
            key_list.append(resp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            # if space is pressed then...
            elif("space" in key_list):
                #remove the space key
                key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #if there is at least 3 letters...
                if len(resp_display) >= min_digits:
                    #end routine
                    continueRoutine = False



            #now loop through and remove any extra characters that may exist
            while(len(key_list) > max_digits):
                key_list.pop()

            #create a variable to display
            resp_display = ''.join(key_list)
      End Routine:
        thisExp.addData('Nome Completo', complete_name)
        thisExp.addData('resp', resp_display)

        feedback_display = resp_display

        lev = levenshtein_distance(resp_display, my_word)

        if lev <= 0.2:
            response_corr = 1
            feedback = "Acertou!"
        else:
            response_corr = 0
            feedback = "Errou!"

        thisExp.addData("response_corr", response_corr)
        thisExp.addData('levenshtein_distance', lev)

        levenshtein_msg = f"""Palavra: {my_word}
        Resposta: {resp_display}
        LD: {lev:.3f}
        Acertou? {bool(response_corr)}"""
    TextComponent cue
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $my_word
      units = norm
      wrapWidth = 1.8
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    TextComponent target
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every frame] = $resp_display
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent resp
      allowedKeys [set every repeat] = ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z', 'space', 'backspace', 'return']
      correctAns = $my_word
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    PolygonComponent practice_line
      fillColor = white
      pos = (0, -0.15)
      shape = regular polygon...
      size = (0.7, 0.01)
      startVal [time (s)] = 0.0
      units = norm
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  Routine levenshtein_debug
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    TextComponent levenshtein_text
      font = Times New Roman
      letterHeight = 0.15
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent levenshtein_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'my_word': 'psicologia'},
      {'my_word': 'arquitetura'},
      {'my_word': 'filosofia'},
      {'my_word': 'geografia'},
      {'my_word': 'medicina'},
      {'my_word': 'engenharia'},
      {'my_word': 'pedagogia'}]
    Routine trial
    Routine levenshtein_debug
  LoopTerminator trials
  Routine thanks
