PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(3), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': '', 'Nome Completo': '', 'E-mail': '', 'Telefone': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = 1.0000, 1.0000, 1.0000
  expName = n-back
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine study_trial
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    CodeComponent code_study
      Code Type = Py
      End Routine:
        thisExp.addData('Código', participant_code)
    TextComponent cue_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      text [set every repeat] = $swahili_word
      units = norm
      wrapWidth = 1.8
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    TextComponent target_study
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 7
      text [set every repeat] = $portuguese_word
      units = norm
      wrapWidth = 1.8
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(3)

        # cria lista que armazena as possíveis condições
        conditions = ["structural", "rhyme", "sentence"]
        random.shuffle(conditions)
        my_condition = conditions[0]

        participant_code = expInfo["ID"] + my_condition[:3].upper()

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Routine:
        thisExp.addData('Código', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine distractor
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    CodeComponent math_code
      Code Type = Py
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      Begin Experiment:
        # contador de número de tentativas na tarefa distratora
        my_count = 0

        # contador de qual tarefa distratora estamos
        distractor_index = 0

        # em qual tarefa distratora estamos?
        distractor_cycles = ["post-study", "interim-practice"]
      Begin Routine:
        # se estamos na primeira tentativa da tarefa distratora...
        if my_count == 0:
            my_clock = core.Clock()

        # variáveis do problema matemático
        factor1, factor2 = random.randint(2, 10), random.randint(2, 20)
        if random.random() > 0.5:
            factor1, factor2 = factor2, factor1
        product = factor1 * factor2
        problem = f"Quanto é {factor1} × {factor2}?"

        # variáveis para digitação da resposta
        distractor_msg = ""
        allowed_keys = ['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', 'num_0', 'num_1', 'num_2', 'num_3', 'num_4', 'num_5', 'num_6', 'num_7', 'num_8', 'num_9']
        max_len = 3

        # monitorando teclas pressionadas e tempo
        distractor_clock = core.Clock() # relógio da rotina que monitora tempo
        pressed_keys = list() # lista de teclas pressionadas
        pressed_keys_time = list() # lista de tempo de pressão de cada tecla
      Each Frame:
        keys = event.getKeys() # atribui as entradas do participante no teclado à variável keys

        if len(keys): # se keys > 0; i.e., se houver algum valor em keys
            pressed_keys_time.append(clock.getTime())
            pressed_keys.append(keys[0])
            if 'backspace' in keys:
                # se a tecla pressionada é [← BACKSPACE] (apagar)
                distractor_msg = distractor_msg[:-1] # exclua o último caractere
            elif 'return' in keys:
                if len(distractor_msg) > 0:
                    # se a tecla pressionada é [ENTER] é há pelo menos um caractere em msg
                    continueRoutine = False # encerre a rotina atual
            elif keys[0] in allowed_keys and len(distractor_msg) < max_len:
                # se a tecla pressionada estiver na lista buttons...
                # e o tamanho atual da msg for menor que o comprimento máximo que ela pode assumir
                distractor_msg += keys[0][-1] # concatene o último caractere da tecla pressionada com o valor atual de msg


        # monitora valor do relógio para que tarefa dure 60 s
        if my_clock.getTime() >= 30:
            if distractor_cycles[distractor_index] == "post-study":
                distractor_index += 1
                my_count = -1
                study_distractor_trials.finished = True # encerra loop
            elif distractor_cycles[distractor_index] == "interim-practice":
                my_count = -1
                practice_distractor_trials.finished = True # encerra loop
            continueRoutine = False # encerra tentativa

        '''
        # monitora valor do relógio para que tarefa dure 240 s na última tarefa distratora
        # 240 s + 60 s anteriores
        if my_clock.getTime() >= 240:
            if distractor_cycle[distractor_index] == "post-practice":
                final_distractor_trials.finished = True # encerra loop
        '''
      End Routine:
        thisExp.addData('Código', participant_code)

        my_count += 1 # incrementa contador de tentativas

        # variáveis do problema matemático
        thisExp.addData("factor1", factor1)
        thisExp.addData("factor2", factor2)
        thisExp.addData("product", product)

        # resposta do participante
        thisExp.addData("distractor_response", distractor_msg)

        # salva variáveis relacionadas ao tempo
        thisExp.addData("teclas_pressionadas", pressed_keys)
        thisExp.addData("teclas_pressionadas_tempo", pressed_keys_time)

        # avalia se resposta foi um acerto (corr = 1) ou um erro (corr = 0)
        if (distractor_msg == str(product)):
            distractor_corr = 1
        else:
            distractor_corr = 0

        # salva acerto ou erro no arquivo de saídas
        thisExp.addData("distractor_resp_corr", distractor_corr)
    TextComponent math_problem
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      text [set every repeat] = $problem
      units = norm
      wrapWidth = 1.8
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    TextComponent math_resp
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.15)
      startVal [time (s)] = 0.5
      text [set every frame] = $distractor_msg
      units = norm
      wrapWidth = 1.8
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    PolygonComponent math_line
      fillColor = white
      pos = (0, -0.25)
      shape = regular polygon...
      size = (0.3, 0.01)
      startVal [time (s)] = 0.5
      units = norm
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    TextComponent debug1
      color = black
      disabled = True
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0
      text [set every frame] = $my_clock.getTime()
      units = norm
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    TextComponent math_prompt
      color = orange
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.70)
      startVal [time (s)] = 0.0
      text = Digite sua resposta e tecle [ENTER].
      units = norm
      wrapWidth = 1.8
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Pressione [BARRA DE ESPAÇO] para iniciar."""

        thanks_txt = f"""Fim da sessão, {first_name}.

        Até a próxima sessão! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('Código', participant_code)
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pressione [BARRA DE ESPAÇO] sempre que a imagem que aparecer na tela for exatamente a mesma que você viu duas tentativas atrás.

        Para iniciar a tarefa, aperte [BARRA DE ESPAÇO].
  Routine main_task
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    CodeComponent main_task_code
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import string

        def nback(n = 2,
                 N_total = 100,
                 proportion_target = 0.20,
                 stimuli = list(string.ascii_uppercase),
                 k = 8):
            """
            - n = carga de memória de trabalho (default = 2);
            - N_total = número de tentativas da tarefa;
            - proportion_target = proporção de tentativas alvo;
            - stimuli = estímulos usados na tarefa n-back;
            - k = número de estímulos efetivamente usados na tarefa.
            """
            np.random.shuffle(stimuli)
            stimuli = stimuli[:k]

            # lista de tentativas alvos e não alvos
            total_targets = int(N_total * proportion_target)
            auxiliar = [1] * total_targets + [0] * ((N_total - n) - total_targets)
            np.random.shuffle(auxiliar)
            targets = [0] * n
            targets.extend(auxiliar)

            stimulus_list = list()

            # cria a lista de estímulos n-back
            for i, target in zip(range(N_total), targets):

                # checa se estímulo já foi selecionado
                stimulus_selected = False

                # se a tentativa atual NÃO É alvo...
                if not target:
                    # siga selecionando um item, até que o valor seja diferente do alvo
                    while not stimulus_selected:
                        current = np.random.choice(stimuli)
                        if (len(stimulus_list) < n) or (current not in stimulus_list[-n:]):
                            stimulus_selected = True

                # e se a tentativa atual É o alvo...
                else:
                    current = stimulus_list[-n]

                # adiciona à lista
                stimulus_list.append(current)

            return targets, stimulus_list

        my_list = ["apple.png", "armadillo.png", "baby.png", "bell.png",
                    "book.png", "brain.png", "cake.png", "cat.png",
                    "cheese.png", "cow.png", "fish.png", "key.png",
                    "kite.png", "pig.png", "ring.png", "zebra.png"]

        TARGETS, STIMULUS_LIST = nback(n = 2,
                                     N_total = 100,
                                     proportion_target = 0.30,
                                     stimuli = my_list,
                                     k = 8)
      Begin Routine:
        # se a tentativa tem estímulo alvo...
        if TARGETS[main_task_trials.thisN]:
            # então o gabarito é 'space'
            corr_resp = 'space'
        # senão...
        else:
            corr_resp = None
      End Routine:
        thisExp.addData('Código', participant_code)
        thisExp.addData('stimulus', STIMULUS_LIST[main_task_trials.thisN])
        thisExp.addData('target', TARGETS[main_task_trials.thisN])
        thisExp.addData('corr_resp', corr_resp)
    ImageComponent stimulus
      image [set every repeat] = $STIMULUS_LIST[main_task_trials.thisN]
      size = (0.7, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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    KeyboardComponent main_task_resp
      allowedKeys = 'space'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
      Begin Routine:
        # se o participante acertou...
        if main_task_resp.corr:
            feedback_img = "correct.jpg"
        # e se o participante errou...
        else:
            feedback_img = "incorrect.jpg"
      End Routine:
        thisExp.addData('feedback_img', feedback_img)
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    ImageComponent stim_feedback
      image [set every repeat] = $feedback_img
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = norm
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Flow
  Routine welcome
  LoopInitiator study_instructions loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine instruction
  LoopTerminator study_instructions
  LoopInitiator main_task_trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(STIMULUS_LIST)
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    Routine main_task
    Routine feedback
  LoopTerminator main_task_trials
  Routine thanks
