PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': '', 'E-mail': '', 'Telefone': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = session1
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # lista de instruções
        instruction_list = ["""
        Nesta tarefa, você deve responder o mais rápido que você puder a uma seta apontando para a esquerda ou para a direita. Use as teclas [←] e [→].

        Você terá somente 1 segundo, o que é bem pouco tempo. Então você deve dedicar toda a sua atenção para a realização dessa tarefa.

        No primeiro bloco, você treinará um pouco para responder rápido. O bloco terminará apenas quando você acertar pelo menos 20 tentativas consecutivas. O treinamento continuará até que você consiga atingir esse critério (ou se você tiver feito 50 tentativas).""",
        """
        Se você chegou até aqui, então você conseguiu realizar a tarefa adequadamente. Parabéns!

        Mas essa foi a parte fácil. Agora, você seguirá fazendo a mesma tarefa. No entanto, quando você ouvir um som, você NÃO DEVE RESPONDER. Esse som é um sinal de parada, ou seja, um indicativo de que você deve deixar de dar uma resposta naquela tentativa.

        Pressione [BARRA DE ESPAÇO] para iniciar a tarefa."""]

        idx = 0


        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        idx += 1
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[idx]
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        # monitora se participante acertou 20 seguidas na prática
        consecutive_correct = 0

        # monitora se participante passou no critério e, portanto
        # fará o teste
        instruction_reps = testing_trials_reps = 0
      Begin Routine:
        border_color = "white"
        feedback_msg = ""
        feedback_type = "no feedback"
        fixation_cross_size = 0

        # define se a seta estará orientada para a esquerda
        if random() > 0.5:
            ori = 0
        # ou para a direita
        else:
            ori = 180

        try:
            # se já estamos no teste
            if testing_trials.thisN >= 0:
                # em ~25% das tentativas, defina-a como stop trials
                if random() < 0.25:
                    # quando o som começa, em ms (em relação ao início da seta)
                    sound_onset = randchoice([0, .100, .200, .300, .400])
                    # volume do som
                    volume = 30
                    # explicita que a tentativa é stop trial
                    trial = "stop"
                    # a resposta correta é não responder (None)
                    corr_resp = None
                # caso contrário, estamos numa no-stop trial
                else:
                    # define o início do tom como 0
                    sound_onset = 0
                    # define volume 0 (efetivamente, participante não ouve o stop signal)
                    volume = 0
                    # explicita que a tentativa é no-stop trial
                    trial = "no-stop"
                    # se a orientação é 0, resposta correta é esquerda
                    if ori == 0:
                        corr_resp = "left"
                    # caso contrário, orientação é 180 e resposta correta é direita
                    else:
                        corr_resp = "right"
        # tratamento de exceção se aplica se ainda estou na fase de prática
        except:
            # define o início do tom como 0
            sound_onset = 0
            # define volume 0 (efetivamente, participante não ouve o stop signal)
            volume = 0
            # explicita que a tentativa é no-stop trial
            trial = "no-stop"
            # se a orientação é 0, resposta correta é esquerda
            if ori == 0:
                corr_resp = "left"
            # caso contrário, orientação é 180 e resposta correta é direita
            else:
                corr_resp = "right"
      Each Frame:
        # variável t representa o tempo transcorrido na presente rotina
        # logo, o tamanho da cruz de fixação será proporcional à passagem
        # do tempo (y = ax + b OU tamanho = a * tempo + constante)
        fixation_cross_size = 1 * t
      End Routine:
        # se o participante errou...
        if resp.corr == 0:
            # o loop de feedback DEVE acontecer
            feedback_loop = 1
            # reseta número de acertos consecutivos
            consecutive_correct = 0
            # se o participante cometeu um erro de "COMISSÃO"
            if resp.keys:
                # ...quando ele não deveria responder
                if corr_resp is None:
                    feedback_msg = "NÃO\nRESPONDA"
                    feedback_type = "comission"
                    border_color = "red"
                # ...quando a resposta era o oposto do respondido
                else:
                    feedback_msg = "RESPOSTA\nERRADA"
                    feedback_type = "wrong answer"
                    border_color = "yellow"
            # se o participante cometeu um erro de OMISSÃO
            elif resp.keys not in ["left", "right"]:
                feedback_msg = "VOCÊ\nDEVERIA\nTER\nRESPONDIDO"
                feedback_type = "omission"
                border_color = [-0.6235, 0.9608, -1.0000] # verde
        # se o participante acertou...
        else:
            # o loop não deve acontecer
            feedback_loop = 0
            # e o contador de acertos incrementa
            consecutive_correct += 1
            # monitora se o número de acertos é igual a 20
            if consecutive_correct == 20:
                instruction_reps = 1
                testing_trials_reps = 1000 # número de tentativas de teste
                try:
                    practice_trials.finished = True
                except:
                    pass

        # salva algumas variáveis
        thisExp.addData("trial", trial)
        # SOA = stimulus onset asyncrony
        thisExp.addData("sound_onset", sound_onset)
        thisExp.addData("corr_resp", corr_resp)
        thisExp.addData("consecutive_correct", consecutive_correct)
        thisExp.addData("feedback_type", feedback_type)
    PolygonComponent circle
      fillColor = black
      lineColor [set every repeat] = $border_color
      lineWidth = 10
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.90
      units = height
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    TextComponent fixation_cross
      font = Times New Roman
      letterHeight [set every frame] = fixation_cross_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
      units = norm
      wrapWidth = 1.8
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    ImageComponent arrow
      image = arrow.png
      ori [set every repeat] = ori
      size = (0.25, 0.25)
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.55
      units = norm
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    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.55
      store = first key
      storeCorrect = True
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    SoundComponent stop_signal_tone
      sound [set every repeat] = B
      startEstim = 0.35
      startVal [time (s)] = $sound_onset + 0.35
      stopVal [duration (s)] = 0.15
      volume [set every repeat] = volume
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  Routine feedback
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    PolygonComponent circle_fb
      fillColor [set every repeat] = black
      lineColor [set every repeat] = $border_color
      lineWidth = 10
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    TextComponent msg_fb
      color [set every repeat] = $border_color
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_msg
      units = norm
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Flow
  Routine welcome
  Routine instruction
  LoopInitiator practice_trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine trial
    LoopInitiator feedback_trial loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = feedback_loop
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      Routine feedback
    LoopTerminator feedback_trial
  LoopTerminator practice_trials
  LoopInitiator instruction_trial loopType="TrialHandler"
    loopType = sequential
    nReps = instruction_reps
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    Routine instruction
  LoopTerminator instruction_trial
  LoopInitiator testing_trials loopType="TrialHandler"
    loopType = random
    nReps = testing_trials_reps
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    Routine trial
    LoopInitiator feedback_testing_trial loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = feedback_loop
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      Routine feedback
    LoopTerminator feedback_testing_trial
  LoopTerminator testing_trials
  Routine thanks
