PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': '', 'Nome Completo': '', 'E-mail': '', 'Telefone': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = $[-1.000,-1.000,-1.000]
  expName = aula055
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        # variáveis independentes do experimento (plural = VIs)
        tarefas = ["palavras", "imagens"]
        ordens = ["pré", "pós"]
        intervalos = ["1 dia", "2 dias", "3 dias", "4 dias", "5 dias"]

        # designação do participante (singular = nível da VI ao qual o participante foi designado)
        tarefa = tarefas[int(expInfo["ID"][2])]
        ordem = ordens[int(expInfo["ID"][3])]
        intervalo = intervalos[int(expInfo["ID"][4])]

        if tarefa == "palavras":
            word_trials_loop = 1
            picture_trials_loop = 0
        else:
            word_trials_loop = 0
            picture_trials_loop = 1

        if ordem == "pré":
            task_pre_trial_loop = 1
            task_post_trial_loop = 0
        else:
            task_pre_trial_loop = 0
            task_post_trial_loop = 1

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Retorne ao laboratório daqui a {intervalo}! ☺"""
      End Experiment:
        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine words
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    TextComponent word_stim
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $label
      units = norm
      wrapWidth = 1.8
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  Routine pictures
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    ImageComponent picture_stim
      image [set every repeat] = $label + ".png"
      size = (0.7, 0.7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      units = norm
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  Routine task
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    TextComponent task_prompt
      font = Times New Roman
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = Qualquer tarefa do seu interesse aqui.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent task_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator task_pre_trial loopType="TrialHandler"
    loopType = random
    nReps = task_pre_trial_loop
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    Routine task
  LoopTerminator task_pre_trial
  LoopInitiator word_trials loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = random
    nReps = word_trials_loop
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    conditions:
      [{'label': 'galinha'},
      {'label': 'jacaré'},
      {'label': 'tatu'},
      {'label': 'pássaro'},
      {'label': 'gato'}]
    Routine words
  LoopTerminator word_trials
  LoopInitiator picture_trials loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = random
    nReps = picture_trials_loop
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    conditions:
      [{'label': 'galinha'},
      {'label': 'jacaré'},
      {'label': 'tatu'},
      {'label': 'pássaro'},
      {'label': 'gato'}]
    Routine pictures
  LoopTerminator picture_trials
  LoopInitiator task_post_trial loopType="TrialHandler"
    loopType = random
    nReps = task_post_trial_loop
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    Routine task
  LoopTerminator task_post_trial
  Routine thanks
