PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Nome Completo'], expName, expInfo['date'])
  Experiment info = {'Nome Completo': '', 'Símbolos': '4', 'Cores': '4', 'Ambos': '10'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1366, 768]
  expName = go-no-go-task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent fixation
      color = black
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
      units = norm
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    PolygonComponent circle
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor [set every repeat] = $color
      lineWidth = 5
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.25
      units = height
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    TextComponent token
      color [set every repeat] = $color_symbol
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.25
      text [set every repeat] = $symbol
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.25
      store = first key
      storeCorrect = True
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        RTs = list()
      Begin Routine:
        if key_resp.corr == 1:
            fb_msg = "Correto!"
            if key_resp.keys == "space":
                RTs.append(key_resp.rt)
                print(RTs)
        else:
            fb_msg = "Incorreto!"
      End Routine:
        thisExp.addData("feedback", fb_msg)
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    TextComponent feedback_msg
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb_msg
      units = norm
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        try:
            expInfo["Símbolos"] = int(expInfo["Símbolos"])
        except:
            expInfo["Símbolos"] = 4

        try:
            expInfo["Cores"] = int(expInfo["Cores"])
        except:
            expInfo["Cores"] = 4

        try:
            expInfo["Ambos"] = int(expInfo["Ambos"])
        except:
            expInfo["Ambos"] = 10

        N_reps = [expInfo["Símbolos"],
                  expInfo["Cores"],
                  expInfo["Ambos"]
                  ]

        cond_idx = -1

        # índices de instruções
        current_instruction = 0
        instruction_block = 0

        # lista de instruções
        instruction_list = [ # tarefa de símbolos
        ["""Esta sessão se dividirá em três etapas. Na primeira etapa, você verá círculos contendo símbolos no centro deles.

        Sua tarefa será pressionar [Barra de Espaço] sempre que o símbolo na tela for ✓. Quando o símbolo for ✗, você não deverá responder.

        Responda o mais rápida e acuradamente possível.""",
        """Lembre-se:

        • Se o símbolo for ✓, pressione [Barra de Espaço].
        • Se o símbolo for ✗, não responda.

        Iremos iniciar a tarefa a seguir. Caso tenha alguma dúvida, pergunte ao pesquisador."""],
        [# tarefa de cores
        """Na segunda etapa, você verá círculos de diferentes cores.

        Sua tarefa será pressionar [Barra de Espaço] sempre que o círculo tiver a cor VERDE. Quando o círculo tiver a cor VERMELHA, você não deverá responder.

        Responda o mais rápida e acuradamente possível.""",
        """Lembre-se:

        • Se o círculo for VERDE, pressione [Barra de Espaço].
        • Se o círculo for VERMELHO, não responda.

        Iremos iniciar a tarefa a seguir. Caso tenha alguma dúvida, pergunte ao pesquisador."""],
        [# tarefa principal
        """Na terceira e última etapa, você verá círculos contendo símbolos no centro deles.

        Sua tarefa será pressionar [Barra de Espaço] sempre que o círculo for verde OU tiver o símbolo ✓ dentro dele.

        Quando o círculo for vermelho E o símbolo for ✗, você não deverá responder.

        Responda o mais rápida e acuradamente possível.""",
        """Lembre-se: você deve pressionar [Barra de Espaço] quando:

        • O círculo for verde e tiver o símbolo ✓.
        • O círculo for verde e tiver o símbolo ✗.
        • O círculo for vermelho e tiver o símbolo ✓.

        Você NÃO DEVE responder quando o círculo for vermelho e tiver o símbolo ✗.

        Iremos iniciar a tarefa a seguir. Caso tenha alguma dúvida, pergunte ao pesquisador."""]]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        if instr_mouse.clicked_name[0] == "instr_previous":
            current_instruction -= 1
        elif instr_mouse.clicked_name[0] == "instr_next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list[instruction_block]):
            current_instruction = 0 # zera contador de instruções
            cond_idx += 1
            instruction_trials.finished = True
            instruction_block += 1 # incrementa bloco de instruções
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[instruction_block][current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent instr_previous
      image = previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent instr_next
      image = next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_mouse
      clickable = instr_previous, instr_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine performance_feedback
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    CodeComponent performance_fb_code
      Code Type = Py
      Begin Routine:
        rt = np.array(RTs).mean()

        fb_msg = f"""\nSeu tempo de reação nesta fase foi de {rt * 1000:.0f} ms.\n\nPressione [Barra de Espaço] para prosseguir."""
      End Routine:
        thisExp.addData("RT", rt)

        RT = list()
    TextComponent performance_fb_msg
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $fb_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent performance_fb_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator tasks loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condition_file': 'symbols_practice_condition.xlsx'},
      {'condition_file': 'colors_practice_condition.xlsx'},
      {'condition_file': 'mixed_practice_condition.xlsx'}]
    LoopInitiator instruction_trials loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 9999
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      Routine instruction
    LoopTerminator instruction_trials
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = fullRandom
      nReps = N_reps[tasks.thisN]
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      conditions:
        [{'phase': 'symbol_practice', 'color': 'black', 'color_symbol': 'black', 'symbol': '✓', 'condition': 'go', 'corr': 'space'},
        {'phase': 'symbol_practice', 'color': 'black', 'color_symbol': 'black', 'symbol': '✓', 'condition': 'go', 'corr': 'space'},
        {'phase': 'symbol_practice', 'color': 'black', 'color_symbol': 'black', 'symbol': '✓', 'condition': 'go', 'corr': 'space'},
        {'phase': 'symbol_practice', 'color': 'black', 'color_symbol': 'black', 'symbol': '✗', 'condition': 'no-go', 'corr': 'None'},
        {'phase': 'color_practice', 'color': 'green', 'color_symbol': 'None', 'symbol': '•', 'condition': 'go', 'corr': 'space'},
        {'phase': 'color_practice', 'color': 'green', 'color_symbol': 'None', 'symbol': '•', 'condition': 'go', 'corr': 'space'},
        {'phase': 'color_practice', 'color': 'green', 'color_symbol': 'None', 'symbol': '•', 'condition': 'go', 'corr': 'space'},
        {'phase': 'color_practice', 'color': 'red', 'color_symbol': 'None', 'symbol': '•', 'condition': 'no-go', 'corr': 'None'},
        {'phase': 'mixed_practice', 'color': 'green', 'color_symbol': 'green', 'symbol': '✓', 'condition': 'go', 'corr': 'space'},
        {'phase': 'mixed_practice', 'color': 'green', 'color_symbol': 'green', 'symbol': '✓', 'condition': 'go', 'corr': 'space'},
        {'phase': 'mixed_practice', 'color': 'green', 'color_symbol': 'green', 'symbol': '✗', 'condition': 'go', 'corr': 'space'},
        {'phase': 'mixed_practice', 'color': 'green', 'color_symbol': 'green', 'symbol': '✗', 'condition': 'go', 'corr': 'space'}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
      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine performance_feedback
  LoopTerminator tasks
  Routine thanks
