PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = ospan
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0
        instruction_block = 0

        instruction_list = [# memory (letter) task
                           ["""
        Neste experimento, você tentará memorizar letras que você verá na tela enquanto você resolve problemas de matemática simples.

        Nos próximos minutos, você irá praticar para se familiarizar com o experimento. Nós começaremos praticando a parte do experimento com as letras.""",
        """
        Para essa prática, letras aparecerão na tela uma de cada vez. Tente lembrar cada letra na ordem em que foram apresentadas.

        Depois que 2 letras aparecerem, você verá uma tela com 12 possíveis letras e uma caixa para marcar ao lado de cada letra. Seu trabalho é selecionar cada letra na ordem em que foram apresentadas.

        Para fazer isso, use o mouse para clicar nas letras para selecioná-las. As letras selecionadas irão aparecer na parte de baixo da tela.""",
        """
        Depois que selecionar todas as letras, e elas estiverem na ordem correta, clique no botão [Enviar] no canto inferior direito da tela.

        Se errar, aperte o botão [Limpar] para começar novamente. Se esquecer uma das letras, aperte o botão [Branco] para marcar onde a letra esquecida deve estar.

        Lembre-se, é muito importante colocar as letras na mesma ordem que foram apresentadas. Se você esquecer uma letra, use o botão [Branco] para marcar a sua posição.""",
        """
        Favor chamar o pesquisador se tiver alguma pergunta.

        Quando você estiver pronto, clique em [Avançar] para começar a prática com as letras.
        """],
        # distractor (math) task
        ["""
        Agora você irá praticar a parte da matemática deste experimento. Um problema matemático aparecerá na tela, deste jeito: (2 × 1) + 1 = ?

        Assim que ver um problema matemático, você deve calcular a resposta correta. No problema acima, a resposta correta é 3.

        Quando souber a resposta correta, clique no botão [Continuar].
        """,
        """
        Você verá um número na próxima tela.

        Se o número na tela for a resposta correta para o problema que você viu, clique no botão [Verdadeiro].

        Se o número não for a resposta correta, clique no botão [Falso].
        """,
        """
        Por exemplo, se você ver o problema (2 × 2) + 1 = ?, e o número na próxima tela for 5, clique no botão [Verdadeiro], pois a resposta está correta.

        Se você ver o problema (2 × 2) + 1 = ?, e o número na próxima tela for 6, clique no botão [Falso], pois a resposta correta é 5, não 6.

        Depois que clicar em uma das caixas, o computador irá lhe dizer se fez a escolha certa.
        """,
        """
        É muito importante que você consiga resolver os problemas matemáticos corretamente. Também é importante que você consiga resolvê-los o mais rápido possível.

        Favor chamar o pesquisador se você tiver perguntas.

        Quando você estiver pronto, clique em [Avançar] para começar a praticar.
        """],
        # OSPAN training
        ["""
        Agora você irá praticar as duas partes do experimento ao mesmo tempo. Na próxima prática, você irá fazer um dos problemas matemáticos. Assim que decidir a sua resposta, uma letra aparecerá na tela. Tente se lembrar dessa letra.

        Na etapa anterior na qual você apenas resolveu problemas matemáticos, o computador calculou o seu tempo médio para resolver os problemas. Se você demorar mais que o tempo médio, o computador irá automaticamente passar para a letra, pular o verdadeiro ou falso e contar o problema como erro.

        Por isso é muito importante você resolver os problemas o mais rápido e corretamente possível.
        """,
        """
        Depois que a letra desaparecer, outro problema matemático irá aparecer, e depois outra letra. No final de cada combinação de letras e problemas, uma tela com letras aparecerá. Use o mouse para selecionar as letras que acabou de ver.

        Tente lembrar a ordem correta das letras. É muito importante que você trabalhe rapidamente e corretamente nos problemas matemáticos. Tenha certeza que você sabe a resposta do problema antes de ir para a próxima tela.

        O computador não irá dizer se a resposta está correta. Depois da tela com as letras você receberá o resultado do seu desempenho para o número de letras lembradas e a porcentagem de respostas corretas nos problemas matemáticos. Favor chamar o pesquisador se tiver perguntas
        """,
        """
        Durante o resultado, você verá um número vermelho no canto direito na parte de cima da tela. Isso indica a porcentagem de problemas matemáticos que você respondeu corretamente para o experimento inteiro.

        É muito importante que a porcentagem seja no mínimo 85%. Para o nosso experimento, só podemos usar dados de pessoas com no mínimo 85% de respostas corretas nos problemas matemáticos.

        Para você ser chamado novamente para participar em futuros experimentos, você deve responder no mínimo 85% de respostas corretas nos problemas matemáticos E lembrar o máximo de letras possíveis.

        Favor chamar o pesquisador se tiver perguntas.
        """
        ],
        ["""
        Este é o final da prática. O experimento de verdade será igual a prática que acabou de completar.

        Primeiro você terá que resolver um problema, depois terá que memorizar uma letra. Quando ver a tela com as letras, selecione as letras na ordem em que foram apresentadas. Se esquecer de uma letra, clique no botão [Branco] para marcar onde a letra deve ir.

        Algumas combinações terão mais problemas matemáticos e letras do que outras.
        """,
        """
        É importante que você faça o melhor possível nos problemas matemáticos e na parte onde tiver que lembras as letras.

        Lembre-se de trabalhar o mais rápido e corretamente possível nos problemas matemáticos. Também lembre-se de acertar 85% dos problemas.

        Favor chamar o pesquisador se tiver alguma pergunta.

        Quando você estiver pronto, clique em [Avançar] para começar a tarefa.
        """
        ]]

        # cor do feedback das operações matemáticas
        math_color = [0.0000, 0.0000, 0.0000]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      Begin Routine:
        my_count = 0 # contador de tentativas da tarefa distratora
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list[instruction_block]):
            current_instruction = 0 # zera contador de instruções
            if instruction_block == 0:
                instruction_block += 1
                letter_instructions.finished = True # encerra o loop do treino da tarefa de memória
            elif instruction_block == 1:
                instruction_block += 1
                math_instructions.finished = True # encerra o loop do treino da tarefa matemática
            elif instruction_block == 2:
                instruction_block += 1
                ospan_training_instructions.finished = True # encerra o loop de treino do OSPAN
            elif instruction_block == 3:
                instruction_block += 1
                ospan_testing_instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.09
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[instruction_block][current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine math
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    CodeComponent math_code
      Code Type = Py
      Begin Experiment:
        # apenas uma função gigante para criar os diferentes problemas do OSpan
        def math_problems():
            math = []

            for OP1 in ["mult", "div"]:
                for OP2 in ["add", "sub"]:
                    for i in range(2, 10):
                        for j in range(2, 5):
                            for k in range(1, 3):

                                if OP1 == "mult" and OP2 == "add":
                                    op1, op2 = "×", "+"
                                    result = i * j + k
                                elif OP1 == "mult" and OP2 == "sub":
                                    op1, op2 = "×", "–"
                                    result = i * j - k
                                elif OP1 == "div" and OP2 == "add":
                                    op1, op2 = "/", "+"
                                    result = i / j + k
                                elif OP1 == "div" and OP2 == "sub":
                                    op1, op2 = "/", "–"
                                    result = i / j - k

                                if i < j or result <= 0 or result > 10 or not float(result).is_integer():
                                    continue

                                # correct problems
                                string = f"({i} {op1} {j}) {op2} {k} = ?"
                                math.append(("yes", string, f"{int(result)}"))

                                # incorrect problems
                                while True:
                                    noise = np.random.choice([-3, -2, -1, 1, 2, 3])
                                    check = result + noise
                                    if check > 0:
                                        result += noise
                                        break

                                string = f"({i} {op1} {j}) {op2} {k} = ?"
                                math.append(("no", string, f"{int(result)}"))

            return math

        # chamada da função para criar a lista de problemas
        math = list()
        for i in range(2):
            math.extend(math_problems())

        # embaralha a lista
        np.random.shuffle(math)
        math_count = 0

        # contador de tentativas e acertos em matemática
        math_total_trials = math_trials_correct = speed_errors = 0
        abort_trial = False # controla interrupção da tarefa matemática

        # contador de tempo no treino
        math_training_time = list()
      Begin Routine:
        math_clock = core.Clock()

        try:
            # se é a primeira execução do loop...
            if math_practice_trials.thisN == 0:
                math_color = "red" # agora teremos feedback na cor vermelha
                math_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if ospan_training_trial.thisN == 0:
                math_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if ospan_testing_trial.thisN == 0:
                math_errors = 0
        except:
            pass

        # reseta os contadores quando começa o OSPAN para valer
        try:
            if (ospan_testing_trials.thisN == 0) and (ospan_testing_trial.thisN == 0):
                math_total_trials = math_trials_correct = speed_errors = 0
        except:
            pass
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if math_clock.getTime() >= math_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Routine:
        # salva variáveis
        thisExp.addData("math_problem", math[math_count][1]) # enunciado
        thisExp.addData("math_correct_response", math[math_count][0]) # gabarito
        thisExp.addData("math_problem_response", math[math_count][2]) # resultado da conta

        if abort_trial:
            math_speed_error = 1 # abortou devido a velocidade
        else:
            math_speed_error = 0 # abortou devido a velocidade

        try:
            thisExp.addData("problem_rt", math_clock.getTime()) # problem RT
        except:
            pass
    TextComponent math_problem
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $math[math_count][1]
      units = norm
      wrapWidth = 1.8
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    TextComponent math_prompt
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Quando você tiver resolvido o problema matemático, clique em [Continuar]
      units = norm
      wrapWidth = 1.8
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    ImageComponent continue_
      image = images/continue_button.jpg
      pos = (0.0, -0.8)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent math_problem_next
      clickable = continue_
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine letter
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    CodeComponent letters_code
      Code Type = Py
      Begin Experiment:
        fixed_letters = list("FHJKLNPQRSTY")
        letters = list("FHJKLNPQRSTY")

        letter_list = list()
      Begin Routine:
        # tenta atribuir o valor da repetição do loop atual à variável index
        # isso facilitará o acesso e a apresentação de cada letra na sequência de uma tentativa
        try:
            index = letter_practice.thisN
        except:
            pass

        try:
            index = ospan_training_trial.thisN
        except:
            pass

        try:
            index = ospan_testing_trial.thisN
        except:
            pass

        # tenta embaralhar as letras sempre que estivermos em uma nova tentativa
        try:
            # se é a primeira execução do loop...
            if letter_practice.thisN == 0:
                # embaralha letras usada na tarefa de armazenamento
                np.random.shuffle(letters)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_response = "".join(letters[:current_span])
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if ospan_training_trial.thisN == 0:
                # embaralha letras usada na tarefa de armazenamento
                np.random.shuffle(letters)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_response = "".join(letters[:current_span])
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if ospan_testing_trial.thisN == 0:
                # embaralha letras usada na tarefa de armazenamento
                np.random.shuffle(letters)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_response = "".join(letters[:current_span])
        except:
            pass

        # cria uma lista de imagens (que está na subpasta "images")
        for letter in fixed_letters:
            letter_list.append(f"images/{letter}_gray.jpg")
    TextComponent to_be_remembered
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $correct_response[index]
      units = norm
      wrapWidth = 1.8
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  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        def EditDistanceScore(target, recall):
            """
            Recebe duas strings que serão comparadas. Retorna o edit distance score,
            que consiste em len(target) – distância de Damerau–Levenshtein. Se a substração resultar em
            valor negativo, fixa valor em 0.
            """
            # se strings são idênticas
            if recall == target:
                return len(target) # edit distance = tamanho da string
            # se nada foi lembrado
            elif recall == "": # edit distance = 0
                return 0

            stimDict = {target[0]: "0"}

            for targetIndex in range(0, len(target)):
                if target[targetIndex] not in stimDict:
                    stimDict[target[targetIndex]] = "0"

            for recallIndex in range(0, len(recall)):
                if recall[recallIndex] not in stimDict:
                    stimDict[recall[recallIndex]] = "0"

            disMatrix = np.zeros(shape=(len(target) + 2, len(recall) + 2))

            inf = len(target) + len(recall)

            for targetIndex in range(0, len(target) + 1):
                disMatrix[targetIndex + 1, 0] = inf
                disMatrix[targetIndex + 1, 1] = targetIndex

            for recallIndex in range(0, len(recall)+1):
                disMatrix[0, recallIndex + 1] = inf
                disMatrix[1, recallIndex + 1] = recallIndex

            for targetIndex in range(1, len(target)+1):
                present = 0
                for recallIndex in range(1, len(recall) + 1):
                    if recall[recallIndex-1] in stimDict:
                        targetIndex2 = int(stimDict[recall[recallIndex - 1]])

                    recallIndex2 = present
                    cost = 1

                    if target[targetIndex - 1] == recall[recallIndex - 1]:
                        cost = 0
                        present = recallIndex

                    Substitution = disMatrix[targetIndex, recallIndex] + cost
                    Insertion = disMatrix[targetIndex + 1, recallIndex] + 1
                    Deletion = disMatrix[targetIndex, recallIndex + 1] + 1
                    Transposition = disMatrix[targetIndex2, recallIndex2] + (targetIndex - targetIndex2 - 1) + 1 + (recallIndex - recallIndex2 - 1)

                    if Substitution < Insertion and Substitution < Deletion and Substitution < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Substitution
                    elif Insertion < Deletion and Insertion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Insertion
                    elif Deletion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Deletion
                    else:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Transposition


                stimDict[target[targetIndex - 1]] = str(targetIndex)

            # se edit distance < 0, fixa valor em zero
            if len(target) - disMatrix[len(target) + 1, len(recall) + 1] < 0:
                return 0
            # caso contrário, retorna o valor da medida
            else:
                return(int(len(target) - disMatrix[len(target) + 1, len(recall) + 1]))

        def partial_credit(string1, string2):
            score = 0
            for letter1, letter2 in zip(string1, string2):
                if letter1 == letter2:
                    score += 1

            return score

        final_full_credit_score = final_partial_credit_score = final_edit_distance_score = 0
      Begin Routine:
        clicked_things = []
        clickables = [F, H, J, K, L, N, P, Q, R, S, T, Y, send, clear_, blank]
        allowed_send = False
        allowed_blank = True

        my_response = "Minha resposta: "

        try:
            if letter_practice_trials.thisN == 0:
                task_phase = "letter_practice_phase"
        except:
            pass

        try:
            if ospan_training_trials.thisN == 0:
                task_phase = "ospan_training_trials"
        except:
            pass

        try:
            if ospan_testing_trials.thisN == 0:
                task_phase = "ospan_testing_trials"
        except:
            pass
      Each Frame:
        for i, clickable in enumerate(clickables):
            # if a button was pressed in
            if recall_response.isPressedIn(clickable) and (clickable.name not in clicked_things):
                # and it wasn't send, clear_, and blank buttons
                if (clickable != send) and (clickable != clear_) and (clickable != blank):
                    clicked_things.append(clickable.name)
                    clickable.setImage(f"images/{fixed_letters[i]}_blue.jpg", log = False)
                    my_response = f"{my_response}{fixed_letters[i]}"
                    allowed_send = True
                # and it was the clear_ button
                elif clickable == clear_:
                    for i, clickable in enumerate(clickables[:-3]):
                        clickable.setImage(f"images/{fixed_letters[i]}_gray.jpg", log = False)
                    # reset values
                    clicked_things = []
                    my_response = "Minha resposta: "
                    allowed_send = False # reset
                # and it was the blank button:
                elif (clickable == blank) and (allowed_blank == True):
                    # to prevent two consecutive responses
                    allowed_blank = False
                    blank_clock = core.Clock()
                    #clicked_things.append(clickable.name)
                    my_response = f"{my_response}–"
                    allowed_send = True
                elif (clickable == send) and (allowed_send == True):
                    continueRoutine = False

        # it allows the blank button again
        try:
            if blank_clock.getTime() > 1:
                allowed_blank = True
        except NameError:
            pass
      End Experiment:
        thisExp.addData("final_full_credit_score", final_full_credit_score)
        thisExp.addData("final_partial_credit_score", final_partial_credit_score)
        thisExp.addData("final_edit_distance_score", final_edit_distance_score)
      End Routine:
        # juntando respostas, mas eliminando respostas repetidas e "send"
        participant_response = my_response[16:]

        # crédito completo (pontua apenas sequência idêntica ao gabarito, incluindo ordenação)
        if participant_response == correct_response:
            full_credit_score = current_span
        else:
            full_credit_score = 0

        # crédito parcial (pontua apenas acertos na mesma posição serial)
        partial_credit_score = partial_credit(participant_response, correct_response)

        # edit distance score
        edit_distance_score = EditDistanceScore(correct_response, participant_response)

        # créditos completo parcial e edit distance, somatório da sessão (máx. 75)
        try:
            if ospan_testing_trials.thisN >= 0:
                final_full_credit_score += full_credit_score
                final_partial_credit_score += partial_credit_score
                final_edit_distance_score += edit_distance_score
        except:
            pass

        # criando texto para feedback
        if partial_credit_score > 1:
            word = "letras"
        elif partial_credit_score <= 1:
            word = "letra"

        # mensagens de feedback de recordação e das operações matemáticas
        recall_feedback_msg = f"Você lembrou corretamente de {partial_credit_score} {word} de um total de {current_span}."

        try:
            math_percent_correct = (math_trials_correct / math_total_trials) * 100
        except ZeroDivisionError:
            math_percent_correct = 0

        math_performance_msg = f"{math_percent_correct:.0f}%"

        try:
            if math_errors > 1:
                math_feedback_msg = f"Você cometeu {math_errors} erros neste conjunto de tentativas"
            elif math_errors == 1:
                math_feedback_msg = f"Você cometeu {math_errors} erro neste conjunto de tentativas"
            else:
                math_feedback_msg =  f"Você não cometeu erros erros neste conjunto de tentativas"
        except:
            math_feedback_msg = ""

        # salva respostas
        thisExp.addData("correct_response", correct_response)
        thisExp.addData("participant_response", participant_response)
        thisExp.addData("full_credit_score", full_credit_score)
        thisExp.addData("partial_credit_score", partial_credit_score)
        thisExp.addData("edit_distance_score", edit_distance_score)
        thisExp.addData("task_phase", task_phase)
        thisExp.addData("math_trials_correct", math_trials_correct)
        thisExp.addData("math_total_trials", math_total_trials)
        thisExp.addData("math_percent_correct", math_percent_correct)
        try:
            thisExp.addData("math_errors", math_errors)
        except:
            pass
    TextComponent prompt_recall
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = Selecione as letras na mesma ordem em que foram apresentadas. Use o botão [Branco] para escrever letras que esqueceu.
      units = norm
      wrapWidth = 1.8
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    ImageComponent F
      image [set every repeat] = $letter_list[0]
      pos = (-0.5, 0.55)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent H
      image [set every repeat] = $letter_list[1]
      pos = (0, 0.55)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent J
      image [set every repeat] = $letter_list[2]
      pos = (0.5, 0.55)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent K
      image [set every repeat] = $letter_list[3]
      pos = (-0.5, 0.25)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent L
      image [set every repeat] = $letter_list[4]
      pos = (0, 0.25)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent N
      image [set every repeat] = $letter_list[5]
      pos = (0.5, 0.25)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent P
      image [set every repeat] = $letter_list[6]
      pos = (-0.5, -0.05)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Q
      image [set every repeat] = $letter_list[7]
      pos = (0, -0.05)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent R
      image [set every repeat] = $letter_list[8]
      pos = (0.5, -0.05)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent S
      image [set every repeat] = $letter_list[9]
      pos = (-0.5, -0.35)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent T
      image [set every repeat] = $letter_list[10]
      pos = (0, -0.35)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Y
      image [set every repeat] = $letter_list[11]
      pos = (0.5, -0.35)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent clear_
      image = images/clear_button.jpg
      pos = (-0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent blank
      image = images/blank_button.jpg
      pos = (0.0, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent send
      image = images/send_button.jpg
      pos = (0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent recall_response
      clickable = F, H, J, K, L, N, P, Q, R, S, T, Y, send, clear_, blank
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent response_recall
      color = darkblue
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $my_response
      units = norm
      wrapWidth = 1.8
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  Routine recall_feedback
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    TextComponent recall_feedback_prompt
      font = Times New Roman
      letterHeight = 0.11
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $recall_feedback_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent math_feedback_prompt
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $math_feedback_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent math_feedback_performance
      color [set every repeat] = $math_color
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $math_performance_msg
      units = norm
      wrapWidth = 1.8
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  Routine math_answer
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    CodeComponent math_answer_code
      Code Type = Py
      Begin Routine:
        answer_clock = core.Clock()

        if abort_trial:
            continueRoutine = False
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if math_clock.getTime() >= math_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Experiment:
        thisExp.addData("math_time_mean", math_time_mean)
        thisExp.addData("math_time_sd", math_time_sd)
        thisExp.addData("math_criterion", math_criterion)
      End Routine:
        try:
            if math_response.clicked_name[0] == "true":
                math_participant_response = "yes"
            else:
                math_participant_response = "no"
        except:
            math_participant_response = ""
            math_speed_error = 1

        try:
            thisExp.addData("answer_rt", answer_clock.getTime()) # answer RT
        except:
            pass

        # se o participante acertou
        if math_participant_response == math[math_count][0]:
            math_participant_corr = 1
            math_accuracy_error = 0 # contagem de erros de acurácia
            math_trials_correct += 1 # incrementa número de acertos da sessão toda
            math_corrective_feedback = "Correto"
        else:
            math_participant_corr = 0
            math_corrective_feedback = "Incorreto"
            math_errors += 1 # incrementa o número de erros apenas da presente tentativa

            if math_speed_error == 0:
                math_accuracy_error = 1
            else:
                math_accuracy_error = 0

        # sempre incrementa o contador de tentativas
        math_total_trials += 1

        if abort_trial:
            thisExp.addData("math_speed_error", 1) # erro de velocidade
            abort_trial = False # reseta para a próxima tentativa
        else:
            thisExp.addData("math_speed_error", 0)

        # salva variáveis
        thisExp.addData("math_accuracy_error", math_accuracy_error) # erro de acurácia
        thisExp.addData("math_participant_corr", math_participant_corr) # 1 = acerto, 0 = erro
        thisExp.addData("math_problem", math[math_count][1]) # enunciado
        thisExp.addData("math_correct_response", math[math_count][0]) # gabarito
        thisExp.addData("math_problem_response", math[math_count][2]) # resultado da conta
        thisExp.addData("math_participant_response", math_participant_response) # resposta do participante

        # incrementa operação para próxima iteração
        math_count += 1

        # soma a duração da tarefa matemática
        try:
            if math_practice_trials.thisN < 15:
                math_training_time.append(math_clock.getTime()) # e guarda tempo em uma lista
                # e, na última tentativa, salva o critério de tempo a ser usado posteriormente
                if math_practice_trials.thisN == 14:
                    math_time_mean = np.mean(np.array(math_training_time))
                    math_time_sd = np.std(np.array(math_training_time), ddof = 1)
                    math_criterion = math_time_mean + 2 * math_time_sd

        except:
            pass
    TextComponent math_answer_screen
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $math[math_count][2]
      units = norm
      wrapWidth = 1.8
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    ImageComponent true
      image = images/true_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent false
      image = images/false_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent math_response
      clickable = true, false
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine math_answer_feedback
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    TextComponent math_answer_screen_feedback
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $math[math_count - 1][2]
      units = norm
      wrapWidth = 1.8
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    ImageComponent true_feedback
      image = images/true_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    ImageComponent false_feedback
      image = images/false_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent math_corrective_feedback_msg
      color = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $math_corrective_feedback
      units = norm
      wrapWidth = 1.8
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Flow
  Routine welcome
  LoopInitiator letter_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator letter_instructions
  LoopInitiator letter_practice_trials loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7}]
    LoopInitiator letter_practice loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine letter
    LoopTerminator letter_practice
    Routine recall
    Routine recall_feedback
  LoopTerminator letter_practice_trials
  LoopInitiator math_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator math_instructions
  LoopInitiator math_practice_trials loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine math
    Routine math_answer
    Routine math_answer_feedback
  LoopTerminator math_practice_trials
  LoopInitiator ospan_training_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator ospan_training_instructions
  LoopInitiator ospan_training_trials loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7}]
    LoopInitiator ospan_training_trial loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine math
      Routine math_answer
      Routine letter
    LoopTerminator ospan_training_trial
    Routine recall
    Routine recall_feedback
  LoopTerminator ospan_training_trials
  LoopInitiator ospan_testing_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator ospan_testing_instructions
  LoopInitiator ospan_testing_trials loopType="TrialHandler"
    Selected rows = 1:
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7}]
    LoopInitiator ospan_testing_trial loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine math
      Routine math_answer
      Routine letter
    LoopTerminator ospan_testing_trial
    Routine recall
    Routine recall_feedback
  LoopTerminator ospan_testing_trials
  Routine thanks
