PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = symspan
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0
        instruction_block = 0

        instruction_list = [# grid (memory) task
                           ["""
        Neste experimento, você tentará memorizar quadrados vermelhos que você verá na tela enquanto você avalia se grades quadriculadas são simétricas em relação ao eixo vertical.

        Nos próximos minutos, você irá praticar para se familiarizar com o experimento. Nós começaremos praticando a tarefa de memória com os quadrados vermelhos.""",
        """
        Para essa prática, quadrados vermelhos aparecerão em uma matriz, um de cada vez. Tente lembrar a posição de cada quadrado na ordem em que ele apareceu.

        Depois que 2 quadrados aparecerem, você verá uma tela com 16 possíveis localizações dos quadrados. Seu trabalho é clicar na posição que cada quadrado apareceu na mesma ordem em que eles foram apresentados.

        Para fazer isso, use o mouse para clicar nos quadrados para selecioná-las. Os quadrados selecionados serão indicados por números, que representarão a sequência em que você clicou neles.""",
        """
        Depois que selecionar todos os quadrados que compõem sua resposta, e eles estiverem na ordem correta, clique no botão [Enviar] no canto inferior direito da tela.

        Se errar sua resposta, aperte o botão [Limpar] para começar novamente. Se esquecer a posição de um dos quadrados, aperte o botão [Branco] para marcar a posição que o quadrado esquecido deve estar.

        Lembre-se, é muito importante selecionar os quadrados na mesma ordem que foram apresentados. Se você esquecer um quadrado, use o botão [Branco] para marcar a sua posição.""",
        """
        Favor chamar o pesquisador se tiver alguma pergunta.

        Quando você estiver pronto, clique em [Avançar] para começar a prática com os quadrados.
        """],
        # distractor (symmetry) task
        ["""
        Agora você irá praticar a tarefa de simetria deste experimento. Um grade quadriculada aparecerá na tela, tal como a exemplificada a seguir:
        """,
        """
        Sua tarefa será avaliar se a grade é simétrica em relação ao eixo vertical (que é representado abaixo pela linha vertical vermelha).
        """,
        """
        Note que a reta vertical vermelha foi anteriormente apresentada apenas para fins didáticos. Ela NÃO aparecerá durante a realização da tarefa.

        Depois que tiver avaliado a simetria da grade quadriculada em relação ao eixo vertical, clique no botão [Continuar].
        """,
        """
        Em seguida, você deverá emitir uma resposta. Se a grade que você acabou de ver for simétrica, clique no botão [Sim].

        Se a grade que você acabou de ver for assimétrica, clique no botão [Não].

        Depois que clicar em um dos botões, o computador irá lhe dizer se fez a escolha certa.
        """,
        """
        Por exemplo, se você vir a grade abaixo, clique no botão [Sim], pois essa grade é simétrica.
        """,
        """
        Agora, se você vir a grade abaixo, clique no botão [Não], pois essa grade é assimétrica.
        """,
        """
        É muito importante que você consiga avaliar a simetria das grades quadriculadas corretamente. Também é importante que você consiga fazer essa avaliação o mais rapidamente possível.

        Favor chamar o pesquisador se você tiver perguntas.

        Quando você estiver pronto, clique em [Avançar] para começar a praticar.
        """],
        # SYMSPAN training
        ["""
        Agora você irá praticar as duas partes do experimento ao mesmo tempo. Na próxima prática, você irá avaliar a simetria de grades quadriculadas. Assim que decidir a sua resposta, um quadrado vermelho aparecerá na tela. Tente se lembrar da posição desse quadrado.

        Na etapa anterior na qual você apenas avaliou a simetria de grades quadriculadas, o computador calculou o seu tempo médio para resolver os problemas. Se você demorar mais que o tempo médio, o computador irá automaticamente passar pela grade quadriculada, pular a tela de resposta e contar o problema como erro.

        Por isso é muito importante você resolver os problemas o mais rápido e corretamente possível.""",
        """
        Depois que o quadrado vermelho desaparecer, outra grade quadriculada irá aparecer, e depois outro quadrado vermelho. No final de cada sequência, uma tela de resposta aparecerá na tela. Use o mouse para indicar as posições da sequência de quadrados vermelhos que acabou de ver.

        Tente lembrar a ordem correta dos quadrados vermelhos. É muito importante que você trabalhe rapidamente e corretamente nas grades quadriculadas. Tenha certeza que você sabe a resposta do problema de simetria antes de ir para a próxima tela.

        O computador não irá dizer se a resposta está correta. Depois da tela de resposta, você receberá o resultado do seu desempenho para o número quadrados vermelhos lembrados e a porcentagem de respostas corretas nos problemas de simetria.
        """,
        """
        Durante o resultado, você verá um número vermelho no canto direito na parte de cima da tela. Isso indica a porcentagem de problemas de simetria que você respondeu corretamente para o experimento inteiro.

        É muito importante que a porcentagem seja no mínimo 85%. Para o nosso experimento, só podemos usar dados de pessoas com no mínimo 85% de respostas corretas nos problemas de simetria.

        Para você ser chamado novamente para participar em futuros experimentos, você deve responder no mínimo 85% de respostas corretas nos problemas de simetria E lembrar o máximo de quadrados vermelhos possíveis.

        Favor chamar o pesquisador se tiver perguntas.
        """
        ],
        # SYMSPAN testing
        ["""
        Este é o final da prática. O experimento de verdade será igual a prática que acabou de completar.

        Primeiro você terá que resolver um problema de simetria, depois terá que memorizar um quadrado vermelho. Quando ver a tela de resposta, indique as posições dos quadrados vermelhos na ordem em que foram apresentados. Se esquecer de um quadrado vermelho, clique no botão [Branco] para marcar onde o quadrado vermelho deve ir.

        Algumas combinações terão mais problemas de simetria e quadrados vermelhos do que outras.
        """,
        """
        É importante que você faça o melhor possível nos problemas de simetria e na parte onde tiver que lembrar os quadrados vermelhos.

        Lembre-se de trabalhar o mais rápido e corretamente possível nos problemas de simetria. Também lembre-se de acertar 85% dos problemas.

        Favor chamar o pesquisador se tiver alguma pergunta.

        Quando você estiver pronto, clique em [Avançar] para começar a tarefa.
        """
        ]]

        # cor do feedback das operações matemáticas
        symmetry_color = [0.0000, 0.0000, 0.0000]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""



        grid_example = "images/symm1_prac.jpg"
        grid_opacity = 0
        pos_y = 0.2
      Begin Routine:
        my_count = 0 # contador de tentativas da tarefa distratora
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list[instruction_block]):
            current_instruction = 0 # zera contador de instruções
            if instruction_block == 0:
                instruction_block += 1
                grid_memory_instructions.finished = True # encerra o loop do treino da tarefa de memória
            elif instruction_block == 1:
                instruction_block += 1
                symmetry_instructions.finished = True # encerra o loop do treino da tarefa matemática
            elif instruction_block == 2:
                instruction_block += 1
                symspan_training_instructions.finished = True # encerra o loop de treino do OSPAN
            elif instruction_block == 3:
                instruction_block += 1
                symspan_testing_instructions.finished = True # encerra o loop de teste do OSPAN

        # definindo se a imagem aparece nas instruções
        if (instruction_block == 1):
            if current_instruction in [0, 1, 4, 5]:
                grid_opacity = 1
                pos_y = 0.8
            else:
                grid_opacity = 0
                pos_y = 0.2

            if current_instruction != 5:
                grid_example = "images/symm1_prac.jpg"
            else:
                grid_example = "images/symm26_prac.jpg"

        if (instruction_block > 1):
            grid_opacity = 0
            pos_y = 0.2
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.09
      pos [set every repeat] = (0, pos_y)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[instruction_block][current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent symmetry_example
      image [set every repeat] = $grid_example
      opacity [set every repeat] = $grid_opacity
      pos = (0, 0.05)
      saveStartStop = False
      size = (0.6, 0.9)
      startVal [time (s)] = 0
      units = norm
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        def EditDistanceScore(target, recall):
            """
            Recebe duas strings que serão comparadas. Retorna o edit distance score,
            que consiste em len(target) – distância de Damerau–Levenshtein. Se a substração resultar em
            valor negativo, fixa valor em 0.
            """
            # se strings são idênticas
            if recall == target:
                return len(target) # edit distance = tamanho da string
            # se nada foi lembrado
            elif recall == "": # edit distance = 0
                return 0

            stimDict = {target[0]: "0"}

            for targetIndex in range(0, len(target)):
                if target[targetIndex] not in stimDict:
                    stimDict[target[targetIndex]] = "0"

            for recallIndex in range(0, len(recall)):
                if recall[recallIndex] not in stimDict:
                    stimDict[recall[recallIndex]] = "0"

            disMatrix = np.zeros(shape=(len(target) + 2, len(recall) + 2))

            inf = len(target) + len(recall)

            for targetIndex in range(0, len(target) + 1):
                disMatrix[targetIndex + 1, 0] = inf
                disMatrix[targetIndex + 1, 1] = targetIndex

            for recallIndex in range(0, len(recall)+1):
                disMatrix[0, recallIndex + 1] = inf
                disMatrix[1, recallIndex + 1] = recallIndex

            for targetIndex in range(1, len(target)+1):
                present = 0
                for recallIndex in range(1, len(recall) + 1):
                    if recall[recallIndex-1] in stimDict:
                        targetIndex2 = int(stimDict[recall[recallIndex - 1]])

                    recallIndex2 = present
                    cost = 1

                    if target[targetIndex - 1] == recall[recallIndex - 1]:
                        cost = 0
                        present = recallIndex

                    Substitution = disMatrix[targetIndex, recallIndex] + cost
                    Insertion = disMatrix[targetIndex + 1, recallIndex] + 1
                    Deletion = disMatrix[targetIndex, recallIndex + 1] + 1
                    Transposition = disMatrix[targetIndex2, recallIndex2] + (targetIndex - targetIndex2 - 1) + 1 + (recallIndex - recallIndex2 - 1)

                    if Substitution < Insertion and Substitution < Deletion and Substitution < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Substitution
                    elif Insertion < Deletion and Insertion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Insertion
                    elif Deletion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Deletion
                    else:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Transposition


                stimDict[target[targetIndex - 1]] = str(targetIndex)

            # se edit distance < 0, fixa valor em zero
            if len(target) - disMatrix[len(target) + 1, len(recall) + 1] < 0:
                return 0
            # caso contrário, retorna o valor da medida
            else:
                return(int(len(target) - disMatrix[len(target) + 1, len(recall) + 1]))

        def partial_credit(string1, string2):
            score = 0
            for letter1, letter2 in zip(string1, string2):
                if letter1 == letter2:
                    score += 1

            return score

        final_full_credit_score = final_partial_credit_score = final_edit_distance_score = 0
      Begin Routine:
        clicked_things = []
        clicked_images = ["selected_square_1.jpg", "selected_square_2.jpg", "selected_square_3.jpg", "selected_square_4.jpg",
                          "selected_square_5.jpg", "selected_square_6.jpg", "selected_square_7.jpg", "selected_square_8.jpg",
                          "selected_square_9.jpg", "selected_square_10.jpg", "selected_square_11.jpg", "selected_square_12.jpg",
                          "selected_square_13.jpg", "selected_square_14.jpg", "selected_square_15.jpg", "selected_square_16.jpg"]

        clickables = [A, B, C, D, E, F, G, H, I, J, K, L, M, N, O, P, send, clear_, blank]
        allowed_send = False
        allowed_blank = True

        my_response = list()

        try:
            if grid_memory_practice_trials.thisN == 0:
                task_phase = "grid_memory_practice_phase"
        except:
            pass

        try:
            if symspan_training_trials.thisN == 0:
                task_phase = "symspan_training_trials"
        except:
            pass

        try:
            if symspan_testing_trials.thisN == 0:
                task_phase = "symspan_testing_trials"
        except:
            pass
      Each Frame:
        for i, clickable in enumerate(clickables):
            # and it was the blank button:
            if recall_response.isPressedIn(clickable) and (clickable == blank) and (allowed_blank == True):
                if len(clicked_things) <= 15:
                    clicked_things.append(clickable.name)
                    # to prevent two consecutive responses
                    allowed_blank = False
                    blank_clock = core.Clock()
                    #clicked_things.append(clickable.name)
                    my_response.append("–")
                    allowed_send = True
            # if a button was pressed in
            elif recall_response.isPressedIn(clickable) and (clickable.name not in clicked_things):
                # and it wasn't send, clear_, and blank buttons
                if (clickable != send) and (clickable != clear_) and (clickable != blank):
                    if len(clicked_things) <= 15:
                        clicked_things.append(clickable.name)
                        clickable.setImage(f"images/{clicked_images[len(clicked_things) - 1]}.jpg", log = False)
                        my_response.append(clickable.name)
                        allowed_send = True
                # and it was the clear_ button
                elif clickable == clear_:
                    for i, clickable in enumerate(clickables[:-3]):
                        clickable.setImage(f"images/selected_square_0.jpg", log = False)
                    # reset values
                    clicked_things = []
                    my_response = list()
                    allowed_send = False # reset
                elif (clickable == send) and (allowed_send == True):
                    continueRoutine = False

        # it allows the blank button again
        try:
            if blank_clock.getTime() > 1:
                allowed_blank = True
        except NameError:
            pass
      End Experiment:
        thisExp.addData("final_full_credit_score", final_full_credit_score)
        thisExp.addData("final_partial_credit_score", final_partial_credit_score)
        thisExp.addData("final_edit_distance_score", final_edit_distance_score)
      End Routine:
        # juntando respostas, mas eliminando respostas repetidas e "send"
        participant_response = "".join(my_response)

        # crédito completo (pontua apenas sequência idêntica ao gabarito, incluindo ordenação)
        if participant_response == correct_response:
            full_credit_score = current_span
        else:
            full_credit_score = 0

        # crédito parcial (pontua apenas acertos na mesma posição serial)
        partial_credit_score = partial_credit(participant_response, correct_response)

        # edit distance score
        edit_distance_score = EditDistanceScore(correct_response, participant_response)

        # créditos completo parcial e edit distance, somatório da sessão (máx. 42)
        try:
            if symspan_testing_trials.thisN >= 0:
                final_full_credit_score += full_credit_score
                final_partial_credit_score += partial_credit_score
                final_edit_distance_score += edit_distance_score
        except:
            pass

        # criando texto para feedback
        if partial_credit_score > 1:
            word = "quadrados"
        elif partial_credit_score <= 1:
            word = "quadrado"

        # mensagens de feedback de recordação e das operações matemáticas
        recall_feedback_msg = f"Você lembrou corretamente de {partial_credit_score} {word} de um total de {current_span}."

        try:
            symmetry_percent_correct = (symmetry_trials_correct / symmetry_total_trials) * 100
        except ZeroDivisionError:
            symmetry_percent_correct = 0

        symmetry_performance_msg = f"{symmetry_percent_correct:.0f}%"

        try:
            if symmetry_errors > 1:
                symmetry_feedback_msg = f"Você cometeu {symmetry_errors} erros neste conjunto de tentativas"
            elif symmetry_errors == 1:
                symmetry_feedback_msg = f"Você cometeu {symmetry_errors} erro neste conjunto de tentativas"
            else:
                symmetry_feedback_msg =  f"Você não cometeu erros erros neste conjunto de tentativas"
        except:
            symmetry_feedback_msg = ""

        # salva respostas
        thisExp.addData("correct_response", correct_response)
        thisExp.addData("participant_response", participant_response)
        thisExp.addData("full_credit_score", full_credit_score)
        thisExp.addData("partial_credit_score", partial_credit_score)
        thisExp.addData("edit_distance_score", edit_distance_score)
        thisExp.addData("task_phase", task_phase)
        thisExp.addData("symmetry_trials_correct", symmetry_trials_correct)
        thisExp.addData("symmetry_total_trials", symmetry_total_trials)
        thisExp.addData("symmetry_percent_correct", symmetry_percent_correct)
        try:
            thisExp.addData("symmetry_errors", symmetry_errors)
        except:
            pass
    TextComponent prompt_recall
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = Selecione os quadrados na mesma ordem em que foram apresentadas. Use o botão [Branco] para preencher quadrados que esqueceu.
      units = norm
      wrapWidth = 1.8
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    ImageComponent grid_recall
      image = grid.png
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      units = height
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    ImageComponent A
      image [set every repeat] = $grid_positions_list[0]
      pos [set every repeat] = fixed_grid_positions[0]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent B
      image [set every repeat] = $grid_positions_list[1]
      pos [set every repeat] = fixed_grid_positions[1]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent C
      image [set every repeat] = $grid_positions_list[2]
      pos = fixed_grid_positions[2]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent D
      image [set every repeat] = $grid_positions_list[3]
      pos [set every repeat] = fixed_grid_positions[3]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent E
      image [set every repeat] = $grid_positions_list[4]
      pos [set every repeat] = fixed_grid_positions[4]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent F
      image [set every repeat] = $grid_positions_list[5]
      pos [set every repeat] = fixed_grid_positions[5]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent G
      image [set every repeat] = $grid_positions_list[6]
      pos [set every repeat] = fixed_grid_positions[6]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent H
      image [set every repeat] = $grid_positions_list[7]
      pos [set every repeat] = fixed_grid_positions[7]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent I
      image [set every repeat] = $grid_positions_list[8]
      pos [set every repeat] = fixed_grid_positions[8]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent J
      image [set every repeat] = $grid_positions_list[9]
      pos [set every repeat] = fixed_grid_positions[9]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent K
      image [set every repeat] = $grid_positions_list[10]
      pos [set every repeat] = fixed_grid_positions[10]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent L
      image [set every repeat] = $grid_positions_list[11]
      pos [set every repeat] = fixed_grid_positions[11]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent M
      image [set every repeat] = $grid_positions_list[12]
      pos [set every repeat] = fixed_grid_positions[12]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent N
      image [set every repeat] = $grid_positions_list[13]
      pos [set every repeat] = fixed_grid_positions[13]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent O
      image [set every repeat] = $grid_positions_list[14]
      pos [set every repeat] = fixed_grid_positions[14]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent P
      image [set every repeat] = $grid_positions_list[15]
      pos [set every repeat] = fixed_grid_positions[15]
      size = (0.14, 0.14)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent clear_
      image = images/clear_button.jpg
      pos = (-0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent blank
      image = images/blank_button.jpg
      pos = (0.0, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent send
      image = images/send_button.jpg
      pos = (0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent recall_response
      clickable = A, B, C, D, E, F, G, H, I, J, K, L, M, N, O, P, send, clear_, blank
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine recall_feedback
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    TextComponent recall_feedback_prompt
      font = Times New Roman
      letterHeight = 0.11
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $recall_feedback_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent symmetry_feedback_prompt
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $symmetry_feedback_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent symmetry_feedback_performance
      color [set every repeat] = $symmetry_color
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $symmetry_performance_msg
      units = norm
      wrapWidth = 1.8
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  Routine symmetry
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    CodeComponent symmetry_code
      Code Type = Py
      Begin Experiment:
        # cria lista de estímulos
        grids = list()

        for j in range(2):
            for i in range(1, 49):
                if i <= 24:
                    grids.append((f"images/symm{i}.jpg", "symmetric", "yes"))
                else:
                    grids.append((f"images/symm{i}.jpg", "asymmetric", "no"))

        random.shuffle(grids)

        # contador de grids
        grid_count = 0

        # contador de tentativas e acertos na tarefa de simetria
        symmetry_total_trials = symmetry_trials_correct = speed_errors = 0
        abort_trial = False # controla interrupção da tarefa de simetria

        # contador de tempo no treino
        symmetry_training_time = list()
      Begin Routine:
        symmetry_clock = core.Clock()

        try:
            # se é a primeira execução do loop...
            if symmetry_practice_trials.thisN == 0:
                symmetry_color = "red" # agora teremos feedback na cor vermelha
                symmetry_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if symspan_training_trial.thisN == 0:
                symmetry_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if symspan_testing_trial.thisN == 0:
                symmetry_errors = 0
        except:
            pass

        # reseta os contadores quando começa o SYMSPAN para valer
        try:
            if (symspan_testing_trials.thisN == 0) and (symspan_testing_trial.thisN == 0):
                symmetry_total_trials = symmetry_trials_correct = speed_errors = 0
        except:
            pass
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if symmetry_clock.getTime() >= symmetry_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Routine:
        # salva variáveis
        thisExp.addData("symmetry_problem", grids[grid_count][0]) # nome da imagem
        thisExp.addData("symmetry_status", grids[grid_count][1]) # symmetric vs. asymmetric
        thisExp.addData("symmetry_corr", grids[grid_count][2]) # gabarito

        if abort_trial:
            symmetry_speed_error = 1 # abortou devido a velocidade
        else:
            symmetry_speed_error = 0 # abortou devido a velocidade

        try:
            thisExp.addData("problem_rt", symmetry_clock.getTime()) # problem RT
        except:
            pass
    TextComponent symmetry_prompt
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Quando você tiver resolvido o problema, clique em [Continuar]
      units = norm
      wrapWidth = 1.8
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    ImageComponent continue_
      image = images/continue_button.jpg
      pos = (0.0, -0.8)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent symmetry_problem_next
      clickable = continue_
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent symmetry_problem
      image [set every repeat] = $grids[grid_count][0]
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.7, 1)
      startVal [time (s)] = 0
      units = norm
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  Routine symmetry_answer
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    CodeComponent symmetry_answer_code
      Code Type = Py
      Begin Routine:
        answer_clock = core.Clock()

        if abort_trial:
            continueRoutine = False
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if symmetry_clock.getTime() >= symmetry_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Experiment:
        thisExp.addData("symmetry_time_mean", symmetry_time_mean)
        thisExp.addData("symmetry_time_sd", symmetry_time_sd)
        thisExp.addData("symmetry_criterion", symmetry_criterion)
      End Routine:
        try:
            if symmetry_response.clicked_name[0] == "yes":
                symmetry_participant_response = "yes"
            else:
                symmetry_participant_response = "no"
        except:
            symmetry_participant_response = ""
            symmetry_speed_error = 1

        try:
            thisExp.addData("answer_rt", answer_clock.getTime()) # answer RT
        except:
            pass

        # se o participante acertou
        if symmetry_participant_response == grids[grid_count][2]:
            symmetry_participant_corr = 1
            symmetry_accuracy_error = 0 # contagem de erros de acurácia
            symmetry_trials_correct += 1 # incrementa número de acertos da sessão toda
            symmetry_corrective_feedback = "Correto"
        else:
            symmetry_participant_corr = 0
            symmetry_corrective_feedback = "Incorreto"
            symmetry_errors += 1 # incrementa o número de erros apenas da presente tentativa

            if symmetry_speed_error == 0:
                symmetry_accuracy_error = 1
            else:
                symmetry_accuracy_error = 0

        # sempre incrementa o contador de tentativas
        symmetry_total_trials += 1

        if abort_trial:
            thisExp.addData("symmetry_speed_error", 1) # erro de velocidade
            abort_trial = False # reseta para a próxima tentativa
        else:
            thisExp.addData("symmetry_speed_error", 0)

        # salva variáveis
        thisExp.addData("symmetry_accuracy_error", symmetry_accuracy_error) # erro de acurácia
        thisExp.addData("symmetry_participant_corr", symmetry_participant_corr) # 1 = acerto, 0 = erro
        thisExp.addData("symmetry_problem", grids[grid_count][0]) # enunciado
        thisExp.addData("symmetry_status", grids[grid_count][1]) # gabarito
        thisExp.addData("symmetry_corr", grids[grid_count][2]) # resposta correta
        thisExp.addData("symmetry_participant_response", symmetry_participant_response) # resposta do participante

        # incrementa operação para próxima iteração
        grid_count += 1

        # soma a duração da tarefa matemática
        try:
            if symmetry_practice_trials.thisN < 15:
                symmetry_training_time.append(symmetry_clock.getTime()) # e guarda tempo em uma lista
                # e, na última tentativa, salva o critério de tempo a ser usado posteriormente
                if symmetry_practice_trials.thisN == 14:
                    symmetry_time_mean = np.mean(np.array(symmetry_training_time))
                    symmetry_time_sd = np.std(np.array(symmetry_training_time), ddof = 1)
                    symmetry_criterion = symmetry_time_mean + 2 * symmetry_time_sd

        except:
            pass
    TextComponent symmetry_answer_screen
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = A imagem é simétrica?
      units = norm
      wrapWidth = 1.8
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    ImageComponent yes
      image = images/yes_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent no
      image = images/no_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent symmetry_response
      clickable = yes, no
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine symmetry_answer_feedback
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    ImageComponent true_feedback
      image = images/yes_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    ImageComponent false_feedback
      image = images/no_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent symmetry_corrective_feedback_msg
      color = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $symmetry_corrective_feedback
      units = norm
      wrapWidth = 1.8
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  Routine grid_memory
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    CodeComponent grid_memory_code
      Code Type = Py
      Begin Experiment:
        fixed_grid_positions = [[-0.225, 0.225], [-0.075, 0.225], [0.075, 0.225], [0.225, 0.225],
                                [-0.225, 0.075], [-0.075, 0.075], [0.075, 0.075], [0.225, 0.075],
                                [-0.225, -0.075], [-0.075, -0.075], [0.075, -0.075], [0.225, -0.075],
                                [-0.225, -0.225], [-0.075, -0.225], [0.075, -0.225], [0.225, -0.225]
                                ]

        grid_positions = [([-0.225, 0.225], "A"), ([-0.075, 0.225], "B"),
                          ([0.075, 0.225], "C"), ([0.225, 0.225], "D"),
                          ([-0.225, 0.075], "E"), ([-0.075, 0.075], "F"),
                          ([0.075, 0.075], "G"), ([0.225, 0.075], "H"),
                          ([-0.225, -0.075], "I"), ([-0.075, -0.075], "J"),
                          ([0.075, -0.075], "K"), ([0.225, -0.075], "L"),
                          ([-0.225, -0.225], "M"), ([-0.075, -0.225], "N"),
                          ([0.075, -0.225], "O"), ([0.225, -0.225], "P"),
                          ]

        grid_positions_list = list()

        for i in range(16):
            grid_positions_list.append("images/selected_square_0.jpg")
      Begin Routine:
        # tenta atribuir o valor da repetição do loop atual à variável index
        # isso facilitará o acesso e a apresentação de cada letra na sequência de uma tentativa
        try:
            index = grid_memory_practice.thisN
        except:
            pass

        try:
            index = symspan_training_trial.thisN
        except:
            pass

        try:
            index = symspan_testing_trial.thisN
        except:
            pass

        # tenta embaralhar as posições do grid sempre que estivermos em uma nova tentativa
        try:
            # se é a primeira execução do loop...
            if grid_memory_practice.thisN == 0:
                # embaralha letras usada na tarefa de armazenamento
                np.random.shuffle(grid_positions)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_positions = list()
                temp = list()
                for i in range(current_span):
                    correct_positions.append(grid_positions[i][0])
                    temp.append(grid_positions[i][1])

                correct_response = "".join(temp)
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if symspan_training_trial.thisN == 0:
                # embaralha letras usada na tarefa de armazenamento
                np.random.shuffle(grid_positions)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_positions = list()
                temp = list()
                for i in range(current_span):
                    correct_positions.append(grid_positions[i][0])
                    temp.append(grid_positions[i][1])

                correct_response = "".join(temp)
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if symspan_testing_trial.thisN == 0:
                # embaralha letras usada na tarefa de armazenamento
                np.random.shuffle(grid_positions)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_positions = list()
                temp = list()
                for i in range(current_span):
                    correct_positions.append(grid_positions[i][0])
                    temp.append(grid_positions[i][1])

                correct_response = "".join(temp)

        except:
            pass
    ImageComponent grid_memory_task
      image = grid.png
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = height
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    PolygonComponent square_position
      fillColor = $[0.804,-1.000,-1.000]
      pos [set every repeat] = $correct_positions[index]
      saveStartStop = False
      shape = rectangle
      size = (0.14, 0.14)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      units = height
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Flow
  Routine welcome
  LoopInitiator grid_memory_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator grid_memory_instructions
  LoopInitiator grid_memory_practice_trials loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7}]
    LoopInitiator grid_memory_practice loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine grid_memory
    LoopTerminator grid_memory_practice
    Routine recall
    Routine recall_feedback
  LoopTerminator grid_memory_practice_trials
  LoopInitiator symmetry_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator symmetry_instructions
  LoopInitiator symmetry_practice_trials loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine symmetry
    Routine symmetry_answer
    Routine symmetry_answer_feedback
  LoopTerminator symmetry_practice_trials
  LoopInitiator symspan_training_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator symspan_training_instructions
  LoopInitiator symspan_training_trials loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5}]
    LoopInitiator symspan_training_trial loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine symmetry
      Routine symmetry_answer
      Routine grid_memory
    LoopTerminator symspan_training_trial
    Routine recall
    Routine recall_feedback
  LoopTerminator symspan_training_trials
  LoopInitiator symspan_testing_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator symspan_testing_instructions
  LoopInitiator symspan_testing_trials loopType="TrialHandler"
    Selected rows = 1:
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7}]
    LoopInitiator symspan_testing_trial loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine symmetry
      Routine symmetry_answer
      Routine grid_memory
    LoopTerminator symspan_testing_trial
    Routine recall
    Routine recall_feedback
  LoopTerminator symspan_testing_trials
  Routine thanks
