PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expName, expInfo['Nome Completo'], expInfo['date'])
  Experiment info = {'ID': 'f"{randint(0, 999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [900, 600]
  expName = rotspan
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        def EditDistanceScore(target, recall):
            """
            Recebe duas strings que serão comparadas. Retorna o edit distance score,
            que consiste em len(target) – distância de Damerau–Levenshtein. Se a substração resultar em
            valor negativo, fixa valor em 0.
            """
            # se strings são idênticas
            if recall == target:
                return len(target) # edit distance = tamanho da string
            # se nada foi lembrado
            elif recall == "": # edit distance = 0
                return 0

            stimDict = {target[0]: "0"}

            for targetIndex in range(0, len(target)):
                if target[targetIndex] not in stimDict:
                    stimDict[target[targetIndex]] = "0"

            for recallIndex in range(0, len(recall)):
                if recall[recallIndex] not in stimDict:
                    stimDict[recall[recallIndex]] = "0"

            disMatrix = np.zeros(shape=(len(target) + 2, len(recall) + 2))

            inf = len(target) + len(recall)

            for targetIndex in range(0, len(target) + 1):
                disMatrix[targetIndex + 1, 0] = inf
                disMatrix[targetIndex + 1, 1] = targetIndex

            for recallIndex in range(0, len(recall)+1):
                disMatrix[0, recallIndex + 1] = inf
                disMatrix[1, recallIndex + 1] = recallIndex

            for targetIndex in range(1, len(target)+1):
                present = 0
                for recallIndex in range(1, len(recall) + 1):
                    if recall[recallIndex-1] in stimDict:
                        targetIndex2 = int(stimDict[recall[recallIndex - 1]])

                    recallIndex2 = present
                    cost = 1

                    if target[targetIndex - 1] == recall[recallIndex - 1]:
                        cost = 0
                        present = recallIndex

                    Substitution = disMatrix[targetIndex, recallIndex] + cost
                    Insertion = disMatrix[targetIndex + 1, recallIndex] + 1
                    Deletion = disMatrix[targetIndex, recallIndex + 1] + 1
                    Transposition = disMatrix[targetIndex2, recallIndex2] + (targetIndex - targetIndex2 - 1) + 1 + (recallIndex - recallIndex2 - 1)

                    if Substitution < Insertion and Substitution < Deletion and Substitution < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Substitution
                    elif Insertion < Deletion and Insertion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Insertion
                    elif Deletion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Deletion
                    else:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Transposition


                stimDict[target[targetIndex - 1]] = str(targetIndex)

            # se edit distance < 0, fixa valor em zero
            if len(target) - disMatrix[len(target) + 1, len(recall) + 1] < 0:
                return 0
            # caso contrário, retorna o valor da medida
            else:
                return(int(len(target) - disMatrix[len(target) + 1, len(recall) + 1]))

        def partial_credit(string1, string2):
            score = 0
            for letter1, letter2 in zip(string1, string2):
                if letter1 == letter2:
                    score += 1

            return score

        final_full_credit_score = final_partial_credit_score = final_edit_distance_score = 0
      Begin Routine:
        clicked_things = []
        arrow_colors = ["black"] * 16

        clickables = [A, B, C, D, E, F, G, H, I, J, K, L, M, N, O, P, send, clear_, blank, square]
        allowed_send = False
        allowed_blank = True

        my_response = list()

        try:
            if arrow_memory_practice_trials.thisN == 0:
                task_phase = "arrow_memory_practice_phase"
        except:
            pass

        try:
            if rotspan_training_trials.thisN == 0:
                task_phase = "rotspan_training_trials"
        except:
            pass

        try:
            if rotspan_testing_trials.thisN == 0:
                task_phase = "rotspan_testing_trials"
        except:
            pass
      Each Frame:
        for i, clickable in enumerate(clickables):
            if (clickable == square):
                pass
            # and it was the blank button:
            elif recall_response.isPressedIn(clickable) and (clickable == blank) and (allowed_blank == True):
                if len(clicked_things) <= 15:
                    clicked_things.append(clickable.name)
                    # to prevent two consecutive responses
                    allowed_blank = False
                    blank_clock = core.Clock()
                    #clicked_things.append(clickable.name)
                    my_response.append("–")
                    allowed_send = True
            # if a button was pressed in
            elif recall_response.isPressedIn(clickable) and (clickable.name not in clicked_things):
                # and it wasn't send, clear_, and blank buttons
                if (clickable != send) and (clickable != clear_) and (clickable != blank):
                    if len(clicked_things) <= 15:
                        clicked_things.append(clickable.name)
                        clickable.fillColor = "darkblue"
                        clickable.color = "darkblue"
                        my_response.append(clickable.name)
                        allowed_send = True
                # and it was the clear_ button
                elif clickable == clear_:
                    for i, clickable in enumerate(clickables[:-4]):
                        clickable.fillColor = "black"
                        clickable.color = "black"
                    # reset values
                    clicked_things = []
                    my_response = list()
                    allowed_send = False # reset
                elif (clickable == send) and (allowed_send == True):
                    continueRoutine = False

        # it allows the blank button again
        try:
            if blank_clock.getTime() > 1:
                allowed_blank = True
        except NameError:
            pass
      End Experiment:
        thisExp.addData("final_full_credit_score", final_full_credit_score)
        thisExp.addData("final_partial_credit_score", final_partial_credit_score)
        thisExp.addData("final_edit_distance_score", final_edit_distance_score)
      End Routine:
        # juntando respostas, mas eliminando respostas repetidas e "send"
        participant_response = "".join(my_response)

        # crédito completo (pontua apenas sequência idêntica ao gabarito, incluindo ordenação)
        if participant_response == correct_response:
            full_credit_score = current_span
        else:
            full_credit_score = 0

        # crédito parcial (pontua apenas acertos na mesma posição serial)
        partial_credit_score = partial_credit(participant_response, correct_response)

        # edit distance score
        edit_distance_score = EditDistanceScore(correct_response, participant_response)

        # créditos completo parcial e edit distance, somatório da sessão (máx. 42)
        try:
            if rotspan_testing_trials.thisN >= 0:
                final_full_credit_score += full_credit_score
                final_partial_credit_score += partial_credit_score
                final_edit_distance_score += edit_distance_score
        except:
            pass

        # criando texto para feedback
        if partial_credit_score > 1:
            word = "setas"
        elif partial_credit_score <= 1:
            word = "seta"

        # mensagens de feedback de recordação e das setas
        recall_feedback_msg = f"Você lembrou corretamente de {partial_credit_score} {word} de um total de {current_span}."

        try:
            rotation_percent_correct = (rotation_trials_correct / rotation_total_trials) * 100
        except ZeroDivisionError:
            rotation_percent_correct = 0

        rotation_performance_msg = f"{rotation_percent_correct:.0f}%"

        try:
            if rotation_errors > 1:
                rotation_feedback_msg = f"Você cometeu {rotation_errors} erros neste conjunto de tentativas"
            elif rotation_errors == 1:
                rotation_feedback_msg = f"Você cometeu {rotation_errors} erro neste conjunto de tentativas"
            else:
                rotation_feedback_msg =  f"Você não cometeu erros erros neste conjunto de tentativas"
        except:
            rotation_feedback_msg = ""

        # salva respostas
        thisExp.addData("correct_response", correct_response)
        thisExp.addData("participant_response", participant_response)
        thisExp.addData("full_credit_score", full_credit_score)
        thisExp.addData("partial_credit_score", partial_credit_score)
        thisExp.addData("edit_distance_score", edit_distance_score)
        thisExp.addData("task_phase", task_phase)
        thisExp.addData("rotationtrials_correct", rotation_trials_correct)
        thisExp.addData("rotation_total_trials", rotation_total_trials)
        thisExp.addData("rotation_percent_correct", rotation_percent_correct)
        try:
            thisExp.addData("rotation_errors", rotation_errors)
        except:
            pass

        # reseta para a próxima tentativa
        for clickable in clickables[:-4]:
            clickable.fillColor = "black"
            clickable.color = "black"
    TextComponent prompt_recall
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      text = Selecione as setas na mesma ordem em que foram apresentadas. Use o botão [Branco] para indicar as setas que esqueceu.
      units = norm
      wrapWidth = 1.8
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    PolygonComponent A
      anchor = bottom-center
      fillColor = black
      lineColor = black
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent B
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 45
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent C
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 90
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent D
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 135
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent E
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 180
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent F
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 225
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent G
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 270
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent H
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 315
      pos = (0, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent I
      anchor = bottom-center
      fillColor = black
      lineColor = black
      pos = (0, 0.4)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent J
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 45
      pos = (0.165, 0.32)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent K
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 90
      pos = (0.225, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent L
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 135
      pos = (0.165, -0.12)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent M
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 180
      pos = (0, -0.2)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent N
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 225
      pos = (-0.165, -0.12)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent O
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 270
      pos = (-0.225, 0.1)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent P
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori = 315
      pos = (-0.165, 0.32)
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent clear_
      image = images/clear_button.jpg
      pos = (-0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent blank
      image = images/blank_button.jpg
      pos = (0.0, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent send
      image = images/send_button.jpg
      pos = (0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent square
      fillColor = white
      lineColor = red
      opacity = 0
      pos = (0, 0.05)
      shape = rectangle
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent recall_response
      clickable = A, B, C, D, E, F, G, H, I, J, K, L, M, N, O, P, send, clear_, blank, square
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine arrow_memory
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    CodeComponent arrow_memory_code
      Code Type = Py
      Begin Experiment:
        import string

        orientations = list(range(0, 360, 45)) * 2
        letters = string.ascii_uppercase[:16]
        positions = [(0, 0.1)] * 8 + [(0, 0.4), (0.165, 0.32), (0.225, 0.1), (0.165, -0.12),
                                      (0, -0.2), (-0.165, -0.12), (-0.225, 0.1), (-0.165, 0.32)]
        arrow_positions = list()

        for ori, pos, letter in zip(orientations, positions, letters):
            arrow_positions.append((ori, pos, letter))

        arrow_positions_list = list()

        for i in range(16):
            arrow_positions_list.append("")
      Begin Routine:
        # tenta atribuir o valor da repetição do loop atual à variável index
        # isso facilitará o acesso e a apresentação de cada letra na sequência de uma tentativa
        try:
            index = arrow_memory_practice.thisN
        except:
            pass

        try:
            index = rotspan_training_trial.thisN
        except:
            pass

        try:
            index = rotspan_testing_trial.thisN
        except:
            pass

        # tenta embaralhar as posições do grid sempre que estivermos em uma nova tentativa
        try:
            # se é a primeira execução do loop...
            if arrow_memory_practice.thisN == 0:
                # embaralha setas usada na tarefa de armazenamento
                np.random.shuffle(arrow_positions)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_positions = list()
                correct_orientations = list()
                temp = list()
                for i in range(current_span):
                    correct_orientations.append(arrow_positions[i][0])
                    correct_positions.append(arrow_positions[i][1])
                    temp.append(arrow_positions[i][2])
                correct_response = "".join(temp)
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if rotspan_training_trial.thisN == 0:
                # embaralha setas usada na tarefa de armazenamento
                np.random.shuffle(arrow_positions)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_positions = list()
                correct_orientations = list()
                temp = list()
                for i in range(current_span):
                    correct_orientations.append(arrow_positions[i][0])
                    correct_positions.append(arrow_positions[i][1])
                    temp.append(arrow_positions[i][2])

                correct_response = "".join(temp)
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if rotspan_testing_trial.thisN == 0:
                # embaralha setas usada na tarefa de armazenamento
                np.random.shuffle(arrow_positions)
                # e seleciona a sequência que será o gabarito da atual rodada
                correct_positions = list()
                correct_orientations = list()
                temp = list()
                for i in range(current_span):
                    correct_orientations.append(arrow_positions[i][0])
                    correct_positions.append(arrow_positions[i][1])
                    temp.append(arrow_positions[i][2])

                correct_response = "".join(temp)

        except:
            pass
    PolygonComponent arrow
      anchor = bottom-center
      fillColor = black
      lineColor = black
      ori [set every repeat] = correct_orientations[index]
      pos [set every repeat] = correct_positions[index]
      shape = arrow
      size = (0.05, 0.35)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      units = norm
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0
        instruction_block = 0

        instruction_list = [# arrow (memory) task
                           ["""
        Neste experimento, você tentará as posições e direções de setas que você verá na tela enquanto você avalia se as letras estão na posição normal ou invertida.

        Nos próximos minutos, você irá praticar para se familiarizar com o experimento. Nós começaremos praticando a tarefa de memória com as setas.""",
        """
        Para essa prática, setas aparecerão na tela, em diferentes posições e direções. Tente lembrar a posição e direção de cada seta na ordem em que ela apareceu.

        Depois que 2 setas aparecerem, você verá uma tela com 16 setas. Seu trabalho é clicar nas setas na mesma ordem em que elas foram apresentadas.

        Para fazer isso, use o mouse para clicar nas setas para selecioná-las. As setas selecionadas ficarão na cor azul.""",
        """
        Depois que selecionar todas as setas que compõem sua resposta, e elas estiverem na ordem correta, clique no botão [Enviar] no canto inferior direito da tela.

        Se errar sua resposta, aperte o botão [Limpar] para começar novamente. Se esquecer a posição de uma das setas, aperte o botão [Branco] para marcar a posição que a seta esquecida deve estar.

        Lembre-se, é muito importante selecionar as setas na mesma ordem que foram apresentadas. Se você esquecer uma seta, use o botão [Branco] para marcar a sua posição.""",
        """
        Favor chamar o pesquisador se tiver alguma pergunta.

        Quando você estiver pronto, clique em [Avançar] para começar a prática com as setas.
        """],
        # distractor (rotation) task
        ["""
        Agora você irá praticar a tarefa de rotação deste experimento. Nessa tarefa, você verá uma letra na tela. Essa letra poderá ou não estar rotacionada na tela.

        Sua tarefa será avaliar se a letra pode ser rotacionada em uma posição que ela corresponda a uma letra do nosso alfabeto.

        Depois que tiver avaliado a letra, clique no botão [Continuar].
        """,
        """
        Por exemplo, se aparecer na tela um "F", clique no botão [Sim], pois essa símbolo é uma letra do nosso alfabeto. Responda [Sim] mesmo que a letra apareça rotacionada na tela.

        Se aparecer na tela um "ꟻ", clique no botão [Não], pois esse símbolo não faz parte do nosso alfabeto. Responda [Não] mesmo que o "ꟻ" apareça rotacionado na tela.
        """,
        """
        Depois que clicar em um dos botões, o computador irá lhe dizer se fez a escolha certa.

        É muito importante que você consiga avaliar a letra, esteja ela rotacionada ou não. Também é importante que você consiga fazer essa avaliação o mais rapidamente possível.

        Favor chamar o pesquisador se você tiver perguntas.

        Quando você estiver pronto, clique em [Avançar] para começar a praticar.
        """],
        # ROTSPAN training
        ["""
        Agora você irá praticar as duas partes do experimento ao mesmo tempo. Na próxima prática, você irá avaliar as letras rotacionadas. Assim que decidir a sua resposta, uma seta aparecerá na tela. Tente se lembrar da posição dessa seta.

        Na etapa anterior na qual você apenas avaliou as letras, o computador calculou o seu tempo médio para resolver os problemas. Se você demorar mais que o tempo médio, o computador irá automaticamente passar pela letra, pular a tela de resposta e contar o problema como erro.

        Por isso é muito importante você resolver os problemas o mais rápida e corretamente possível.""",
        """
        Depois que a seta desaparecer, outra letra irá aparecer, e depois outra seta. No final de cada sequência, uma tela de resposta aparecerá na tela. Use o mouse para indicar as posições e direções das setas que acabou de ver.

        Tente lembrar a ordem correta das setas. É muito importante que você trabalhe rapidamente e corretamente nas letras. Tenha certeza que você sabe a resposta do problema de rotação antes de ir para a próxima tela.
        """,
        """
        O computador não irá dizer se a resposta está correta. Depois da tela de resposta, você receberá o resultado do seu desempenho para o número setas lembradas e a porcentagem de respostas corretas nos problemas de rotação.

        Durante o resultado, você verá um número vermelho no canto direito na parte de cima da tela. Isso indica a porcentagem de problemas de rotação que você respondeu corretamente para o experimento inteiro.
        """,
        """
        É muito importante que a porcentagem seja no mínimo 85%. Para o nosso experimento, só podemos usar dados de pessoas com no mínimo 85% de respostas corretas nos problemas de rotação.

        Para você ser chamado novamente para participar em futuros experimentos, você deve responder no mínimo 85% de respostas corretas nos problemas de rotação E lembrar o máximo de setas possíveis.

        Favor chamar o pesquisador se tiver perguntas.
        """
        ],
        # ROTSPAN testing
        ["""
        Este é o final da prática. O experimento de verdade será igual a prática que acabou de completar.

        Primeiro você terá que resolver um problema de rotação, depois terá que memorizar a posição e direção de uma seta. Quando ver a tela de resposta, indique as posições das setas na ordem em que foram apresentadas. Se esquecer de uma seta, clique no botão [Branco] para marcar onde a seta deve ir.

        Algumas combinações terão mais problemas de rotação e setas do que outras.
        """,
        """
        É importante que você faça o melhor possível nos problemas de rotação e na parte onde tiver que lembrar das setas.

        Lembre-se de trabalhar o mais rápido e corretamente possível nos problemas de rotação. Também lembre-se de acertar 85% dos problemas.

        Favor chamar o pesquisador se tiver alguma pergunta.

        Quando você estiver pronto, clique em [Avançar] para começar a tarefa.
        """
        ]]

        # cor do feedback das operações matemáticas
        rotation_color = [0.0000, 0.0000, 0.0000]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      Begin Routine:
        my_count = 0 # contador de tentativas da tarefa distratora
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list[instruction_block]):
            current_instruction = 0 # zera contador de instruções
            if instruction_block == 0:
                instruction_block += 1
                arrow_memory_instructions.finished = True # encerra o loop do treino da tarefa de memória
            elif instruction_block == 1:
                instruction_block += 1
                rotation_instructions.finished = True # encerra o loop do treino da tarefa matemática
            elif instruction_block == 2:
                instruction_block += 1
                rotspan_training_instructions.finished = True # encerra o loop de treino do OSPAN
            elif instruction_block == 3:
                instruction_block += 1
                rotspan_testing_instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.09
      pos [set every repeat] = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[instruction_block][current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine recall_feedback
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    TextComponent recall_feedback_prompt
      font = Times New Roman
      letterHeight = 0.11
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $recall_feedback_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent rotation_feedback_prompt
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $rotation_feedback_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent rotation_feedback_performance
      color [set every repeat] = $rotation_color
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.9, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $rotation_performance_msg
      units = norm
      wrapWidth = 1.8
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  Routine rotation
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    CodeComponent rotation_code
      Code Type = Py
      Begin Experiment:
        # cria lista de estímulos
        letters = list("GFR") * 2
        oris = list(range(0, 360, 45))
        flips = (True, False)
        stimuli = list()

        for flip in flips:
            if flip:
                temp = "no"
            else:
                temp = "yes"
            for letter in letters:
                for ori in oris:
                    stimuli.append((letter, ori, flip, temp))

        random.shuffle(stimuli)

        # contador de letras
        letter_count = 0

        # contador de tentativas e acertos na tarefa de simetria
        rotation_total_trials = rotation_trials_correct = speed_errors = 0
        abort_trial = False # controla interrupção da tarefa de rotação

        # contador de tempo no treino
        rotation_training_time = list()
      Begin Routine:
        rotation_clock = core.Clock()

        rotation_problem.flipHoriz = stimuli[letter_count][2]
        rotation_problem.flipVert = False

        try:
            # se é a primeira execução do loop...
            if rotation_practice_trials.thisN == 0:
                rotation_color = "red" # agora teremos feedback na cor vermelha
                rotation_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if rotspan_training_trial.thisN == 0:
                rotation_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if rotspan_testing_trial.thisN == 0:
                rotation_errors = 0
        except:
            pass

        # reseta os contadores quando começa o ROTSPAN para valer
        try:
            if (rotspan_testing_trials.thisN == 0) and (rotspan_testing_trial.thisN == 0):
                rotation_total_trials = rotation_trials_correct = speed_errors = 0
        except:
            pass
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if rotation_clock.getTime() >= rotation_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Routine:
        # salva variáveis
        thisExp.addData("rotation_letter", stimuli[letter_count][0]) # nome da imagem
        thisExp.addData("rotation_orientation", stimuli[letter_count][1]) # orientation
        thisExp.addData("rotation_flip", stimuli[letter_count][2]) # flipped vs. non-flipped
        thisExp.addData("rotation_corr", stimuli[letter_count][3]) # gabarito

        if abort_trial:
            rotation_speed_error = 1 # abortou devido a velocidade
        else:
            rotation_speed_error = 0 # abortou devido a velocidade

        try:
            thisExp.addData("problem_rt", rotation_clock.getTime()) # problem RT
        except:
            pass
    TextComponent rotation_prompt
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Quando você tiver resolvido o problema, clique em [Continuar]
      units = norm
      wrapWidth = 1.8
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    ImageComponent continue_
      image = images/continue_button.jpg
      pos = (0.0, -0.8)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent symmetry_problem_next
      clickable = continue_
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent rotation_problem
      font = Times New Roman
      letterHeight = 0.3
      ori [set every repeat] = stimuli[letter_count][1]
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimuli[letter_count][0]
      units = norm
      wrapWidth = 1.8
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  Routine rotation_answer
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    CodeComponent rotation_answer_code
      Code Type = Py
      Begin Routine:
        answer_clock = core.Clock()

        if abort_trial:
            continueRoutine = False
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if rotation_clock.getTime() >= rotation_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Experiment:
        thisExp.addData("rotation_time_mean", rotation_time_mean)
        thisExp.addData("rotation_time_sd", rotation_time_sd)
        thisExp.addData("rotation_criterion", rotation_criterion)
      End Routine:
        try:
            if rotation_response.clicked_name[0] == "yes":
                rotation_participant_response = "yes"
            else:
                rotation_participant_response = "no"
        except:
            rotation_participant_response = ""
            rotation_speed_error = 1

        try:
            thisExp.addData("answer_rt", answer_clock.getTime()) # answer RT
        except:
            pass

        # se o participante acertou
        if rotation_participant_response == stimuli[letter_count][3]:
            rotation_participant_corr = 1
            rotation_accuracy_error = 0 # contagem de erros de acurácia
            rotation_trials_correct += 1 # incrementa número de acertos da sessão toda
            rotation_corrective_feedback = "Correto"
        else:
            rotation_participant_corr = 0
            rotation_corrective_feedback = "Incorreto"
            rotation_errors += 1 # incrementa o número de erros apenas da presente tentativa

            if rotation_speed_error == 0:
                rotation_accuracy_error = 1
            else:
                rotation_accuracy_error = 0

        # sempre incrementa o contador de tentativas
        rotation_total_trials += 1

        if abort_trial:
            thisExp.addData("rotation_speed_error", 1) # erro de velocidade
            abort_trial = False # reseta para a próxima tentativa
        else:
            thisExp.addData("rotation_speed_error", 0)

        # salva variáveis
        thisExp.addData("rotation_accuracy_error", rotation_accuracy_error) # erro de acurácia
        thisExp.addData("rotation_participant_corr", rotation_participant_corr) # 1 = acerto, 0 = erro
        thisExp.addData("rotation_problem", stimuli[letter_count][0]) # enunciado
        thisExp.addData("rotation_status", stimuli[letter_count][1]) # gabarito
        thisExp.addData("rotation_corr", stimuli[letter_count][2]) # resposta correta
        thisExp.addData("rotation_participant_response", rotation_participant_response) # resposta do participante

        # debug
        # print(f"Letra: {stimuli[letter_count][0]} --- Flip: {stimuli[letter_count][2]} --- Flip2: {rotation_problem.flipHoriz} --- Gabarito: {stimuli[letter_count][3]} --- Resposta: {rotation_participant_response} --- Feedback: {rotation_corrective_feedback}")

        # incrementa operação para próxima iteração
        letter_count += 1

        # soma a duração da tarefa matemática
        try:
            if rotation_practice_trials.thisN < 15:
                rotation_training_time.append(rotation_clock.getTime()) # e guarda tempo em uma lista
                # e, na última tentativa, salva o critério de tempo a ser usado posteriormente
                if rotation_practice_trials.thisN == 14:
                    rotation_time_mean = np.mean(np.array(rotation_training_time))
                    rotation_time_sd = np.std(np.array(rotation_training_time), ddof = 1)
                    rotation_criterion = rotation_time_mean + 2 * rotation_time_sd

        except:
            pass
    TextComponent rotation_answer_screen
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = A letra está virada do lado correto?
      units = norm
      wrapWidth = 1.8
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    ImageComponent yes
      image = images/yes_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent no
      image = images/no_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent rotation_response
      clickable = yes, no
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine rotation_answer_feedback
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    ImageComponent true_feedback
      image = images/yes_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    ImageComponent false_feedback
      image = images/no_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent rotation_corrective_feedback_msg
      color = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $rotation_corrective_feedback
      units = norm
      wrapWidth = 1.8
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator arrow_memory_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator arrow_memory_instructions
  LoopInitiator arrow_memory_practice_trials loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5}]
    LoopInitiator arrow_memory_practice loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine arrow_memory
    LoopTerminator arrow_memory_practice
    Routine recall
    Routine recall_feedback
  LoopTerminator arrow_memory_practice_trials
  LoopInitiator rotation_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator rotation_instructions
  LoopInitiator rotation_practice_trials loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine rotation
    Routine rotation_answer
    Routine rotation_answer_feedback
  LoopTerminator rotation_practice_trials
  LoopInitiator rotspan_training_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator rotspan_training_instructions
  LoopInitiator rotspan_training_trials loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5}]
    LoopInitiator rotspan_training_trial loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine rotation
      Routine rotation_answer
      Routine arrow_memory
    LoopTerminator rotspan_training_trial
    Routine recall
    Routine recall_feedback
  LoopTerminator rotspan_training_trials
  LoopInitiator rotspan_testing_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator rotspan_testing_instructions
  LoopInitiator rotspan_testing_trials loopType="TrialHandler"
    conditionsFile = span.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'current_span': 2},
      {'current_span': 3},
      {'current_span': 4},
      {'current_span': 5}]
    LoopInitiator rotspan_testing_trial loopType="TrialHandler"
      loopType = random
      nReps = current_span
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      Routine rotation
      Routine rotation_answer
      Routine arrow_memory
    LoopTerminator rotspan_testing_trial
    Routine recall
    Routine recall_feedback
  LoopTerminator rotspan_testing_trials
  Routine thanks
