PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Nome Completo'], expName, expInfo['date'])
  Experiment info = {'Nome Completo': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1366, 768]
  expName = questionario-de-ansiedade-com-o-spss
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Pressione [Barra de Espaço] para avançar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        A seguir, você responderá a um conjunto de questões sobre como você se sente com relação ao software SPSS.

        Não há respostas certas ou erradas. Responda o mais sinceramente possível.

        Pressione [Barra de Espaço] para iniciar.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine item
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    TextComponent saq_item
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      units = norm
      wrapWidth = 1.8
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    SliderComponent saq_slider
      borderColor = -1.0000, -1.0000, 0.0902
      color = White
      fillColor = 1.0000, -1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = False
      granularity = 1
      labels = ("Discordo\ntotalmente", "Discordo\nparcialmente", "Não concordo, \nnem discordo", "Concordo\nparcialmente", "Concordo\ntotalmente")
      letterHeight = 0.06
      pos = (0, -0.25)
      size = (1.4, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
      units = norm
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    ImageComponent send
      image = send_button.jpg
      pos = (0, -0.8)
      size = (0.5, 0.25)
      startEstim = 1
      startVal [condition] = saq_slider.rating
      units = norm
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    MouseComponent mouse
      clickable = send
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instruction
  LoopInitiator questionnaire loopType="TrialHandler"
    conditionsFile = SAQ.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'question': 'Estatística me faz chorar.'},
      {'question': 'Meus amigos vão pensar que sou burro por não ser capaz de usar o SPSS.'},
      {'question': 'Desvios-padrão me deixam animado.'},
      {'question': 'Tenho pesadelos com Pearson me atacando com coeficientes de correlação.'},
      {'question': 'Eu não entendo estatística.'},
      {'question': 'Eu tenho pouca experiência com computadores.'},
      {'question': 'Computadores me odeiam.'},
      {'question': 'Eu nunca fui bom em matemática.'},
      {'question': 'Meus amigos são melhores em estatística do que eu.'},
      {'question': 'Computadores são úteis só para jogos.'},
      {'question': 'Eu fui muito mal em matemática na escola.'},
      {'question': 'As pessoas tentam me convencer de que o SPSS faz entender estatística ser mais fácil, mas não é verdade.'},
      {'question': 'Eu tenho medo de causar danos irreparáveis por causa da minha incompetência com computadores.'},
      {'question': 'Os computadores têm mentes próprias e deliberadamente erram sempre que tento usá-los.'},
      {'question': 'Computadores me perseguem.'},
      {'question': 'Eu choro publicamente ao ouvir algo sobre tendência central.'},
      {'question': 'Eu entro em coma sempre que vejo uma equação.'},
      {'question': 'O SPSS sempre trava quando tento usá-lo.'},
      {'question': 'Todo mundo olha para mim quando uso o SPSS.'},
      {'question': 'Eu não consigo dormir por causa de pensamentos sobre autovetores.'},
      {'question': 'Eu acordo embaixo das cobertas achando que estou preso embaixo de uma distribuição normal.'},
      {'question': 'Meus amigos são melhores no SPSS do que eu.'}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
    Routine item
  LoopTerminator questionnaire
  Routine thanks
