PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Nome Completo'], expName, expInfo['date'])
  Experiment info = {'Nome Completo': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1366, 768]
  expName = federal_units_of_brazil
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Pressione [Barra de Espaço] para avançar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""

        # cria de lista de problemas estados-capitais
        problems = [("Acre", "Rio Branco"),
                    ("Alagoas", "Maceió"),
                    ("Amapá", "Macapá"),
                    ("Amazonas", "Manaus"),
                    ("Bahia", "Salvador"),
                    ("Ceará", "Fortaleza"),
                    ("Distrito Federal", "Brasília"),
                    ("Espírito Santo", "Vitória"),
                    ("Goiás", "Goiânia"),
                    ("Maranhão", "São Luís"),
                    ("Mato Grosso", "Cuiabá"),
                    ("Mato Grosso do Sul", "Campo Grande"),
                    ("Minas Gerais", "Belo Horizonte"),
                    ("Pará", "Belém"),
                    ("Paraíba", "João Pessoa"),
                    ("Paraná", "Curitiba"),
                    ("Pernambuco", "Recife"),
                    ("Piauí", "Teresina"),
                    ("Rio de Janeiro", "Rio de Janeiro"),
                    ("Rio Grande do Norte", "Natal"),
                    ("Rio Grande do Sul", "Porto Alegre"),
                    ("Rondônia", "Porto Velho"),
                    ("Roraima", "Boa Vista"),
                    ("Santa Catarina", "Florianópolis"),
                    ("São Paulo", "São Paulo"),
                    ("Sergipe", "Aracaju"),
                    ("Tocantins", "Palmas")]

        # embaralha lista
        shuffle(problems)

        # lista apenas com capitais
        capitals = list()
        for problem in problems:
            capitals.append(problem[1])

        # alternativas contendo as respostas
        alternatives = list()
        correct_responses = list()

        # itera problemas para gerar conjunto com resposta correta e duas alternativas incorretas distintas
        for i, problem in enumerate(problems):
            while True:
                # seleciona alternativas incorretas
                inc1 = randchoice(capitals)
                inc2 = randchoice(capitals)
                # checa se alternativas são realmente incorretas e distintas
                if (inc1 != inc2) and (inc1 != problem[1]) and (inc2 != problem[1]):
                    # lista de alternativas
                    resps = [problem[1], inc1, inc2]
                    shuffle(resps)
                    alternatives.append(resps)

                    # salva posição do gabarito na lista
                    correct_responses.append(alternatives[i].index(problem[1]))
                    break
      End Experiment:
        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        A seguir, você verá o nome dos estados do Brasil. Sua tarefa será selecionar a alternativa que corresponde ao nome da capital de cada estado.

        Responda o mais rápida e acuradamente possível.

        Pressione [Barra de Espaço] para iniciar.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine item
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    CodeComponent item_code
      Code Type = Py
      End Routine:
        # selecionando a resposta dos participantes
        idx = item_slider.getRating() # "0", "1" ou "2"

        # resposta do participante
        response = alternatives[trials.thisN][int(idx)]

        # checa acerto ou erro
        if response == problems[trials.thisN][1]:
            resp_corr = 1
        else:
            resp_corr = 0

        thisExp.addData("problem", problems[trials.thisN][0])
        thisExp.addData("alt1", alternatives[trials.thisN][0])
        thisExp.addData("alt2", alternatives[trials.thisN][1])
        thisExp.addData("alt3", alternatives[trials.thisN][2])
        thisExp.addData("corr", problems[trials.thisN][1])
        thisExp.addData("response", response)
        thisExp.addData("resp_corr", resp_corr)
    TextComponent item_probe
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $problems[trials.thisN][0]
      units = norm
      wrapWidth = 1.8
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    SliderComponent item_slider
      borderColor = -1.0000, -1.0000, 0.0902
      color = 0.0000, 0.0000, 0.0000
      fillColor = 1.0000, -1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      granularity = 0
      labels = ("0", "1", "2")
      letterHeight = 0.06
      pos = (0, -0.5)
      size = (1.4, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      units = norm
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    TextComponent alt1
      font = Times New Roman
      letterHeight = 0.08
      pos = (-0.7, -0.65)
      startVal [time (s)] = 0.0
      text [set every repeat] = $alternatives[trials.thisN][0]
      units = norm
      wrapWidth = 1.8
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    TextComponent alt2
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.65)
      startVal [time (s)] = 0.0
      text [set every repeat] = $alternatives[trials.thisN][1]
      units = norm
      wrapWidth = 1.8
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    TextComponent alt3
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.7, -0.65)
      startVal [time (s)] = 0.0
      text [set every repeat] = $alternatives[trials.thisN][2]
      units = norm
      wrapWidth = 1.8
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Flow
  Routine welcome
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(problems)
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    conditions:
      [{'question': 'Estatística me faz chorar.'},
      {'question': 'Meus amigos vão pensar que sou burro por não ser capaz de usar o SPSS.'},
      {'question': 'Desvios-padrão me deixam animado.'},
      {'question': 'Tenho pesadelos com Pearson me atacando com coeficientes de correlação.'},
      {'question': 'Eu não entendo estatística.'},
      {'question': 'Eu tenho pouca experiência com computadores.'},
      {'question': 'Computadores me odeiam.'},
      {'question': 'Eu nunca fui bom em matemática.'},
      {'question': 'Meus amigos são melhores em estatística do que eu.'},
      {'question': 'Computadores são úteis só para jogos.'},
      {'question': 'Eu fui muito mal em matemática na escola.'},
      {'question': 'As pessoas tentam me convencer de que o SPSS faz entender estatística ser mais fácil, mas não é verdade.'},
      {'question': 'Eu tenho medo de causar danos irreparáveis por causa da minha incompetência com computadores.'},
      {'question': 'Os computadores têm mentes próprias e deliberadamente erram sempre que tento usá-los.'},
      {'question': 'Computadores me perseguem.'},
      {'question': 'Eu choro publicamente ao ouvir algo sobre tendência central.'},
      {'question': 'Eu entro em coma sempre que vejo uma equação.'},
      {'question': 'O SPSS sempre trava quando tento usá-lo.'},
      {'question': 'Todo mundo olha para mim quando uso o SPSS.'},
      {'question': 'Eu não consigo dormir por causa de pensamentos sobre autovetores.'},
      {'question': 'Eu acordo embaixo das cobertas achando que estou preso embaixo de uma distribuição normal.'},
      {'question': 'Meus amigos são melhores no SPSS do que eu.'}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
    Routine item
  LoopTerminator trials
  Routine thanks
