PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Nome Completo'], expName, expInfo['date'])
  Experiment info = {'Nome Completo': '', 'total_blocks': '10'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1366, 768]
  color = -1.0000, -1.0000, -1.0000
  expName = two-digit-number-comparison-task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import math

        # Define a condição do participante quanto ao mapeamento
        # das teclas e das respostas MAIOR/MENOR
        if 2 > .5:
            left_msg, right_msg = "Menor que 55", "Maior que 55"
            button_condition = "left-lower/right-greater"
            lower, greater = " ← ", " → "
        else:
            left_msg, right_msg = "Maior que 55", "Menor que 55"
            button_condition = "left-greater/right-lower"
            lower, greater = " → ", " ← "

        instr = [f"""
        Nesta tarefa, você verá números de dois dígitos. Sua tarefa será responder o mais rápida e acuradamente possível se o número na tela é menor ou maior que 55.

        • Se o número na tela for MENOR QUE 55, responda [{lower}].
        • Se o número na tela for MAIOR QUE 55, responda [{greater}].

        Pressione [Barra de Espaço] para iniciar.""",
        f"""
        A seguir, você realizará mais uma rodada da mesma tarefa.

        • Se o número na tela for MENOR QUE 55, responde [{lower}].
        • Se o número na tela for MAIOR QUE 55, responda [{greater}]."""]
      Begin Routine:
        # Define gabarito a depender do target_number e do
        # button_condition em vigor
        if target_number < 55:
            if button_condition == "left-lower/right-greater":
                corr = "left"
            else:
                corr = "right"

        elif target_number > 55:
            if button_condition == "left-lower/right-greater":
                corr = "right"
            else:
                corr = "left"
      End Routine:
        # salva variáveis importantes
        thisExp.addData("left_msg", left_msg)
        thisExp.addData("right_msg", right_msg)
        thisExp.addData("button_condition", button_condition)
        thisExp.addData("corr", corr)
    TextComponent number
      font = Times New Roman
      letterHeight = 0.35
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text [set every repeat] = $target_number
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    ImageComponent alternatives
      image = arrows.jpg
      pos = (0, -0.75)
      size = (0.5, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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    TextComponent left_alt
      font = Times New Roman
      letterHeight = 0.10
      pos = (-0.6, -0.75)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = $left_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent right_alt
      font = Times New Roman
      letterHeight = 0.10
      pos = (0.6, -0.75)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text [set every repeat] = $right_msg
      units = norm
      wrapWidth = 1.8
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()




        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Pressione [Barra de Espaço] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr[instr_idx]
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rest
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    CodeComponent rest_code
      Code Type = Py
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      Begin Experiment:
        try:
            total_blocks = int(expInfo["total_blocks"])
            # checa se o número de blocos é ímpar
            if (total_blocks % 2) == 1:
                total_blocks += 1

        except:
            total_blocks = 10

        # variáveis que controlam instruções
        instr_idx = 0
        enabled = True
      Begin Routine:
        # metade da tarefa, pausa obrigatória
        if blocks.thisN == (total_blocks / 2 - 1):
            rest_msg = "Pausa obrigatória de 5 minutos. Aguarde o fim do tempo para avançar."
            timer = core.CountdownTimer(start = 300)
            timer_color = "green"

        # encerra a sessão
        elif blocks.thisN == (total_blocks - 1):
            blocks.finished = True
            continueRoutine = False

        # pausas opcionais nos demais ciclos
        elif blocks.thisN != (total_blocks / 2 - 1):
            rest_msg = "Pausa opcional de 1 minuto. Aproveite para tomar água e se alongar, ou pressione [Barra de Espaço] para prosseguir."
            timer = core.CountdownTimer(start = 60)
            timer_color = "green"
      Each Frame:
        minutes = math.floor(timer.getTime() / 60)
        seconds = math.floor(timer.getTime() - minutes * 60)
        timing = str(int(minutes)).zfill(2) + ":" + str(int(seconds)).zfill(2)

        # monitora a cor do relógio
        if (math.floor(timer.getTime()) <= 5):
            timer_color = "red"

        # monitora encerramento do relógio
        if (timer.getTime() <= 0):
            continueRoutine = False

        if ("space" in rest_resp.keys) and ("opcional" in rest_msg):
            continueRoutine = False
      End Routine:
        if enabled:
            instr_idx += 1
            enabled = False
    TextComponent rest_prompt
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rest_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent rest_clock
      color [set every frame] = $timer_color
      font = Times New Roman
      letterHeight = 0.25
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $timing
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent rest_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = total_blocks
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    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = stim.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'target_number': 11, 'condition': 'lower'},
        {'target_number': 12, 'condition': 'lower'},
        {'target_number': 13, 'condition': 'lower'},
        {'target_number': 14, 'condition': 'lower'},
        {'target_number': 15, 'condition': 'lower'},
        {'target_number': 16, 'condition': 'lower'},
        {'target_number': 17, 'condition': 'lower'},
        {'target_number': 18, 'condition': 'lower'},
        {'target_number': 19, 'condition': 'lower'},
        {'target_number': 20, 'condition': 'lower'},
        {'target_number': 21, 'condition': 'lower'},
        {'target_number': 22, 'condition': 'lower'},
        {'target_number': 23, 'condition': 'lower'},
        {'target_number': 24, 'condition': 'lower'},
        {'target_number': 25, 'condition': 'lower'},
        {'target_number': 26, 'condition': 'lower'},
        {'target_number': 27, 'condition': 'lower'},
        {'target_number': 28, 'condition': 'lower'},
        {'target_number': 29, 'condition': 'lower'},
        {'target_number': 30, 'condition': 'lower'},
        {'target_number': 31, 'condition': 'lower'},
        {'target_number': 32, 'condition': 'lower'},
        {'target_number': 33, 'condition': 'lower'},
        {'target_number': 34, 'condition': 'lower'},
        {'target_number': 35, 'condition': 'lower'},
        {'target_number': 36, 'condition': 'lower'},
        {'target_number': 37, 'condition': 'lower'},
        {'target_number': 38, 'condition': 'lower'},
        {'target_number': 39, 'condition': 'lower'},
        {'target_number': 40, 'condition': 'lower'},
        {'target_number': 41, 'condition': 'lower'},
        {'target_number': 42, 'condition': 'lower'},
        {'target_number': 43, 'condition': 'lower'},
        {'target_number': 44, 'condition': 'lower'}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
      Routine trial
    LoopTerminator trials
    Routine rest
  LoopTerminator blocks
  Routine thanks
