PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = [900, 600]
  color = $[-1, -1, -1]
  expName = posner
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        valid_rts = []
        invalid_rts = []
        neutral_rts = []
      End Routine:
        if is_valid == 1:
            valid_rts.append(resp.rt)
        elif is_valid == -1:
            invalid_rts.append(resp.rt)
        elif is_valid == 0:
            neutral_rts.append(resp.rt)
    TextComponent fixation
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
      units = norm
      wrapWidth = 1.8
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    ImageComponent cue_stim
      image [set every repeat] = $cue
      ori [set every repeat] = 0
      size = (.50, .50)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.2
      units = norm
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    ImageComponent target_stim
      image = images/mario.png
      pos [set every repeat] = [target_x, 0]
      size = (.60, .60)
      startVal [time (s)] = 1.0
      units = norm
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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    TextComponent reminder
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.8)
      startVal [time (s)] = 4
      units = norm
      wrapWidth = 1.8
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      text:
        Responda [←] ou [→].
  Routine finish
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    CodeComponent finish_code
      Code Type = Py
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      Begin Routine:
        valid_mean = np.mean(np.array(valid_rts)) * 1000
        invalid_mean = np.mean(np.array(invalid_rts)) * 1000
        neutral_mean = np.mean(np.array(neutral_rts)) * 1000

        #store summaries to data file
        thisExp.addData("valid_mean", valid_mean)
        thisExp.addData("invalid_mean", invalid_mean)
        thisExp.addData("neutral_mean", neutral_mean)

        rt_msg = f"Tempos de Reação:\n\nPistas Neutras: {neutral_mean:.0f} ms\nPistas Válidas: {valid_mean:.0f} ms\nPistas Inválidas: {invalid_mean:.0f} ms\n\nPressione [Barra de Espaço] para finalizar a sessão."
    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $rt_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    TextComponent feedback_rt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'Tempo de Reação: ' + str(int(resp.rt * 1000)) + ' ms'
      units = norm
      wrapWidth = 1.8
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  Routine instruction
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    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.09
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Nesta tarefa, você verá o Mario, da franquia Super Mario, à esquerda ou à direita da tela.

        • Se o Mario aparecer do lado esquerdo da tela, pressione [←].
        • Se o Mario aparecer do lado direito da tela, pressione [→].

        Pressione [Barra de Espaço] para iniciar a tarefa.
    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = fullRandom
    nReps = 4
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    conditions:
      [{'cue': 'images/arrow_left.png', 'target_x': -0.55, 'is_valid': 1, 'corr': 'left'},
      {'cue': 'images/arrow_left.png', 'target_x': -0.55, 'is_valid': 1, 'corr': 'left'},
      {'cue': 'images/arrow_left.png', 'target_x': -0.55, 'is_valid': 1, 'corr': 'left'},
      {'cue': 'images/arrow_left.png', 'target_x': -0.55, 'is_valid': 1, 'corr': 'left'},
      {'cue': 'images/arrow_left.png', 'target_x': 0.55, 'is_valid': -1, 'corr': 'right'},
      {'cue': 'images/arrow_right.png', 'target_x': 0.55, 'is_valid': 1, 'corr': 'right'},
      {'cue': 'images/arrow_right.png', 'target_x': 0.55, 'is_valid': 1, 'corr': 'right'},
      {'cue': 'images/arrow_right.png', 'target_x': 0.55, 'is_valid': 1, 'corr': 'right'},
      {'cue': 'images/arrow_right.png', 'target_x': 0.55, 'is_valid': 1, 'corr': 'right'},
      {'cue': 'images/arrow_right.png', 'target_x': -0.55, 'is_valid': -1, 'corr': 'left'},
      {'cue': 'images/no_arrow.png', 'target_x': -0.55, 'is_valid': 0, 'corr': 'left'},
      {'cue': 'images/no_arrow.png', 'target_x': 0.55, 'is_valid': 0, 'corr': 'right'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine finish
