PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = -1.0000, -1.0000, -1.0000
  expName = dpt_task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # se a perspectiva é do outro
        if (perspective == "other"):
            # seleciona número associado à imagem
            dot_number = int(image[-5])
            corr = "s"
            perspective_msg = "OUTRA"
            # se a tentativa é de mismatching, selecione número diferente para dot_number
            if (trial_type == "mismatching"):
                while True:
                    temp = randchoice([1, 2, 3])
                    if temp != dot_number:
                        dot_number = temp
                        corr = "n"
                        break
        # se a perspectiva é a própria
        elif (perspective == "self"):
            # seleciona número associado à imagem
            dot_number = int(image[-12])
            corr = "s"
            perspective_msg = "EU"
            # se a tentativa é de mismatching, selecione número diferente para dot_number
            if (trial_type == "mismatching"):
                while True:
                    temp = randchoice([1, 2, 3])
                    if temp != dot_number:
                        dot_number = temp
                        corr = "n"
                        break
      End Routine:
        thisExp.addData("dot_number", dot_number)
        thisExp.addData("corr", corr)
    TextComponent fixation
      font = Times New Roman
      letterHeight = 0.30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text = +
      units = norm
      wrapWidth = 1.8
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    TextComponent perspective_label
      font = Times New Roman
      letterHeight = 0.30
      startVal [time (s)] = 1.250
      stopVal [duration (s)] = 0.500
      text [set every repeat] = $perspective_msg
      units = norm
      wrapWidth = 1.8
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    TextComponent dot_prompt
      font = Times New Roman
      letterHeight = 0.30
      startVal [time (s)] = 2.250
      stopVal [duration (s)] = .750
      text [set every repeat] = $dot_number
      units = norm
      wrapWidth = 1.8
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    ImageComponent stimulus
      image [set every repeat] = $image
      size = (1.8, 1.8)
      startVal [time (s)] = 3.500
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 's', 'n'
      correctAns = $corr
      forceEndRoutine = True
      startVal [time (s)] = 3.500
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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  Routine instruction
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    CodeComponent initial_instr_code
      Code Type = Py
      Begin Experiment:
        # lista de instruções
        initial_instruction_list = ["instructions\instructions01.jpg",
                                    "instructions\instructions02.jpg",
                                    "instructions\instructions03.jpg",
                                    "instructions\instructions04.jpg",
                                    "instructions\instructions05.jpg",
                                    "instructions\instructions06.jpg",
                                    "instructions\instructions07.jpg",
                                    "instructions\instructions08.jpg",
                                    "instructions\instructions09.jpg",
                                    "instructions\instructions10.jpg",
                                    "instructions\instructions11.jpg",
                                    "instructions\instructions12.jpg",
                                    "instructions\instructions13.jpg",
                                    "instructions\instructions14.jpg",
                                    "instructions\instructions15.jpg",
                                    "instructions\instructions16.jpg"]

        current_instruction = 0
      End Routine:
        if instr_initial_resp.keys == "left":
            current_instruction -= 1
        elif instr_initial_resp.keys == "right":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(initial_instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True
    KeyboardComponent instr_initial_resp
      allowedKeys = ['left', 'right']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent initial_instruction_images
      image [set every repeat] = $initial_instruction_list[current_instruction]
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine thanks
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    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Fim do experimento!

        Obrigado por sua participação!

        Pressione [BARRA DE ESPAÇO] para fechar a janela.
    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 9999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'DPT/Black_Female_LookLeft_Self1_Other1.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookLeft_Self2_Other2.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookLeft_Self3_Other3.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookRight_Self1_Other1.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookRight_Self2_Other2.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookRight_Self3_Other3.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookLeft_Self0_Other0.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookLeft_Self1_Other1.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookLeft_Self2_Other2.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookLeft_Self3_Other3.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookRight_Self0_Other0.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
