PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [900, 600]
  color = -1.0000, -1.0000, -1.0000
  expName = reversal_learning_task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        def gerar_reforcos(n_trials=150):
            """
            Gera reforços com proporção de 0.75 (3 em 4 tentativas recebem reforço positivo)
            """
            reforcos = []
            n_blocos = n_trials // 4
            sobra = n_trials % 4

            for _ in range(n_blocos):
                bloco = [True, True, True, False]
                np.random.shuffle(bloco)
                reforcos.extend(bloco)

            if sobra > 0:
                resto_pool = [True, True, False, False]
                np.random.shuffle(resto_pool)
                reforcos.extend(resto_pool[:sobra])

            return reforcos

        reforcos = gerar_reforcos()
        print(len(reforcos))
      Begin Experiment:
        # inicializa variáveis
        x_pos = score = 0
        point_msg = ""

        # define alvo inicial
        if random() > 0.5:
            target = r"images\fractal1.jpg"
        else:
            target = r"images\fractal2.jpg"


        def switching(length = 150, n_switches = 9, intervalo_min = 12, intervalo_max = 18):
            assert intervalo_min * n_switches <= length <= intervalo_max * n_switches, "Impossível encaixar os switches."

            while True:
                # Amostra os primeiros n_switches - 1 intervalos
                primeiros = np.random.randint(intervalo_min, intervalo_max + 1, size=n_switches - 1)
                soma_parcial = primeiros.sum()
                ultimo = length - soma_parcial

                # Verifica se o último intervalo cabe
                if intervalo_min <= ultimo <= intervalo_max:
                    intervalos = list(primeiros) + [ultimo]
                    break

            cumulativos = np.cumsum(intervalos)
            switch = [False] * length
            for i in cumulativos:
                switch[i - 1] = True

            return switch

        # monitora mudanças
        switches = switching()
      Begin Routine:
        # corr_target → Resposta "correta" teórica
        # imagem_reforcada → Imagem que será reforçada neste trial
        # corr → Resposta correta do ponto de vista comportamental

        opa = 0

        # monitora mudança de alvo
        if switches[trials.thisN]:
            target = r"images\fractal2.jpg" if target == r"images\fractal1.jpg" else r"images\fractal1.jpg"

        # define posição dos estímulos (randomização esquerda/direita)
        if random() > 0.5:
            fractal_left, fractal_right = r"images\fractal1.jpg", r"images\fractal2.jpg"
        else:
            fractal_left, fractal_right = r"images\fractal2.jpg", r"images\fractal1.jpg"

        # define reforço deste trial
        reforco_aplicado = reforcos[trials.thisN]

        # define qual imagem está sendo reforçada
        if reforco_aplicado:
            imagem_reforcada = target
        else:
            imagem_reforcada = fractal_left if target == fractal_right else fractal_right

        # define qual tecla está associada à imagem reforçada
        if imagem_reforcada == fractal_left:
            corr = "left"
        else:
            corr = "right"

        # (opcional) define qual seria a resposta correta se o target fosse determinístico
        if target == fractal_left:
            corr_target = "left"
        else:
            corr_target = "right"

        debug_info = (
            f"Trial: {trials.thisN + 1}\n"
            f"Target image: {target}\n"
            f"Fractal left: {fractal_left}\n"
            f"Fractal right: {fractal_right}\n"
            f"Switch trial: {switches[trials.thisN]}\n"
            f"Reforço aplicado: {reforco_aplicado}\n"
            f"Imagem reforçada: {imagem_reforcada}\n"
            f"Correct response (reforço): {corr}\n"
            f"Correct response (target, ignorando reforço): {corr_target}\n"
            f"Pontos acumulados até agora: {score}"
        )
      Each Frame:
        if key_resp.keys == "left":
            x_pos = -0.5
            opa = 1
        elif key_resp.keys == "right":
            x_pos = 0.5
            opa = 1
      End Routine:
        # reforco_aplicado = True se o participante deve receber ponto por acertar a imagem correta
        reforco_aplicado = reforcos[trials.thisN]

        # Nenhuma resposta foi dada
        if not key_resp.keys:
            score -= 1
            point_msg = "–1"
            ausencias_consecutivas += 1
            ausencias_totais += 1
        else:
            ausencias_consecutivas = 0  # zera a contagem se houve resposta

            if key_resp.corr:
                score += 1
                point_msg = "+1"

            # Resposta incorreta
            else:
                score -= 1
                point_msg = "–1"


        if score > 0:
            cum_score_msg = f"+{abs(score)}"
        elif score < 0:
            cum_score_msg = f"–{abs(score)}"
        else:
            cum_score_msg = "0"

        thisExp.addData("left_image", fractal_left)
        thisExp.addData("right_image", fractal_right)
        thisExp.addData("target_image", target)
        thisExp.addData("switch_trial", switches[trials.thisN])
        thisExp.addData("reinforcement", reforco_aplicado)
        thisExp.addData("reinforced_image", imagem_reforcada)
        thisExp.addData("corr_resp", corr)
        thisExp.addData("deterministic_corr_resp", corr_target)
        thisExp.addData("participant_resp", key_resp.keys)
        thisExp.addData("feedback", point_msg)
        thisExp.addData("score", score)

        # Verifica critérios de encerramento
        if ausencias_consecutivas >= 5 or ausencias_totais >= 9:
            if ausencias_consecutivas >= 5:
                motivo_fim = "Encerrado por 5 ausências consecutivas"
            else:
                motivo_fim = "Encerrado por 9 ausências totais"

            # Log de encerramento
            thisExp.addData("motivo_encerramento", motivo_fim)
            thisExp.addData("ausencias_consecutivas", ausencias_consecutivas)
            thisExp.addData("ausencias_totais", ausencias_totais)

            # (opcional) Mostra mensagem final ao participante
            trials.finished = True
    TextComponent fixation
      font = Times New Roman
      letterHeight = 0.30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
      wrapWidth = 1.8
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    PolygonComponent polygon
      fillColor = None
      lineColor = red
      lineWidth = 6
      opacity [set every frame] = opa
      pos [set every frame] = (x_pos, 0)
      shape = regular polygon...
      size = (0.7, 0.7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = norm
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    ImageComponent stim_left
      image [set every repeat] = $fractal_left
      pos = (-0.5, 0)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = norm
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    ImageComponent stim_right
      image [set every repeat] = $fractal_right
      pos = (0.5, 0)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $corr
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    TextComponent text
      disabled = True
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $debug_info
      units = norm
      wrapWidth = 1.8
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  Routine instruction
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    CodeComponent initial_instr_code
      Code Type = Py
      Begin Experiment:
        # lista de instruções
        initial_instruction_list = ["instructions\practice_instruction_01.jpg",
                                    "instructions\practice_instruction_02.jpg",
                                    "instructions\practice_instruction_03.jpg",
                                    "instructions\practice_instruction_04.jpg",
                                    "instructions\practice_instruction_05.jpg",
                                    "instructions\practice_instruction_06.jpg",
                                    "instructions\practice_instruction_07.jpg",
                                    "instructions\practice_instruction_08.jpg",
                                    "instructions\practice_instruction_09.jpg",
                                    "instructions\practice_instruction_10.jpg",
                                    "instructions\practice_instruction_11.jpg",
                                    "instructions\practice_instruction_12.jpg",
                                    "instructions\practice_instruction_13.jpg",
                                    "instructions\practice_instruction_18.jpg",
                                    "instructions\practice_instruction_19.jpg"]

        current_index = 0

        # BEGIN EXPERIMENT
        ausencias_consecutivas = 0
        ausencias_totais = 0
      End Routine:
        if instr_initial_resp.keys == "left":
            current_index -= 1
        elif instr_initial_resp.keys == "right":
            current_index += 1

        # Se a instrução atual for -1
        if current_index == -1:
            # Resete o valor para ser 0
            current_index = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_index == len(initial_instruction_list):
            instructions.finished = True
    KeyboardComponent instr_initial_resp
      allowedKeys = ['left', 'right']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent initial_instruction_images
      image [set every repeat] = $initial_instruction_list[current_index]
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine thanks
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    TextComponent thanks_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Fim do experimento!

        Obrigado por sua participação!

        Pressione [BARRA DE ESPAÇO] para fechar a janela.
    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_feedback
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    TextComponent point_feedback
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $point_msg
      units = norm
      wrapWidth = 1.8
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  Routine cumulative_score
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    TextComponent cum_score_title
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Pontuação Acumulada
      units = norm
      wrapWidth = 1.8
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    TextComponent cum_score
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $cum_score_msg
      units = norm
      wrapWidth = 1.8
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Flow
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 9999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 150
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    conditions:
      [{'image': 'DPT/Black_Female_LookLeft_Self1_Other1.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookLeft_Self2_Other2.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookLeft_Self3_Other3.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookRight_Self1_Other1.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookRight_Self2_Other2.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookRight_Self3_Other3.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'matching'},
      {'image': 'DPT/Black_Female_LookLeft_Self0_Other0.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookLeft_Self1_Other1.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookLeft_Self2_Other2.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookLeft_Self3_Other3.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'},
      {'image': 'DPT/Black_Female_LookRight_Self0_Other0.tif', 'perspective': 'other', 'consistency': 'consistent', 'trial_type': 'mismatching'}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
    Routine trial
    Routine trial_feedback
    Routine cumulative_score
  LoopTerminator trials
  Routine thanks
