PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = running-memory-span
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        instruction_list = [
        """
        Neste estudo, você verá sequências de letras na tela.

        Sua tarefa será memorizar e relatar as últimas N letras de cada sequência, na ordem em que elas aparecerem.
        """,
        """
        Antes de cada sequência, você será informado sobre quantos itens (N) deverá relatar ao final.

        Por exemplo: se N = 3 e a sequência for ABCDE, a resposta correta será CDE.
        """,
        """
        As letras aparecerão uma de cada vez no centro da tela.

        Concentre-se em lembrar apenas as últimas N letras, na ordem em que elas aparecerem.
        """,
        """
        Em algumas tentativas, o número de letras a lembrar será igual ao número apresentado.

        Em outras, você verá mais letras do que precisará efetivamente se lembrar depois.

        Nos dois casos, relate apenas as últimas N letras vistas.
        """,
        """
        Depois da sequência, você verá uma grade com 12 letras e botões de resposta.

        - Clique nas letras para selecioná-las.
        - As letras escolhidas aparecerão em uma barra na parte inferior da tela.
        """,
        """
        Use os botões para ajudar na resposta:

        - [Enviar]: quando terminar de selecionar todas as N letras, na ordem correta.
        - [Limpar]: apaga sua resposta e permite começar novamente.
        - [Branco]: marca a posição de uma letra esquecida.
        """,
        """
        Lembre-se: a ordem das letras é muito importante.

        Se você se esquecer de uma letra, use [Branco] para marcar a posição da letra esquecida com um traço (–).

        Por exemplo, se N = 3 e a sequência for ABCDE, mas você esqueceu a penúltima letra, responda C–E. Você ganhará 2 pontos, pois C e E estão corretos em suas respectivas posições.
        """,
        """
        Por outro lado, se N = 3 e a sequência for ABCDE, mas você responder CE, você ganhará apenas um ponto.

        Isso acontecerá porque apenas a letra E está na posição serial correta. A letra C não foi a penúltima vista, mas, sim, a antepenúltima.
        """,
        """
        Em seguida, daremos início à tarefa. Se tiver dúvidas, chame o pesquisador antes de começar.

        Quando estiver pronto, clique em [Avançar] para começar a tarefa.
        """
        ]


        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
        thisExp.addData('condition', cond)
        thisExp.addData('ITI', my_iti)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()


        # sorteia a condição de cada participante
        conditions = ["slow rate", "fast rate"]
        input_rate = {"slow rate": 1.7,# tentativa: 0.3 s + 1.7 s = 2.0 s
                      "fast rate": 0.2 # tentativa: 0.3 s + 0.2 s = 0.5 s
                     }

        cond = random.choice(conditions)  # nome da condição
        my_iti = input_rate[cond]         # valor do ITI na condição

        print(f"Condição: {cond}, ITI = {my_iti} s.")
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
        thisExp.addData('condition', cond)
        thisExp.addData('ITI', my_iti)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine math
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    CodeComponent math_code
      Code Type = Py
      Begin Experiment:
        # apenas uma função gigante para criar os diferentes problemas do OSpan
        def math_problems():
            math = []

            for OP1 in ["mult", "div"]:
                for OP2 in ["add", "sub"]:
                    for i in range(2, 10):
                        for j in range(2, 5):
                            for k in range(1, 3):

                                if OP1 == "mult" and OP2 == "add":
                                    op1, op2 = "×", "+"
                                    result = i * j + k
                                elif OP1 == "mult" and OP2 == "sub":
                                    op1, op2 = "×", "–"
                                    result = i * j - k
                                elif OP1 == "div" and OP2 == "add":
                                    op1, op2 = "/", "+"
                                    result = i / j + k
                                elif OP1 == "div" and OP2 == "sub":
                                    op1, op2 = "/", "–"
                                    result = i / j - k

                                if i < j or result <= 0 or result > 10 or not float(result).is_integer():
                                    continue

                                # correct problems
                                string = f"({i} {op1} {j}) {op2} {k} = ?"
                                math.append(("yes", string, f"{int(result)}"))

                                # incorrect problems
                                while True:
                                    noise = np.random.choice([-3, -2, -1, 1, 2, 3])
                                    check = result + noise
                                    if check > 0:
                                        result += noise
                                        break

                                string = f"({i} {op1} {j}) {op2} {k} = ?"
                                math.append(("no", string, f"{int(result)}"))

            return math

        # chamada da função para criar a lista de problemas
        math = list()
        for i in range(2):
            math.extend(math_problems())

        # embaralha a lista
        np.random.shuffle(math)
        math_count = 0

        # contador de tentativas e acertos em matemática
        math_total_trials = math_trials_correct = speed_errors = 0
        abort_trial = False # controla interrupção da tarefa matemática

        # contador de tempo no treino
        math_training_time = list()
      Begin Routine:
        math_clock = core.Clock()

        try:
            # se é a primeira execução do loop...
            if math_practice_trials.thisN == 0:
                math_color = "red" # agora teremos feedback na cor vermelha
                math_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if ospan_training_trial.thisN == 0:
                math_errors = 0
        except:
            pass

        try:
            # se é a primeira execução do loop...
            if ospan_testing_trial.thisN == 0:
                math_errors = 0
        except:
            pass

        # reseta os contadores quando começa o OSPAN para valer
        try:
            if (ospan_testing_trials.thisN == 0) and (ospan_testing_trial.thisN == 0):
                math_total_trials = math_trials_correct = speed_errors = 0
        except:
            pass
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if math_clock.getTime() >= math_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Routine:
        # salva variáveis
        thisExp.addData("math_problem", math[math_count][1]) # enunciado
        thisExp.addData("math_correct_response", math[math_count][0]) # gabarito
        thisExp.addData("math_problem_response", math[math_count][2]) # resultado da conta

        if abort_trial:
            math_speed_error = 1 # abortou devido a velocidade
        else:
            math_speed_error = 0 # abortou devido a velocidade

        try:
            thisExp.addData("problem_rt", math_clock.getTime()) # problem RT
        except:
            pass
    TextComponent math_problem
      font = Times New Roman
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text [set every repeat] = $math[math_count][1]
      units = norm
      wrapWidth = 1.8
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    TextComponent math_prompt
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Quando você tiver resolvido o problema matemático, clique em [Continuar]
      units = norm
      wrapWidth = 1.8
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    ImageComponent continue_
      image = images/continue_button.jpg
      pos = (0.0, -0.8)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent math_problem_next
      clickable = continue_
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine letter
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    CodeComponent letters_code
      Code Type = Py
      Begin Experiment:
        fixed_letters = list("FHJKLNPQRSTY")
        letters = list("FHJKLNPQRSTY")

        letter_list = list()
      Begin Routine:
        # tenta atribuir o valor da repetição do loop atual à variável index
        # isso facilitará o acesso e a apresentação de cada letra na sequência de uma tentativa
        try:
            index = running_memory_span_trial.thisN
        except:
            pass

        # tenta embaralhar as letras sempre que estivermos em uma nova tentativa
        try:
            # se é a primeira execução do loop...
            if running_memory_span_trial.thisN == 0:
                # embaralha letras usada na tarefa de armazenamento
                np.random.shuffle(letters)
                # seleciona a sequência que será mostrada na rodada
                current_sequence = "".join(letters[:current_length])
                # e seleciona as n últimas letras que serão o alvo da tentativa
                correct_response = current_sequence[-current_span:]

        except:
            pass

        # cria uma lista de imagens (que está na subpasta "images")
        for letter in fixed_letters:
            letter_list.append(f"images/{letter}_gray.jpg")
      End Routine:
        thisExp.addData('condition', cond)
        thisExp.addData('ITI', my_iti)
        thisExp.addData('current_length', current_length)
        thisExp.addData('current_span', current_span)
        thisExp.addData('current_distractor', current_distractor)
    TextComponent to_be_remembered
      font = Times New Roman
      letterHeight = 0.5
      startEstim = 0.2
      startVal [time (s)] = $my_iti
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $current_sequence[index]
      units = norm
      wrapWidth = 1.8
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  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        def EditDistanceScore(target, recall):
            """
            Recebe duas strings que serão comparadas. Retorna o edit distance score,
            que consiste em len(target) – distância de Damerau–Levenshtein. Se a substração resultar em
            valor negativo, fixa valor em 0.
            """
            # se strings são idênticas
            if recall == target:
                return len(target) # edit distance = tamanho da string
            # se nada foi lembrado
            elif recall == "": # edit distance = 0
                return 0

            stimDict = {target[0]: "0"}

            for targetIndex in range(0, len(target)):
                if target[targetIndex] not in stimDict:
                    stimDict[target[targetIndex]] = "0"

            for recallIndex in range(0, len(recall)):
                if recall[recallIndex] not in stimDict:
                    stimDict[recall[recallIndex]] = "0"

            disMatrix = np.zeros(shape=(len(target) + 2, len(recall) + 2))

            inf = len(target) + len(recall)

            for targetIndex in range(0, len(target) + 1):
                disMatrix[targetIndex + 1, 0] = inf
                disMatrix[targetIndex + 1, 1] = targetIndex

            for recallIndex in range(0, len(recall)+1):
                disMatrix[0, recallIndex + 1] = inf
                disMatrix[1, recallIndex + 1] = recallIndex

            for targetIndex in range(1, len(target)+1):
                present = 0
                for recallIndex in range(1, len(recall) + 1):
                    if recall[recallIndex-1] in stimDict:
                        targetIndex2 = int(stimDict[recall[recallIndex - 1]])

                    recallIndex2 = present
                    cost = 1

                    if target[targetIndex - 1] == recall[recallIndex - 1]:
                        cost = 0
                        present = recallIndex

                    Substitution = disMatrix[targetIndex, recallIndex] + cost
                    Insertion = disMatrix[targetIndex + 1, recallIndex] + 1
                    Deletion = disMatrix[targetIndex, recallIndex + 1] + 1
                    Transposition = disMatrix[targetIndex2, recallIndex2] + (targetIndex - targetIndex2 - 1) + 1 + (recallIndex - recallIndex2 - 1)

                    if Substitution < Insertion and Substitution < Deletion and Substitution < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Substitution
                    elif Insertion < Deletion and Insertion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Insertion
                    elif Deletion < Transposition:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Deletion
                    else:
                        disMatrix[targetIndex + 1, recallIndex + 1] = Transposition


                stimDict[target[targetIndex - 1]] = str(targetIndex)

            # se edit distance < 0, fixa valor em zero
            if len(target) - disMatrix[len(target) + 1, len(recall) + 1] < 0:
                return 0
            # caso contrário, retorna o valor da medida
            else:
                return(int(len(target) - disMatrix[len(target) + 1, len(recall) + 1]))

        def partial_credit(string1, string2):
            score = 0
            for letter1, letter2 in zip(string1, string2):
                if letter1 == letter2:
                    score += 1

            return score

        final_full_credit_score = final_partial_credit_score = final_edit_distance_score = 0
      Begin Routine:
        clicked_things = []
        clickables = [F, H, J, K, L, N, P, Q, R, S, T, Y, send, clear_, blank]
        allowed_send = False
        allowed_blank = True

        my_response = "Minha resposta: "
      Each Frame:
        for i, clickable in enumerate(clickables):
            # if a button was pressed in
            if recall_response.isPressedIn(clickable) and (clickable.name not in clicked_things):
                # and it wasn't send, clear_, and blank buttons
                if (clickable != send) and (clickable != clear_) and (clickable != blank):
                    clicked_things.append(clickable.name)
                    clickable.setImage(f"images/{fixed_letters[i]}_blue.jpg", log = False)
                    my_response = f"{my_response}{fixed_letters[i]}"
                    allowed_send = True
                # and it was the clear_ button
                elif clickable == clear_:
                    for i, clickable in enumerate(clickables[:-3]):
                        clickable.setImage(f"images/{fixed_letters[i]}_gray.jpg", log = False)
                    # reset values
                    clicked_things = []
                    my_response = "Minha resposta: "
                    allowed_send = False # reset
                # and it was the blank button:
                elif (clickable == blank) and (allowed_blank == True):
                    # to prevent two consecutive responses
                    allowed_blank = False
                    blank_clock = core.Clock()
                    #clicked_things.append(clickable.name)
                    my_response = f"{my_response}–"
                    allowed_send = True
                elif (clickable == send) and (allowed_send == True):
                    continueRoutine = False

        # it allows the blank button again
        try:
            if blank_clock.getTime() > 1:
                allowed_blank = True
        except NameError:
            pass
      End Experiment:
        thisExp.addData("final_full_credit_score", final_full_credit_score)
        thisExp.addData("final_partial_credit_score", final_partial_credit_score)
        thisExp.addData("final_edit_distance_score", final_edit_distance_score)
      End Routine:
        # juntando respostas, mas eliminando respostas repetidas e "send"
        participant_response = my_response[16:]

        # crédito completo (pontua apenas sequência idêntica ao gabarito, incluindo ordenação)
        if participant_response == correct_response:
            full_credit_score = current_span
        else:
            full_credit_score = 0

        # crédito parcial (pontua apenas acertos na mesma posição serial)
        partial_credit_score = partial_credit(participant_response, correct_response)

        # edit distance score
        edit_distance_score = EditDistanceScore(correct_response, participant_response)

        # créditos completo parcial e edit distance, somatório da sessão (máx. 99)
        try:
            if running_memory_span_trials.thisN >= 0:
                final_full_credit_score += full_credit_score
                final_partial_credit_score += partial_credit_score
                final_edit_distance_score += edit_distance_score
        except:
            pass

        # criando texto para feedback
        if partial_credit_score > 1:
            word = "letras"
        elif partial_credit_score <= 1:
            word = "letra"

        # mensagens de feedback de recordação e das operações matemáticas
        recall_feedback_msg = f"Você lembrou corretamente de {partial_credit_score} {word} de um total de {current_span}."

        # salva respostas

        thisExp.addData('condition', cond)
        thisExp.addData('ITI', my_iti)
        thisExp.addData('current_length', current_length)
        thisExp.addData('current_span', current_span)
        thisExp.addData('current_distractor', current_distractor)
        thisExp.addData("participant_response", participant_response)
        thisExp.addData("correct_response", correct_response)
        thisExp.addData("full_credit_score", full_credit_score)
        thisExp.addData("partial_credit_score", partial_credit_score)
        thisExp.addData("edit_distance_score", edit_distance_score)

        print(f"Sequência: {current_sequence}; gabarito: {correct_response}; resposta: {participant_response}")
    TextComponent response_recall
      color = darkblue
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every frame] = $my_response
      units = norm
      wrapWidth = 1.8
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    TextComponent prompt_recall
      font = Times New Roman
      letterHeight = 0.08
      pos = (0, 0.85)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Selecione as últimas     letras na mesma ordem em que foram apresentadas.
        Use o botão [Branco] para indicar a posição das letras que esqueceu.
    TextComponent prompt_recall_letter
      color = darkblue
      font = Times New Roman
      letterHeight = 0.09
      pos = (-0.33, 0.9)
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_span
      units = norm
      wrapWidth = 1.8
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    ImageComponent F
      image [set every repeat] = $letter_list[0]
      pos = (-0.5, 0.55)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent H
      image [set every repeat] = $letter_list[1]
      pos = (0, 0.55)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent J
      image [set every repeat] = $letter_list[2]
      pos = (0.5, 0.55)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent K
      image [set every repeat] = $letter_list[3]
      pos = (-0.5, 0.25)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent L
      image [set every repeat] = $letter_list[4]
      pos = (0, 0.25)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent N
      image [set every repeat] = $letter_list[5]
      pos = (0.5, 0.25)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent P
      image [set every repeat] = $letter_list[6]
      pos = (-0.5, -0.05)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Q
      image [set every repeat] = $letter_list[7]
      pos = (0, -0.05)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent R
      image [set every repeat] = $letter_list[8]
      pos = (0.5, -0.05)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent S
      image [set every repeat] = $letter_list[9]
      pos = (-0.5, -0.35)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent T
      image [set every repeat] = $letter_list[10]
      pos = (0, -0.35)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent Y
      image [set every repeat] = $letter_list[11]
      pos = (0.5, -0.35)
      size = (0.18, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent clear_
      image = images/clear_button.jpg
      pos = (-0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent blank
      image = images/blank_button.jpg
      pos = (0.0, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent send
      image = images/send_button.jpg
      pos = (0.6, -0.8)
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent recall_response
      clickable = F, H, J, K, L, N, P, Q, R, S, T, Y, send, clear_, blank
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine recall_feedback
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    TextComponent recall_feedback_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $recall_feedback_msg
      units = norm
      wrapWidth = 1.8
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  Routine math_answer
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    CodeComponent math_answer_code
      Code Type = Py
      Begin Routine:
        answer_clock = core.Clock()

        if abort_trial:
            continueRoutine = False
      Each Frame:
        try:
            # se a duração da rotina excedeu o tempo combinado, interrompa a tentativa
            if math_clock.getTime() >= math_criterion:
                speed_errors += 1
                abort_trial = True
                continueRoutine = False
        except:
            pass
      End Experiment:
        thisExp.addData("math_time_mean", math_time_mean)
        thisExp.addData("math_time_sd", math_time_sd)
        thisExp.addData("math_criterion", math_criterion)
      End Routine:
        try:
            if math_response.clicked_name[0] == "true":
                math_participant_response = "yes"
            else:
                math_participant_response = "no"
        except:
            math_participant_response = ""
            math_speed_error = 1

        try:
            thisExp.addData("answer_rt", answer_clock.getTime()) # answer RT
        except:
            pass

        # se o participante acertou
        if math_participant_response == math[math_count][0]:
            math_participant_corr = 1
            math_accuracy_error = 0 # contagem de erros de acurácia
            math_trials_correct += 1 # incrementa número de acertos da sessão toda
            math_corrective_feedback = "Correto"
        else:
            math_participant_corr = 0
            math_corrective_feedback = "Incorreto"
            math_errors += 1 # incrementa o número de erros apenas da presente tentativa

            if math_speed_error == 0:
                math_accuracy_error = 1
            else:
                math_accuracy_error = 0

        # sempre incrementa o contador de tentativas
        math_total_trials += 1

        if abort_trial:
            thisExp.addData("math_speed_error", 1) # erro de velocidade
            abort_trial = False # reseta para a próxima tentativa
        else:
            thisExp.addData("math_speed_error", 0)

        # salva variáveis
        thisExp.addData("math_accuracy_error", math_accuracy_error) # erro de acurácia
        thisExp.addData("math_participant_corr", math_participant_corr) # 1 = acerto, 0 = erro
        thisExp.addData("math_problem", math[math_count][1]) # enunciado
        thisExp.addData("math_correct_response", math[math_count][0]) # gabarito
        thisExp.addData("math_problem_response", math[math_count][2]) # resultado da conta
        thisExp.addData("math_participant_response", math_participant_response) # resposta do participante

        # incrementa operação para próxima iteração
        math_count += 1

        # soma a duração da tarefa matemática
        try:
            if math_practice_trials.thisN < 15:
                math_training_time.append(math_clock.getTime()) # e guarda tempo em uma lista
                # e, na última tentativa, salva o critério de tempo a ser usado posteriormente
                if math_practice_trials.thisN == 14:
                    math_time_mean = np.mean(np.array(math_training_time))
                    math_time_sd = np.std(np.array(math_training_time), ddof = 1)
                    math_criterion = math_time_mean + 2 * math_time_sd

        except:
            pass
    TextComponent math_answer_screen
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $math[math_count][2]
      units = norm
      wrapWidth = 1.8
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    ImageComponent true
      image = images/true_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent false
      image = images/false_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent math_response
      clickable = true, false
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine math_answer_feedback
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    TextComponent math_answer_screen_feedback
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $math[math_count - 1][2]
      units = norm
      wrapWidth = 1.8
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    ImageComponent true_feedback
      image = images/true_button.jpg
      pos = (-0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    ImageComponent false_feedback
      image = images/false_button.jpg
      pos = (0.5, 0)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = norm
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    TextComponent math_corrective_feedback_msg
      color = -1.0000, -1.0000, 0.0902
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $math_corrective_feedback
      units = norm
      wrapWidth = 1.8
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Routine:
        # m = current_distractor; n = current_span
        current_length = current_span + current_distractor
      End Routine:
        thisExp.addData('condition', cond)
        thisExp.addData('ITI', my_iti)
        thisExp.addData('current_length', current_length)
        thisExp.addData('current_span', current_span)
        thisExp.addData('current_distractor', current_distractor)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Na próxima sequência, você deverá recordar as   últimas letras.

        Clique em [Avançar] para iniciar a próxima tentativa
    TextComponent new_trial_prompt_letters
      color = darkblue
      font = Times New Roman
      letterHeight = 0.10
      pos = (0.44, 0.12)
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_span
      units = norm
      wrapWidth = 1.8
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    ImageComponent new_trial_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent new_trial_resp
      clickable = new_trial_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator running_memory_span_trials loopType="TrialHandler"
    conditionsFile = span.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    LoopInitiator distractor_length loopType="TrialHandler"
      conditionsFile = distractor.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'current_distractor': 0, 'trial_type': 'whole recall trial'},
        {'current_distractor': 0, 'trial_type': 'whole recall trial'},
        {'current_distractor': 0, 'trial_type': 'whole recall trial'},
        {'current_distractor': 1, 'trial_type': 'partial recall trial'},
        {'current_distractor': 2, 'trial_type': 'partial recall trial'},
        {'current_distractor': 3, 'trial_type': 'partial recall trial'}]
      Routine new_trial
      LoopInitiator running_memory_span_trial loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = current_length
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        Routine letter
      LoopTerminator running_memory_span_trial
      Routine recall
      Routine recall_feedback
    LoopTerminator distractor_length
  LoopTerminator running_memory_span_trials
  Routine thanks
