PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = ktt
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        instruction_list = [
        """
        Neste estudo, você verá sequências de palavras na tela. As palavras são de diferentes categorias semânticas.

        Por exemplo, as palavras "Camiseta", "Calça" e "Blusa" são da categoria Vestuários; já as palavras "Bateria", "Flauta" e "Violão" são da categoria Instrumentos Musicais.
        """,
        """
        Em cada tentativa, sua tarefa será monitorar qual foi a última palavra vista de cada categoria-alvo.

        Os nomes das categorias-alvo de cada tentativa aparecerão na parte superior da tela durante a tentativa.
        """,
        """
        Ao final, você será questionado sobre quais foram as últimas palavras de cada uma das categorias-alvo.

        Por exemplo, suponha que você viu "Camiseta", "Bateria", "Flauta", "Calça", e as categorias-alvo são Vestuários e Instrumentos Musicais.

        Neste caso, as respostas serão "Flauta" e "Calça", pois essas foram as últimas palavras vistas de suas respectivas categorias.
        """,
        """
        O número de categorias que você deverá memorizar a última palavra variará de tentativa para tentativa.

        Lembre-se de memorizar apenas a última palavra de cada categoria-alvo.""",
        """
        As questões aparecerão da seguinte maneira:

        Qual foi o último vestuário que você viu?

        [ 1 ] Camiseta
        [ 2 ] Calça
        [ 3 ] Blusa

        Use as teclas numéricas para dar sua resposta.
        """,
        """
        Em seguida, daremos início à tarefa. Se tiver dúvidas, chame o pesquisador antes de começar.

        Quando estiver pronto, clique em [Avançar] para começar a tarefa.
        """
        ]


        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Routine:
        options = f"""
        [ 1 ] {trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['options'][0]}
        [ 2 ] {trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['options'][1]}
        [ 3 ] {trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['options'][2]}
        """


        multiple_choice_options.alignText = "left"
      End Experiment:
        thisExp.addData("final_full_credit_score", final_full_credit_score)
        thisExp.addData("final_partial_credit_score", final_partial_credit_score)
        thisExp.addData("final_edit_distance_score", final_edit_distance_score)
      End Routine:
        thisExp.addData('participant_code', participant_code)
        thisExp.addData('current_categories', current_categories)
        thisExp.addData('n_targets', len(trials[keeping_track_trials.thisN]["targets"]))
        thisExp.addData('target_category', trials[keeping_track_trials.thisN]["targets"][keeping_track_questions.thisN])
        thisExp.addData('option_1', trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['options'][0])
        thisExp.addData('option_2', trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['options'][1])
        thisExp.addData('option_3', trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['options'][2])
        thisExp.addData('correct_value', trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['correct_value'])
        thisExp.addData('correct_resp', trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['correct_index'])
        thisExp.addData('participant_resp', recall_response.keys[-1])

        if int(recall_response.keys[-1]) == trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['correct_index']:
            score = 1
        else:
            score = 0

        thisExp.addData('score', score)
    TextComponent to_be_remembered_categories_2
      color = orange
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_categories
      units = norm
      wrapWidth = 1.8
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    TextComponent prompt_recall
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trials[keeping_track_trials.thisN]['questions'][keeping_track_questions.thisN]['prompt']
      units = norm
      wrapWidth = 1.8
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    TextComponent multiple_choice_options
      font = Times New Roman
      letterHeight = 0.16
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $options
      units = norm
      wrapWidth = 1.2
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    KeyboardComponent recall_response
      allowedKeys = '1', '2', '3', 'num_1', 'num_2', 'num_3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Experiment:
        # importa biblioteca padrão para operações de aleatoriedade
        import random

        # Estímulos do experimento
        words = {
            "Frutas":   ["Maçã", "Banana", "Morango"],
            "Metais":   ["Alumínio", "Ferro", "Cobre"],
            "Países":   ["Japão", "Alemanha", "Canadá"],
            "Cores":    ["Vermelho", "Azul", "Amarelo"],
            "Parentes": ["Tia", "Pai", "Filha"],
            "Animais":  ["Zebra", "Baleia", "Urso"]
        }

        # Cria variável com as categorias de palavras
        categories = list(words.keys())

        # Parâmetros do experimento
        number_of_categories = [2, 3, 4] * 4
        random.shuffle(number_of_categories) # embaralha tentativas

        # define algumas constantes do experimento
        N_TRIALS = len(number_of_categories)   # número total de tentativas (k = 12)
        ITEMS_PER_TRIAL = 15                   # número de palavras por tentativa
        ALL_CATS = categories[:]               # cópia da lista de categorias

        # variáveis auxiliares
        gender = {
            "Frutas": "f",
            "Metais": "m",
            "Países": "m",
            "Cores": "f",
            "Parentes": "m",
            "Animais": "m"
        }

        singular = {
            "Frutas": "fruta",
            "Metais": "metal",
            "Países": "país",
            "Cores": "cor",
            "Parentes": "parente",
            "Animais": "animal"
        }

        # cria função que constrói a pergunta para cada categoria-alvo
        def pergunta_ultima(cat: str) -> str:
            g = gender[cat]   # f ou m
            article = "o" if g == "m" else "a"
            ult = "último" if g == "m" else "última"
            return f"Qual foi {article} {ult} {singular[cat]}?"

        # Geração das tentativas
        trials = [] # aqui vamos armazenar todas as 12 tentativas geradas

        # Loop para gerar cada tentativa
        for t_idx, length in enumerate(number_of_categories[:N_TRIALS], start = 1):
            # 1) Sorteia as categorias-alvo desta tentativa
            random.shuffle(categories)   # embaralha as categorias
            current_targets = categories[:length] # pega as primeiras "length" categorias como alvo

            # 2) Decide quais categorias terão 3 exemplares e quais terão 2 exemplares
            cats_3 = set(random.sample(ALL_CATS, 3))
            cats_2 = [c for c in ALL_CATS if c not in cats_3]

            # 3) Monta o "pool" (bolsa) de palavras que compõem a tentativa
            trial_pool = [] # lista de pares (categoria, palavra)
            for cat in ALL_CATS:
                pool = words[cat][:] # pega as 3 palavras de uma dada categoria
                if cat in cats_2:
                    dropped = random.choice(pool)
                    pool.remove(dropped)
                for w in pool: # percorre as palavras do meu pool de palavras
                    trial_pool.append((cat, w))

            # Sanity checks: verifica se o pool ficou correto
            assert len(trial_pool) == ITEMS_PER_TRIAL, "A tentativa não tem 15 itens!"
            assert len(set(trial_pool)) == ITEMS_PER_TRIAL, "Existem palavras duplicadas!"

            # 4) Embaralha a ordem de apresentação e cria o "last_seen"
            random.shuffle(trial_pool)
            sequence = trial_pool[:]
            last_seen = {}

            for cat, w in sequence:
                last_seen[cat] = w

            # 5) Constrói as perguntas só para as categorias-alvo
            # Cada pergunta terá: prompt (texto da pergunta), opções (3 alternativas)
            # a resposta correta e índice da correta (1, 2, 3)
            questions = []
            for cat in current_targets:
                prompt = pergunta_ultima(cat)
                correct_value = last_seen[cat]
                opts = words[cat][:]
                random.shuffle(opts)
                correct_index = opts.index(correct_value) + 1

                # empacote essa pergunta em um dicionário
                questions.append({
                    "category": cat,
                    "prompt": prompt,
                    "options": opts,
                    "correct_value": correct_value,
                    "correct_index": correct_index
                })

            # 6) Empacota toda a tentativa em um dicionário
            trials.append({
                "trial_number": t_idx,
                "targets": current_targets,
                "cats_with_3": sorted(cats_3),
                "cats_with_2": sorted(cats_2),
                "sequence": sequence,
                "last_seen_by_category": last_seen,
                "questions": questions
            })
      End Routine:
        thisExp.addData("participant_code", participant_code)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text = Clique em [Avançar] para iniciar a próxima tentativa
      units = norm
      wrapWidth = 1.8
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    ImageComponent new_trial_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent new_trial_resp
      clickable = new_trial_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine word_trial
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    CodeComponent word_trial_code
      Code Type = Py
      Begin Routine:
        current_categories = "   ".join(trials[keeping_track_trials.thisN]["targets"])
      End Routine:
        thisExp.addData('participant_code', participant_code)
        thisExp.addData('current_categories', current_categories)
        thisExp.addData('category', trials[keeping_track_trials.thisN]['sequence'][keeping_track_word.thisN][0])
        thisExp.addData('word', trials[keeping_track_trials.thisN]['sequence'][keeping_track_word.thisN][1])
    TextComponent to_be_remembered_categories
      color = orange
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $current_categories
      units = norm
      wrapWidth = 1.8
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    TextComponent to_be_remembered
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $trials[keeping_track_trials.thisN]['sequence'][keeping_track_word.thisN][1]
      units = norm
      wrapWidth = 1.8
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator keeping_track_trials loopType="TrialHandler"
    loopType = sequential
    nReps = N_TRIALS
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    Routine new_trial
    LoopInitiator keeping_track_word loopType="TrialHandler"
      loopType = sequential
      nReps = ITEMS_PER_TRIAL
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      Routine word_trial
    LoopTerminator keeping_track_word
    LoopInitiator keeping_track_questions loopType="TrialHandler"
      loopType = sequential
      nReps = len(trials[keeping_track_trials.thisN]["targets"])
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      Routine recall
    LoopTerminator keeping_track_questions
  LoopTerminator keeping_track_trials
  Routine thanks
