PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(3), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': '', 'Nome Completo': '', 'E-mail': '', 'Telefone': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [900, 600]
  color = $bg_color
  expName = exemplo
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(3)

        participant_code = expInfo["ID"]

        # se não temos um arquivo de IDs, crie um
        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        # por outro lado, se existir, apenas abra esse arquivo para modificarmos ele
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Routine:
        thisExp.addData('ID', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Before Experiment:
        bg_color = [-0.9922, -0.7020, 0.5137] # azul
      Begin Experiment:
        # índices de instruções
        current_instruction = 0


        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Tarefa concluída, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("ID", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('ID', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            instructions.finished = True # encerra o loop das instruções de teste
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.12
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        images = {"mamífero": ["gato", "vaca", "cachorro", "macaco", "porco"],
                  "ave": ["galinha", "pombo", "águia", "coruja", "papagaio"]}

        stimuli = []

        for key, value in images.items():
            for v in value:
                stimuli.append((key, v))

        # stimuli = [("mamífero", "gato"), ("mamífero", "vaca"), ..., ("ave", "papagaio")]

        stimuli = stimuli[:] * 1 # mudar o valor caso queira mais repetições de cada imagem
        random.shuffle(stimuli)

        # contrabalanceamento da designação das alternativas aos botões de resposta

        # Mamífero esquerda, ave direita
        if random.random() > 0.5:
            mammal_resp, bird_resp = "left", "right"
            left_text, right_text = "Mamífero", "Ave"
            instr_text_left, instr_text_right = "um mamífero", "uma ave"
            # print("Mamífero esquerda, ave direita")
        # Mamífero direita, ave esquerda
        else:
            mammal_resp, bird_resp = "right", "left"
            left_text, right_text = "Ave", "Mamífero"
            instr_text_left, instr_text_right = "uma ave", "um mamífero"
            # print("Ave esquerda, mamífero direita")

        instruction_list = [# instruções gerais
        f"""
        Em seguida, você verá imagens de animais.

        Sua tarefa é categorizar cada animal como sendo {instr_text_left} ou {instr_text_right}.
        """,
        f"""
        Quando o animal for {instr_text_left}, pressione a tecla [←] o mais rápido possível.

        Quando o animal for {instr_text_right}, pressione a tecla [→] o mais rápido possível.""",
        f"""
        Seu tempo para responder será limitado. Por isso, responda o mais rápido que puder. E lembre-se:

            - {left_text}: [←]
            - {right_text}: [→]
        """,
        """
        Em seguida, daremos início à tarefa. Favor chamar o pesquisador se tiver alguma pergunta.

        Quando você estiver pronto, clique em [Avançar] para começar a prática com as letras.
        """]
      Begin Routine:
        stimulus = f"images/{stimuli[trials.thisN][1]}.png"

        # se a tentativa é um mamífero
        if stimuli[trials.thisN][0] == "mamífero":
            if mammal_resp == "left":
                corr_resp = "left" # sorteou left para mamíferos
            else:
                corr_resp = "right" # sorteou right para mamíferos
        # se a tentativa é uma ave
        elif stimuli[trials.thisN][0] == "ave":
            if bird_resp == "left":
                corr_resp = "left" # sorteou left para aves
            else:
                corr_resp = "right" # sorteou right para aves
      End Routine:
        thisExp.addData('ID', participant_code)
        thisExp.addData("category", stimuli[trials.thisN][0])
        thisExp.addData("exemplar", stimuli[trials.thisN][1])
        thisExp.addData('corr_resp', corr_resp)
    ImageComponent image
      image [set every repeat] = $stimulus
      pos = (0, 0.2)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      units = norm
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    KeyboardComponent testing_resp
      allowedKeys = 'left', 'right'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    ImageComponent testing_left_button
      image = images/left_button.jpg
      pos = (-0.2, -0.6)
      size = (0.25, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = norm
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    ImageComponent testing_right_button
      image = images/right_button.jpg
      pos = (0.2, -0.6)
      size = (0.25, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = norm
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    TextComponent testing_left_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (-0.2, -0.85)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $left_text
      units = norm
      wrapWidth = 1.8
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    TextComponent testing_right_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (0.2, -0.85)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $right_text
      units = norm
      wrapWidth = 1.8
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(stimuli)
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    Routine trial
  LoopTerminator trials
  Routine thanks
