PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = modified-lag-task
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        instruction_list = [
        """
        Neste estudo, você verá sequências curtas de palavras na tela.

        Cada palavra aparecerá uma de cada vez.

        Ao final de cada sequência, faremos UMA pergunta sobre a posição de uma palavra na lista.
        """,
        """
        A pergunta poderá ser:

        - "Qual foi a última palavra da lista?"
        - "Qual foi a penúltima palavra da lista?"
        - "Qual foi a antepenúltima palavra da lista?"
        - "Qual foi a quarta palavra, a contar do final da lista?" (isto é, a ante-antepenúltima)
        """,
        """
        Responda digitando a palavra correspondente.

        Pressione [Enter] para enviar sua resposta.
        """,
        """
        Por exemplo, suponha que a sequência apresentada foi: Argentina, Brasil, Chile, Dinamarca e que a pergunta seja "Qual foi a última palavra da lista?".

        Neste caso, a resposta correta será Dinamarca, pois essa foi a última palavra da lista anterior.
        """,
        """
        Agora, suponha que a sequência apresentada foi: Argentina, Brasil, Chile, Dinamarca e que a pergunta seja "Qual foi a penúltima palavra da lista?".

        Neste caso, a resposta correta será Chile, pois essa foi a penúltima palavra da lista anterior.
        """,
        """
        Desta vez, suponha que a sequência apresentada foi: Argentina, Brasil, Chile, Dinamarca e que a pergunta seja "Qual foi a antepenúltima palavra da lista?".

        Neste caso, a resposta correta será Brasil, pois essa foi a antepenúltima palavra da lista anterior.
        """,
        """
        Por fim, suponha que a sequência apresentada foi: Argentina, Brasil, Chile, Dinamarca e que a pergunta seja "Qual foi a quarta palavra, a contar do final da lista?".

        Neste caso, a resposta correta será Argentina, pois ela foi a quarta palavra, a contar do final da lista (a "ante-antepenúltima"), da lista anterior.
        """,
        """
        Dicas:

        - Concentre-se na ordem em que as palavras aparecem.
        - Não é necessário falar em voz alta; apenas memorize silenciosamente.
        - Se tiver dúvidas durante a tarefa, chame o pesquisador antes de prosseguir.
        """,
        """
        Em seguida, iniciaremos a tarefa.

        Quando estiver pronto(a), clique em [Avançar] para começar.
        """
        ]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Routine:
        kb = keyboard.Keyboard()

        if n_back == 0:
            my_prompt = "Qual foi a última palavra da lista?"
        elif n_back == 1:
            my_prompt = "Qual foi a penúltima palavra da lista?"
        elif n_back == 2:
            my_prompt = "Qual foi a antepenúltima palavra da lista?"
        elif n_back == 3:
            my_prompt = "Qual foi a quarta palavra, a contar do final da lista?"


        # inicializa variáveis importantes para a rotina
        max_length = 13
        min_length = 3

        event.clearEvents('keyboard')
      Each Frame:
        target_resp.text = target_resp.text.strip()

        # garante que palavra tem comprimento máximo de max_length
        if len(target_resp.text) > max_length:
            target_resp.text = target_resp.text.strip()[:max_length]

        # checa se return foi pressionado
        keys = kb.getKeys(['return'], waitRelease = True)
        # se Enter foi pressionado e a resposta tem pelo menos 3 caracteres
        if ('return' in keys) and (len(target_resp.text) >= min_length):
            continueRoutine = False
      End Routine:
        modified_lag_task_trials.addData('participant_code', participant_code)
        modified_lag_task_trials.addData('list_len', list_len)
        modified_lag_task_trials.addData('n_back', n_back)
        modified_lag_task_trials.addData('target_index_0b', target_index_0b)
        modified_lag_task_trials.addData('target_index_1b', target_index_1b)
        modified_lag_task_trials.addData('list', my_list)
        modified_lag_task_trials.addData('target_word', target_word)
        modified_lag_task_trials.addData('participant_response', target_resp.text.strip())

        if target_resp.text.strip() == target_word:
            score = 1
            weighted_score = (n_back + 1)
        else:
            score = 0
            weighted_score = 0

        modified_lag_task_trials.addData('score', score)
        modified_lag_task_trials.addData('weighted_score', weighted_score)

        # reseta variável para não bugar output
        target_resp.text = ""
    TextComponent prompt_recall
      color = orange
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $my_prompt
      units = norm
      wrapWidth = 1.8
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    TextboxComponent target_resp
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      fillColor = 0.0000, 0.0000, 0.0000
      font = Times New Roman
      letterHeight = 0.2
      placeholder = Digite aqui...
      pos = (0, -0.2)
      size = (1, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Experiment:
        words = ['água', 'agulha', 'animal', 'aranha', 'areia', 'árvore',
                 'asa', 'bala', 'baleia', 'banana', 'banco', 'banho', 'barba',
                 'barco', 'beijo', 'bicho', 'blusa', 'bocejo', 'bolo', 'bolso',
                 'boneca', 'botão', 'brinco', 'bule', 'bíblia', 'cabelo', 'cabeça',
                 'cabra', 'cadeia', 'café', 'caixão', 'caju', 'calo', 'calça', 'cama',
                 'camisa', 'caneta', 'cantor', 'carro', 'carta', 'casa', 'casaco', 'cesto',
                 'chapéu', 'chuchu', 'chute', 'chuva', 'chá', 'chão', 'cidade', 'cinto', 'circo',
                 'comida', 'copo', 'coroa', 'corpo', 'couve', 'cárie', 'céu', 'dança', 'dedo',
                 'dente', 'disco', 'escola', 'escova', 'estojo', 'farda', 'farelo', 'ferida',
                 'filho', 'fio', 'flor', 'fogão', 'fogo', 'fruta', 'gato', 'gelo', 'girafa', 'goiaba',
                 'gol', 'gola', 'gordo', 'gosma', 'grade', 'grama', 'haste', 'homem', 'igreja',
                 'inseto', 'janela', 'jardim', 'jaula', 'juba', 'lã', 'ladrão', 'lagoa', 'lancha',
                 'lanche', 'lápis', 'lata', 'látex', 'leão', 'leite', 'letra', 'linha', 'livro',
                 'lixa', 'lixo', 'louça', 'lua', 'mãe', 'magro', 'manga', 'mão', 'mar', 'marcha',
                 'marido', 'marte', 'massa', 'mastro', 'médico', 'meia', 'mel', 'menina', 'mesa',
                 'metal', 'morro', 'mosca', 'moto', 'motor', 'móvel', 'mulher', 'muro', 'nadar',
                 'nariz', 'neve', 'nudez', 'nuvens', 'objeto', 'pai', 'panela', 'pano', 'pão',
                 'papel', 'parede', 'pátio', 'pato', 'pé', 'pedra', 'peixe', 'pele', 'pêra',
                 'perna', 'pessoa', 'picada', 'pires', 'pneu', 'pó', 'ponte', 'porco', 'porta',
                 'prato', 'prisão', 'prova', 'prédio', 'pulmão', 'quarto', 'queijo', 'rádio',
                 'rainha', 'rede', 'rio', 'rocha', 'roda', 'rosa', 'roupa', 'rua', 'saco',
                 'saia', 'sala', 'salada', 'sangue', 'sapato', 'selva', 'serra', 'sofá', 'sol',
                 'sopa', 'suco', 'tabaco', 'tampa', 'tecido', 'teia', 'tênis', 'tinta', 'torta',
                 'tosse', 'tricô', 'trigo', 'trono', 'túmulo', 'unha', 'uva', 'vaca', 'veneno',
                 'vidro', 'violão', 'vulcão', 'xadrez', 'xícara']

        """
        Modified lag task (Shelton et al., 2007, 2009) - Gerador de tentativas
        Requisitos do experimento:
        - Fatores:
            * list_len ∈ {4, 6}
            * n_back  ∈ {0, 1, 2, 3}  (0 = última; 1 = penúltima; 2 = antepenúltima; 3 = ante-antepenúltima)
            * reps_per_cell = 5
        - Total de tentativas = 2 × 4 × 5 = 40.
        - Palavras são amostradas de `words` SEM reposição global (nenhuma palavra se repete na tarefa).
        - Para cada tentativa, salvar gabarito (palavra-alvo) e a lista integral.
        """

        # =========================
        # PARÂMETROS DO EXPERIMENTO
        # =========================
        LIST_LENGTHS = [4, 6]          # dois comprimentos possíveis de lista (4 ou 6 itens)
        N_BACK_LEVELS = [0, 1, 2, 3]   # n-back alvo: 0=última, 1=penúltima, 2=antepenúltima, 3=ante-antepenúltima
        REPS_PER_CELL = 5              # número de repetições por combinação (list_len × n_back)

        # ===========================
        # GERAR O PLANO FATORIAL 2x4
        # ===========================
        # Cria todas as combinações (list_len, n_back), repetidas REPS_PER_CELL vezes.
        design = []  # esta lista terá 40 dicionários, um por tentativa (ordem embaralhada depois)
        for list_len in LIST_LENGTHS:            # itera por 4 e 6
            for n_back in N_BACK_LEVELS:         # itera por 0, 1, 2, 3
                for rep in range(1, REPS_PER_CELL + 1):  # repetições 1..5
                    # cada célula do fatorial é um dicionário com metadados da tentativa
                    design.append({"list_len": list_len, "n_back": n_back, "rep": rep})

        # Embaralhe a ordem de apresentação das tentativas
        # (apenas a ordem; os conteúdos ainda serão sorteados depois)
        random.shuffle(design)

        # ====================================
        # AMOSTRAGEM SEM REPOSIÇÃO DAS PALAVRAS
        # ====================================
        # Estratégia: embaralhar `words` e consumir sequencialmente o número exato de
        # palavras por tentativa (4 ou 6), garantindo que nenhuma palavra se repita no experimento.
        pool = words[:]                 # cópia rasa da lista global 'words' para não alterá-la
        random.shuffle(pool)            # embaralha o banco de palavras uma vez (reposição global: NÃO)
        pool_pointer = 0                # ponteiro/índice de consumo sequencial dentro de 'pool'

        # ==========================
        # GERAÇÃO DAS TENTATIVAS
        # ==========================
        trials = []     # onde guardamos as tentativas já “resolvidas” (lista e gabarito)
        trial_index = 0 # contador de tentativas (1..40), útil para inspeção

        for cell in design:
            trial_index += 1                   # incrementa o índice da tentativa atual
            L = cell["list_len"]               # comprimento da lista desta tentativa (4 ou 6)
            n = cell["n_back"]                 # defasagem n-back (0..3)

            # Pega L palavras únicas do banco de palavras
            # Como 'pool' foi embaralhada e consumimos em fatias não sobrepostas, não há repetição global.
            my_list = pool[pool_pointer:pool_pointer + L]
            pool_pointer += L                  # avança o ponteiro para a próxima fatia

            # Índice-alvo (0-based): última = L-1, penúltima = L-1-1, etc.
            # Ex.: L=4, n=0 -> idx=3 (quarta posição); L=6, n=3 -> idx=2 (terceira posição)
            target_index = L - 1 - n
            assert 0 <= target_index < L, "n_back inválido para o comprimento da lista."
            # (Com L ∈ {4,6} e n ∈ {0,1,2,3}, esta asserção sempre deve ser verdadeira.)

            # Gabarito (palavra que o participante deve recordar)
            target_word = my_list[target_index]

            # Salva linha completa
            # - 'list_as_str' é útil para depuração/checagem manual.
            # - índices 0b (base 0) e 1b (base 1) ajudam a cruzar com logs humanos.
            trials.append({
                "trial_index": trial_index,
                "list_len": L,
                "n_back": n,
                "rep": cell["rep"],
                "target_index_0b": target_index,         # índice alvo (0-based)
                "target_index_1b": target_index + 1,     # índice alvo (1-based) - útil p/ checagem humana
                "target_word": target_word,
                "my_list": my_list[:]
            })
      End Routine:
        thisExp.addData("participant_code", participant_code)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text = Clique em [Avançar] para iniciar a próxima tentativa
      units = norm
      wrapWidth = 1.8
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    ImageComponent new_trial_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent new_trial_resp
      clickable = new_trial_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine word_trial
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    CodeComponent word_trial_code
      Code Type = Py
      Begin Routine:
        my_word = trials[modified_lag_task_trials.thisN]['my_list'][modified_lag_task_word.thisN]
        list_len = trials[modified_lag_task_trials.thisN]['list_len']
        n_back = trials[modified_lag_task_trials.thisN]['n_back']
        target_index_0b = trials[modified_lag_task_trials.thisN]['target_index_0b']
        target_index_1b = trials[modified_lag_task_trials.thisN]['target_index_1b']
        target_word = trials[modified_lag_task_trials.thisN]['target_word']
        my_list = trials[modified_lag_task_trials.thisN]['my_list']
    TextComponent to_be_remembered
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1
      text [set every repeat] = $my_word
      units = norm
      wrapWidth = 1.8
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  Routine recall_placeholder
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Tela de recordação
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator modified_lag_task_trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(trials)
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    Routine new_trial
    LoopInitiator modified_lag_task_word loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = trials[modified_lag_task_trials.thisN]['list_len']
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      Routine word_trial
    LoopTerminator modified_lag_task_word
    Routine recall
  LoopTerminator modified_lag_task_trials
  Routine thanks
