PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = alpha-span-task
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        instruction_list = [
        """
        Neste estudo, você verá listas de palavras na tela.

        Cada palavra aparecerá uma de cada vez.
        """,
        """
        Depois de ver a lista completa, você deverá digitar as palavras da lista EM ORDEM ALFABÉTICA.

        Ao digitar as palavras da lista, separe-as por espaços.
        """,
        """
        Por exemplo, suponha que você viu a lista Dinamarca, Argentina, Chile, Brasil.

        A resposta correta, nesse caso, será: Argentina Brasil Chile Dinamarca.
        """,
        """
        Você começará vendo listas mais curtas e, gradualmente, a dificuldade da tarefa aumentará, com listas cada vez mais longas.

        Antes de iniciar cada lista, você saberá quantas palavras verá na próxima tentativa.
        """,
        """
        Lembre-se: sua tarefa será lembrar de cada lista de palavras, em ordem alfabética, e digitá-la separando as palavras por espaços.
        """,
        """
        Em seguida, iniciaremos a tarefa.

        Quando estiver pronto(a), clique em [Avançar] para começar.
        """
        ]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists
        import locale

        locale.setlocale(locale.LC_COLLATE, 'pt_BR.UTF-8')

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        # inicializa alpha span = 1
        alpha_span = 1
      Begin Routine:
        # se é a 1ª tentativa do par (índice par: 0, 2, 4…)
        if (alpha_span_task_trials.thisN % 2) == 0:
            # reseta o sucesso
            success_flag = False

        kb = keyboard.Keyboard()

        my_prompt = """Digite a lista de palavras que você acabou de ver, em ordem alfabética. Separe as palavras por ESPAÇO.
        """

        # inicializa variáveis importantes para a rotina
        max_length = 80
        min_length = 3

        event.clearEvents('keyboard')
      Each Frame:
        # garante que palavra tem comprimento máximo de max_length
        if len(target_resp.text) > max_length:
            target_resp.text = target_resp.text[:max_length]

        # checa se return foi pressionado
        keys = kb.getKeys(['return'], waitRelease = True)
        # se Enter foi pressionado e a resposta tem pelo menos 3 caracteres
        if ('return' in keys) and (len(target_resp.text) >= min_length):
            continueRoutine = False
      End Routine:
        alpha_span_task_trials.addData('participant_code', participant_code)
        alpha_span_task_trials.addData('list_len', list_len)
        alpha_span_task_trials.addData('trial', trial)
        alpha_span_task_trials.addData('correct_list', correct_list)
        alpha_span_task_trials.addData('shuffled_list', shuffled_list)

        # divide string do participante em uma lista
        participant_list = target_resp.text.strip().split()

        # e salva essa lista
        alpha_span_task_trials.addData('participant_list', participant_list)

        # só considera tentativa correta se a resposta tiver o mesmo comprimento
        # que a lista alvo
        if len(participant_list) == len(correct_list):
            aux = 0
            for item, target in zip(participant_list, correct_list):
                if item.lower() == target.lower():
                    aux += 1
        else:
            aux = 0  # marcador de resposta com comprimento incorreto

        # e atualiza o alpha_span, se foi o primeiro acerto em uma dada sequência
        if aux == len(correct_list) and not success_flag:
            alpha_span += 1
            success_flag = True

        # computa alpha_score
        alpha_score = compute_alpha_score(participant_list, correct_list)

        # e salva alpha_span e alpha_score
        alpha_span_task_trials.addData('alpha_span', alpha_span)
        alpha_span_task_trials.addData('alpha_score', alpha_score)

        # reseta variável para não bugar output
        target_resp.text = ""

        # se a tentativa é par, significa que já foram duas tentativas com um mesmo span
        if (alpha_span_task_trials.thisN + 1) % 2 == 0:
            # se o participante não conseguiu acertar pelo menos uma tentativa...
            if not success_flag:
                # encerra a tarefa
                alpha_span_task_trials.finished = True
    TextComponent prompt_recall
      color = orange
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text [set every repeat] = $my_prompt
      units = norm
      wrapWidth = 1.8
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    TextboxComponent target_resp
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      fillColor = 0.0000, 0.0000, 0.0000
      font = Times New Roman
      letterHeight = 0.2
      placeholder = Digite aqui...
      pos = (0, -0.2)
      size = (1, 0.80)
      startVal [time (s)] = 0.0
      units = norm
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Experiment:
        words = ['água', 'agulha', 'animal', 'aranha', 'areia', 'árvore',
                 'asa', 'bala', 'baleia', 'banana', 'banco', 'banho', 'barba',
                 'barco', 'beijo', 'bicho', 'blusa', 'bocejo', 'bolo', 'bolso',
                 'boneca', 'botão', 'brinco', 'bule', 'bíblia', 'cabelo', 'cabeça',
                 'cabra', 'cadeia', 'café', 'caixão', 'caju', 'calo', 'calça', 'cama',
                 'camisa', 'caneta', 'cantor', 'carro', 'carta', 'casa', 'casaco', 'cesto',
                 'chapéu', 'chuchu', 'chute', 'chuva', 'chá', 'chão', 'cidade', 'cinto', 'circo',
                 'comida', 'copo', 'coroa', 'corpo', 'couve', 'cárie', 'céu', 'dança', 'dedo',
                 'dente', 'disco', 'escola', 'escova', 'estojo', 'farda', 'farelo', 'ferida',
                 'filho', 'fio', 'flor', 'fogão', 'fogo', 'fruta', 'gato', 'gelo', 'girafa', 'goiaba',
                 'gol', 'gola', 'gordo', 'gosma', 'grade', 'grama', 'haste', 'homem', 'igreja',
                 'inseto', 'janela', 'jardim', 'jaula', 'juba', 'lã', 'ladrão', 'lagoa', 'lancha',
                 'lanche', 'lápis', 'lata', 'látex', 'leão', 'leite', 'letra', 'linha', 'livro',
                 'lixa', 'lixo', 'louça', 'lua', 'mãe', 'magro', 'manga', 'mão', 'mar', 'marcha',
                 'marido', 'marte', 'massa', 'mastro', 'médico', 'meia', 'mel', 'menina', 'mesa',
                 'metal', 'morro', 'mosca', 'moto', 'motor', 'móvel', 'mulher', 'muro', 'nadar',
                 'nariz', 'neve', 'nudez', 'nuvens', 'objeto', 'pai', 'panela', 'pano', 'pão',
                 'papel', 'parede', 'pátio', 'pato', 'pé', 'pedra', 'peixe', 'pele', 'pêra',
                 'perna', 'pessoa', 'picada', 'pires', 'pneu', 'pó', 'ponte', 'porco', 'porta',
                 'prato', 'prisão', 'prova', 'prédio', 'pulmão', 'quarto', 'queijo', 'rádio',
                 'rainha', 'rede', 'rio', 'rocha', 'roda', 'rosa', 'roupa', 'rua', 'saco',
                 'saia', 'sala', 'salada', 'sangue', 'sapato', 'selva', 'serra', 'sofá', 'sol',
                 'sopa', 'suco', 'tabaco', 'tampa', 'tecido', 'teia', 'tênis', 'tinta', 'torta',
                 'tosse', 'tricô', 'trigo', 'trono', 'túmulo', 'unha', 'uva', 'vaca', 'veneno',
                 'vidro', 'violão', 'vulcão', 'xadrez', 'xícara']


        def shuffle_list(my_list: list, order: list) -> list:
            """
            Recebe uma lista e um critério para "bagunçá-la".
            Retorna a lista bagunçada do jeito desejado.
            """
            new_list = []

            for idx in order:
                new_list.append(my_list[idx])

            return new_list



        def compute_alpha_score(response, correct):
            """
            Calcula o 'alpha score' (Craik, 1986; Craik et al., 2018).

            response : lista de strings
                Resposta do participante (ex: ["Bed", "Hall", "Milk", "Queen", "Rose", "Stick"])
            correct : lista de strings
                Sequência correta em ordem alfabética (ex: ["Bed", "Hall", "Milk", "Queen", "Rose", "Stick"])
            """

            score = 0
            used = set()  # armazena quais palavras já receberam ponto (cada palavra só pode pontuar 1x)

            # 1. Pontuar pares corretos
            # -------------------------
            # Para cada par consecutivo no gabarito (ex: Bed-Hall, Hall-Milk, Milk-Queen...)
            # verificamos se esse par aparece na resposta, na mesma ordem.
            for i in range(len(correct) - 1):
                pair = (correct[i], correct[i+1])  # par do gabarito

                # percorre a resposta procurando se o par aparece na ordem correta
                for j in range(len(response) - 1):
                    if response[j] == pair[0] and response[j + 1] == pair[1]:
                        # Se a primeira palavra do par ainda não recebeu ponto, marca +1
                        if response[j] not in used:
                            used.add(response[j])
                            score += 1

                        # Se a segunda palavra do par ainda não recebeu ponto, marca +1
                        if response[j+1] not in used:
                            used.add(response[j+1])
                            score += 1

            # 2. Pontuar o primeiro item correto
            # ----------------------------------
            # Se o participante deu a resposta começando com a primeira palavra do gabarito,
            # e essa palavra ainda não ganhou ponto via pares, então soma +1.
            if response and response[0] == correct[0] and response[0] not in used:
                used.add(response[0])
                score += 1

            # 3. Pontuar o último item correto
            # --------------------------------
            # Se a resposta termina com a última palavra do gabarito,
            # e essa palavra ainda não ganhou ponto via pares, então soma +1.
            if response and response[-1] == correct[-1] and response[-1] not in used:
                used.add(response[-1])
                score += 1

            return score

        """
        Alpha span task (Craik, 1986; Craik et al., 2018) - Gerador de tentativas

        Requisitos da tarefa:

        - Participante será exposto a listas contendo de 2 a 8 palavras;
        - A tarefa será recordar dos itens na ordem alfabética;
        - Dois escores serão computados:
            * Alpha span: a sequência mais longa para a qual o participante recordar pelo menos uma lista
            na íntegra na ordem correta;
            * Alpha score: o participante recebe crédito por respostas parcialmente corretas. Nesse método,
            um ponto é dado para cada palavra recordada como um membro de um par corretamente ordenado com relação
            à sequência correta, e também um ponto adicionado é dado para a primeira palavra correta (quando dada
            como primeira resposta) e para a última palavra corretamente recordada (quando dada como última resposta)
            na sequência, contanto que tais palavras não sejam membros de um par corretamente ordenado. O escore total
            para uma sequência, portanto, não pode exceder o comprimento da lista;
        - Palavras são amostradas de `words` SEM reposição global (nenhuma palavra se repete na tarefa);
        - A lista deve ser embaralhada em uma ordem fixa com relação ao gabarito;
        - Para cada tentativa, salvar a lista integral.
        """

        # =========================
        # PARÂMETROS DA TAREFA
        # =========================
        TRIALS = 2                          # duas tentativas por comprimento
        LIST_LENGTHS = list(range(2, 9))    # listas com comprimentos de 2 a 8 palavras


        ORDERS = [
                [[1, 0], [1, 0]],                                     # 2 palavras
                [[1, 0, 2], [2, 1, 0]],                               # 3 palavras
                [[2, 1, 3, 0], [1, 0, 3, 2]],                         # 4 palavras
                [[2, 4, 0, 3, 1], [2, 4, 3, 1, 0]],                   # 5 palavras
                [[2, 1, 3, 5, 4, 0], [5, 0, 4, 1, 3, 2]],             # 6 palavras
                [[3, 5, 2, 0, 1, 6, 4], [6, 3, 2, 5, 0, 4, 1]],       # 7 palavras
                [[5, 1, 2, 3, 0, 6, 7, 4], [1, 7, 5, 4, 0, 3, 6, 2]]  # 8 palavras
                ]

        # embaralhar as duas sublistas de cada item
        for item in ORDERS:
            random.shuffle(item)

        # Estratégia: embaralhar `words` e consumir sequencialmente o número exato de
        # palavras por tentativa (4 ou 6), garantindo que nenhuma palavra se repita no experimento.
        pool = words[:]                 # cópia rasa da lista global 'words' para não alterá-la
        random.shuffle(pool)            # embaralha o banco de palavras uma vez (reposição global: NÃO)
        pool_pointer = 0                # ponteiro/índice de consumo sequencial dentro de 'pool'

        # ===========================
        # GERAR TENTATIVAS
        # ===========================
        # Cria todas as combinações (list_len, n_back), repetidas REPS_PER_CELL vezes.
        trials = []  # esta lista terá 14 dicionários, um por tentativa
        for i, list_len in enumerate(LIST_LENGTHS):            # itera por 2 ATÉ 8
            for j, trial in enumerate(range(1, TRIALS + 1)):

                # Pega list_len palavras únicas do banco de palavras
                # Como 'pool' foi embaralhada e consumimos em fatias não sobrepostas, não há repetição global.
                my_list = pool[pool_pointer:pool_pointer + list_len]
                correct_list = correct_list = sorted(my_list, key = locale.strxfrm)   # lista organizada
                shuffled_list = shuffle_list(correct_list, ORDERS[i][j])              # lista bagunçada


                pool_pointer += list_len                  # avança o ponteiro para a próxima fatia

                # cada célula do fatorial é um dicionário com metadados da tentativa
                trials.append({"list_len": list_len,
                               "trial": trial,
                               "correct_list": correct_list,
                               "shuffled_list": shuffled_list})
      Begin Routine:
        new_trial_msg = f"""
        A seguir, você verá uma lista de {trials[alpha_span_task_trials.thisN]['list_len']} palavras.

        Clique em [Avançar] para iniciar a próxima tentativa
        """
      End Routine:
        thisExp.addData("participant_code", participant_code)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text [set every repeat] = $new_trial_msg
      units = norm
      wrapWidth = 1.8
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    ImageComponent new_trial_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent new_trial_resp
      clickable = new_trial_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine word_trial
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    CodeComponent word_trial_code
      Code Type = Py
      Begin Routine:
        my_word = trials[alpha_span_task_trials.thisN]['shuffled_list'][alpha_span_task_word.thisN]
        list_len = trials[alpha_span_task_trials.thisN]['list_len']
        trial = trials[alpha_span_task_trials.thisN]['trial']
        correct_list = trials[alpha_span_task_trials.thisN]['correct_list']
        shuffled_list = trials[alpha_span_task_trials.thisN]['shuffled_list']
    TextComponent to_be_remembered
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1
      text [set every repeat] = $my_word
      units = norm
      wrapWidth = 1.8
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator alpha_span_task_trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(trials)
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    Routine new_trial
    LoopInitiator alpha_span_task_word loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = trials[alpha_span_task_trials.thisN]['list_len']
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      Routine word_trial
    LoopTerminator alpha_span_task_word
    Routine recall
  LoopTerminator alpha_span_task_trials
  Routine thanks
