PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = $my_color
  expName = css-task
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        """
        Color-Shape Switch (CSS) Task (Miyake et al., 2004; Pennington et al., 2024) - Gerador de tentativas

        Requisitos da tarefa:

        - Participante será exposto às pistas "Forma" ou "Cor";
        - Em seguida, aparecerá uma forma geométrica (triângulo ou círculo) em uma dada cor (azul ou verde);
        - Participante deverá identificar forma ou cor do objeto, usando as setas do teclado, a depender da pista anterior;
        - Designação das setas às alternativas (e.g., left --> triângulo ou círculo/azul ou verde; right --> idem) será
        aleatoriamente definida para cada participante;
        - N tentativas:
            - N/2 switch trials (uma tentativa com uma pista é sucedida por uma tentativa com a outra pista);
            - N/2 no-switch trials (uma tentativa com uma pista é sucedida por uma tentativa com a mesma pista);
        - Para cada tentativa, salvar:
            - Número da tentativa;
            - Pista;
            - Alvo;
            - Tipo de tentativa;
        - Separadamente, cria função que define relação entre setas e alternativas.
        """
        import random

        COLOR_TRIALS = 20
        SHAPE_TRIALS = 20
        TRIALS = 20

        def random_alternatives():
            """
            Define, de forma aleatória, o mapeamento entre teclas (left/right)
            e as respostas corretas para cada dimensão (forma e cor).

            Existem 4 possibilidades (equiprováveis), garantindo que:
            - Para as formas: triangle ↔ circle
            - Para as cores: green ↔ blue
            """
            num = random.random()  # sorteia um número entre 0 e 1
            if num > .75:
                return {"triangle": "left", "circle": "right",
                        "green": "left", "blue": "right"}
            elif num > .50:
                return {"triangle": "left", "circle": "right",
                        "green": "right", "blue": "left"}
            elif num > .25:
                return {"triangle": "right", "circle": "left",
                        "green": "left", "blue": "right"}
            else:
                return {"triangle": "right", "circle": "left",
                        "green": "right", "blue": "left"}

        my_buttons = random_alternatives()      # define mapeamento das teclas para este participante
        my_buttons2 = {}                        # representa setas com setas de verdade

        for k, v in my_buttons.items():         # itera sobre o my_buttons original
            if v == "left":
                my_buttons2[k] = "←"
            elif v == "right":
                my_buttons2[k] = "→"

        # define mapeamento dos botões
        if my_buttons["triangle"] == "left" and my_buttons["green"] == "left":
            left_text = "Verde OU\nTriângulo"
            right_text = "Azul OU\nCírculo"
        elif my_buttons["triangle"] == "left" and my_buttons["green"] == "right":
            left_text = "Azul OU\nTriângulo"
            right_text = "Verde OU\nCírculo"
        if my_buttons["triangle"] == "right" and my_buttons["green"] == "left":
            left_text = "Verde OU\nCírculo"
            right_text = "Azul OU\nTriângulo"
        if my_buttons["triangle"] == "right" and my_buttons["green"] == "right":
            left_text = "Azul OU\nCírculo"
            right_text = "Verde OU\nTriângulo"

        # índices de instruções
        current_instruction = 0
        block_instruction = 0

        instruction_list = [[
        """
        Neste estudo, você verá formas geométricas na tela (círculos ou triângulos, nas cores azul ou verde).

        A sessão terá três etapas. As duas primeiras etapas serão de treino, enquanto a terceira etapa será de teste.
        """,
        f"""
        Na primeira etapa, você verá uma cruz de fixação, seguido de uma forma geométrica. Sua tarefa será identificar a COR de cada forma geométrica:

            - Responda [{my_buttons2['blue']}] para a forma geométrica na cor AZUL.
            - Responda [{my_buttons2['green']}] para a forma geométrica na cor VERDE.
        """,
        """
        Para te ajudar, deixaremos as alternativas de resposta na tela durante a tarefa.

        Em seguida, daremos início à primeira etapa da tarefa. Se tiver dúvidas, chame o pesquisador antes de começar.

        Quando estiver pronto, clique em [Avançar] para começar a tarefa.
        """],
        [
        """
        Concluímos a primeira etapa da tarefa.

        Em seguida, passaremos à segunda etapa.
        """,
        f"""
        Na segunda etapa, você verá uma cruz de fixação, seguido de uma forma geométrica. Sua tarefa será identificar qual é a FORMA geométrica:

            - Responda [{my_buttons2['circle']}] para a forma geométrica CÍRCULO.
            - Responda [{my_buttons2['triangle']}] para a forma geométrica TRIÂNGULO.
        """,
        """
        Para te ajudar, deixaremos as alternativas de resposta na tela durante a tarefa.

        Em seguida, daremos início à segunda etapa da tarefa. Se tiver dúvidas, chame o pesquisador antes de começar.

        Quando estiver pronto, clique em [Avançar] para começar a tarefa.
        """],
        [
        """
        Concluímos a segunda etapa da tarefa.

        Em seguida, passaremos à terceira e mais importante etapa da tarefa.
        """,
        """
        Agora, no início de cada tentativa, você verá uma cruz de fixação ("+"), seguido de uma de duas palavras:

            - "Cor": você deverá identificar a cor da forma (azul ou verde), ignorando a forma em si.
            - "Forma": você deverá identificar a forma propriamente dita (círculo ou triângulo), ignorando a cor da forma.
        """,
        f"""
        Você usará as setas do teclado para dar suas respostas. Nas tentativas com a palavra "Cor":

            - Responda [{my_buttons2['blue']}] para AZUL.
            - Responda [{my_buttons2['green']}] para a forma geométrica na cor VERDE.
        """,
        f"""
        Nas tentativas com a palavra "Forma":

            - Responda [{my_buttons2['circle']}] para a forma geométrica CÍRCULO.
            - Responda [{my_buttons2['triangle']}] para a forma geométrica TRIÂNGULO.
        """,
        """
        Para te ajudar, deixaremos as alternativas de resposta na tela durante a tarefa.

        Em seguida, daremos início à terceira etapa tarefa. Se tiver dúvidas, chame o pesquisador antes de começar.

        Quando estiver pronto, clique em [Avançar] para começar a tarefa.
        """
        ]]


        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list[block_instruction]):
            if block_instruction == 0:
                block_instruction += 1
                current_instruction = 0 # zera contador de instruções
                color_instructions.finished = True
            elif block_instruction == 1:
                block_instruction += 1
                current_instruction = 0 # zera contador de instruções
                shape_instructions.finished = True
            elif block_instruction == 2:
                block_instruction += 1
                current_instruction = 0 # zera contador de instruções
                color_shape_instructions.finished = True
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[block_instruction][current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Routine:
        if css_blocks.thisN == 0:
            block_msg = "Clique em [Avançar] para iniciar o PRIMEIRO BLOCO de tentativas."

        elif css_blocks.thisN == 1:
            block_msg = "Pausa para descanso.\n\nClique em [Avançar] quando estiver pronto para iniciar o SEGUNDO BLOCO de tentativas."

        elif css_blocks.thisN == 2:
            block_msg = "Pausa para descanso.\n\nClique em [Avançar] quando estiver pronto para iniciar o TERCEIRO BLOCO de tentativas."

        elif css_blocks.thisN == 3:
            block_msg = "Pausa para descanso.\n\nClique em [Avançar] quando estiver pronto para iniciar o QUARTO BLOCO de tentativas."

        elif css_blocks.thisN == 4:
            block_msg = "Pausa para descanso.\n\nClique em [Avançar] quando estiver pronto para iniciar o QUINTO BLOCO de tentativas."
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
      units = norm
      wrapWidth = 1.8
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    ImageComponent new_trial_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent new_trial_resp
      clickable = new_trial_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        my_color = [0.0000, 0.0000, 0.0000]
      Begin Routine:
        if css_trials.thisN == 0:
            # =========================
            # PARÂMETROS DA TAREFA
            # =========================
            cues = ["Cor", "Forma"]              # possíveis pistas
            colors = ["blue", "green"]             # possíveis cores
            shapes = ["circle", "triangle"]      # possíveis formas

            # -----------------------------------------
            # Criação da lista de switch vs no-switch
            # -----------------------------------------
            # Primeira tentativa sempre "no-switch"
            switch_trials = ["no-switch"]

            # Restante: metade switch, metade no-switch, mas já usamos um no-switch no início
            remaining = ["switch"] * (TRIALS // 2) + ["no-switch"] * (TRIALS // 2 - 1)
            random.shuffle(remaining)

            # Junta tudo
            switch_trials.extend(remaining)

            # =========================
            # GERAR TENTATIVAS
            # =========================
            trials = []                          # lista que armazenará os dicionários de cada tentativa

            for i in range(TRIALS):
                # Sorteia aleatoriamente os atributos do estímulo
                color = random.choice(colors)
                shape = random.choice(shapes)

                # Define se a tentativa é "switch" ou "no-switch"
                trial_type = switch_trials[i]

                # Se for a primeira tentativa, sorteamos a pista livremente
                if i == 0:
                    cue = random.choice(cues)
                    last_cue = cue  # armazena para comparar na próxima iteração

                else:
                    # Caso seja trial de troca, alterna a pista em relação à anterior
                    if trial_type == "switch":
                        cue = "Forma" if last_cue == "Cor" else "Cor"

                    # Caso seja no-switch, mantém a mesma pista da anterior
                    else:
                        cue = last_cue

                    # Atualiza o "último cue" para próxima rodada
                    last_cue = cue

                # Registra os metadados da tentativa em um dicionário
                trials.append({
                    "trial": i + 1,       # número da tentativa (1 a N)
                    "cue": cue,           # pista ("Cor" ou "Forma")
                    "color": color,       # cor do estímulo
                    "shape": shape,       # forma do estímulo
                    "type": trial_type    # tipo de tentativa ("switch" ou "no-switch")
                })

        curr_phase = "color-shape"
        curr_cue = trials[css_trials.thisN]["cue"]
        curr_shape = trials[css_trials.thisN]["shape"]
        curr_color = trials[css_trials.thisN]["color"]
        curr_trial = trials[css_trials.thisN]["type"]

        # define qual é o gabarito
        if curr_cue == "Cor":
            resp_corr = my_buttons[curr_color]
        elif curr_cue == "Forma":
            resp_corr = my_buttons[curr_shape]

        if curr_shape == "circle":
            opa_circle, opa_triangle = 1, 0
        elif curr_shape == "triangle":
            opa_circle, opa_triangle = 0, 1
      End Routine:
        thisExp.addData('participant_code', participant_code)
        thisExp.addData("condition", "heterogeneous")
        thisExp.addData("phase", curr_phase)
        thisExp.addData("block", css_blocks.thisN + 1)

        if curr_cue == "Cor":
            curr_cue_en = "color"
        else:
            curr_cue_en = "shape"

        thisExp.addData('cue', curr_cue_en)
        thisExp.addData('shape', curr_shape)
        thisExp.addData('color', curr_color)
        thisExp.addData('trial_type', curr_trial)
        thisExp.addData('resp_corr', resp_corr)
        thisExp.addData('opa_circle', opa_circle)
        thisExp.addData('opa_triangle', opa_triangle)
    TextComponent fixation
      font = Times New Roman
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.350
      text = +
      units = norm
      wrapWidth = 1.8
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    TextComponent cue_msg
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, 0.8)
      startVal [time (s)] = 0.35
      text [set every repeat] = $curr_cue
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $resp_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      store = first key
      storeCorrect = True
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    PolygonComponent circle
      fillColor [set every repeat] = $curr_color
      lineWidth = 0
      opacity [set every repeat] = opa_circle
      shape = circle
      size = (0.56, 0.80)
      startVal [time (s)] = 0.6
      units = norm
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    PolygonComponent triangle
      fillColor [set every repeat] = $curr_color
      lineWidth = 0
      opacity [set every repeat] = opa_triangle
      shape = triangle
      size = (0.56, 0.80)
      startVal [time (s)] = 0.6
      units = norm
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    TextComponent left_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (-0.5, -0.75)
      startVal [time (s)] = 0.6
      text [set every repeat] = $left_text
      units = norm
      wrapWidth = 1.8
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    TextComponent right_msg
      font = Times New Roman
      letterHeight = 0.1
      pos = (0.5, -0.75)
      startVal [time (s)] = 0.6
      text [set every repeat] = $right_text
      units = norm
      wrapWidth = 1.8
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    TextComponent left_button
      font = Times New Roman
      letterHeight = 0.3
      pos = (-0.2, -0.75)
      startVal [time (s)] = 0.6
      text = ←
      units = norm
      wrapWidth = 1.8
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    TextComponent right_button
      font = Times New Roman
      letterHeight = 0.3
      pos = (0.2, -0.75)
      startVal [time (s)] = 0.6
      text = →
      units = norm
      wrapWidth = 1.8
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  Routine training_trial
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        color_training_check = True
        shape_training_check = False
      Begin Routine:
        if color_training_check:
            # se estamos em color trials
            if color_training.thisN == 0:
                # =========================
                # PARÂMETROS DA TAREFA
                # =========================
                colors = ["blue", "green"]           # possíveis cores
                shapes = ["circle", "triangle"]      # possíveis formas

                # =========================
                # GERAR TENTATIVAS
                # =========================
                training_trials = []                 # lista que armazenará os dicionários de cada tentativa

                for i in range(COLOR_TRIALS):
                    # Sorteia aleatoriamente os atributos do estímulo
                    color = random.choice(colors)
                    shape = random.choice(shapes)

                    # Registra os metadados da tentativa em um dicionário
                    training_trials.append({
                        "color": color,       # cor do estímulo
                        "shape": shape,       # forma do estímulo
                    })

            curr_shape = training_trials[color_training.thisN]["shape"]
            curr_color = training_trials[color_training.thisN]["color"]
            curr_phase = "color"

            resp_corr = my_buttons[curr_color]

            if curr_shape == "circle":
                opa_circle, opa_triangle = 1, 0
            elif curr_shape == "triangle":
                opa_circle, opa_triangle = 0, 1

            # buttons
            if my_buttons["blue"] == "left":
                training_left_text, training_right_text = "Azul", "Verde"
            else:
                training_left_text, training_right_text = "Verde", "Azul"

        if shape_training_check:
            # se estamos em shape trials
            if shape_training.thisN == 0:
                # =========================
                # PARÂMETROS DA TAREFA
                # =========================
                colors = ["blue", "green"]           # possíveis cores
                shapes = ["circle", "triangle"]      # possíveis formas

                # =========================
                # GERAR TENTATIVAS
                # =========================
                training_trials = []                 # lista que armazenará os dicionários de cada tentativa

                for i in range(SHAPE_TRIALS):
                    # Sorteia aleatoriamente os atributos do estímulo
                    color = random.choice(colors)
                    shape = random.choice(shapes)

                    # Registra os metadados da tentativa em um dicionário
                    training_trials.append({
                        "color": color,       # cor do estímulo
                        "shape": shape,       # forma do estímulo
                    })

            curr_shape = training_trials[shape_training.thisN]["shape"]
            curr_color = training_trials[shape_training.thisN]["color"]
            curr_phase = "shape"

            resp_corr = my_buttons[curr_shape]

            if curr_shape == "circle":
                opa_circle, opa_triangle = 1, 0
            elif curr_shape == "triangle":
                opa_circle, opa_triangle = 0, 1

            # buttons
            if my_buttons["triangle"] == "left":
                training_left_text, training_right_text = "Triângulo", "Círculo"
            else:
                training_left_text, training_right_text = "Círculo", "Triângulo"
      End Routine:
        thisExp.addData('participant_code', participant_code)
        thisExp.addData("condition", "homogeneous")
        thisExp.addData("phase", curr_phase)
        thisExp.addData("block", None)
        thisExp.addData('cue', None)
        thisExp.addData('shape', curr_shape)
        thisExp.addData('color', curr_color)
        thisExp.addData('trial_type', None)
        thisExp.addData('resp_corr', resp_corr)
        thisExp.addData('opa_circle', opa_circle)
        thisExp.addData('opa_triangle', opa_triangle)

        # se estamos na última tentativa do treino de cores
        if color_training.thisN == (COLOR_TRIALS - 1):
            shape_training_check = True
            color_training_check = False
    TextComponent fixation_2
      font = Times New Roman
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.350
      text = +
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent resp_2
      allowedKeys = 'left', 'right'
      correctAns = $resp_corr
      forceEndRoutine = True
      startVal [time (s)] = 0.35
      store = first key
      storeCorrect = True
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    PolygonComponent circle_2
      fillColor [set every repeat] = $curr_color
      lineWidth = 0
      opacity [set every repeat] = opa_circle
      shape = circle
      size = (0.56, 0.80)
      startVal [time (s)] = 0.35
      units = norm
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    PolygonComponent triangle_2
      fillColor [set every repeat] = $curr_color
      lineWidth = 0
      opacity [set every repeat] = opa_triangle
      shape = triangle
      size = (0.56, 0.80)
      startVal [time (s)] = 0.35
      units = norm
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    TextComponent left_msg_2
      font = Times New Roman
      letterHeight = 0.1
      pos = (-0.5, -0.75)
      startVal [time (s)] = 0.35
      text [set every repeat] = $training_left_text
      units = norm
      wrapWidth = 1.8
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    TextComponent right_msg_2
      font = Times New Roman
      letterHeight = 0.1
      pos = (0.5, -0.75)
      startVal [time (s)] = 0.35
      text [set every repeat] = $training_right_text
      units = norm
      wrapWidth = 1.8
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    TextComponent left_button_2
      font = Times New Roman
      letterHeight = 0.3
      pos = (-0.2, -0.75)
      startVal [time (s)] = 0.35
      text = ←
      units = norm
      wrapWidth = 1.8
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    TextComponent right_button_2
      font = Times New Roman
      letterHeight = 0.3
      pos = (0.2, -0.75)
      startVal [time (s)] = 0.35
      text = →
      units = norm
      wrapWidth = 1.8
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Flow
  Routine welcome
  LoopInitiator color_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator color_instructions
  LoopInitiator color_training loopType="TrialHandler"
    loopType = sequential
    nReps = COLOR_TRIALS
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    Routine training_trial
  LoopTerminator color_training
  LoopInitiator shape_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator shape_instructions
  LoopInitiator shape_training loopType="TrialHandler"
    loopType = random
    nReps = SHAPE_TRIALS
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    Routine training_trial
  LoopTerminator shape_training
  LoopInitiator color_shape_instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator color_shape_instructions
  LoopInitiator css_blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    Routine new_trial
    LoopInitiator css_trials loopType="TrialHandler"
      loopType = sequential
      nReps = TRIALS
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      Routine trial
    LoopTerminator css_trials
  LoopTerminator css_blocks
  Routine thanks
