PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = memory-scanning-task
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        instruction_list = [
        """
        Neste estudo, você verá sequências de dígitos.

        Os dígitos aparecerão um de cada vez.
        """,
        """
        Depois de ver uma sequência completa de dígitos, você verá um dígito de teste (na cor laranja).

        Sua tarefa será julgar se o dígito de teste apareceu ou não na sequência anterior.
        """,
        """
        Por exemplo, suponha que você viu a sequência 1 – 5 – 9. Se o dígito de teste for 5, você deverá responder [←], pois sim, ele apareceu na sequência anterior.

        Em contrapartida, se o dígito de teste for 8, você deverá responder [→], pois não, ele não apareceu na sequência anterior.

        Após dar sua resposta, você receberá um feedback indicando se acertou ou errou. Tente responder da maneira mais rápida e acurada possível.
        """,
        """
        O tamanho de cada sequência irá variar a cada tentativa.

        Além disso, você realizará várias tentativas, e pode descansar entre as tentativas, se julgar necessário.
        """,
        """
        Lembre-se: sua tarefa será julgar se o dígito de teste, na cor laranja, apareceu na sequência anterior:

            • Se sim, pressione [←]
            • Se não, pressione [→]
        """,
        """
        Em seguida, iniciaremos a tarefa.

        Quando estiver pronto(a), clique em [Avançar] para começar.
        """
        ]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists
        import locale

        locale.setlocale(locale.LC_COLLATE, 'pt_BR.UTF-8')

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine recall
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    CodeComponent code_recall
      Code Type = Py
      Begin Experiment:
        feedback_next_msg = "Pressione [Barra de Espaço] para iniciar a próxima tentativa"
      Begin Routine:
        event.clearEvents('keyboard')
      End Routine:
        memory_scanning_task_trials.addData('participant_code', participant_code)
        memory_scanning_task_trials.addData('my_digit', my_digit)
        memory_scanning_task_trials.addData('load', load)
        memory_scanning_task_trials.addData('trial_type', trial_type)
        memory_scanning_task_trials.addData('probe', probe)
        memory_scanning_task_trials.addData('sequence', sequence)
        memory_scanning_task_trials.addData('position', position)
        memory_scanning_task_trials.addData('corr_resp', corr_resp)

        if resp.corr == 1:
            feedback_msg = "Correto!"
            feedback_color = "green"
        elif resp.corr == 0:
            feedback_msg = "Incorreto!"
            feedback_color = "red"

        if memory_scanning_task_trials.thisN == (len(testing) - 1):
            feedback_next_msg = "Pressione [Barra de Espaço] para finalizar a tarefa"
    TextComponent prompt_task
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text = Em breve, você verá um dígito. Você viu ele antes?
      units = norm
      wrapWidth = 1.8
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    TextComponent prompt_recall
      color = orange
      font = Times New Roman
      letterHeight = 0.60
      pos = (0, 0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $probe
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    ImageComponent positive_button
      image = images/left_button.jpg
      pos = (-0.25, -0.6)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent negative_button
      image = images/right_button.jpg
      pos = (0.25, -0.6)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent positive
      font = Times New Roman
      letterHeight = 0.12
      pos = (-0.25, -0.87)
      startVal [time (s)] = 0.0
      text = Sim
      units = norm
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    TextComponent negative
      font = Times New Roman
      letterHeight = 0.12
      pos = (0.25, -0.87)
      startVal [time (s)] = 0.0
      text = Não
      units = norm
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Experiment:
        import random
        import itertools


        def sternberg_trials(
            n_trials = 144,
            loads = range(1, 7),
            stimuli = range(10)
            ):
            """
            Gera trials para a tarefa de busca serial em memória
            de curto prazo de Sternberg (1966).

            Retorna uma lista de dicionários, cada um contendo:
            - load: tamanho do conjunto de memória
            - trial_type: 'positive' (probe presente) ou 'negative' (probe ausente)
            - sequence: sequência de estímulos memorizados
            - probe: estímulo de teste
            - position: posição serial do probe na sequência (1-indexada);
                        0 se probe ausente
            """

            # Lista que armazenará todos os trials
            trials = []

            # Cria todas as combinações possíveis de carga × tipo de trial
            # Ex.: (1, 'positive'), (1, 'negative'), ..., (6, 'negative')
            conditions = list(itertools.product(loads, ["positive", "negative"]))

            # Número de repetições por condição
            # n_trials deve ser múltiplo do número de condições (12)
            n_reps = n_trials // len(conditions)

            # Repete o conjunto completo de condições n_reps vezes
            for _ in range(n_reps):

                # Itera por cada combinação de carga e tipo de trial
                for load, trial_type in conditions:

                    # Sorteia uma sequência de estímulos SEM repetição
                    # O comprimento da sequência é igual à carga do trial
                    seq = random.sample(stimuli, load)

                    # Caso positivo: o probe pertence à sequência memorizada
                    if trial_type == "positive":

                        # Escolhe aleatoriamente um item da sequência como probe
                        probe = random.choice(seq)

                        # Registra a posição serial do probe (começando em 1)
                        position = seq.index(probe) + 1

                    # Caso negativo: o probe NÃO pertence à sequência memorizada
                    else:

                        # Conjunto de estímulos possíveis menos os já usados na sequência
                        available = list(set(stimuli) - set(seq))

                        # Escolhe aleatoriamente um estímulo que não está na memória
                        probe = random.choice(available)

                        # Posição 0 indica ausência do probe na sequência
                        position = 0

                    # Armazena o trial como um dicionário
                    trials.append({
                        "load": load,
                        "trial_type": trial_type,
                        "sequence": seq,
                        "probe": probe,
                        "position": position
                    })

            # Embaralha a ordem final dos trials
            random.shuffle(trials)

            return trials

        # criando tentativas
        testing = sternberg_trials()
      Begin Routine:
        new_trial_msg = f"""
        Pressione [Barra de Espaço] para iniciar a primeira tentativa
        """
      End Routine:
        thisExp.addData("participant_code", participant_code)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text [set every repeat] = $new_trial_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent new_trial_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine digit_trial
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    CodeComponent digit_trial_code
      Code Type = Py
      Begin Routine:
        my_digit = testing[memory_scanning_task_trials.thisN]['sequence'][memory_scanning_task_digit.thisN]
        load = testing[memory_scanning_task_trials.thisN]['load']
        trial_type = testing[memory_scanning_task_trials.thisN]['trial_type']
        probe = testing[memory_scanning_task_trials.thisN]['probe']
        sequence = testing[memory_scanning_task_trials.thisN]['sequence']
        position = testing[memory_scanning_task_trials.thisN]['position']

        if trial_type == "positive":
            corr_resp = "left"
        elif trial_type == "negative":
            corr_resp = "right"
    TextComponent to_be_remembered
      font = Times New Roman
      letterHeight = 0.60
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $my_digit
      units = norm
      wrapWidth = 1.8
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  Routine feedback
    TextComponent prompt_task_2
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text = Em breve, você verá um dígito. Você viu ele antes?
      units = norm
      wrapWidth = 1.8
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
    TextComponent prompt_feedback
      color [set every repeat] = $feedback_color
      font = Times New Roman
      letterHeight = 0.20
      pos = (0, 0.2)
      startVal [time (s)] = 0
      text [set every repeat] = $feedback_msg
      units = norm
      wrapWidth = 1.8
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    ImageComponent positive_button_2
      image = images/left_button.jpg
      pos = (-0.25, -0.6)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent negative_button_2
      image = images/right_button.jpg
      pos = (0.25, -0.6)
      size = (0.25, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent positive_2
      font = Times New Roman
      letterHeight = 0.12
      pos = (-0.25, -0.87)
      startVal [time (s)] = 0.0
      text = Sim
      units = norm
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    TextComponent negative_2
      font = Times New Roman
      letterHeight = 0.12
      pos = (0.25, -0.87)
      startVal [time (s)] = 0.0
      text = Não
      units = norm
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    TextComponent feedback_next
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, -0.2)
      startVal [time (s)] = 0.2
      text [set every repeat] = $feedback_next_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent feedback_next_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      store = nothing
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  Routine new_trial
  LoopInitiator memory_scanning_task_trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(testing)
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    LoopInitiator memory_scanning_task_digit loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = testing[memory_scanning_task_trials.thisN]['load']
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      Routine digit_trial
    LoopTerminator memory_scanning_task_digit
    Routine recall
    Routine feedback
  LoopTerminator memory_scanning_task_trials
  Routine thanks
