PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = threat-detection-paradigm
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        instruction_list = [
        """
        Nesta tarefa, você verá uma grade com 9 imagens (3 × 3), contendo flores e cobras.

        Em cada tentativa, haverá apenas UMA IMAGEM diferente das demais.
        """,
        """
        Antes das imagens aparecerem, será apresentada a palavra "Flor" ou "Cobra".

        Essa palavra indica qual imagem você deverá encontrar.
        """,
        """
        Sua tarefa é clicar, com o mouse, na imagem correspondente à palavra apresentada.

        Por exemplo:

        • Se aparecer "Flor", clique na única flor entre as cobras.
        • Se aparecer "Cobra", clique na única cobra entre as flores.
        """,

        """
        Responda o mais rápido e o mais corretamente possível.

        Em seguida, iremos iniciar a tarefa. Caso tenha alguma dúvida, chame o experimentador.

        Caso não tenha dúvidas, clique em [Avançar] para iniciar a tarefa.
        """
        ]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Experiment:
        stimuli = {"flowers": ["images/flower_01b.jpg", "images/flower_02s.jpg", "images/flower_03s.jpg",
                               "images/flower_04s.jpg", "images/flower_05s.jpg", "images/flower_06s.jpg",
                               "images/flower_07s.jpg", "images/flower_08s.jpg", "images/flower_09s.jpg",
                               "images/flower_10s.jpg", "images/flower_11s.jpg", "images/flower_12s.jpg",
                               "images/flower_13s.jpg", "images/flower_14s.jpg", "images/flower_15s.jpg",
                               "images/flower_16s.jpg", "images/flower_17s.jpg", "images/flower_18s.jpg",
                               "images/flower_19s.jpg"],
                   "snakes": ["images/snake_01b.jpg", "images/snake_02s.jpg", "images/snake_03s.jpg",
                              "images/snake_04s.jpg", "images/snake_05s.jpg", "images/snake_06s.jpg",
                              "images/snake_07s.jpg", "images/snake_08s.jpg", "images/snake_09s.jpg",
                              "images/snake_10s.jpg", "images/snake_11s.jpg", "images/snake_12s.jpg",
                              "images/snake_13s.jpg", "images/snake_14s.jpg", "images/snake_15n.jpg",
                              "images/snake_16n.jpg"]
                   }
      Begin Routine:
        # define se alvo é flor ou cobra
        if random.random() > .5:
            # alvo = flor
            target, lures, target_label = "flowers", "snakes", "Flor"
        else:
            # alvo = cobra
            target, lures, target_label = "snakes", "flowers", "Cobra"

        # aleatoriza imagens
        random.shuffle(stimuli[target])
        random.shuffle(stimuli[lures])
        target_image = stimuli[target][0] # define a imagem alvo
        stimulus_list = stimuli[lures][:8]
        stimulus_list.append(stimuli[target][0])
        random.shuffle(stimulus_list) # embaralha a lista de imagens

        # cria a lista final de estímulos de uma tentativa
        final_stimulus_list = []

        for i, stim in enumerate(stimulus_list):
            final_stimulus_list.append({
                "position": i + 1, # posição da imagem (1 a 9)
                "file": stim,      # nome da imagem (.jpg)
            })


        # print(final_stimulus_list)
      End Routine:
        thisExp.addData("participant_code", participant_code)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.20
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 2.00
      text [set every repeat] = $target_label
      units = norm
      wrapWidth = 1.8
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    TextComponent fixation
      font = Times New Roman
      letterHeight = 0.20
      startVal [time (s)] = 2.50
      stopVal [duration (s)] = 1.00
      text [set every repeat] = +
      units = norm
      wrapWidth = 1.8
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  Routine target_detection_task_trial
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    CodeComponent trial_code
      Code Type = Py
      Begin Experiment:
        mapping = {
            "image_1": 0,
            "image_2": 1,
            "image_3": 2,
            "image_4": 3,
            "image_5": 4,
            "image_6": 5,
            "image_7": 6,
            "image_8": 7,
            "image_9": 8,
        }
      End Routine:
        thisExp.addData("participant_code", participant_code)

        clicked = mouse.clicked_name[-1] # número da imagem clicada
        indice = mapping[clicked]        # índice da imagem clicada
        clicked_image = final_stimulus_list[indice]["file"] # nome da imagem
        correct = int(clicked_image == target_image) # acertou? (1 = sim; 0 = não)

        # salva nome das iamgens (1 a 9)
        thisExp.addData("image_1", final_stimulus_list[0]["file"])
        thisExp.addData("image_2", final_stimulus_list[1]["file"])
        thisExp.addData("image_3", final_stimulus_list[2]["file"])
        thisExp.addData("image_4", final_stimulus_list[3]["file"])
        thisExp.addData("image_5", final_stimulus_list[4]["file"])
        thisExp.addData("image_6", final_stimulus_list[5]["file"])
        thisExp.addData("image_7", final_stimulus_list[6]["file"])
        thisExp.addData("image_8", final_stimulus_list[7]["file"])
        thisExp.addData("image_9", final_stimulus_list[8]["file"])

        thisExp.addData("target", target)                # Cobra ou Flor?
        thisExp.addData("lures", lures)                  # Cobra ou Flor?

        # salva outras variáveis importantes
        thisExp.addData("target_image", target_image)    # alvo
        thisExp.addData("clicked_image", clicked_image)  # resposta
        thisExp.addData("correct", correct)              # acertou?
        thisExp.addData("RT", float(mouse.time[0]))      # tempo de reação (RT)

        # print(float(mouse.time[0]))
    ImageComponent image_1
      image [set every repeat] = $final_stimulus_list[0]["file"]
      pos = (-0.65, 0.65)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_2
      image [set every repeat] = $final_stimulus_list[1]["file"]
      pos = (0, 0.65)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_3
      image [set every repeat] = $final_stimulus_list[2]["file"]
      pos = (0.65, 0.65)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_4
      image [set every repeat] = $final_stimulus_list[3]["file"]
      pos = (-0.65, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_5
      image [set every repeat] = $final_stimulus_list[4]["file"]
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_6
      image [set every repeat] = $final_stimulus_list[5]["file"]
      pos = (0.65, 0)
      size [set every repeat] = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_7
      image [set every repeat] = $final_stimulus_list[6]["file"]
      pos = (-0.65, -0.65)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_8
      image [set every repeat] = $final_stimulus_list[7]["file"]
      pos = (0, -0.65)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent image_9
      image [set every repeat] = $final_stimulus_list[8]["file"]
      pos = (0.65, -0.65)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent mouse
      clickable = image_1, image_2, image_3, image_4, image_5, image_6, image_7, image_8, image_9
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator target_detection_task_trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    Routine new_trial
    Routine target_detection_task_trial
  LoopTerminator target_detection_task_trials
  Routine thanks
