PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = change-detection-task
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0


        instruction_list = [
        """
        Neste estudo, você verá matrizes formadas por vários quadrados.

        Em cada tentativa, você verá duas matrizes, uma após a outra.
        """,

        """
        Primeiro, uma matriz aparecerá na tela por alguns instantes.

        Observe atentamente os quadrados, pois você deverá memorizar a posição dos elementos apresentados.
        """,

        """
        Depois de um breve intervalo, uma segunda matriz aparecerá.

        Sua tarefa será comparar essa segunda matriz com a primeira e decidir se elas são iguais ou diferentes.
        """,

        """
        Se as duas matrizes forem exatamente iguais, pressione [ ← ].

        Se houver alguma diferença entre elas, pressione [ → ].
        """,

        """
        Por exemplo:

        Se a primeira matriz e a segunda matriz forem exatamente iguais:

                MATRIZ 1  =  MATRIZ 2

        pressione [←].
        """,

        """
        Se uma das células tiver sido modificada entre a primeira e a segunda matriz:

                MATRIZ 1  ≠  MATRIZ 2

        pressione [→].
        """,

        """
        Observe que, quando houver uma diferença, apenas uma célula será modificada entre as duas matrizes.

        Portanto, compare cuidadosamente as posições apresentadas e responda assim que identificar se as matrizes são iguais ou diferentes.
        """,

        """
        Após sua resposta, você receberá um feedback indicando se sua resposta foi correta ou incorreta.

        Tente responder da maneira mais rápida e acurada possível.
        """,

        """
        O tamanho das matrizes e o tempo entre os estímulos poderão variar ao longo das tentativas.

        Você realizará várias tentativas e poderá descansar entre elas, se necessário.
        """,

        """
        Lembre-se:

            • Matrizes iguais → pressione [←]
            • Matrizes diferentes → pressione [→]

        Responda com base na comparação entre a primeira e a segunda matriz.
        """,

        """
        Em seguida, iniciaremos a tarefa.

        Quando estiver pronto(a), clique em [Avançar] para começar.
        """
        ]


        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists
        import locale

        locale.setlocale(locale.LC_COLLATE, 'pt_BR.UTF-8')

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine new_trial
    CodeComponent new_trial_code
      Code Type = Py
      Begin Routine:
        idx = trials.thisN

        idx_msg = f"{idx + 1}/{len(trials_list)}"
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    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.5
      text [set every repeat] = Pressione qualquer tecla para iniciar a próxima tentativa. 
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent new_trial_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent idx_count
      font = Times New Roman
      letterHeight = 0.05
      pos = (0.90, -0.90)
      startVal [time (s)] = 0.5
      text [set every repeat] = $idx_msg
      units = norm
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  Routine matrix_1
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    CodeComponent matrix_1_code
      Code Type = Py
      Begin Experiment:
        # ============================================================
        # PARÂMETROS GERAIS DO EXPERIMENTO
        # ============================================================

        # Tamanhos das matrizes (Phillips, 1974)
        # O número representa o número de linhas e também de colunas
        # Portanto:
        #   4 = matriz 4 × 4 = 16 células
        #   6 = matriz 6 × 6 = 36 células
        #   8 = matriz 8 × 8 = 64 células
        matrix_sizes = [4, 6, 8]

        # Intervalos entre a primeira e a segunda matriz (em segundos)
        # 0.02 = 20 ms
        isi_values = [0.02, 1.0, 3.0, 9.0]

        # Número de tentativas por combinação de:
        # tamanho da matriz × ISI
        # 3 tamanhos × 4 ISIs = 12 condições
        # 30 tentativas por condição:
        # 12 × 30 = 360 tentativas no total
        n_trials_per_condition = 30

        # Número de blocos
        n_blocks = 5

        # ============================================================
        # GERAR A ESTRUTURA DAS TENTATIVAS
        # ============================================================

        # Lista que receberá todas as tentativas do experimento
        trials_list = []

        # Vamos construir cada condição separadamente.
        #   - tamanho da matriz (4, 6 ou 8)
        #   - ISI (0.02, 1, 3 ou 9 s)
        #   - 30 tentativas por condição
        #   - 5 blocos
        #   - 30 tentativas ÷ 5 blocos = 6 tentativas (de cada condição) por bloco
        # Portanto, cada bloco terá exatamente 6 tentativas
        # de cada uma das 12 condições.

        # ------------------------------------------------------------
        # Loop pelas condições experimentais
        # ------------------------------------------------------------

        for size in matrix_sizes:

            for isi in isi_values:

                # Criamos as 30 tentativas desta condição
                condition_trials = []

                for trial_number in range(n_trials_per_condition):

                    # Sorteia independentemente se a tentativa será
                    # "same" ou "different".
                    condition = random.choice(['same', 'different'])

                    if condition == "same":
                        corr_resp = "left"
                    else:
                        corr_resp = "right"

                    # Guarda as informações desta tentativa.
                    trial = {
                        'size': size,
                        'isi': isi,
                        'condition': condition,
                        'corr_resp': corr_resp
                    }

                    condition_trials.append(trial)


                # ----------------------------------------------------
                # Distribuir as 30 tentativas entre os 5 blocos
                # ----------------------------------------------------

                # Cada bloco receberá 6 tentativas desta condição.
                trials_per_block = n_trials_per_condition // n_blocks

                for block in range(n_blocks):

                    # Índices correspondentes às 6 tentativas deste bloco.
                    start = block * trials_per_block
                    end = start + trials_per_block

                    # Seleciona as 6 tentativas.
                    block_trials = condition_trials[start:end]

                    # Registra a qual bloco elas pertencem.
                    for trial in block_trials:
                        trial['block'] = block + 1

                        # Adicionamos à lista geral.
                        trials_list.append(trial)

        # ============================================================
        # ALEATORIZAR A ORDEM DAS TENTATIVAS DENTRO DE CADA BLOCO
        # ============================================================

        # randomização dentro de cada bloco, para que:
        #   - cada bloco continue contendo 72 tentativas
        #   - cada bloco continue contendo 6 tentativas de cada condição
        #   - apenas a ORDEM das tentativas seja aleatorizada

        randomized_trials = []

        for block in range(1, n_blocks + 1):

            # Seleciona as tentativas pertencentes a este bloco.
            block_trials = [
                trial for trial in trials_list
                if trial['block'] == block
            ]

            # Embaralha a ordem das 72 tentativas
            random.shuffle(block_trials)

            # Acrescenta as tentativas embaralhadas à lista final
            randomized_trials.extend(block_trials)

        # Substituímos a lista original pela lista final aleatorizada.
        trials_list = randomized_trials

        # ============================================================
        # FUNÇÃO PARA CRIAR UMA MATRIZ ALEATÓRIA
        # ============================================================

        def create_random_matrix(size):
            """
            Cria uma matriz quadrada de tamanho 'size × size'.

            Cada célula recebe aleatoriamente:
                0 = branco
                1 = preto

            Como usamos random.choice([0, 1]), cada valor tem
            probabilidade de 0.5 de ser escolhido.
            """

            # Lista que armazenará os valores de todas as células.
            matrix = []

            # Percorremos cada linha da matriz.
            for row in range(size):

                # Criamos uma nova linha vazia.
                current_row = []

                # Percorremos cada coluna da matriz.
                for col in range(size):

                    # Sorteamos o valor da célula.
                    value = random.choice([0, 1])

                    # Adicionamos o valor à linha.
                    current_row.append(value)

                # Adicionamos a linha completa à matriz.
                matrix.append(current_row)

            return matrix

        # ============================================================
        # CRIAR AS MATRIZES 1 E 2 DE CADA TENTATIVA
        # ============================================================

        for trial in trials_list:

            # O tamanho da matriz é definido pela condição da tentativa
            size = trial['size']

            # Gera a matriz aleatória correspondente.
            matrix1 = create_random_matrix(size)
            trial['matrix1'] = matrix1

            # copia a matriz
            matrix2 = [row[:] for row in matrix1]

            # --------------------------------------------------------
            # TENTATIVAS "SAME"
            # --------------------------------------------------------

            if trial['condition'] == 'different':

                # Sorteamos aleatoriamente UMA célula da matriz
                row = random.randrange(trial['size'])
                col = random.randrange(trial['size'])

                # Invertemos o valor dessa célula
                matrix2[row][col] = 1 - matrix2[row][col]

                # Guardamos a posição da célula que foi modificada
                trial['changed_cell'] = col + row * col

            else:

                trial['changed_cell'] = None

            # Guardamos a segunda matriz na tentativa
            trial['matrix2'] = matrix2

        # ============================================================
        # PARÂMETROS GEOMÉTRICOS
        # ============================================================
        cell_size = 0.10

        # ============================================================
        # CRIAR OS RECTs DAS MATRIZES
        # ============================================================

        squares = {}

        for size in matrix_sizes:

            squares[size] = []

            for row in range(size):

                for col in range(size):

                    # ------------------------------------------------
                    # POSIÇÃO DA CÉLULA
                    # ------------------------------------------------

                    # O tamanho da matriz depende de "size".
                    # Como cell_size é constante, a matriz cresce
                    # conforme aumentamos o número de células.
                    matrix_size = size * cell_size

                    # Coordenada horizontal:
                    # centralizamos a matriz em x = 0.
                    x = (
                        (col + 0.5) * cell_size
                        - matrix_size / 2
                    )

                    # Coordenada vertical:
                    # a primeira linha fica no topo da matriz.
                    y = (
                        matrix_size / 2
                        - (row + 0.5) * cell_size
                    )

                    # ------------------------------------------------
                    # CRIAR O RECT
                    # ------------------------------------------------

                    square = visual.Rect(
                        win=win,
                        name=f'square_{size}_{row}_{col}',
                        units='height',

                        # Agora width e height representam a mesma
                        # unidade física da tela.
                        width=cell_size,
                        height=cell_size,

                        ori=0.0,
                        pos=(x, y),
                        anchor='center',

                        lineWidth=1.0,
                        colorSpace='rgb',
                        lineColor='darkgray',
                        fillColor='white',

                        opacity=None,
                        depth=-2.0,
                        interpolate=True
                    )

                    squares[size].append(square)

        # ============================================================
        # FUNÇÃO PARA CONFIGURAR OS QUADRADOS DE UMA MATRIZ
        # ============================================================

        def set_matrix(matrix, squares):
            """
            Configura as cores dos quadrados para representar uma matriz

            Parâmetros
            ----------
            matrix : lista de listas
                Matriz contendo 0 (branco) e 1 (preto).

            squares : dicionário
                Dicionário contendo os Rects das matrizes 4×4, 6×6 e 8×8.
            """

            # O número de linhas da matriz nos informa seu tamanho.
            #
            # Exemplos:
            #   matriz 4×4 → size = 4
            #   matriz 6×6 → size = 6
            #   matriz 8×8 → size = 8
            size = len(matrix)

            # Recuperamos os Rects correspondentes a esse tamanho
            current_squares = squares[size]

            # Contador que percorre os Rects
            square_index = 0

            # Percorremos a matriz linha por linha
            for row in matrix:

                # Percorremos cada célula da linha
                for value in row:

                    # ------------------------------------------------
                    # Definir a cor da célula
                    # ------------------------------------------------

                    if value == 0:
                        current_squares[square_index].fillColor = 'white'
                    else:
                        current_squares[square_index].fillColor = 'black'

                    # ------------------------------------------------
                    # Próximo quadrado
                    # ------------------------------------------------

                    square_index += 1
      Begin Routine:
        # Seleciona os dados correspondentes à repetição atual
        # do loop do Builder.
        current_trial = trials_list[trials.thisN]

        # Extrai as informações da tentativa atual.
        current_size = current_trial['size']
        current_isi = current_trial['isi']
        current_condition = current_trial['condition']
        corr_resp = current_trial['corr_resp']
        current_matrix1 = current_trial['matrix1']
        current_matrix2 = current_trial['matrix2']
        changed_cell = current_trial['changed_cell']

        # ============================================================
        # CONFIGURAR A PRIMEIRA MATRIZ
        # ============================================================

        # A função set_matrix() altera as cores dos Rects para que
        # eles representem a matriz 1 da tentativa atual.
        #
        # IMPORTANTE:
        # set_matrix() NÃO desenha os quadrados.
        # Ela apenas prepara os estímulos.
        set_matrix(current_matrix1, squares)
      Each Frame:
        # ============================================================
        # DESENHAR A PRIMEIRA MATRIZ
        # ============================================================

        # Selecionamos os Rects correspondentes ao tamanho da matriz
        # da tentativa atual.
        current_squares = squares[current_size]

        # Desenhamos cada quadrado.
        for square in current_squares:
            square.draw()
    TextComponent matrix_1_text
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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  Routine matrix_2
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    CodeComponent matrix_2_code
      Code Type = Py
      Begin Routine:
        # ============================================================
        # CONFIGURAR A SEGUNDA MATRIZ
        # ============================================================
        set_matrix(current_matrix2, squares)
      Each Frame:
        # ============================================================
        # DESENHAR A SEGUNDA MATRIZ
        # ============================================================
        # Desenhamos cada quadrado.
        for square in squares[current_size]:
            square.draw()
      End Routine:
        thisExp.addData('size', current_size)
        thisExp.addData('isi', current_isi)
        thisExp.addData('condition', current_condition)
        thisExp.addData('corr_resp', corr_resp)
        thisExp.addData('matrix1', current_matrix1)
        thisExp.addData('matrix2', current_matrix2)
        thisExp.addData('changed_cell', changed_cell)

        if matrix_2_resp.corr:
            fb_msg = "Correto!"
            fb_color = "darkgreen"
        else:
            fb_msg = "Incorreto!"
            fb_color = "red"
    TextComponent matrix_2_text
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent matrix_2_resp
      allowedKeys = 'left', 'right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine ISI
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    TextComponent ISI_text
      durationEstim = 1
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $current_isi
      units = norm
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  Routine pre_trial
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    TextComponent pre_trial_text
      font = Times New Roman
      letterHeight = 0.3
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
      units = norm
      wrapWidth = 1.8
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  Routine feedback
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    TextComponent feedback_msg
      color [set every repeat] = $fb_color
      font = Times New Roman
      letterHeight = 0.20
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $fb_msg
      units = norm
      wrapWidth = 1.8
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(trials_list)
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    Routine new_trial
    Routine pre_trial
    Routine matrix_1
    Routine ISI
    Routine matrix_2
    Routine feedback
  LoopTerminator trials
  Routine thanks
