PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = counting-span-task
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        # Cada string corresponde a uma tela de instruções
        instruction_list = [
        """
        Neste estudo, você verá telas com círculos e quadrados de diferentes cores.

        Sua tarefa será contar apenas os CÍRCULOS AZUL-ESCUROS.
        """,
        """
        Em cada tela, aparecerão vários estímulos distribuídos pela tela.

        Ignore os quadrados azul-escuros e os quadrados azul-claros. Conte somente os CÍRCULOS AZUL-ESCUROS.
        """,
        """
        Conte os CÍRCULOS AZUL-ESCUROS em voz alta e, ao final, repita o número final identificado.

        Por exemplo, se houver 3 círculos azul-escuros, conte em voz alta, "Um, dois, três, TRÊS", repetindo o número final.

        Em seguida, clique em [Continuar] para avançar para a próxima tela.
        """,
        """
        Após observar cada tela, avance para a próxima.

        Conte os CÍRCULOS AZUL-ESCUROS com atenção, pois você precisará memorizar a quantidade apresentada em cada tela.
        """,
        """
        Ao final de uma sequência de telas, aparecerá a palavra "Recordação" e um campo para você digitar sua resposta.

        Digite, na ordem em que apareceram, as quantidades de CÍRCULOS AZUL-ESCUROS de cada tela, sem espaços ou separadores.
        """,
        """
        Por exemplo, se você observar 3 CÍRCULOS AZUL-ESCUROS na primeira tela, 5 na segunda, 2 na terceira e 4 na quarta, sua resposta deverá ser:

        3524
        """,
        """
        O número de telas de cada sequência poderá variar.

        Concentre-se tanto em contar corretamente os CÍRCULOS AZUL-ESCUROS quanto em memorizar a ordem das contagens.
        """,
        """
        Tente manter a maior quantidade possível de informações na memória.

        Ignore os círculos azul-claros e os quadrados azul-escuros. Seu foco será nos CÍRCULOS AZUL-ESCUROS.
        """,
        """
        Não digite sua resposta durante a apresentação das telas. Aguarde até que a tela de recordação apareça.
        """,
        """
        Quando estiver pronto(a), avance para iniciar a tarefa.
        """
        ]


        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists
        import locale

        locale.setlocale(locale.LC_COLLATE, 'pt_BR.UTF-8')

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine counting_display
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    CodeComponent generate_stimuli
      Code Type = Py
      Begin Experiment:
        import random  # Sorteio das quantidades e posições
        import math    # Cálculos geométricos
      Begin Routine:
        # Quantidade de estímulos de cada tipo nesta tela
        n_targets = random.randint(3, 9)       # Círculos azul-escuros
        n_color_dist = random.randint(1, 9)    # Quadrados azul-escuros
        n_shape_dist = random.randint(1, 5)    # Quadrados azul-claros

        # Calcula o total de estímulos desta tela
        n_stimuli = n_targets + n_color_dist + n_shape_dist

        # Diagnóstico: imprime as quantidades no console
        print(
            f"Alvos: {n_targets}; "
            f"Distratores de cor: {n_color_dist}; "
            f"Distratores de forma: {n_shape_dist}; "
            f"Total: {n_stimuli}"
        )

        # Tamanho dos estímulos em unidades norm
        stim_size = 0.10

        # Área disponível em unidades height
        # Ajuste a largura disponível à proporção da tela
        aspect_ratio = win.size[0] / win.size[1]

        x_min = -aspect_ratio * 0.45
        x_max =  aspect_ratio * 0.45

        # Mantém a região inferior livre
        y_min, y_max = -0.20, 0.40

        # Lista que armazenará as posições dos estímulos
        positions = []

        # Total de estímulos nesta tela
        n_stimuli = n_targets + n_color_dist + n_shape_dist

        # Raio de segurança: metade do tamanho mais uma pequena margem
        min_dist = stim_size * math.sqrt(2) + 0.005

        # Posiciona cada estímulo
        for i in range(n_stimuli):

            for attempt in range(1000):

                # Sorteia a posição dentro da área permitida
                x = random.uniform(x_min, x_max)
                y = random.uniform(y_min, y_max)

                # Verifica a distância de todos os estímulos anteriores
                valid = all(
                    math.hypot(x - px, y - py) >= min_dist
                    for px, py in positions
                )

                if valid:
                    positions.append((x, y))
                    break

            else:
                raise RuntimeError(
                    "Não foi possível posicionar todos os estímulos."
                )

        # Define as categorias de estímulos
        stim_types = (
            ["target"] * n_targets
            + ["color_dist"] * n_color_dist
            + ["shape_dist"] * n_shape_dist
        )

        # Embaralha a ordem para distribuir os tipos aleatoriamente
        random.shuffle(stim_types)

        # Lista que guardará os objetos visuais
        stimuli = []

        for stim_type, (x, y) in zip(stim_types, positions):

            # Círculos azul-escuros: alvos
            if stim_type == "target":
                stim = visual.Circle(
                    win, radius=stim_size / 2,
                    pos=(x, y), fillColor = "darkblue",
                    lineColor = "darkblue", units = "height"
                )

            # Quadrados azul-escuros: distratores de cor
            elif stim_type == "color_dist":
                stim = visual.Rect(
                    win, width = stim_size, height = stim_size,
                    pos=(x, y), fillColor = "darkblue",
                    lineColor = "darkblue", units = "height"
                )

            # Quadrados azul-claros: distratores de forma
            else:
                stim = visual.Rect(
                    win, width = stim_size, height = stim_size,
                    pos=(x, y), fillColor = "lightblue",
                    lineColor = "lightblue", units = "height"
                )

            stimuli.append(stim)

        # Registra a quantidade de círculos azul-escuros desta tela
        target_counts.append(n_targets)
      Each Frame:
        # Desenha todos os estímulos em cada quadro
        for stim in stimuli:
            stim.draw()
    MouseComponent mouse_continue
      clickable = continue_button,
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent continue_button
      image = images/continue_button.jpg
      pos = (0, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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  Routine sequence_control
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    CodeComponent sequence_code
      Code Type = Py
      Begin Experiment:
        # Armazena as contagens de alvos de cada tentativa
        target_counts = []

        # Número de telas na tentativa atual
        n_screens = 0

        # Cria 3 repetições de cada comprimento, de 2 a 8 telas
        screen_counts = list(range(2, 9)) * 3

        # Embaralha a ordem dos 21 trials
        random.shuffle(screen_counts)

        # Armazena os resultados de cada trial para calcular o desempenho global
        all_correct = []
        all_proportional = []
        all_unordered = []
      Begin Routine:
        # Retira o próximo comprimento da lista
        n_screens = screen_counts.pop()

        # Reinicia a sequência de contagens deste trial
        target_counts = []
    TextComponent pre_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0
      text [set every repeat] = Pressione [Barra de Espaço] para iniciar a próxima tentativa. 
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent pre_trial_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine recall
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    CodeComponent recall_code
      Code Type = Py
      Begin Experiment:
        from collections import Counter
      Begin Routine:
        # Converte as contagens em uma sequência sem separadores
        correct_response = "".join(str(n) for n in target_counts)

        # Inicializa a resposta do participante
        participant_response = ""

        # Tamanhos mínimo e máximo da resposta
        max_length = 9
      Each Frame:
        # Remove espaços no início e no fim da resposta
        recall_msg.text = recall_msg.text.strip()

        # Limita o comprimento da resposta
        if len(recall_msg.text) > max_length:
            recall_msg.text = recall_msg.text[:max_length]
      End Experiment:
        # Calcula o desempenho global ao final dos 21 trials
        global_accuracy = sum(all_correct) / len(all_correct)
        global_proportional = sum(all_proportional) / len(all_proportional)
        global_unordered = sum(all_unordered) / len(all_unordered)

        thisExp.addData("global_accuracy", global_accuracy)
        thisExp.addData("global_proportional", global_proportional)
        thisExp.addData("global_unordered", global_unordered)
      End Routine:
        participant_response = recall_msg.text.strip()

        # Nota: o denominador considera o comprimento da maior sequência, penalizando
        # omissões e dígitos extras. O crédito não proporcional considera quantas vezes
        # cada contagem aparece, sem exigir a posição correta

        # Gabarito: sequência de contagens apresentadas
        correct_response = "".join(str(n) for n in target_counts)

        if recall_msg.text.strip() == correct_response:
            response_corr = 1
        else:
            response_corr = 0

        # Crédito proporcional: dígitos corretos nas mesmas posições
        n_positions = max(len(correct_response), len(participant_response), 1)

        n_positional = sum(
            a == b
            for a, b in zip(correct_response, participant_response)
        )

        proportional_score = n_positional / n_positions

        # Crédito não proporcional: contagens corretas, ignorando a ordem
        overlap = Counter(correct_response) & Counter(participant_response)
        n_unordered = sum(overlap.values())

        unordered_score = n_unordered / n_positions

        # Guarda os escores desta tentativa para o cálculo global
        all_correct.append(response_corr)
        all_proportional.append(proportional_score)
        all_unordered.append(unordered_score)

        # Registra as medidas desta tentativa
        thisExp.addData("memory_load", n_screens)
        thisExp.addData("target_counts", correct_response)
        thisExp.addData("participant_response", participant_response)
        thisExp.addData("response_corr", response_corr)
        thisExp.addData("n_positional", n_positional)
        thisExp.addData("proportional_score", proportional_score)
        thisExp.addData("n_unordered", n_unordered)
        thisExp.addData("unordered_score", unordered_score)
    TextComponent recall_title
      color = orange
      font = Times New Roman
      letterHeight = 0.25
      pos = (0, 0.7)
      startVal [time (s)] = 0
      text [set every repeat] = Recordação
      units = norm
      wrapWidth = 1.8
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    TextComponent recall_prompt
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.30)
      startVal [time (s)] = 0
      text [set every repeat] = Digite TODOS os números de círculos azul-escuros na ordem apresentada e clique em [Continuar] para enviar sua resposta.
      units = norm
      wrapWidth = 1.8
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    TextboxComponent recall_msg
      bold = False
      borderColor = 1.0000, 1.0000, 1.0000
      editable = True
      fillColor = 0.0000, 0.0000, 0.0000
      font = Times New Roman
      letterHeight = 0.2
      pos = (0, -0.30)
      size = (1, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent recall_finish
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    ImageComponent recall_button
      image = images/continue_button.jpg
      pos = (0, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = len(screen_counts)
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    Routine sequence_control
    LoopInitiator screen_loop loopType="TrialHandler"
      loopType = sequential
      nReps = n_screens
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      Routine counting_display
    LoopTerminator screen_loop
    Routine recall
  LoopTerminator trials
  Routine thanks
