PsychoPy2experiment version="2024.1.5"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'].zfill(9), expInfo['date'], expInfo['Nome Completo'], expName)
  Experiment info = {'ID': 'f"{randint(1, 999999999):06.0f}"', 'Nome Completo': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [900, 600]
  color = 0.0000, 0.0000, 0.0000
  expName = serial-reaction-time-task
  keyboardBackend = Pyglet
  runMode = 0
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Routines
  Routine instruction
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    CodeComponent instr_code
      Code Type = Py
      Begin Experiment:
        # índices de instruções
        current_instruction = 0

        instruction_list = [
        """
        Neste estudo, você verá asteriscos aparecerem em diferentes posições na tela.

        O asterisco aparecerá um de cada vez, em uma de quatro posições horizontais.
        """,
        """
        Sua tarefa será indicar a posição em que o asterisco aparecer, pressionando a tecla correspondente no teclado.

        Responda o mais rapidamente possível, procurando evitar erros.
        """,
        """
        Cada uma das quatro posições do asterisco corresponde a uma tecla específica.

        A correspondência, da esquerda para a direita, é a seguinte:

                *                      *                     *                     *
                D                      F                     J                     K
        """,
        """
        Ou seja:

        • Asterisco na extrema-esquerda: pressione [ D ].
        • Asterisco no centro-esquerda: pressione [ F ].
        • Asterisco no centro-direita: pressione [ J ].
        • Asterisco na extrema-direita: pressione [ K ].

        Procure memorizar essa correspondência antes de começar.
        """,
        """
        Durante a tarefa, haverá pausas para descanso em determinados momentos.

        Aproveite essas pausas para descansar e, quando estiver pronto(a), continue a tarefa.
        """,
        """
        Vamos relembrar:

                *                      *                     *                     *
                D                      F                     J                     K

        Responda pressionando a tecla correspondente à posição do asterisco.

        Tente responder o mais rapidamente possível, sem deixar de priorizar a acurácia.
        """,
        """
        Em seguida, iniciaremos a tarefa.

        Quando estiver pronto(a), clique em [Avançar] para começar.
        """
        ]

        # primeiro nome do participante
        if expInfo["Nome Completo"] == "":
            first_name = "participante"
        else:
            first_name = expInfo["Nome Completo"].strip().split()[0].title()

        welcome_txt = f"""Olá, {first_name}!

        Agradecemos sua disponibilidade em colaborar com nossa pesquisa!

        Clique em [Avançar] para iniciar."""

        thanks_txt = f"""Esta atividade acabou, {first_name}.

        Favor chamar o pesquisador! ☺"""
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)

        if instr_resp.clicked_name[0] == "previous":
            current_instruction -= 1
        elif instr_resp.clicked_name[0] == "next":
            current_instruction += 1

        # Se a instrução atual for -1
        if current_instruction == -1:
            # Resete o valor para ser 0
            current_instruction = 0
        # Se a instrução atual é igual ao comprimento da lista de instruções
        elif current_instruction == len(instruction_list):
            current_instruction = 0 # zera contador de instruções
            instructions.finished = True # encerra o loop de teste do OSPAN
    TextComponent instr_msg
      font = Times New Roman
      letterHeight = 0.10
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_list[current_instruction]
      units = norm
      wrapWidth = 1.8
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    ImageComponent previous
      image = images/previous_button.jpg
      pos = (-0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent instr_resp
      clickable = previous, next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent thanks_prompt
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $thanks_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent thanks_spacebar
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Pressione [BARRA DE ESPAÇO] para fechar a janela.
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent thanks_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
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    CodeComponent welcome_code
      Code Type = Py
      Begin Experiment:
        import random
        from os.path import exists
        import locale

        locale.setlocale(locale.LC_COLLATE, 'pt_BR.UTF-8')

        expInfo["ID"] = expInfo["ID"].zfill(9)

        participant_code = expInfo["ID"]

        if not exists("unique_IDs.txt"):
            arquivo = open("unique_IDs.txt", "w")
            # cria cabeçalho do arquivo
            arquivo.write("ID_number\tName\n")
            arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            arquivo.close()
        else:
            novo_arquivo = open("unique_IDs.txt", "a")
            novo_arquivo.write(participant_code + "\t" + expInfo["Nome Completo"] + "\n")
            novo_arquivo.close()
      End Experiment:
        # código do participante
        thisExp.addData("participant_code", participant_code)

        # salvando duração da sessão...
        thisExp.addData("session_duration", globalClock.getTime())
      End Routine:
        thisExp.addData('participant_code', participant_code)
    TextComponent welcome_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_txt
      units = norm
      wrapWidth = 1.8
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    ImageComponent welcome_next
      image = images/next_button.jpg
      pos = (0.3, -0.7)
      size = (0.35, 0.2)
      startVal [time (s)] = 0.0
      units = norm
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    MouseComponent welcome_resp
      clickable = welcome_next
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine new_trial
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    CodeComponent new_trial_code
      Code Type = Py
      Begin Experiment:
        import random
        import itertools
      Begin Routine:
        new_trial_msg = f"""
        Pressione [Barra de Espaço] para iniciar a primeira tentativa
        """
      End Routine:
        thisExp.addData("participant_code", participant_code)
    TextComponent new_trial_prompt
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text [set every repeat] = $new_trial_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent new_trial_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SRRT_trial
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    CodeComponent SRTT_code
      Code Type = Py
      Begin Experiment:
        import random

        def serial_reaction_time_task(n_trials: int = 63,
                                      block_trials: str = "random",
                                      locations: list = [1, 2, 3, 4],
                                      cohen = True):

            """
            Cria posições do alvo nas tentativas, a depender do bloco ser aleatório ou sequencial.
            - n_trials = número de tentativas do bloco;
            - block_trials = tipo de tentativas do bloco;
            - locations: representação numérica de quatro localizações da tela onde o alvo pode aparecer;
            - cohen: sequência usada por Cohen et al. (veja Unsworth & Engle, 2005).

            Retorna a sequência de tentativas.
            """

            if block_trials == "random": # bloco aleatório

                last = None
                trials = []


                for i in range(n_trials):

                    # reduz lista para posições diferentes da última tentativa
                    # para evitar repetições
                    possible = [x for x in locations if x != last]
                    temp = random.choice(possible)

                    last = temp
                    trials.append(temp)

            if block_trials == "repeating": # bloco sequencial

                if cohen:

                    values = [4, 2, 3, 1, 3, 4, 2]  # see unsworth and engle (2005, p. 215)

                else:

                    values = [1, 2, 3, 4, 1, 2, 3, 4]
                    random.shuffle(values)
                    values = values[:-1]

                trials = (values * ((n_trials // len(values)) + 1))[:n_trials]


            return trials


        # parâmetros do experimento
        BLOCKS = ["practice", "random", "repeating", "repeating", "repeating", "repeating", "repeating",
                  "random", "random", "random", "random", "repeating", "repeating"]

        LOCATIONS = [-0.45, -0.15, 0.15, 0.45] # localizações no eixo x
        CORR_RESP = ["d", "f", "j", "k"] # localizações das respostas no teclado

        trial_counter = 0
        experiment_trials = []

        for i, blk in enumerate(BLOCKS):

            if blk == "practice":

                trials = serial_reaction_time_task()


            elif blk == "random":

                trials = serial_reaction_time_task(n_trials = 70)


            elif blk == "repeating":

                trials = serial_reaction_time_task(n_trials = 70,
                                                   block_trials = "repeating")

            for trial in trials:

                trial_dict = {
                    "trial_number": trial_counter,
                    "block_number": i,
                     "block_type": blk,
                     "location_trial": trial,
                     "location_coord": LOCATIONS[trial - 1],
                     "corr_resp": CORR_RESP[trial - 1]}

                experiment_trials.append(trial_dict)

                trial_counter += 1

        # controla se teremos pausa
        rest_loop_reps = 0
      Begin Routine:
        trial_number = experiment_trials[SRTT_trials.thisN]["trial_number"]
        block_number = experiment_trials[SRTT_trials.thisN]["block_number"]
        block_type = experiment_trials[SRTT_trials.thisN]["block_type"]
        location_trial = experiment_trials[SRTT_trials.thisN]["location_trial"]
        location_coord = experiment_trials[SRTT_trials.thisN]["location_coord"]
        corr_resp = experiment_trials[SRTT_trials.thisN]["corr_resp"]

        trial_count_msg = f"{SRTT_trials.thisN + 1}/{len(experiment_trials)}"
      End Routine:
        thisExp.addData('trial_number', trial_number)
        thisExp.addData('block_number', block_number)
        thisExp.addData('block_type', block_type)
        thisExp.addData('location_trial', location_trial)
        thisExp.addData('location_coord', location_coord)
        thisExp.addData('corr_resp', corr_resp)

        # checa se teremos descanso a seguir
        if SRTT_trials.thisN in [62, 342, 622]:
            rest_loop_reps = 1
        else:
            rest_loop_reps = 0
    KeyboardComponent key_resp
      allowedKeys = 'd', 'f', 'j', 'k',
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    PolygonComponent square_1
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (LOCATIONS[0], 0)
      shape = rectangle
      size = (0.2, 0.3)
      startVal [time (s)] = 0
      units = norm
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    PolygonComponent square_2
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (LOCATIONS[1], 0)
      shape = rectangle
      size = (0.2, 0.3)
      startVal [time (s)] = 0
      units = norm
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    PolygonComponent square_3
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (LOCATIONS[2], 0)
      shape = rectangle
      size = (0.2, 0.3)
      startVal [time (s)] = 0
      units = norm
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    PolygonComponent square_4
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (LOCATIONS[3], 0)
      shape = rectangle
      size = (0.2, 0.3)
      startVal [time (s)] = 0
      units = norm
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    TextComponent probe_stim
      font = Times New Roman
      letterHeight = 0.30
      pos [set every repeat] = (location_coord, -0.02)
      startVal [time (s)] = 0.500
      text = *
      units = norm
      wrapWidth = 1.8
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    TextComponent trial_count
      font = Times New Roman
      letterHeight = 0.08
      pos = (0.85, 0.85)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_count_msg
      units = norm
      wrapWidth = 1.8
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  Routine rest
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    TextComponent rest_msg
      font = Times New Roman
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Pausa para descanso.

        Pressione [Barra de Espaço] quando quiser continuar.
    KeyboardComponent rest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  LoopInitiator instructions loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine instruction
  LoopTerminator instructions
  Routine new_trial
  LoopInitiator SRTT_trials loopType="TrialHandler"
    loopType = sequential
    nReps = len(experiment_trials)
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    conditions:
      [{'current_span': 3},
      {'current_span': 4},
      {'current_span': 5},
      {'current_span': 6},
      {'current_span': 7},
      {'current_span': 8}]
    LoopInitiator rest_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = rest_loop_reps
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      Routine rest
    LoopTerminator rest_loop
    Routine SRRT_trial
  LoopTerminator SRTT_trials
  Routine thanks
